def model Vessel_BG_Modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_out)/C;
    u = u_C+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(u_C, t) = (v-v_d)/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp vp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var R_T_2: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var int_control_sum: Js_per_m6 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var gain_int: J_per_m9 {pub: in};
    var v_nominal: m3_per_s {pub: in};
    var alpha: dimensionless {pub: in};
    // TODO should I_T be identified?
    I_T = 1e-6{Js_per_m6};
    // Is this R_v accurate?
    R_v = 0.01{second}/C_T;
    // R_T_2 = 4{dimensionless}*R_T;
    R_T_2 = 4{dimensionless}*R_T_wCont;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v_in-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v_in-v_T);
    // I don't think this inertia equation is needed, since we have small I_T, we can remove it and have this as an
    // algebraic equation, should still give an ODE.
    ode(v_T, t) = (u-u_out-R_T_wCont*v_T)/I_T;
    // ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
    ode(int_control_sum, t) = gain_int*(v_in-v_nominal);
    R_T_wCont = alpha*(R_T+int_control_sum);
    // ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp pp_BC_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var I_e: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var R_T_2: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var u_T: J_per_m3 {pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var int_control_sum: Js_per_m6 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var gain_int: J_per_m9 {pub: in};
    var v_nominal: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // R_T_2 = 4{dimensionless}*R_T;
    R_T_2 = 4{dimensionless}*R_T_wCont;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-R_T_wCont*v_T)/I_e;
    // ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
    ode(q_T, t) = v_T-q_T/(C_T*R_T_2);
    u_T = q_T/C_T;
    ode(int_control_sum, t) = gain_int*(v_T-v_nominal);
    R_T_wCont = alpha*(R_T+int_control_sum);
    // ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Venous Vessel ////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_vBC_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var I_e: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-3.0{dimensionless}*R_T*v_T)/I_e;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_out_1-v_out_2)/C;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out_1-v_out_2)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;
enddef;
