def model CardiovascularSystem as
  def import using "Units.cellml" for
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m_per_s2 using unit m_per_s2;
    unit m6_per_J using unit m6_per_J;
    unit per_m using unit per_m;
    unit J_per_m3 using unit J_per_m3;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
  enddef;
  def import using "parameters_autogen.cellml" for
    comp parameters_systemic using comp parameters_systemic;
    comp parameters_pulmonary using comp parameters_pulmonary;
    comp parameters_heart using comp parameters_heart;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // ------------ pulmonary Circulation ------------//

  def comp pulmonary as
    var t: second {pub: in};
    // Constitutive parameters_systemic
    var C_par: m6_per_J {pub: in};
    var C_pvn: m6_per_J {pub: in};
    var R_par: Js_per_m6 {pub: in};
    var R_pvn: Js_per_m6 {pub: in};
    var I_par: Js2_per_m6 {pub: in};
    var I_pvn: Js2_per_m6 {pub: in};
    // State Variables
    var u_par: J_per_m3 {init: 4000.0, pub: out};
    var u_pvn: J_per_m3 {init: 0.0, pub: out};
    var u_la: J_per_m3 {pub: in};
    var v_par: m3_per_s {init: 0.0, pub: out};
    var v_pvn: m3_per_s {init: 0.0, pub: out};
    var v_rv: m3_per_s {pub: in};
    // Constitutive Relations
    ode(u_par, t) = (v_rv-v_par)/C_par;
    ode(u_pvn, t) = (v_par-v_pvn)/C_pvn;
    ode(v_par, t) = (u_par-u_pvn-v_par*R_par)/I_par;
    ode(v_pvn, t) = (u_pvn-u_la-v_pvn*R_pvn)/I_pvn;
  enddef;
  // ------------ heart ------------//

  def comp heart as
    var t: second {pub: in};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var t_ac: dimensionless {pub: in};
    var t_ar: dimensionless {pub: in};
    var T_ac: dimensionless {pub: in};
    var T_ar: dimensionless {pub: in};
    var T_vc: dimensionless {pub: in};
    var T_vr: dimensionless {pub: in};
    var CQ_trv: UnitValve {pub: in};
    var CQ_puv: UnitValve {pub: in};
    var CQ_miv: UnitValve {pub: in};
    var CQ_aov: UnitValve {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_ra: m3_per_s;
    var v_rv: m3_per_s {pub: out};
    var v_la: m3_per_s;
    var v_lv: m3_per_s {pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    // These params are to be optimised.
    //        var q_ra: m3 {init: 20.0e-6};
    //        var q_rv: m3 {init: 500.0e-6};
    //        var q_la: m3 {init: 20.0e-6};
    //        var q_lv: m3 {init: 500.0e-6};
    var q_lv: m3 {init: 700.0e-06};
    var q_rv: m3 {init: 500.0e-6};
    var q_la: m3 {init: 31.270e-6};
    var q_ra: m3 {init: 6.46e-6};
    // Elastance Functions
    mt = t-T*floor(t/T);
    // TODO MAKE SURE YOU CHECK THESE FUNCTIONS WITH THE PAPERS, THERE ARE T VARIABLES PUT RANDOMLY IN HERE
    e_a = sel
      case (mt >= 0{second}) and (mt <= t_ar+T_ar-T):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt+T-t_ar)/T_ar));
      case (mt > t_ar+T_ar-T) and (mt <= t_ac):
        0{dimensionless};
      case (mt > t_ac) and (mt <= t_ac+T_ac):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*(mt-t_ac)/T_ac));
      case (mt > t_ac+T_ac) and (mt <= T):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-t_ar)/T_ar));
    endsel;
    e_v = sel
      case (mt >= 0{second}) and (mt <= T_vc):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*mt/T_vc));
      case (mt > T_vc) and (mt <= T_vc+T_vr):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-T_vc)/T_vr));
      case (mt > T_vc+T_vr) and (mt < T):
        0{dimensionless};
    endsel;
    // Constitutive Relations
    v_ra = sel
      case u_ra >= u_rv:
        CQ_trv*sqrt(u_ra-u_rv);
      case u_ra < u_rv:
        0{m3_per_s};
    endsel;
    v_rv = sel
      case u_rv >= u_par:
        CQ_puv*sqrt(u_rv-u_par);
      case u_rv < u_par:
        0{m3_per_s};
    endsel;
    v_la = sel
      case u_la >= u_lv:
        CQ_miv*sqrt(u_la-u_lv);
      case u_la < u_lv:
        0{m3_per_s};
    endsel;
    v_lv = sel
      case u_lv >= u_root:
        CQ_aov*sqrt(u_lv-u_root);
      case u_lv < u_root:
        0{m3_per_s};
    endsel;
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_ra;
    ode(q_rv, t) = v_ra-v_rv;
    ode(q_la, t) = v_pvn-v_la;
    ode(q_lv, t) = v_la-v_lv;
  enddef;
  // ------------ Mapping ------------//
  def map between heart and pulmonary for
    vars u_par and u_par;
    vars v_pvn and v_pvn;
    vars u_la and u_la;
    vars v_rv and v_rv;
  enddef;
  def map between parameters_pulmonary and pulmonary for
    vars C_par and C_par;
    vars C_pvn and C_pvn;
    vars R_par and R_par;
    vars R_pvn and R_pvn;
    vars I_par and I_par;
    vars I_pvn and I_pvn;
  enddef;
  def map between parameters_heart and heart for
    vars T and T;
    vars t_ac and t_ac;
    vars t_ar and t_ar;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars CQ_trv and CQ_trv;
    vars CQ_puv and CQ_puv;
    vars CQ_miv and CQ_miv;
    vars CQ_aov and CQ_aov;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
  enddef;
  def map between environment and heart for
    vars time and t;
  enddef;
  def map between environment and pulmonary for
    vars time and t;
  enddef;
  // #STARTGENBELOW
  // ------------imports------------//
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C2_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C46_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C64_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_L66_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_L78_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_C_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_D_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_C_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_L62_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_R26_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_C_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_C_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_communicating_L8_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_communicating_R206_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L112_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R48_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_L114_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_R52_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L110_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R46_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R238_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L42_module using comp vp_merge_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_communicating_C44_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp vertebral_L2_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_R28_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_R30_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp vertebral_R272_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp basilar_C4_module using comp vv_2in2out_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_pre_L6_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_post_L12_module using comp vp_merge_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_pre_R204_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_post_R208_module using comp vp_merge_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp arm_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp arm_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp celiac_trunk_C116_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp splanchnic_C_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_split_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_iliac_L194_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_iliac_R216_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_L200_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_R222_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp leg_L_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp leg_R_T_module using comp vp_T_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp venous_lb_module using comp vp_simple_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp venous_ub_module using comp vp_simple_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp venous_ivc_module using comp vp_simple_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp venous_svc_module using comp vp_simple_type;
  enddef;
  // ------------vessel mappings------------//
  def map between heart and ascending_aorta_A_module for
    vars v_lv and v_in;
    vars u_root and u_C;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and arm_L_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and external_carotid_L62_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and external_carotid_R26_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_L62_module and external_carotid_L_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between external_carotid_R26_module and external_carotid_R_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and posterior_communicating_L8_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R48_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and posterior_communicating_R206_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between posterior_communicating_L8_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L42_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between anterior_communicating_C44_module and anterior_cerebral_L42_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between vertebral_L2_module and basilar_C4_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R30_module and arm_R_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between vertebral_R272_module and basilar_C4_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_L6_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_R204_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_pre_L6_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_L_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_L_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_pre_R204_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_R_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_R_T_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and celiac_trunk_C116_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and splanchnic_C_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between splanchnic_C_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and leg_L_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between femoral_R222_module and leg_R_T_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between leg_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ivc_module and heart for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  // ------------terminal venous connection------------//
  def map between posterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_L_T;
  enddef;
  def map between posterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_R_T;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between middle_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_L_T;
  enddef;
  def map between middle_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_R_T;
  enddef;
  def map between anterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_L_T;
  enddef;
  def map between anterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_R_T;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between splanchnic_C_T_module and terminal_venous_connection for
    vars v_T and v_splanchnic_C_T;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between terminal_venous_connection and venous_lb_module for
    vars v_venous_lb and v_in;
  enddef;
  def map between terminal_venous_connection and venous_ub_module for
    vars v_venous_ub and v_in;
  enddef;

  def comp terminal_venous_connection as
    var v_splanchnic_C_T: m3_per_s {pub: in};
    var v_leg_L_T: m3_per_s {pub: in};
    var v_leg_R_T: m3_per_s {pub: in};
    var v_venous_lb: m3_per_s {pub: out};
    var v_posterior_cerebral_L_T: m3_per_s {pub: in};
    var v_posterior_cerebral_R_T: m3_per_s {pub: in};
    var v_external_carotid_L_T: m3_per_s {pub: in};
    var v_external_carotid_R_T: m3_per_s {pub: in};
    var v_middle_cerebral_L_T: m3_per_s {pub: in};
    var v_middle_cerebral_R_T: m3_per_s {pub: in};
    var v_anterior_cerebral_L_T: m3_per_s {pub: in};
    var v_anterior_cerebral_R_T: m3_per_s {pub: in};
    var v_arm_L_T: m3_per_s {pub: in};
    var v_arm_R_T: m3_per_s {pub: in};
    var v_venous_ub: m3_per_s {pub: out};
    v_venous_lb = v_splanchnic_C_T+v_leg_L_T+v_leg_R_T;
    v_venous_ub = v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T;
  enddef;
  // ------------access_variables------------//

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_R6_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_R6_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_R6_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_L62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_R26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_pre_L6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_post_L12 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_pre_R204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_post_R208 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp posterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp middle_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp middle_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp anterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp anterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp celiac_trunk_C116 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp splanchnic_C_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // ------------vessel mappings------------//
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_A and common_carotid_L48_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_B and common_carotid_L48_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_C and common_carotid_L48_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_D and common_carotid_L48_D_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_R6_A and common_carotid_R6_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_R6_B and common_carotid_R6_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_R6_C and common_carotid_R6_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_carotid_L62 and external_carotid_L62_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_carotid_R26 and external_carotid_R26_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_A and internal_carotid_L50_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_B and internal_carotid_L50_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_C and internal_carotid_L50_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_A and internal_carotid_R8_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_B and internal_carotid_R8_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_C and internal_carotid_R8_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_communicating_L8 and posterior_communicating_L8_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_communicating_R206 and posterior_communicating_R206_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L112 and internal_carotid_L112_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R48 and internal_carotid_R48_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_L114 and middle_cerebral_L114_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_R52 and middle_cerebral_R52_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_L110 and anterior_cerebral_L110_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_R46 and anterior_cerebral_R46_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_R238 and anterior_cerebral_R238_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_L42 and anterior_cerebral_L42_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_communicating_C44 and anterior_communicating_C44_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between basilar_C4 and basilar_C4_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_pre_L6 and posterior_cerebral_pre_L6_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_post_L12 and posterior_cerebral_post_L12_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_pre_R204 and posterior_cerebral_pre_R204_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_post_R208 and posterior_cerebral_post_R208_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_L_T and posterior_cerebral_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between posterior_cerebral_R_T and posterior_cerebral_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between external_carotid_L_T and external_carotid_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between external_carotid_R_T and external_carotid_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between middle_cerebral_L_T and middle_cerebral_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between middle_cerebral_R_T and middle_cerebral_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between anterior_cerebral_L_T and anterior_cerebral_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between anterior_cerebral_R_T and anterior_cerebral_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between arm_L_T and arm_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between arm_R_T and arm_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between celiac_trunk_C116 and celiac_trunk_C116_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between splanchnic_C_T and splanchnic_C_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between leg_L_T and leg_L_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between leg_R_T and leg_R_T_module for
    vars u and u;
    vars v and v_T;
    vars R_T and R_T;
  enddef;
  def map between venous_lb and venous_lb_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between venous_ub and venous_ub_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters_systemic and ascending_aorta_A_module for
    vars l_ascending_aorta_A and l;
    vars E_ascending_aorta_A and E;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and ascending_aorta_B_module for
    vars l_ascending_aorta_B and l;
    vars E_ascending_aorta_B and E;
    vars r_ascending_aorta_B and r;
    vars theta_ascending_aorta_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and ascending_aorta_C_module for
    vars l_ascending_aorta_C and l;
    vars E_ascending_aorta_C and E;
    vars r_ascending_aorta_C and r;
    vars theta_ascending_aorta_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and ascending_aorta_D_module for
    vars l_ascending_aorta_D and l;
    vars E_ascending_aorta_D and E;
    vars r_ascending_aorta_D and r;
    vars theta_ascending_aorta_D and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and aortic_arch_C2_module for
    vars l_aortic_arch_C2 and l;
    vars E_aortic_arch_C2 and E;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and aortic_arch_C46_module for
    vars l_aortic_arch_C46 and l;
    vars E_aortic_arch_C46 and E;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and aortic_arch_C64_module for
    vars l_aortic_arch_C64 and l;
    vars E_aortic_arch_C64 and E;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and brachiocephalic_trunk_C4_module for
    vars l_brachiocephalic_trunk_C4 and l;
    vars E_brachiocephalic_trunk_C4 and E;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and subclavian_L66_module for
    vars l_subclavian_L66 and l;
    vars E_subclavian_L66 and E;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and subclavian_L78_module for
    vars l_subclavian_L78 and l;
    vars E_subclavian_L78 and E;
    vars r_subclavian_L78 and r;
    vars theta_subclavian_L78 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_L48_A_module for
    vars l_common_carotid_L48_A and l;
    vars E_common_carotid_L48_A and E;
    vars r_common_carotid_L48_A and r;
    vars theta_common_carotid_L48_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_L48_B_module for
    vars l_common_carotid_L48_B and l;
    vars E_common_carotid_L48_B and E;
    vars r_common_carotid_L48_B and r;
    vars theta_common_carotid_L48_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_L48_C_module for
    vars l_common_carotid_L48_C and l;
    vars E_common_carotid_L48_C and E;
    vars r_common_carotid_L48_C and r;
    vars theta_common_carotid_L48_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_L48_D_module for
    vars l_common_carotid_L48_D and l;
    vars E_common_carotid_L48_D and E;
    vars r_common_carotid_L48_D and r;
    vars theta_common_carotid_L48_D and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_R6_A_module for
    vars l_common_carotid_R6_A and l;
    vars E_common_carotid_R6_A and E;
    vars r_common_carotid_R6_A and r;
    vars theta_common_carotid_R6_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_R6_B_module for
    vars l_common_carotid_R6_B and l;
    vars E_common_carotid_R6_B and E;
    vars r_common_carotid_R6_B and r;
    vars theta_common_carotid_R6_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_carotid_R6_C_module for
    vars l_common_carotid_R6_C and l;
    vars E_common_carotid_R6_C and E;
    vars r_common_carotid_R6_C and r;
    vars theta_common_carotid_R6_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and external_carotid_L62_module for
    vars l_external_carotid_L62 and l;
    vars E_external_carotid_L62 and E;
    vars r_external_carotid_L62 and r;
    vars theta_external_carotid_L62 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and external_carotid_R26_module for
    vars l_external_carotid_R26 and l;
    vars E_external_carotid_R26 and E;
    vars r_external_carotid_R26 and r;
    vars theta_external_carotid_R26 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_L50_A_module for
    vars l_internal_carotid_L50_A and l;
    vars E_internal_carotid_L50_A and E;
    vars r_internal_carotid_L50_A and r;
    vars theta_internal_carotid_L50_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_L50_B_module for
    vars l_internal_carotid_L50_B and l;
    vars E_internal_carotid_L50_B and E;
    vars r_internal_carotid_L50_B and r;
    vars theta_internal_carotid_L50_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_L50_C_module for
    vars l_internal_carotid_L50_C and l;
    vars E_internal_carotid_L50_C and E;
    vars r_internal_carotid_L50_C and r;
    vars theta_internal_carotid_L50_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_R8_A_module for
    vars l_internal_carotid_R8_A and l;
    vars E_internal_carotid_R8_A and E;
    vars r_internal_carotid_R8_A and r;
    vars theta_internal_carotid_R8_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_R8_B_module for
    vars l_internal_carotid_R8_B and l;
    vars E_internal_carotid_R8_B and E;
    vars r_internal_carotid_R8_B and r;
    vars theta_internal_carotid_R8_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_R8_C_module for
    vars l_internal_carotid_R8_C and l;
    vars E_internal_carotid_R8_C and E;
    vars r_internal_carotid_R8_C and r;
    vars theta_internal_carotid_R8_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_communicating_L8_module for
    vars l_posterior_communicating_L8 and l;
    vars E_posterior_communicating_L8 and E;
    vars r_posterior_communicating_L8 and r;
    vars theta_posterior_communicating_L8 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_communicating_R206_module for
    vars l_posterior_communicating_R206 and l;
    vars E_posterior_communicating_R206 and E;
    vars r_posterior_communicating_R206 and r;
    vars theta_posterior_communicating_R206 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_L112_module for
    vars l_internal_carotid_L112 and l;
    vars E_internal_carotid_L112 and E;
    vars r_internal_carotid_L112 and r;
    vars theta_internal_carotid_L112 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and internal_carotid_R48_module for
    vars l_internal_carotid_R48 and l;
    vars E_internal_carotid_R48 and E;
    vars r_internal_carotid_R48 and r;
    vars theta_internal_carotid_R48 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and middle_cerebral_L114_module for
    vars l_middle_cerebral_L114 and l;
    vars E_middle_cerebral_L114 and E;
    vars r_middle_cerebral_L114 and r;
    vars theta_middle_cerebral_L114 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and middle_cerebral_R52_module for
    vars l_middle_cerebral_R52 and l;
    vars E_middle_cerebral_R52 and E;
    vars r_middle_cerebral_R52 and r;
    vars theta_middle_cerebral_R52 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and anterior_cerebral_L110_module for
    vars l_anterior_cerebral_L110 and l;
    vars E_anterior_cerebral_L110 and E;
    vars r_anterior_cerebral_L110 and r;
    vars theta_anterior_cerebral_L110 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and anterior_cerebral_R46_module for
    vars l_anterior_cerebral_R46 and l;
    vars E_anterior_cerebral_R46 and E;
    vars r_anterior_cerebral_R46 and r;
    vars theta_anterior_cerebral_R46 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and anterior_cerebral_R238_module for
    vars l_anterior_cerebral_R238 and l;
    vars E_anterior_cerebral_R238 and E;
    vars r_anterior_cerebral_R238 and r;
    vars theta_anterior_cerebral_R238 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and anterior_cerebral_L42_module for
    vars l_anterior_cerebral_L42 and l;
    vars E_anterior_cerebral_L42 and E;
    vars r_anterior_cerebral_L42 and r;
    vars theta_anterior_cerebral_L42 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and anterior_communicating_C44_module for
    vars l_anterior_communicating_C44 and l;
    vars E_anterior_communicating_C44 and E;
    vars r_anterior_communicating_C44 and r;
    vars theta_anterior_communicating_C44 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and vertebral_L2_module for
    vars l_vertebral_L2 and l;
    vars E_vertebral_L2 and E;
    vars r_vertebral_L2 and r;
    vars theta_vertebral_L2 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and subclavian_R28_module for
    vars l_subclavian_R28 and l;
    vars E_subclavian_R28 and E;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and subclavian_R30_module for
    vars l_subclavian_R30 and l;
    vars E_subclavian_R30 and E;
    vars r_subclavian_R30 and r;
    vars theta_subclavian_R30 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and vertebral_R272_module for
    vars l_vertebral_R272 and l;
    vars E_vertebral_R272 and E;
    vars r_vertebral_R272 and r;
    vars theta_vertebral_R272 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and basilar_C4_module for
    vars l_basilar_C4 and l;
    vars E_basilar_C4 and E;
    vars r_basilar_C4 and r;
    vars theta_basilar_C4 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_cerebral_pre_L6_module for
    vars l_posterior_cerebral_pre_L6 and l;
    vars E_posterior_cerebral_pre_L6 and E;
    vars r_posterior_cerebral_pre_L6 and r;
    vars theta_posterior_cerebral_pre_L6 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_cerebral_post_L12_module for
    vars l_posterior_cerebral_post_L12 and l;
    vars E_posterior_cerebral_post_L12 and E;
    vars r_posterior_cerebral_post_L12 and r;
    vars theta_posterior_cerebral_post_L12 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_cerebral_pre_R204_module for
    vars l_posterior_cerebral_pre_R204 and l;
    vars E_posterior_cerebral_pre_R204 and E;
    vars r_posterior_cerebral_pre_R204 and r;
    vars theta_posterior_cerebral_pre_R204 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_cerebral_post_R208_module for
    vars l_posterior_cerebral_post_R208 and l;
    vars E_posterior_cerebral_post_R208 and E;
    vars r_posterior_cerebral_post_R208 and r;
    vars theta_posterior_cerebral_post_R208 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and posterior_cerebral_L_T_module for
    vars R_T_posterior_cerebral_L and R_T;
    vars C_T_posterior_cerebral_L and C_T;
    vars alpha_posterior_cerebral_L and alpha;
    vars v_nom_posterior_cerebral_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and posterior_cerebral_R_T_module for
    vars R_T_posterior_cerebral_R and R_T;
    vars C_T_posterior_cerebral_R and C_T;
    vars alpha_posterior_cerebral_R and alpha;
    vars v_nom_posterior_cerebral_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and external_carotid_L_T_module for
    vars R_T_external_carotid_L and R_T;
    vars C_T_external_carotid_L and C_T;
    vars alpha_external_carotid_L and alpha;
    vars v_nom_external_carotid_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and external_carotid_R_T_module for
    vars R_T_external_carotid_R and R_T;
    vars C_T_external_carotid_R and C_T;
    vars alpha_external_carotid_R and alpha;
    vars v_nom_external_carotid_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and middle_cerebral_L_T_module for
    vars R_T_middle_cerebral_L and R_T;
    vars C_T_middle_cerebral_L and C_T;
    vars alpha_middle_cerebral_L and alpha;
    vars v_nom_middle_cerebral_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and middle_cerebral_R_T_module for
    vars R_T_middle_cerebral_R and R_T;
    vars C_T_middle_cerebral_R and C_T;
    vars alpha_middle_cerebral_R and alpha;
    vars v_nom_middle_cerebral_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and anterior_cerebral_L_T_module for
    vars R_T_anterior_cerebral_L and R_T;
    vars C_T_anterior_cerebral_L and C_T;
    vars alpha_anterior_cerebral_L and alpha;
    vars v_nom_anterior_cerebral_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and anterior_cerebral_R_T_module for
    vars R_T_anterior_cerebral_R and R_T;
    vars C_T_anterior_cerebral_R and C_T;
    vars alpha_anterior_cerebral_R and alpha;
    vars v_nom_anterior_cerebral_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and arm_L_T_module for
    vars R_T_arm_L and R_T;
    vars C_T_arm_L and C_T;
    vars alpha_arm_L and alpha;
    vars v_nom_arm_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and arm_R_T_module for
    vars R_T_arm_R and R_T;
    vars C_T_arm_R and C_T;
    vars alpha_arm_R and alpha;
    vars v_nom_arm_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and aortic_arch_C94_module for
    vars l_aortic_arch_C94 and l;
    vars E_aortic_arch_C94 and E;
    vars r_aortic_arch_C94 and r;
    vars theta_aortic_arch_C94 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and thoracic_aorta_C96_module for
    vars l_thoracic_aorta_C96 and l;
    vars E_thoracic_aorta_C96 and E;
    vars r_thoracic_aorta_C96 and r;
    vars theta_thoracic_aorta_C96 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and thoracic_aorta_C100_module for
    vars l_thoracic_aorta_C100 and l;
    vars E_thoracic_aorta_C100 and E;
    vars r_thoracic_aorta_C100 and r;
    vars theta_thoracic_aorta_C100 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and thoracic_aorta_C104_module for
    vars l_thoracic_aorta_C104 and l;
    vars E_thoracic_aorta_C104 and E;
    vars r_thoracic_aorta_C104 and r;
    vars theta_thoracic_aorta_C104 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and thoracic_aorta_C108_module for
    vars l_thoracic_aorta_C108 and l;
    vars E_thoracic_aorta_C108 and E;
    vars r_thoracic_aorta_C108 and r;
    vars theta_thoracic_aorta_C108 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and thoracic_aorta_C112_module for
    vars l_thoracic_aorta_C112 and l;
    vars E_thoracic_aorta_C112 and E;
    vars r_thoracic_aorta_C112 and r;
    vars theta_thoracic_aorta_C112 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C114_module for
    vars l_abdominal_aorta_C114 and l;
    vars E_abdominal_aorta_C114 and E;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and celiac_trunk_C116_module for
    vars l_celiac_trunk_C116 and l;
    vars E_celiac_trunk_C116 and E;
    vars r_celiac_trunk_C116 and r;
    vars theta_celiac_trunk_C116 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and splanchnic_C_T_module for
    vars R_T_splanchnic_C and R_T;
    vars C_T_splanchnic_C and C_T;
    vars alpha_splanchnic_C and alpha;
    vars v_nom_splanchnic_C and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C136_module for
    vars l_abdominal_aorta_C136 and l;
    vars E_abdominal_aorta_C136 and E;
    vars r_abdominal_aorta_C136 and r;
    vars theta_abdominal_aorta_C136 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C164_module for
    vars l_abdominal_aorta_C164 and l;
    vars E_abdominal_aorta_C164 and E;
    vars r_abdominal_aorta_C164 and r;
    vars theta_abdominal_aorta_C164 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C176_module for
    vars l_abdominal_aorta_C176 and l;
    vars E_abdominal_aorta_C176 and E;
    vars r_abdominal_aorta_C176 and r;
    vars theta_abdominal_aorta_C176 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C188_module for
    vars l_abdominal_aorta_C188 and l;
    vars E_abdominal_aorta_C188 and E;
    vars r_abdominal_aorta_C188 and r;
    vars theta_abdominal_aorta_C188 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and abdominal_aorta_C192_module for
    vars l_abdominal_aorta_C192 and l;
    vars E_abdominal_aorta_C192 and E;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_iliac_L194_module for
    vars l_common_iliac_L194 and l;
    vars E_common_iliac_L194 and E;
    vars r_common_iliac_L194 and r;
    vars theta_common_iliac_L194 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and external_iliac_L198_module for
    vars l_external_iliac_L198 and l;
    vars E_external_iliac_L198 and E;
    vars r_external_iliac_L198 and r;
    vars theta_external_iliac_L198 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and common_iliac_R216_module for
    vars l_common_iliac_R216 and l;
    vars E_common_iliac_R216 and E;
    vars r_common_iliac_R216 and r;
    vars theta_common_iliac_R216 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and external_iliac_R220_module for
    vars l_external_iliac_R220 and l;
    vars E_external_iliac_R220 and E;
    vars r_external_iliac_R220 and r;
    vars theta_external_iliac_R220 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and femoral_L200_module for
    vars l_femoral_L200 and l;
    vars E_femoral_L200 and E;
    vars r_femoral_L200 and r;
    vars theta_femoral_L200 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and femoral_R222_module for
    vars l_femoral_R222 and l;
    vars E_femoral_R222 and E;
    vars r_femoral_R222 and r;
    vars theta_femoral_R222 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between parameters_systemic and leg_L_T_module for
    vars R_T_leg_L and R_T;
    vars C_T_leg_L and C_T;
    vars alpha_leg_L and alpha;
    vars v_nom_leg_L and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and leg_R_T_module for
    vars R_T_leg_R and R_T;
    vars C_T_leg_R and C_T;
    vars alpha_leg_R and alpha;
    vars v_nom_leg_R and v_nominal;
    vars gain_int and gain_int;
  enddef;
  def map between parameters_systemic and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars I_venous_lb and I;
  enddef;
  def map between parameters_systemic and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars I_venous_ub and I;
  enddef;
  def map between parameters_systemic and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars I_venous_ivc and I;
  enddef;
  def map between parameters_systemic and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars I_venous_svc and I;
  enddef;
  // ------------time mapping------------//
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_C_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_D_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L62_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R26_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_C_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_C_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and celiac_trunk_C116_module for
    vars time and t;
  enddef;
  def map between environment and splanchnic_C_T_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
enddef;
