def model Vessel_BG_Modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_out)/C;
    u = u_C+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(u_C, t) = (v-v_d)/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_out)/C;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    ode(u_C, t) = (v-v_d)/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp vp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var int_control_sum: Js_per_m6 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var gain_int: J_per_m9 {pub: in};
    var v_nom: m3_per_s {pub: in};
    var alpha: dimensionless {pub: in};
    // TODO should I_T be identified?
    I_T = 1e-6{Js_per_m6};
    // Is this R_v accurate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v_in-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v_in-v_T);
    // I don't think this inertia equation is needed, since we have small I_T, we can remove it and have this as an
    // algebraic equation, should still give an ODE.
    ode(v_T, t) = (u-u_out-R_T_wCont*v_T)/I_T;
    ode(int_control_sum, t) = gain_int*(v_in-v_nom);
    R_T_wCont = alpha*(R_T+int_control_sum);
  enddef;

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var int_control_sum: Js_per_m6 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var gain_int: J_per_m9 {pub: in};
    var v_nom: m3_per_s {pub: in};
    var alpha: dimensionless {pub: in};
    // TODO should I_T be identified?
    I_T = 1e-6{Js_per_m6};
    // Is this R_v accurate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-R_T_wCont*v/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-R_T_wCont*v_T/2{dimensionless})/I_T;
    ode(int_control_sum, t) = gain_int*(v-v_nom);
    R_T_wCont = alpha*(R_T+int_control_sum);
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_out_1-v_out_2)/C;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out_1-v_out_2)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {init: 0.004};
    var rho: Js2_per_m5 {init: 1050};
    var g: m_per_s2 {init: 9.81};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp heart_simple as
    var t: second {pub: in};
    var s: second {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var t_ar_norm: dimensionless;
    var T_ac_norm: dimensionless;
    var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_aend: second {pub: in};
    var t_apeak: second {pub: in};
    var t_astart_norm: dimensionless;
    var t_aend_norm: dimensionless;
    var t_apeak_norm: dimensionless;
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var T_vc_norm: dimensionless;
    var T_vr_norm: dimensionless;
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: dimensionless;
    var L_puv: dimensionless;
    var L_miv: dimensionless;
    var L_aov: dimensionless;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: dimensionless;
    var B_puv: dimensionless;
    var B_miv: dimensionless;
    var B_aov: dimensionless;
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps: dimensionless {init: 1e-14};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: 7.6345e-04};
    var q_rv: m3 {init: 1e-05};
    var q_la: m3 {init: 4e-06};
    var q_ra: m3 {init: 4e-06};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    ode(s, t) = 1{second}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_apeak_norm = t_apeak/T;
    t_astart_norm = t_astart/T;
    t_aend_norm = t_aend/T;
    t_ar_norm = t_apeak_norm;
    T_ac_norm = t_apeak_norm-t_astart_norm-floor(t_apeak_norm-t_astart_norm);
    T_ar_norm = t_aend_norm-t_apeak_norm-floor(t_aend_norm-t_apeak_norm);
    T_vc_norm = T_vc/T;
    T_vr_norm = T_vr/T;
    e_a = sel
      case (mt >= t_astart_norm) and (mt < t_apeak_norm) and (t_astart_norm < t_apeak_norm):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*(mt-t_astart_norm)/T_ac_norm));
      case (mt >= t_apeak_norm) and (mt < t_aend_norm) and (t_apeak_norm < t_aend_norm):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-t_apeak_norm)/T_ar_norm));
      case (mt >= t_apeak_norm) and (mt < 1.0{dimensionless}) and (t_apeak_norm > t_aend_norm):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-t_apeak_norm)/T_ar_norm));
      case (mt >= 0.0{dimensionless}) and (mt < t_aend_norm) and (t_apeak_norm > t_aend_norm):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-t_apeak_norm+1.0{dimensionless})/T_ar_norm));
      case (mt >= t_astart_norm) and (mt < 1.0{dimensionless}) and (t_astart_norm > t_apeak_norm):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*(mt-t_astart_norm)/T_ac_norm));
      case (mt >= 0.0{dimensionless}) and (mt < t_apeak_norm) and (t_astart_norm > t_apeak_norm):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*(mt-t_astart_norm+1.0{dimensionless})/T_ac_norm));
      otherwise:
        0.0{dimensionless};
    endsel;
    e_v = sel
      case (mt >= 0{second}) and (mt <= T_vc_norm):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*mt/T_vc_norm));
      case (mt > T_vc_norm) and (mt <= T_vc_norm+T_vr_norm):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-T_vc_norm)/T_vr_norm));
      case (mt > T_vc_norm+T_vr_norm) and (mt < 1.0{dimensionless}):
        0{dimensionless};
    endsel;
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps);
    L_trv = rho*l_eff/(A_eff_trv+eps);
    L_puv = rho*l_eff/(A_eff_puv+eps);
    L_miv = rho*l_eff/(A_eff_miv+eps);
    L_aov = rho*l_eff/(A_eff_aov+eps);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;
enddef;
