def model CardiovascularSystem as
  def import using "control_phys_units.cellml" for
    unit m2 using unit m2;
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m_per_s2 using unit m_per_s2;
    unit m_per_s using unit m_per_s;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit per_m using unit per_m;
    unit per_s using unit per_s;
    unit J_per_m3 using unit J_per_m3;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_J using unit m3_per_J;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit m3_per_Js using unit m3_per_Js;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
  enddef;
  def import using "control_phys_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------imports------------//
  def import using "control_phys_modules.cellml" for
    comp par_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp pcap_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp pulmonary_GE_module using comp pulmonary_GE_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp pvn_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp heart_module using comp heart_simple_wCont;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp aortic_arch_C2_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp aortic_arch_C46_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp aortic_arch_C64_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp subclavian_L66_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp subclavian_L78_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp brachial_L82_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_L48_A_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_L48_B_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_L48_C_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_L48_D_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_R6_A_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_R6_B_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_R6_C_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_L62_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_R26_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_L50_A_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_L50_B_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_L50_C_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_R8_A_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_R8_B_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_R8_C_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_communicating_L8_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_communicating_R206_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_L112_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp internal_carotid_R48_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_L114_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_R52_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_L110_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_R46_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_R238_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_L42_module using comp vv_merge_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_communicating_C44_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp vertebral_L2_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp subclavian_R28_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp subclavian_R30_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp brachial_R34_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp vertebral_R272_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp basilar_C4_module using comp vv_2in2out_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_pre_L6_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_post_L12_module using comp vv_merge_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_pre_R204_module using comp pp_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_post_R208_module using comp vv_merge_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp trunk_C_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_split_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_iliac_L194_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_iliac_R216_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp femoral_L200_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp femoral_R222_module using comp pv_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_L_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_R_T_module using comp pp_T_wCont_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_lb_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_ub_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_ivc_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_svc_module using comp vp_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_L_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_R_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp trunk_C_GE_module using comp tissue_GE_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arterial_gas_transport_module using comp gas_transport_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_gas_transport_module using comp gas_transport_simple_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp common_carotid_L_baro_module using comp baroreceptor_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arterial_chemoreceptor_module using comp chemoreceptor_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp vagal_efferent_module using comp afferent_to_vagal_efferent_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp peripheral_sympathetic_efferent_module using comp afferent_to_sympathetic_efferent_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp venous_sympathetic_efferent_module using comp afferent_to_sympathetic_efferent_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp heart_sympathetic_efferent_module using comp afferent_to_sympathetic_efferent_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp trunk_resistance_effector_module using comp efferent_resistance_effector_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_leg_resistance_effector_module using comp efferent_resistance_effector_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp lv_elastance_effector_module using comp efferent_heart_elastance_effector_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp rv_elastance_effector_module using comp efferent_heart_elastance_effector_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp heart_period_effector_module using comp efferent_heart_period_effector_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_L_LC_module using comp local_flow_control_muscle_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp arm_R_LC_module using comp local_flow_control_muscle_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_L_LC_module using comp local_flow_control_muscle_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp leg_R_LC_module using comp local_flow_control_muscle_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_L_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp middle_cerebral_R_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_L_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp anterior_cerebral_R_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_L_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp posterior_cerebral_R_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_L_LC_module using comp local_flow_control_brain_type;
  enddef;
  def import using "control_phys_modules.cellml" for
    comp external_carotid_R_LC_module using comp local_flow_control_brain_type;
  enddef;
  // ------------vessel mappings------------//
  def map between par_module and pcap_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pcap_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pcap_module and pulmonary_GE_module for
    vars v and v;
  enddef;
  def map between pulmonary_GE_module and arterial_gas_transport_module for
    vars C_CO2_a and C_CO2_in;
    vars C_O2_a and C_O2_in;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  def map between heart_module and ascending_aorta_A_module for
    vars v_aov and v_in;
    vars u_root and u;
  enddef;
  def map between heart_module and par_module for
    vars v_puv and v_in;
    vars u_par and u;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and arterial_gas_transport_module for
    vars v and v;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and brachial_L82_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and arm_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and external_carotid_L62_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and common_carotid_L_baro_module for
    vars u_C and P_sys;
    vars du_C_dt and dP_sys_dt;
  enddef;
  def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and external_carotid_R26_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_L62_module and external_carotid_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_carotid_R26_module and external_carotid_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and posterior_communicating_L8_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R48_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and posterior_communicating_R206_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between posterior_communicating_L8_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L42_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_communicating_C44_module and anterior_cerebral_L42_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between vertebral_L2_module and basilar_C4_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R30_module and brachial_R34_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and arm_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between vertebral_R272_module and basilar_C4_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_L6_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_R204_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_pre_L6_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_L_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_pre_R204_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_R_T_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_L_T_module and posterior_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between posterior_cerebral_R_T_module and posterior_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between external_carotid_L_T_module and external_carotid_L_GE_module for
    vars v_T and v;
  enddef;
  def map between external_carotid_R_T_module and external_carotid_R_GE_module for
    vars v_T and v;
  enddef;
  def map between middle_cerebral_L_T_module and middle_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between middle_cerebral_R_T_module and middle_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between anterior_cerebral_L_T_module and anterior_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between anterior_cerebral_R_T_module and anterior_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between arm_L_T_module and arm_L_GE_module for
    vars v_T and v;
  enddef;
  def map between arm_R_T_module and arm_R_GE_module for
    vars v_T and v;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and trunk_C_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between trunk_C_T_module and trunk_C_GE_module for
    vars v_T and v;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and leg_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and leg_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between leg_L_T_module and leg_L_GE_module for
    vars v_T and v;
  enddef;
  def map between leg_R_T_module and leg_R_GE_module for
    vars v_T and v;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ivc_module and heart_module for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart_module for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  def map between middle_cerebral_L_GE_module and middle_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between middle_cerebral_R_GE_module and middle_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between anterior_cerebral_L_GE_module and anterior_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between anterior_cerebral_R_GE_module and anterior_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between posterior_cerebral_L_GE_module and posterior_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between posterior_cerebral_R_GE_module and posterior_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between external_carotid_L_GE_module and external_carotid_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between external_carotid_R_GE_module and external_carotid_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between arm_L_GE_module and arm_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between arm_R_GE_module and arm_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between leg_L_GE_module and leg_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between leg_R_GE_module and leg_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and trunk_C_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_L_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_R_GE_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_L_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_R_LC_module for
    vars C_CO2_out and C_CO2_a;
    vars C_O2_out and C_O2_a;
  enddef;
  def map between arterial_gas_transport_module and arterial_chemoreceptor_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
    vars dot_C_CO2_out and dot_C_CO2_a;
  enddef;
  def map between venous_gas_transport_module and pulmonary_GE_module for
    vars C_CO2_out and C_CO2_v;
    vars C_O2_out and C_O2_v;
  enddef;
  def map between common_carotid_L_baro_module and vagal_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between common_carotid_L_baro_module and peripheral_sympathetic_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between common_carotid_L_baro_module and venous_sympathetic_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between common_carotid_L_baro_module and heart_sympathetic_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between arterial_chemoreceptor_module and vagal_efferent_module for
    vars f_apc and f_apc;
  enddef;
  def map between arterial_chemoreceptor_module and peripheral_sympathetic_efferent_module for
    vars f_apc and f_apc;
  enddef;
  def map between arterial_chemoreceptor_module and venous_sympathetic_efferent_module for
    vars f_apc and f_apc;
  enddef;
  def map between arterial_chemoreceptor_module and heart_sympathetic_efferent_module for
    vars f_apc and f_apc;
  enddef;
  def map between vagal_efferent_module and heart_period_effector_module for
    vars f_v and f_v;
  enddef;
  def map between peripheral_sympathetic_efferent_module and trunk_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between peripheral_sympathetic_efferent_module and arm_leg_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between peripheral_sympathetic_efferent_module and rv_elastance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between peripheral_sympathetic_efferent_module and lv_elastance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between peripheral_sympathetic_efferent_module and heart_period_effector_module for
    vars f_s and f_s;
  enddef;
  def map between trunk_resistance_effector_module and trunk_C_T_module for
    vars Delta_theta and Delta_R;
  enddef;
  def map between arm_leg_resistance_effector_module and arm_L_T_module for
    vars Delta_theta and Delta_R;
  enddef;
  def map between arm_leg_resistance_effector_module and arm_R_T_module for
    vars Delta_theta and Delta_R;
  enddef;
  def map between arm_leg_resistance_effector_module and leg_L_T_module for
    vars Delta_theta and Delta_R;
  enddef;
  def map between arm_leg_resistance_effector_module and leg_R_T_module for
    vars Delta_theta and Delta_R;
  enddef;
  def map between lv_elastance_effector_module and heart_module for
    vars Delta_theta and Delta_E_lv;
  enddef;
  def map between rv_elastance_effector_module and heart_module for
    vars Delta_theta and Delta_E_rv;
  enddef;
  def map between heart_period_effector_module and heart_module for
    vars Delta_T and Delta_T;
  enddef;
  def map between arm_L_LC_module and arm_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between arm_R_LC_module and arm_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between leg_L_LC_module and leg_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between leg_R_LC_module and leg_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_L_LC_module and middle_cerebral_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_R_LC_module and middle_cerebral_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_L_LC_module and anterior_cerebral_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_R_LC_module and anterior_cerebral_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between posterior_cerebral_L_LC_module and posterior_cerebral_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between posterior_cerebral_R_LC_module and posterior_cerebral_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_L_LC_module and external_carotid_L_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_R_LC_module and external_carotid_R_T_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  // ------------terminal venous connection------------//
  def map between posterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_L_T;
  enddef;
  def map between posterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_R_T;
  enddef;
  def map between external_carotid_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between external_carotid_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between middle_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_L_T;
  enddef;
  def map between middle_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_R_T;
  enddef;
  def map between anterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_L_T;
  enddef;
  def map between anterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_R_T;
  enddef;
  def map between arm_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between trunk_C_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between trunk_C_T_module and terminal_venous_connection for
    vars v_T and v_trunk_C_T;
  enddef;
  def map between leg_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between terminal_venous_connection and venous_lb_module for
    vars v_venous_lb and v_in;
  enddef;
  def map between terminal_venous_connection and venous_ub_module for
    vars v_venous_ub and v_in;
  enddef;
  def map between terminal_venous_connection and middle_cerebral_L_GE_module for
    vars C_O2_p_middle_cerebral_L_GE and C_O2_p;
    vars C_CO2_p_middle_cerebral_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and middle_cerebral_R_GE_module for
    vars C_O2_p_middle_cerebral_R_GE and C_O2_p;
    vars C_CO2_p_middle_cerebral_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and anterior_cerebral_L_GE_module for
    vars C_O2_p_anterior_cerebral_L_GE and C_O2_p;
    vars C_CO2_p_anterior_cerebral_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and anterior_cerebral_R_GE_module for
    vars C_O2_p_anterior_cerebral_R_GE and C_O2_p;
    vars C_CO2_p_anterior_cerebral_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and posterior_cerebral_L_GE_module for
    vars C_O2_p_posterior_cerebral_L_GE and C_O2_p;
    vars C_CO2_p_posterior_cerebral_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and posterior_cerebral_R_GE_module for
    vars C_O2_p_posterior_cerebral_R_GE and C_O2_p;
    vars C_CO2_p_posterior_cerebral_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and external_carotid_L_GE_module for
    vars C_O2_p_external_carotid_L_GE and C_O2_p;
    vars C_CO2_p_external_carotid_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and external_carotid_R_GE_module for
    vars C_O2_p_external_carotid_R_GE and C_O2_p;
    vars C_CO2_p_external_carotid_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and arm_L_GE_module for
    vars C_O2_p_arm_L_GE and C_O2_p;
    vars C_CO2_p_arm_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and arm_R_GE_module for
    vars C_O2_p_arm_R_GE and C_O2_p;
    vars C_CO2_p_arm_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and leg_L_GE_module for
    vars C_O2_p_leg_L_GE and C_O2_p;
    vars C_CO2_p_leg_L_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and leg_R_GE_module for
    vars C_O2_p_leg_R_GE and C_O2_p;
    vars C_CO2_p_leg_R_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and trunk_C_GE_module for
    vars C_O2_p_trunk_C_GE and C_O2_p;
    vars C_CO2_p_trunk_C_GE and C_CO2_p;
  enddef;
  def map between terminal_venous_connection and venous_gas_transport_module for
    vars v_venous_total and v;
    vars C_O2_p_venous_ave and C_O2_in;
    vars C_CO2_p_venous_ave and C_CO2_in;
  enddef;

  def comp terminal_venous_connection as
    var v_trunk_C_T: m3_per_s {pub: in};
    var v_leg_L_T: m3_per_s {pub: in};
    var v_leg_R_T: m3_per_s {pub: in};
    var v_venous_lb: m3_per_s {pub: out};
    var v_posterior_cerebral_L_T: m3_per_s {pub: in};
    var v_posterior_cerebral_R_T: m3_per_s {pub: in};
    var v_external_carotid_L_T: m3_per_s {pub: in};
    var v_external_carotid_R_T: m3_per_s {pub: in};
    var v_middle_cerebral_L_T: m3_per_s {pub: in};
    var v_middle_cerebral_R_T: m3_per_s {pub: in};
    var v_anterior_cerebral_L_T: m3_per_s {pub: in};
    var v_anterior_cerebral_R_T: m3_per_s {pub: in};
    var v_arm_L_T: m3_per_s {pub: in};
    var v_arm_R_T: m3_per_s {pub: in};
    var v_venous_ub: m3_per_s {pub: out};
    var C_O2_p_middle_cerebral_L_GE: dimensionless {pub: in};
    var C_CO2_p_middle_cerebral_L_GE: dimensionless {pub: in};
    var C_O2_p_middle_cerebral_R_GE: dimensionless {pub: in};
    var C_CO2_p_middle_cerebral_R_GE: dimensionless {pub: in};
    var C_O2_p_anterior_cerebral_L_GE: dimensionless {pub: in};
    var C_CO2_p_anterior_cerebral_L_GE: dimensionless {pub: in};
    var C_O2_p_anterior_cerebral_R_GE: dimensionless {pub: in};
    var C_CO2_p_anterior_cerebral_R_GE: dimensionless {pub: in};
    var C_O2_p_posterior_cerebral_L_GE: dimensionless {pub: in};
    var C_CO2_p_posterior_cerebral_L_GE: dimensionless {pub: in};
    var C_O2_p_posterior_cerebral_R_GE: dimensionless {pub: in};
    var C_CO2_p_posterior_cerebral_R_GE: dimensionless {pub: in};
    var C_O2_p_external_carotid_L_GE: dimensionless {pub: in};
    var C_CO2_p_external_carotid_L_GE: dimensionless {pub: in};
    var C_O2_p_external_carotid_R_GE: dimensionless {pub: in};
    var C_CO2_p_external_carotid_R_GE: dimensionless {pub: in};
    var C_O2_p_arm_L_GE: dimensionless {pub: in};
    var C_CO2_p_arm_L_GE: dimensionless {pub: in};
    var C_O2_p_arm_R_GE: dimensionless {pub: in};
    var C_CO2_p_arm_R_GE: dimensionless {pub: in};
    var C_O2_p_leg_L_GE: dimensionless {pub: in};
    var C_CO2_p_leg_L_GE: dimensionless {pub: in};
    var C_O2_p_leg_R_GE: dimensionless {pub: in};
    var C_CO2_p_leg_R_GE: dimensionless {pub: in};
    var C_O2_p_trunk_C_GE: dimensionless {pub: in};
    var C_CO2_p_trunk_C_GE: dimensionless {pub: in};
    var C_O2_p_venous_ave: dimensionless {pub: out};
    var C_CO2_p_venous_ave: dimensionless {pub: out};
    var v_venous_total: m3_per_s {pub: out};
    v_venous_lb = v_trunk_C_T+v_leg_L_T+v_leg_R_T;
    v_venous_ub = v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T;
    v_venous_total = v_venous_lb+v_venous_ub;
    C_O2_p_venous_ave = (C_O2_p_middle_cerebral_L_GE*v_posterior_cerebral_L_T+C_O2_p_middle_cerebral_R_GE*v_posterior_cerebral_R_T+C_O2_p_anterior_cerebral_L_GE*v_external_carotid_L_T+C_O2_p_anterior_cerebral_R_GE*v_external_carotid_R_T+C_O2_p_posterior_cerebral_L_GE*v_middle_cerebral_L_T+C_O2_p_posterior_cerebral_R_GE*v_middle_cerebral_R_T+C_O2_p_external_carotid_L_GE*v_anterior_cerebral_L_T+C_O2_p_external_carotid_R_GE*v_anterior_cerebral_R_T+C_O2_p_arm_L_GE*v_arm_L_T+C_O2_p_arm_R_GE*v_arm_R_T+C_O2_p_leg_L_GE*v_trunk_C_T+C_O2_p_leg_R_GE*v_leg_L_T+C_O2_p_trunk_C_GE*v_leg_R_T)/(abs(v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T+v_trunk_C_T+v_leg_L_T+v_leg_R_T)+1e-10{m3_per_s});
    C_CO2_p_venous_ave = (C_CO2_p_middle_cerebral_L_GE*v_posterior_cerebral_L_T+C_CO2_p_middle_cerebral_R_GE*v_posterior_cerebral_R_T+C_CO2_p_anterior_cerebral_L_GE*v_external_carotid_L_T+C_CO2_p_anterior_cerebral_R_GE*v_external_carotid_R_T+C_CO2_p_posterior_cerebral_L_GE*v_middle_cerebral_L_T+C_CO2_p_posterior_cerebral_R_GE*v_middle_cerebral_R_T+C_CO2_p_external_carotid_L_GE*v_anterior_cerebral_L_T+C_CO2_p_external_carotid_R_GE*v_anterior_cerebral_R_T+C_CO2_p_arm_L_GE*v_arm_L_T+C_CO2_p_arm_R_GE*v_arm_R_T+C_CO2_p_leg_L_GE*v_trunk_C_T+C_CO2_p_leg_R_GE*v_leg_L_T+C_CO2_p_trunk_C_GE*v_leg_R_T)/(abs(v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T+v_trunk_C_T+v_leg_L_T+v_leg_R_T)+1e-10{m3_per_s});
  enddef;
  // ------------access_variables------------//

  def comp par as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp pcap as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp pulmonary_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_v: dimensionless {pub: in};
    var C_O2_v: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
    var k_O2: m6_per_Js {pub: in};
    var k_CO2: m6_per_Js {pub: in};
    var P_O2_A: J_per_m3 {pub: in};
    var P_CO2_A: J_per_m3 {pub: in};
    var shunt_fraction: dimensionless {pub: in};
    var P_O2_p: J_per_m3 {pub: in};
    var P_CO2_p: J_per_m3 {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp pvn as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp heart as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var Delta_T: second {pub: in};
    var T_wCont: second {pub: in};
    var mt: second {pub: in};
    var u_ra: J_per_m3 {pub: in};
    var u_rv: J_per_m3 {pub: in};
    var u_la: J_per_m3 {pub: in};
    var u_lv: J_per_m3 {pub: in};
    var q_ra: m3 {pub: in};
    var q_rv: m3 {pub: in};
    var q_la: m3 {pub: in};
    var q_lv: m3 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var T_ac_wCont: second {pub: in};
    var T_ar_wCont: second {pub: in};
    var t_astart: second {pub: in};
    var t_astart_norm: second {pub: in};
    var chi_a: dimensionless {pub: in};
    var chi_afloor: dimensionless {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var T_vc_wCont: second {pub: in};
    var T_vr_wCont: second {pub: in};
    var t_vstart: second {pub: in};
    var t_vstart_norm: second {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var Delta_E_rv: J_per_m6 {pub: in};
    var E_rv_A_wCont: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    var E_lv_A_wCont: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var e_a: dimensionless {pub: in};
    var e_v: dimensionless {pub: in};
    var v_trv: m3_per_s {pub: in};
    var v_puv: m3_per_s {pub: in};
    var v_miv: m3_per_s {pub: in};
    var v_aov: m3_per_s {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var A_eff_trv: m2 {pub: in};
    var A_eff_puv: m2 {pub: in};
    var A_eff_miv: m2 {pub: in};
    var A_eff_aov: m2 {pub: in};
  enddef;

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_L48_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_L48_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_L48_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_R6_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_R6_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_R6_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_carotid_L62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_carotid_R26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L50_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L50_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L50_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R8_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R8_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R8_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_pre_L6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_post_L12 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_pre_R204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_post_R208 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp trunk_C_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_wCont: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var q_T: m3 {pub: in};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp middle_cerebral_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp arm_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp arm_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp leg_L_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp leg_R_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp trunk_C_GE as
    var C_CO2_p: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var q_0: m3 {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
  enddef;

  def comp arterial_gas_transport as
    var C_CO2_in: dimensionless {pub: in};
    var C_O2_in: dimensionless {pub: in};
    var C_CO2_out: dimensionless {pub: in};
    var C_O2_out: dimensionless {pub: in};
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp venous_gas_transport as
    var C_CO2_in: dimensionless {pub: in};
    var C_O2_in: dimensionless {pub: in};
    var C_CO2_out: dimensionless {pub: in};
    var C_O2_out: dimensionless {pub: in};
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L_baro as
    var P_sys: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {pub: in};
    var P_nom: J_per_m3 {pub: in};
    var dP_sys_dt: J_per_m3s {pub: in};
    var f_ab: per_s {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
  enddef;

  def comp arterial_chemoreceptor as
    var AA: dimensionless {pub: in};
    var BB: dimensionless {pub: in};
    var C_CO2_a_nom: dimensionless {pub: in};
    var K_O2: dimensionless {pub: in};
    var K_CO2: per_s {pub: in};
    var K_stat: per_s {pub: in};
    var K_dyn: per_s {pub: in};
    var tau_cap: second {pub: in};
    var tau_CO2_cc_dyn: second {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var dot_C_CO2_a: per_s {pub: in};
    var S_O2_a: dimensionless {pub: in};
    var X_O2: dimensionless {pub: in};
    var phi_stat: per_s {pub: in};
    var phi_CO2_dyn: per_s {pub: in};
    var f_c_stat: per_s {pub: in};
    var f_c_dyn: per_s {pub: in};
    var f_apc: per_s {pub: in};
    var phi_apc: per_s {pub: in};
    var C_O2_a_diss: dimensionless {pub: in};
    var Hgb: kg_per_m3 {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp vagal_efferent as
    var W_cv: dimensionless {pub: in};
    var f_ev_0: per_s {pub: in};
    var f_ev_inf: per_s {pub: in};
    var f_ab_0: per_s {pub: in};
    var theta_v: per_s {pub: in};
    var k_ev: per_s {pub: in};
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    var f_v: per_s {pub: in};
  enddef;

  def comp peripheral_sympathetic_efferent as
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: per_s {pub: in};
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    var f_s: per_s {pub: in};
  enddef;

  def comp venous_sympathetic_efferent as
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: per_s {pub: in};
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    var f_s: per_s {pub: in};
  enddef;

  def comp heart_sympathetic_efferent as
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: per_s {pub: in};
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    var f_s: per_s {pub: in};
  enddef;

  def comp trunk_resistance_effector as
    var G_theta: Js_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    var f_s: per_s {pub: in};
    var Delta_theta: Js_per_m6 {pub: in};
    var sigma_theta: Js_per_m6 {pub: in};
  enddef;

  def comp arm_leg_resistance_effector as
    var G_theta: Js_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    var f_s: per_s {pub: in};
    var Delta_theta: Js_per_m6 {pub: in};
    var sigma_theta: Js_per_m6 {pub: in};
  enddef;

  def comp lv_elastance_effector as
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {pub: in};
    var sigma_theta: J_per_m6 {pub: in};
  enddef;

  def comp rv_elastance_effector as
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {pub: in};
    var sigma_theta: J_per_m6 {pub: in};
  enddef;

  def comp heart_period_effector as
    var G_Ts: second {pub: in};
    var G_Tv: second {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {pub: in};
    var Delta_Tv: second {pub: in};
    var Delta_T: second {pub: in};
    var sigma_Ts: second {pub: in};
    var sigma_Tv: second {pub: in};
  enddef;

  def comp arm_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp arm_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp leg_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp leg_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp middle_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp anterior_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp posterior_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp external_carotid_L_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;

  def comp external_carotid_R_LC as
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var G_pn: dimensionless {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var x_O2: dimensionless {pub: in};
    var x_CO2: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var phi_P_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var G_p: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
  enddef;
  // ------------vessel mappings------------//
  def map between par and par_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between pcap and pcap_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between pulmonary_GE and pulmonary_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_v and C_CO2_v;
    vars C_O2_v and C_O2_v;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
    vars k_O2 and k_O2;
    vars k_CO2 and k_CO2;
    vars P_O2_A and P_O2_A;
    vars P_CO2_A and P_CO2_A;
    vars shunt_fraction and shunt_fraction;
    vars P_O2_p and P_O2_p;
    vars P_CO2_p and P_CO2_p;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between pvn and pvn_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between heart and heart_module for
    vars rho and rho;
    vars T and T;
    vars Delta_T and Delta_T;
    vars T_wCont and T_wCont;
    vars mt and mt;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars q_ra and q_ra;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_lv and q_lv;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars T_ac_wCont and T_ac_wCont;
    vars T_ar_wCont and T_ar_wCont;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars T_vc_wCont and T_vc_wCont;
    vars T_vr_wCont and T_vr_wCont;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars Delta_E_rv and Delta_E_rv;
    vars E_rv_A_wCont and E_rv_A_wCont;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars Delta_E_lv and Delta_E_lv;
    vars E_lv_A_wCont and E_lv_A_wCont;
    vars E_lv_B and E_lv_B;
    vars e_a and e_a;
    vars e_v and e_v;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
  enddef;
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachial_L82 and brachial_L82_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_L48_A and common_carotid_L48_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_L48_B and common_carotid_L48_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_L48_C and common_carotid_L48_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_L48_D and common_carotid_L48_D_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_R6_A and common_carotid_R6_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_R6_B and common_carotid_R6_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_R6_C and common_carotid_R6_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_carotid_L62 and external_carotid_L62_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_carotid_R26 and external_carotid_R26_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L50_A and internal_carotid_L50_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L50_B and internal_carotid_L50_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L50_C and internal_carotid_L50_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R8_A and internal_carotid_R8_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R8_B and internal_carotid_R8_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R8_C and internal_carotid_R8_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_communicating_L8 and posterior_communicating_L8_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_communicating_R206 and posterior_communicating_R206_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L112 and internal_carotid_L112_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R48 and internal_carotid_R48_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_L114 and middle_cerebral_L114_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_R52 and middle_cerebral_R52_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_L110 and anterior_cerebral_L110_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_R46 and anterior_cerebral_R46_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_R238 and anterior_cerebral_R238_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_L42 and anterior_cerebral_L42_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_communicating_C44 and anterior_communicating_C44_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachial_R34 and brachial_R34_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between basilar_C4 and basilar_C4_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_pre_L6 and posterior_cerebral_pre_L6_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_post_L12 and posterior_cerebral_post_L12_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_pre_R204 and posterior_cerebral_pre_R204_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_post_R208 and posterior_cerebral_post_R208_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_L_T and posterior_cerebral_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between posterior_cerebral_R_T and posterior_cerebral_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_L_T and external_carotid_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_R_T and external_carotid_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_L_T and middle_cerebral_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_R_T and middle_cerebral_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_L_T and anterior_cerebral_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_R_T and anterior_cerebral_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between arm_L_T and arm_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between arm_R_T and arm_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between trunk_C_T and trunk_C_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between leg_L_T and leg_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between leg_R_T and leg_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars R_T_wCont and R_T_wCont;
    vars C_T and C_T;
    vars I_T and I_T;
    vars q_T and q_T;
    vars Delta_R and Delta_R;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between venous_lb and venous_lb_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_ub and venous_ub_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between middle_cerebral_L_GE and middle_cerebral_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between middle_cerebral_R_GE and middle_cerebral_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between anterior_cerebral_L_GE and anterior_cerebral_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between anterior_cerebral_R_GE and anterior_cerebral_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between posterior_cerebral_L_GE and posterior_cerebral_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between posterior_cerebral_R_GE and posterior_cerebral_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between external_carotid_L_GE and external_carotid_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between external_carotid_R_GE and external_carotid_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between arm_L_GE and arm_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between arm_R_GE and arm_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between leg_L_GE and leg_L_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between leg_R_GE and leg_R_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between trunk_C_GE and trunk_C_GE_module for
    vars C_CO2_p and C_CO2_p;
    vars C_O2_p and C_O2_p;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_a and C_O2_a;
    vars v and v;
    vars q_0 and q_0;
    vars M_CO2 and M_CO2;
    vars M_O2 and M_O2;
  enddef;
  def map between arterial_gas_transport and arterial_gas_transport_module for
    vars C_CO2_in and C_CO2_in;
    vars C_O2_in and C_O2_in;
    vars C_CO2_out and C_CO2_out;
    vars C_O2_out and C_O2_out;
    vars q_0 and q_0;
    vars v and v;
  enddef;
  def map between venous_gas_transport and venous_gas_transport_module for
    vars C_CO2_in and C_CO2_in;
    vars C_O2_in and C_O2_in;
    vars C_CO2_out and C_CO2_out;
    vars C_O2_out and C_O2_out;
    vars q_0 and q_0;
    vars v and v;
  enddef;
  def map between common_carotid_L_baro and common_carotid_L_baro_module for
    vars P_sys and P_sys;
    vars P_baro and P_baro;
    vars P_nom and P_nom;
    vars dP_sys_dt and dP_sys_dt;
    vars f_ab and f_ab;
    vars tau_zb and tau_zb;
    vars tau_pb and tau_pb;
    vars f_ab_min and f_ab_min;
    vars f_ab_max and f_ab_max;
    vars k_ab and k_ab;
  enddef;
  def map between arterial_chemoreceptor and arterial_chemoreceptor_module for
    vars AA and AA;
    vars BB and BB;
    vars C_CO2_a_nom and C_CO2_a_nom;
    vars K_O2 and K_O2;
    vars K_CO2 and K_CO2;
    vars K_stat and K_stat;
    vars K_dyn and K_dyn;
    vars tau_cap and tau_cap;
    vars tau_CO2_cc_dyn and tau_CO2_cc_dyn;
    vars C_CO2_a and C_CO2_a;
    vars dot_C_CO2_a and dot_C_CO2_a;
    vars S_O2_a and S_O2_a;
    vars X_O2 and X_O2;
    vars phi_stat and phi_stat;
    vars phi_CO2_dyn and phi_CO2_dyn;
    vars f_c_stat and f_c_stat;
    vars f_c_dyn and f_c_dyn;
    vars f_apc and f_apc;
    vars phi_apc and phi_apc;
    vars C_O2_a_diss and C_O2_a_diss;
    vars Hgb and Hgb;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between vagal_efferent and vagal_efferent_module for
    vars W_cv and W_cv;
    vars f_ev_0 and f_ev_0;
    vars f_ev_inf and f_ev_inf;
    vars f_ab_0 and f_ab_0;
    vars theta_v and theta_v;
    vars k_ev and k_ev;
    vars f_apc and f_apc;
    vars f_ab and f_ab;
    vars f_v and f_v;
  enddef;
  def map between peripheral_sympathetic_efferent and peripheral_sympathetic_efferent_module for
    vars W_bs and W_bs;
    vars W_cs and W_cs;
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars f_apc and f_apc;
    vars f_ab and f_ab;
    vars f_s and f_s;
  enddef;
  def map between venous_sympathetic_efferent and venous_sympathetic_efferent_module for
    vars W_bs and W_bs;
    vars W_cs and W_cs;
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars f_apc and f_apc;
    vars f_ab and f_ab;
    vars f_s and f_s;
  enddef;
  def map between heart_sympathetic_efferent and heart_sympathetic_efferent_module for
    vars W_bs and W_bs;
    vars W_cs and W_cs;
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars f_apc and f_apc;
    vars f_ab and f_ab;
    vars f_s and f_s;
  enddef;
  def map between trunk_resistance_effector and trunk_resistance_effector_module for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between arm_leg_resistance_effector and arm_leg_resistance_effector_module for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between lv_elastance_effector and lv_elastance_effector_module for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between rv_elastance_effector and rv_elastance_effector_module for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between heart_period_effector and heart_period_effector_module for
    vars G_Ts and G_Ts;
    vars G_Tv and G_Tv;
    vars f_es_min and f_es_min;
    vars tau_Ts and tau_Ts;
    vars tau_Tv and tau_Tv;
    vars f_s and f_s;
    vars f_v and f_v;
    vars Delta_Ts and Delta_Ts;
    vars Delta_Tv and Delta_Tv;
    vars Delta_T and Delta_T;
    vars sigma_Ts and sigma_Ts;
    vars sigma_Tv and sigma_Tv;
  enddef;
  def map between arm_L_LC and arm_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between arm_R_LC and arm_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between leg_L_LC and leg_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between leg_R_LC and leg_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between middle_cerebral_L_LC and middle_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between middle_cerebral_R_LC and middle_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between anterior_cerebral_L_LC and anterior_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between anterior_cerebral_R_LC and anterior_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between posterior_cerebral_L_LC and posterior_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between posterior_cerebral_R_LC and posterior_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between external_carotid_L_LC and external_carotid_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between external_carotid_R_LC and external_carotid_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars x_O2 and x_O2;
    vars x_CO2 and x_CO2;
    vars P_CO2_a and P_CO2_a;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars G_p and G_p;
    vars R_local_multiplier and R_local_multiplier;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters and par_module for
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
  enddef;
  def map between parameters_global and par_module for
  enddef;
  def map between parameters and pcap_module for
    vars R_pcap and R;
    vars C_pcap and C;
    vars I_pcap and I;
  enddef;
  def map between parameters_global and pcap_module for
  enddef;
  def map between parameters and pulmonary_GE_module for
    vars q_0_pulmonary_GE and q_0;
    vars k_O2_pulmonary_GE and k_O2;
    vars k_CO2_pulmonary_GE and k_CO2;
    vars shunt_fraction_pulmonary_GE and shunt_fraction;
  enddef;
  def map between parameters_global and pulmonary_GE_module for
    vars P_O2_A and P_O2_A;
    vars P_CO2_A and P_CO2_A;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and pvn_module for
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
  enddef;
  def map between parameters_global and pvn_module for
  enddef;
  def map between parameters and heart_module for
  enddef;
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters and ascending_aorta_A_module for
    vars E_ascending_aorta_A and E;
    vars l_ascending_aorta_A and l;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
  enddef;
  def map between parameters_global and ascending_aorta_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_B_module for
    vars E_ascending_aorta_B and E;
    vars l_ascending_aorta_B and l;
    vars r_ascending_aorta_B and r;
    vars theta_ascending_aorta_B and theta;
  enddef;
  def map between parameters_global and ascending_aorta_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_C_module for
    vars E_ascending_aorta_C and E;
    vars l_ascending_aorta_C and l;
    vars r_ascending_aorta_C and r;
    vars theta_ascending_aorta_C and theta;
  enddef;
  def map between parameters_global and ascending_aorta_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_D_module for
    vars E_ascending_aorta_D and E;
    vars l_ascending_aorta_D and l;
    vars r_ascending_aorta_D and r;
    vars theta_ascending_aorta_D and theta;
  enddef;
  def map between parameters_global and ascending_aorta_D_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C2_module for
    vars E_aortic_arch_C2 and E;
    vars l_aortic_arch_C2 and l;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C46_module for
    vars E_aortic_arch_C46 and E;
    vars l_aortic_arch_C46 and l;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C64_module for
    vars E_aortic_arch_C64 and E;
    vars l_aortic_arch_C64 and l;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C64_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachiocephalic_trunk_C4_module for
    vars E_brachiocephalic_trunk_C4 and E;
    vars l_brachiocephalic_trunk_C4 and l;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L66_module for
    vars E_subclavian_L66 and E;
    vars l_subclavian_L66 and l;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
  enddef;
  def map between parameters_global and subclavian_L66_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L78_module for
    vars E_subclavian_L78 and E;
    vars l_subclavian_L78 and l;
    vars r_subclavian_L78 and r;
    vars theta_subclavian_L78 and theta;
  enddef;
  def map between parameters_global and subclavian_L78_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_L82_module for
    vars E_brachial_L82 and E;
    vars l_brachial_L82 and l;
    vars r_brachial_L82 and r;
    vars theta_brachial_L82 and theta;
  enddef;
  def map between parameters_global and brachial_L82_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_A_module for
    vars E_common_carotid_L48_A and E;
    vars l_common_carotid_L48_A and l;
    vars r_common_carotid_L48_A and r;
    vars theta_common_carotid_L48_A and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_B_module for
    vars E_common_carotid_L48_B and E;
    vars l_common_carotid_L48_B and l;
    vars r_common_carotid_L48_B and r;
    vars theta_common_carotid_L48_B and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_C_module for
    vars E_common_carotid_L48_C and E;
    vars l_common_carotid_L48_C and l;
    vars r_common_carotid_L48_C and r;
    vars theta_common_carotid_L48_C and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_L48_D_module for
    vars E_common_carotid_L48_D and E;
    vars l_common_carotid_L48_D and l;
    vars r_common_carotid_L48_D and r;
    vars theta_common_carotid_L48_D and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_D_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_A_module for
    vars E_common_carotid_R6_A and E;
    vars l_common_carotid_R6_A and l;
    vars r_common_carotid_R6_A and r;
    vars theta_common_carotid_R6_A and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_B_module for
    vars E_common_carotid_R6_B and E;
    vars l_common_carotid_R6_B and l;
    vars r_common_carotid_R6_B and r;
    vars theta_common_carotid_R6_B and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_carotid_R6_C_module for
    vars E_common_carotid_R6_C and E;
    vars l_common_carotid_R6_C and l;
    vars r_common_carotid_R6_C and r;
    vars theta_common_carotid_R6_C and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_L62_module for
    vars E_external_carotid_L62 and E;
    vars l_external_carotid_L62 and l;
    vars r_external_carotid_L62 and r;
    vars theta_external_carotid_L62 and theta;
  enddef;
  def map between parameters_global and external_carotid_L62_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_R26_module for
    vars E_external_carotid_R26 and E;
    vars l_external_carotid_R26 and l;
    vars r_external_carotid_R26 and r;
    vars theta_external_carotid_R26 and theta;
  enddef;
  def map between parameters_global and external_carotid_R26_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_A_module for
    vars E_internal_carotid_L50_A and E;
    vars l_internal_carotid_L50_A and l;
    vars r_internal_carotid_L50_A and r;
    vars theta_internal_carotid_L50_A and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_B_module for
    vars E_internal_carotid_L50_B and E;
    vars l_internal_carotid_L50_B and l;
    vars r_internal_carotid_L50_B and r;
    vars theta_internal_carotid_L50_B and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_C_module for
    vars E_internal_carotid_L50_C and E;
    vars l_internal_carotid_L50_C and l;
    vars r_internal_carotid_L50_C and r;
    vars theta_internal_carotid_L50_C and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_A_module for
    vars E_internal_carotid_R8_A and E;
    vars l_internal_carotid_R8_A and l;
    vars r_internal_carotid_R8_A and r;
    vars theta_internal_carotid_R8_A and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_B_module for
    vars E_internal_carotid_R8_B and E;
    vars l_internal_carotid_R8_B and l;
    vars r_internal_carotid_R8_B and r;
    vars theta_internal_carotid_R8_B and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_C_module for
    vars E_internal_carotid_R8_C and E;
    vars l_internal_carotid_R8_C and l;
    vars r_internal_carotid_R8_C and r;
    vars theta_internal_carotid_R8_C and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_L8_module for
    vars E_posterior_communicating_L8 and E;
    vars l_posterior_communicating_L8 and l;
    vars r_posterior_communicating_L8 and r;
    vars theta_posterior_communicating_L8 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_L8_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_R206_module for
    vars E_posterior_communicating_R206 and E;
    vars l_posterior_communicating_R206 and l;
    vars r_posterior_communicating_R206 and r;
    vars theta_posterior_communicating_R206 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_R206_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L112_module for
    vars E_internal_carotid_L112 and E;
    vars l_internal_carotid_L112 and l;
    vars r_internal_carotid_L112 and r;
    vars theta_internal_carotid_L112 and theta;
  enddef;
  def map between parameters_global and internal_carotid_L112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R48_module for
    vars E_internal_carotid_R48 and E;
    vars l_internal_carotid_R48 and l;
    vars r_internal_carotid_R48 and r;
    vars theta_internal_carotid_R48 and theta;
  enddef;
  def map between parameters_global and internal_carotid_R48_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_L114_module for
    vars E_middle_cerebral_L114 and E;
    vars l_middle_cerebral_L114 and l;
    vars r_middle_cerebral_L114 and r;
    vars theta_middle_cerebral_L114 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_L114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_R52_module for
    vars E_middle_cerebral_R52 and E;
    vars l_middle_cerebral_R52 and l;
    vars r_middle_cerebral_R52 and r;
    vars theta_middle_cerebral_R52 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_R52_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L110_module for
    vars E_anterior_cerebral_L110 and E;
    vars l_anterior_cerebral_L110 and l;
    vars r_anterior_cerebral_L110 and r;
    vars theta_anterior_cerebral_L110 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L110_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R46_module for
    vars E_anterior_cerebral_R46 and E;
    vars l_anterior_cerebral_R46 and l;
    vars r_anterior_cerebral_R46 and r;
    vars theta_anterior_cerebral_R46 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R238_module for
    vars E_anterior_cerebral_R238 and E;
    vars l_anterior_cerebral_R238 and l;
    vars r_anterior_cerebral_R238 and r;
    vars theta_anterior_cerebral_R238 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R238_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L42_module for
    vars E_anterior_cerebral_L42 and E;
    vars l_anterior_cerebral_L42 and l;
    vars r_anterior_cerebral_L42 and r;
    vars theta_anterior_cerebral_L42 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L42_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_communicating_C44_module for
    vars E_anterior_communicating_C44 and E;
    vars l_anterior_communicating_C44 and l;
    vars r_anterior_communicating_C44 and r;
    vars theta_anterior_communicating_C44 and theta;
  enddef;
  def map between parameters_global and anterior_communicating_C44_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_L2_module for
    vars E_vertebral_L2 and E;
    vars l_vertebral_L2 and l;
    vars r_vertebral_L2 and r;
    vars theta_vertebral_L2 and theta;
  enddef;
  def map between parameters_global and vertebral_L2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R28_module for
    vars E_subclavian_R28 and E;
    vars l_subclavian_R28 and l;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
  enddef;
  def map between parameters_global and subclavian_R28_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R30_module for
    vars E_subclavian_R30 and E;
    vars l_subclavian_R30 and l;
    vars r_subclavian_R30 and r;
    vars theta_subclavian_R30 and theta;
  enddef;
  def map between parameters_global and subclavian_R30_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_R34_module for
    vars E_brachial_R34 and E;
    vars l_brachial_R34 and l;
    vars r_brachial_R34 and r;
    vars theta_brachial_R34 and theta;
  enddef;
  def map between parameters_global and brachial_R34_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_R272_module for
    vars E_vertebral_R272 and E;
    vars l_vertebral_R272 and l;
    vars r_vertebral_R272 and r;
    vars theta_vertebral_R272 and theta;
  enddef;
  def map between parameters_global and vertebral_R272_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and basilar_C4_module for
    vars E_basilar_C4 and E;
    vars l_basilar_C4 and l;
    vars r_basilar_C4 and r;
    vars theta_basilar_C4 and theta;
  enddef;
  def map between parameters_global and basilar_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_pre_L6_module for
    vars E_posterior_cerebral_pre_L6 and E;
    vars l_posterior_cerebral_pre_L6 and l;
    vars r_posterior_cerebral_pre_L6 and r;
    vars theta_posterior_cerebral_pre_L6 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_L6_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_post_L12_module for
    vars E_posterior_cerebral_post_L12 and E;
    vars l_posterior_cerebral_post_L12 and l;
    vars r_posterior_cerebral_post_L12 and r;
    vars theta_posterior_cerebral_post_L12 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_post_L12_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_pre_R204_module for
    vars E_posterior_cerebral_pre_R204 and E;
    vars l_posterior_cerebral_pre_R204 and l;
    vars r_posterior_cerebral_pre_R204 and r;
    vars theta_posterior_cerebral_pre_R204 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_R204_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_post_R208_module for
    vars E_posterior_cerebral_post_R208 and E;
    vars l_posterior_cerebral_post_R208 and l;
    vars r_posterior_cerebral_post_R208 and r;
    vars theta_posterior_cerebral_post_R208 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_post_R208_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_L_T_module for
    vars R_T_posterior_cerebral_L and R_T;
    vars C_T_posterior_cerebral_L and C_T;
    vars I_T_posterior_cerebral_L and I_T;
    vars Delta_R_posterior_cerebral_L and Delta_R;
  enddef;
  def map between parameters_global and posterior_cerebral_L_T_module for
  enddef;
  def map between parameters and posterior_cerebral_R_T_module for
    vars R_T_posterior_cerebral_R and R_T;
    vars C_T_posterior_cerebral_R and C_T;
    vars I_T_posterior_cerebral_R and I_T;
    vars Delta_R_posterior_cerebral_R and Delta_R;
  enddef;
  def map between parameters_global and posterior_cerebral_R_T_module for
  enddef;
  def map between parameters and external_carotid_L_T_module for
    vars R_T_external_carotid_L and R_T;
    vars C_T_external_carotid_L and C_T;
    vars I_T_external_carotid_L and I_T;
    vars Delta_R_external_carotid_L and Delta_R;
  enddef;
  def map between parameters_global and external_carotid_L_T_module for
  enddef;
  def map between parameters and external_carotid_R_T_module for
    vars R_T_external_carotid_R and R_T;
    vars C_T_external_carotid_R and C_T;
    vars I_T_external_carotid_R and I_T;
    vars Delta_R_external_carotid_R and Delta_R;
  enddef;
  def map between parameters_global and external_carotid_R_T_module for
  enddef;
  def map between parameters and middle_cerebral_L_T_module for
    vars R_T_middle_cerebral_L and R_T;
    vars C_T_middle_cerebral_L and C_T;
    vars I_T_middle_cerebral_L and I_T;
    vars Delta_R_middle_cerebral_L and Delta_R;
  enddef;
  def map between parameters_global and middle_cerebral_L_T_module for
  enddef;
  def map between parameters and middle_cerebral_R_T_module for
    vars R_T_middle_cerebral_R and R_T;
    vars C_T_middle_cerebral_R and C_T;
    vars I_T_middle_cerebral_R and I_T;
    vars Delta_R_middle_cerebral_R and Delta_R;
  enddef;
  def map between parameters_global and middle_cerebral_R_T_module for
  enddef;
  def map between parameters and anterior_cerebral_L_T_module for
    vars R_T_anterior_cerebral_L and R_T;
    vars C_T_anterior_cerebral_L and C_T;
    vars I_T_anterior_cerebral_L and I_T;
    vars Delta_R_anterior_cerebral_L and Delta_R;
  enddef;
  def map between parameters_global and anterior_cerebral_L_T_module for
  enddef;
  def map between parameters and anterior_cerebral_R_T_module for
    vars R_T_anterior_cerebral_R and R_T;
    vars C_T_anterior_cerebral_R and C_T;
    vars I_T_anterior_cerebral_R and I_T;
    vars Delta_R_anterior_cerebral_R and Delta_R;
  enddef;
  def map between parameters_global and anterior_cerebral_R_T_module for
  enddef;
  def map between parameters and arm_L_T_module for
    vars R_T_arm_L and R_T;
    vars C_T_arm_L and C_T;
    vars I_T_arm_L and I_T;
  enddef;
  def map between parameters_global and arm_L_T_module for
  enddef;
  def map between parameters and arm_R_T_module for
    vars R_T_arm_R and R_T;
    vars C_T_arm_R and C_T;
    vars I_T_arm_R and I_T;
  enddef;
  def map between parameters_global and arm_R_T_module for
  enddef;
  def map between parameters and aortic_arch_C94_module for
    vars E_aortic_arch_C94 and E;
    vars l_aortic_arch_C94 and l;
    vars r_aortic_arch_C94 and r;
    vars theta_aortic_arch_C94 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C94_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C96_module for
    vars E_thoracic_aorta_C96 and E;
    vars l_thoracic_aorta_C96 and l;
    vars r_thoracic_aorta_C96 and r;
    vars theta_thoracic_aorta_C96 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C96_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C100_module for
    vars E_thoracic_aorta_C100 and E;
    vars l_thoracic_aorta_C100 and l;
    vars r_thoracic_aorta_C100 and r;
    vars theta_thoracic_aorta_C100 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C100_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C104_module for
    vars E_thoracic_aorta_C104 and E;
    vars l_thoracic_aorta_C104 and l;
    vars r_thoracic_aorta_C104 and r;
    vars theta_thoracic_aorta_C104 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C104_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C108_module for
    vars E_thoracic_aorta_C108 and E;
    vars l_thoracic_aorta_C108 and l;
    vars r_thoracic_aorta_C108 and r;
    vars theta_thoracic_aorta_C108 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C108_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C112_module for
    vars E_thoracic_aorta_C112 and E;
    vars l_thoracic_aorta_C112 and l;
    vars r_thoracic_aorta_C112 and r;
    vars theta_thoracic_aorta_C112 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C114_module for
    vars E_abdominal_aorta_C114 and E;
    vars l_abdominal_aorta_C114 and l;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and trunk_C_T_module for
    vars R_T_trunk_C and R_T;
    vars C_T_trunk_C and C_T;
    vars I_T_trunk_C and I_T;
    vars R_local_multiplier_trunk_C and R_local_multiplier;
  enddef;
  def map between parameters_global and trunk_C_T_module for
  enddef;
  def map between parameters and abdominal_aorta_C136_module for
    vars E_abdominal_aorta_C136 and E;
    vars l_abdominal_aorta_C136 and l;
    vars r_abdominal_aorta_C136 and r;
    vars theta_abdominal_aorta_C136 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C136_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C164_module for
    vars E_abdominal_aorta_C164 and E;
    vars l_abdominal_aorta_C164 and l;
    vars r_abdominal_aorta_C164 and r;
    vars theta_abdominal_aorta_C164 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C164_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C176_module for
    vars E_abdominal_aorta_C176 and E;
    vars l_abdominal_aorta_C176 and l;
    vars r_abdominal_aorta_C176 and r;
    vars theta_abdominal_aorta_C176 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C176_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C188_module for
    vars E_abdominal_aorta_C188 and E;
    vars l_abdominal_aorta_C188 and l;
    vars r_abdominal_aorta_C188 and r;
    vars theta_abdominal_aorta_C188 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C188_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C192_module for
    vars E_abdominal_aorta_C192 and E;
    vars l_abdominal_aorta_C192 and l;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C192_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_iliac_L194_module for
    vars E_common_iliac_L194 and E;
    vars l_common_iliac_L194 and l;
    vars r_common_iliac_L194 and r;
    vars theta_common_iliac_L194 and theta;
  enddef;
  def map between parameters_global and common_iliac_L194_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_iliac_L198_module for
    vars E_external_iliac_L198 and E;
    vars l_external_iliac_L198 and l;
    vars r_external_iliac_L198 and r;
    vars theta_external_iliac_L198 and theta;
  enddef;
  def map between parameters_global and external_iliac_L198_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_iliac_R216_module for
    vars E_common_iliac_R216 and E;
    vars l_common_iliac_R216 and l;
    vars r_common_iliac_R216 and r;
    vars theta_common_iliac_R216 and theta;
  enddef;
  def map between parameters_global and common_iliac_R216_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_iliac_R220_module for
    vars E_external_iliac_R220 and E;
    vars l_external_iliac_R220 and l;
    vars r_external_iliac_R220 and r;
    vars theta_external_iliac_R220 and theta;
  enddef;
  def map between parameters_global and external_iliac_R220_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_L200_module for
    vars E_femoral_L200 and E;
    vars l_femoral_L200 and l;
    vars r_femoral_L200 and r;
    vars theta_femoral_L200 and theta;
  enddef;
  def map between parameters_global and femoral_L200_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_R222_module for
    vars E_femoral_R222 and E;
    vars l_femoral_R222 and l;
    vars r_femoral_R222 and r;
    vars theta_femoral_R222 and theta;
  enddef;
  def map between parameters_global and femoral_R222_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and leg_L_T_module for
    vars R_T_leg_L and R_T;
    vars C_T_leg_L and C_T;
    vars I_T_leg_L and I_T;
  enddef;
  def map between parameters_global and leg_L_T_module for
  enddef;
  def map between parameters and leg_R_T_module for
    vars R_T_leg_R and R_T;
    vars C_T_leg_R and C_T;
    vars I_T_leg_R and I_T;
  enddef;
  def map between parameters_global and leg_R_T_module for
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars I_venous_lb and I;
  enddef;
  def map between parameters_global and venous_lb_module for
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars I_venous_ub and I;
  enddef;
  def map between parameters_global and venous_ub_module for
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars I_venous_ivc and I;
  enddef;
  def map between parameters_global and venous_ivc_module for
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars I_venous_svc and I;
  enddef;
  def map between parameters_global and venous_svc_module for
  enddef;
  def map between parameters and middle_cerebral_L_GE_module for
    vars q_0_middle_cerebral_L_GE and q_0;
    vars M_CO2_middle_cerebral_L_GE and M_CO2;
    vars M_O2_middle_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters_global and middle_cerebral_L_GE_module for
  enddef;
  def map between parameters and middle_cerebral_R_GE_module for
    vars q_0_middle_cerebral_R_GE and q_0;
    vars M_CO2_middle_cerebral_R_GE and M_CO2;
    vars M_O2_middle_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters_global and middle_cerebral_R_GE_module for
  enddef;
  def map between parameters and anterior_cerebral_L_GE_module for
    vars q_0_anterior_cerebral_L_GE and q_0;
    vars M_CO2_anterior_cerebral_L_GE and M_CO2;
    vars M_O2_anterior_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters_global and anterior_cerebral_L_GE_module for
  enddef;
  def map between parameters and anterior_cerebral_R_GE_module for
    vars q_0_anterior_cerebral_R_GE and q_0;
    vars M_CO2_anterior_cerebral_R_GE and M_CO2;
    vars M_O2_anterior_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters_global and anterior_cerebral_R_GE_module for
  enddef;
  def map between parameters and posterior_cerebral_L_GE_module for
    vars q_0_posterior_cerebral_L_GE and q_0;
    vars M_CO2_posterior_cerebral_L_GE and M_CO2;
    vars M_O2_posterior_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters_global and posterior_cerebral_L_GE_module for
  enddef;
  def map between parameters and posterior_cerebral_R_GE_module for
    vars q_0_posterior_cerebral_R_GE and q_0;
    vars M_CO2_posterior_cerebral_R_GE and M_CO2;
    vars M_O2_posterior_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters_global and posterior_cerebral_R_GE_module for
  enddef;
  def map between parameters and external_carotid_L_GE_module for
    vars q_0_external_carotid_L_GE and q_0;
    vars M_CO2_external_carotid_L_GE and M_CO2;
    vars M_O2_external_carotid_L_GE and M_O2;
  enddef;
  def map between parameters_global and external_carotid_L_GE_module for
  enddef;
  def map between parameters and external_carotid_R_GE_module for
    vars q_0_external_carotid_R_GE and q_0;
    vars M_CO2_external_carotid_R_GE and M_CO2;
    vars M_O2_external_carotid_R_GE and M_O2;
  enddef;
  def map between parameters_global and external_carotid_R_GE_module for
  enddef;
  def map between parameters and arm_L_GE_module for
    vars q_0_arm_L_GE and q_0;
    vars M_CO2_arm_L_GE and M_CO2;
    vars M_O2_arm_L_GE and M_O2;
  enddef;
  def map between parameters_global and arm_L_GE_module for
  enddef;
  def map between parameters and arm_R_GE_module for
    vars q_0_arm_R_GE and q_0;
    vars M_CO2_arm_R_GE and M_CO2;
    vars M_O2_arm_R_GE and M_O2;
  enddef;
  def map between parameters_global and arm_R_GE_module for
  enddef;
  def map between parameters and leg_L_GE_module for
    vars q_0_leg_L_GE and q_0;
    vars M_CO2_leg_L_GE and M_CO2;
    vars M_O2_leg_L_GE and M_O2;
  enddef;
  def map between parameters_global and leg_L_GE_module for
  enddef;
  def map between parameters and leg_R_GE_module for
    vars q_0_leg_R_GE and q_0;
    vars M_CO2_leg_R_GE and M_CO2;
    vars M_O2_leg_R_GE and M_O2;
  enddef;
  def map between parameters_global and leg_R_GE_module for
  enddef;
  def map between parameters and trunk_C_GE_module for
    vars q_0_trunk_C_GE and q_0;
    vars M_CO2_trunk_C_GE and M_CO2;
    vars M_O2_trunk_C_GE and M_O2;
  enddef;
  def map between parameters_global and trunk_C_GE_module for
  enddef;
  def map between parameters and arterial_gas_transport_module for
    vars q_0_arterial_gas_transport and q_0;
  enddef;
  def map between parameters_global and arterial_gas_transport_module for
  enddef;
  def map between parameters and venous_gas_transport_module for
    vars q_0_venous_gas_transport and q_0;
  enddef;
  def map between parameters_global and venous_gas_transport_module for
  enddef;
  def map between parameters and common_carotid_L_baro_module for
    vars P_nom_common_carotid_L_baro and P_nom;
    vars tau_zb_common_carotid_L_baro and tau_zb;
    vars tau_pb_common_carotid_L_baro and tau_pb;
    vars f_ab_min_common_carotid_L_baro and f_ab_min;
    vars f_ab_max_common_carotid_L_baro and f_ab_max;
    vars k_ab_common_carotid_L_baro and k_ab;
  enddef;
  def map between parameters_global and common_carotid_L_baro_module for
  enddef;
  def map between parameters and arterial_chemoreceptor_module for
    vars AA_arterial_chemoreceptor and AA;
    vars BB_arterial_chemoreceptor and BB;
    vars C_CO2_a_nom_arterial_chemoreceptor and C_CO2_a_nom;
    vars K_O2_arterial_chemoreceptor and K_O2;
    vars K_CO2_arterial_chemoreceptor and K_CO2;
    vars K_stat_arterial_chemoreceptor and K_stat;
    vars K_dyn_arterial_chemoreceptor and K_dyn;
    vars tau_cap_arterial_chemoreceptor and tau_cap;
    vars tau_CO2_cc_dyn_arterial_chemoreceptor and tau_CO2_cc_dyn;
  enddef;
  def map between parameters_global and arterial_chemoreceptor_module for
    vars Hgb and Hgb;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and vagal_efferent_module for
  enddef;
  def map between parameters_global and vagal_efferent_module for
    vars W_cv and W_cv;
    vars f_ev_0 and f_ev_0;
    vars f_ev_inf and f_ev_inf;
    vars f_ab_0 and f_ab_0;
    vars theta_v and theta_v;
    vars k_ev and k_ev;
  enddef;
  def map between parameters and peripheral_sympathetic_efferent_module for
    vars W_bs_peripheral_sympathetic_efferent and W_bs;
    vars W_cs_peripheral_sympathetic_efferent and W_cs;
  enddef;
  def map between parameters_global and peripheral_sympathetic_efferent_module for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
  enddef;
  def map between parameters and venous_sympathetic_efferent_module for
    vars W_bs_venous_sympathetic_efferent and W_bs;
    vars W_cs_venous_sympathetic_efferent and W_cs;
  enddef;
  def map between parameters_global and venous_sympathetic_efferent_module for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
  enddef;
  def map between parameters and heart_sympathetic_efferent_module for
    vars W_bs_heart_sympathetic_efferent and W_bs;
    vars W_cs_heart_sympathetic_efferent and W_cs;
  enddef;
  def map between parameters_global and heart_sympathetic_efferent_module for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
  enddef;
  def map between parameters and trunk_resistance_effector_module for
    vars G_theta_trunk_resistance_effector and G_theta;
    vars tau_theta_trunk_resistance_effector and tau_theta;
  enddef;
  def map between parameters_global and trunk_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters and arm_leg_resistance_effector_module for
    vars G_theta_arm_leg_resistance_effector and G_theta;
    vars tau_theta_arm_leg_resistance_effector and tau_theta;
  enddef;
  def map between parameters_global and arm_leg_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters and lv_elastance_effector_module for
    vars G_theta_lv_elastance_effector and G_theta;
    vars tau_theta_lv_elastance_effector and tau_theta;
  enddef;
  def map between parameters_global and lv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters and rv_elastance_effector_module for
    vars G_theta_rv_elastance_effector and G_theta;
    vars tau_theta_rv_elastance_effector and tau_theta;
  enddef;
  def map between parameters_global and rv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters and heart_period_effector_module for
    vars G_Ts_heart_period_effector and G_Ts;
    vars G_Tv_heart_period_effector and G_Tv;
    vars tau_Ts_heart_period_effector and tau_Ts;
    vars tau_Tv_heart_period_effector and tau_Tv;
  enddef;
  def map between parameters_global and heart_period_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters and arm_L_LC_module for
  enddef;
  def map between parameters_global and arm_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and arm_R_LC_module for
  enddef;
  def map between parameters_global and arm_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and leg_L_LC_module for
  enddef;
  def map between parameters_global and leg_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and leg_R_LC_module for
  enddef;
  def map between parameters_global and leg_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and middle_cerebral_L_LC_module for
  enddef;
  def map between parameters_global and middle_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and middle_cerebral_R_LC_module for
  enddef;
  def map between parameters_global and middle_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and anterior_cerebral_L_LC_module for
  enddef;
  def map between parameters_global and anterior_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and anterior_cerebral_R_LC_module for
  enddef;
  def map between parameters_global and anterior_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and posterior_cerebral_L_LC_module for
  enddef;
  def map between parameters_global and posterior_cerebral_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and posterior_cerebral_R_LC_module for
  enddef;
  def map between parameters_global and posterior_cerebral_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and external_carotid_L_LC_module for
  enddef;
  def map between parameters_global and external_carotid_L_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters and external_carotid_R_LC_module for
  enddef;
  def map between parameters_global and external_carotid_R_LC_module for
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars G_pn and G_pn;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  // ------------time mapping------------//
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pcap_module for
    vars time and t;
  enddef;
  def map between environment and pulmonary_GE_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L82_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_C_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_D_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L62_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R26_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_C_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_C_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R34_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_T_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_GE_module for
    vars time and t;
  enddef;
  def map between environment and arterial_gas_transport_module for
    vars time and t;
  enddef;
  def map between environment and venous_gas_transport_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L_baro_module for
    vars time and t;
  enddef;
  def map between environment and arterial_chemoreceptor_module for
    vars time and t;
  enddef;
  def map between environment and vagal_efferent_module for
    vars time and t;
  enddef;
  def map between environment and peripheral_sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and venous_sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and heart_sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and trunk_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and arm_leg_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and lv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and rv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and heart_period_effector_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_LC_module for
    vars time and t;
  enddef;
enddef;
