def model CardiovascularSystem as
  def import using "elic_units.cellml" for
    unit m2 using unit m2;
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m_per_s2 using unit m_per_s2;
    unit m_per_s using unit m_per_s;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit per_m using unit per_m;
    unit per_s using unit per_s;
    unit J_per_m3 using unit J_per_m3;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_J using unit m3_per_J;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit m3_per_Js using unit m3_per_Js;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
  enddef;
  def import using "elic_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_global using comp parameters_global;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------imports------------//
  def import using "elic_modules.cellml" for
    comp heart_module using comp heart_simple;
  enddef;
  def import using "elic_modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp aortic_arch_C2_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp aortic_arch_C46_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp aortic_arch_C64_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_intercostal_T1_R98_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_intercostal_T1_L102_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_intercostal_T2_R106_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_intercostal_T2_L110_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp celiac_trunk_C116_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp splenic_T2_C118_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp left_gastric_T3_C120_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp splenic_T2_C122_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp dorsal_pancreatic_T1_C124_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp splenic_T2_C126_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_hepatic_C128_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp hepatic_artery_proper_C130_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp hepatic_artery_proper_left_branch_C132_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp hepatic_artery_proper_right_branch_C134_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C138_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_colic_T8_C140_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C142_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp jejunal_3_T10_C144_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C146_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp jejunal_6_T11_C148_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C150_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ileocolic_T9_C152_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C154_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ileal_4_T12_C156_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C158_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ileal_6_T13_C160_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_mesenteric_T4_C162_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_L166_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_anterior_branch_L168_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp inferior_segmental_T5_L170_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_segmental_T4_L172_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_posterior_branch_T3_L174_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_R178_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_anterior_branch_R180_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp superior_segmental_T4_R182_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp inferior_segmental_T5_R184_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp renal_posterior_branch_T3_R186_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp inferior_mesenteric_T5_C190_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp subclavian_R28_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp subclavian_R30_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp axillary_R32_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp brachial_R34_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ulnar_T2_R36_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_interosseous_R38_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_interosseous_T3_R40_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ulnar_T2_R42_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp radial_T1_R44_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp subclavian_L66_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp subclavian_L78_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp axillary_L80_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp brachial_L82_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ulnar_T2_L84_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_interosseous_L86_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_interosseous_T3_L88_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp ulnar_T2_L90_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp radial_T1_L92_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_carotid_R6_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_carotid_R8_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp external_carotid_T2_R26_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_carotid_L48_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_carotid_L50_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp external_carotid_T2_L62_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_L110_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_L38_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_L42_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_R234_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_R238_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_cerebral_R46_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_communicating_C44_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp basilar_C4_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_L172_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_L176_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_L180_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_L184_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_R240_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_R244_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_R248_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_R252_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_carotid_L112_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_carotid_R48_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_dorsal_branch_to_corpus_callosum_L28_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_dorsal_branch_to_corpus_callosum_R224_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_L188_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_L192_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_L200_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_L26_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_R222_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_R256_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_R260_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_R268_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L136_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L140_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L144_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L148_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L152_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L160_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L164_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R102_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R74_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R78_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R82_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R86_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R90_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R98_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_L114_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_L118_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_R52_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_R56_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L120_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L124_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L128_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R58_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R62_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R66_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_L14_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_L18_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_L22_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_R210_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_R214_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp occipital_lateral_R218_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_L32_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_L36_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_R228_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_R232_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_cerebral_postcommunicating_part_L12_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_cerebral_postcommunicating_part_R208_module using comp vv_2in2out_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_cerebral_precommunicating_part_L6_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_cerebral_precommunicating_part_R204_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_communicating_L8_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_communicating_R206_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp vertebral_L2_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp vertebral_R272_module using comp pp_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_precentral_sulcus_T103_R68_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_precentral_sulcus_T38_L130_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T118_R262_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T54_L194_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T120_R104_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T56_L166_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T122_R92_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T58_L154_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_intermediate_temporal_branch_T47_L20_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_intermediate_temporal_branch_T76_R216_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_calcarine_branch_T51_L202_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_calcarine_branch_T79_R270_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_occipitotemporal_branch_T52_L190_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_occipitotemporal_branch_T80_R258_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parietal_branch_T53_L196_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parietal_branch_T81_R264_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_choroidal_T34_L116_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_choroidal_T98_R54_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_parietal_T100_R100_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_parietal_T35_L162_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_central_sulcus_T101_R70_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_central_sulcus_T36_L132_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_postcentral_sulcus_T102_R88_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_postcentral_sulcus_T37_L150_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_precentral_sulcus_T103_R72_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp artery_of_precentral_sulcus_T38_L134_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_cingular_branch_T105_R250_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_cingular_branch_T40_L182_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_paracentral_branch_T107_R254_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_paracentral_branch_T42_L186_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_posteromedial_frontal_branch_T108_R246_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp callosomarginal_posteromedial_frontal_branch_T43_L178_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp distal_medial_striate_T109_R236_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp distal_medial_striate_T44_L40_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_frontobasal_T110_R60_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_frontobasal_T45_L122_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_anterior_temporal_branch_T111_R212_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_anterior_temporal_branch_T46_L16_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_posterior_temporal_branch_T112_R220_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp lateral_occipital_posterior_temporal_branch_T48_L24_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T118_R266_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T54_L198_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_anterior_temporal_branch_T119_R80_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_anterior_temporal_branch_T55_L142_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_middle_temporal_branch_T121_R84_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_middle_temporal_branch_T57_L146_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T122_R96_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T58_L158_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_parieto_occipital_branch_T124_R226_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_parieto_occipital_branch_T60_L30_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_precuneal_branch_T125_R230_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pericallosal_precuneal_branch_T61_L34_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp polar_temporal_T127_R76_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp polar_temporal_T63_L138_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_parietal_T129_R106_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_parietal_T64_L168_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp prefrontal_T130_R64_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp prefrontal_T65_L126_T_module using comp controller_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_iliac_R216_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_iliac_T1_R218_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp femoral_R222_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp profundus_T2_R224_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp femoral_R226_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp popliteal_R228_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_tibial_T3_R230_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp popliteal_R232_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp tibiofibular_trunk_R234_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_tibial_T4_R236_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp common_iliac_L194_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp internal_iliac_T1_L196_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp femoral_L200_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp profundus_T2_L202_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp femoral_L204_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp popliteal_L206_module using comp pv_split_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp anterior_tibial_T3_L208_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp popliteal_L210_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp tibiofibular_trunk_L212_module using comp pv_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp posterior_tibial_T4_L214_T_module using comp pp_T_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp venous_lb_module using comp vp_simple_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp venous_ub_module using comp vp_simple_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp venous_ivc_module using comp vp_simple_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp venous_svc_module using comp vp_simple_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_module using comp p_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_PCAL_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_PCAR_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_MCAL_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_MCAR_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_ACAL_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp feedback_ACAR_module using comp f_observer_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp par_module using comp vp_simple_type;
  enddef;
  def import using "elic_modules.cellml" for
    comp pvn_module using comp vp_simple_type;
  enddef;
  // ------------vessel mappings------------//
  def map between heart_module and ascending_aorta_A_module for
    vars v_aov and v_in;
    vars u_root and u;
  enddef;
  def map between heart_module and par_module for
    vars v_puv and v_in;
    vars u_par and u;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u_d and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and posterior_intercostal_T1_R98_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and posterior_intercostal_T1_L102_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and posterior_intercostal_T2_R106_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and posterior_intercostal_T2_L110_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and celiac_trunk_C116_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and superior_mesenteric_T4_C138_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and renal_L166_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and renal_R178_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and inferior_mesenteric_T5_C190_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and splenic_T2_C118_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and left_gastric_T3_C120_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and splenic_T2_C122_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and dorsal_pancreatic_T1_C124_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and splenic_T2_C126_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and common_hepatic_C128_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_hepatic_C128_module and hepatic_artery_proper_C130_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_left_branch_C132_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_right_branch_C134_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and middle_colic_T8_C140_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and superior_mesenteric_T4_C142_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and jejunal_3_T10_C144_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and superior_mesenteric_T4_C146_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and jejunal_6_T11_C148_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and superior_mesenteric_T4_C150_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and ileocolic_T9_C152_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and superior_mesenteric_T4_C154_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and ileal_4_T12_C156_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and superior_mesenteric_T4_C158_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and ileal_6_T13_C160_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and superior_mesenteric_T4_C162_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_anterior_branch_L168_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_posterior_branch_T3_L174_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and inferior_segmental_T5_L170_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and superior_segmental_T4_L172_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_anterior_branch_R180_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_posterior_branch_T3_R186_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and superior_segmental_T4_R182_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and inferior_segmental_T5_R184_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R30_module and axillary_R32_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_R32_module and brachial_R34_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and ulnar_T2_R36_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and radial_T1_R44_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and common_interosseous_R38_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and ulnar_T2_R42_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_R38_module and posterior_interosseous_T3_R40_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and axillary_L80_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_L80_module and brachial_L82_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and ulnar_T2_L84_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and radial_T1_L92_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and common_interosseous_L86_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and ulnar_T2_L90_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_L86_module and posterior_interosseous_T3_L88_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_module and internal_carotid_R8_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_module and external_carotid_T2_R26_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_module and posterior_communicating_R206_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_module and internal_carotid_R48_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_module and feedback_module for
    vars u and u;
  enddef;
  def map between common_carotid_L48_module and internal_carotid_L50_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_module and external_carotid_T2_L62_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_module and posterior_communicating_L8_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_module and internal_carotid_L112_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L42_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L110_module and feedback_ACAL_module for
    vars v and v;
  enddef;
  def map between anterior_cerebral_L38_module and pericallosal_L36_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L38_module and callosomarginal_L172_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and distal_medial_striate_T44_L40_T_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L38_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_cerebral_R234_module and callosomarginal_R240_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R234_module and pericallosal_R232_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and distal_medial_striate_T109_R236_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R234_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and feedback_ACAR_module for
    vars v and v;
  enddef;
  def map between anterior_communicating_C44_module and anterior_cerebral_L42_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_precommunicating_part_L6_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_precommunicating_part_R204_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between callosomarginal_L172_module and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L172_module and callosomarginal_L176_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L176_module and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L176_module and callosomarginal_L180_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L180_module and callosomarginal_cingular_branch_T40_L182_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L180_module and callosomarginal_L184_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L184_module and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R240_module and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R240_module and callosomarginal_R244_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R244_module and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R244_module and callosomarginal_R248_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R248_module and callosomarginal_cingular_branch_T105_R250_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R248_module and callosomarginal_R252_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R252_module and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_L28_module and medial_occipital_L188_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_R224_module and medial_occipital_R256_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_L192_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_L192_module and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L192_module and medial_occipital_L200_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L200_module and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L26_module and medial_occipital_L188_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between medial_occipital_R222_module and medial_occipital_R256_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_R260_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_R260_module and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_R260_module and medial_occipital_R268_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_R268_module and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136_module and polar_temporal_T63_L138_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136_module and middle_cerebral_inferior_terminal_branch_L140_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140_module and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140_module and middle_cerebral_inferior_terminal_branch_L144_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144_module and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144_module and middle_cerebral_inferior_terminal_branch_L148_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148_module and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148_module and middle_cerebral_inferior_terminal_branch_L152_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152_module and middle_cerebral_inferior_terminal_branch_L160_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152_module and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160_module and anterior_parietal_T35_L162_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160_module and middle_cerebral_inferior_terminal_branch_L164_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L164_module and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R102_module and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74_module and polar_temporal_T127_R76_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74_module and middle_cerebral_inferior_terminal_branch_R78_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78_module and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78_module and middle_cerebral_inferior_terminal_branch_R82_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82_module and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82_module and middle_cerebral_inferior_terminal_branch_R86_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86_module and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86_module and middle_cerebral_inferior_terminal_branch_R90_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90_module and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90_module and middle_cerebral_inferior_terminal_branch_R98_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98_module and anterior_parietal_T100_R100_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98_module and middle_cerebral_inferior_terminal_branch_R102_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and anterior_choroidal_T34_L116_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L118_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and feedback_MCAL_module for
    vars v and v;
  enddef;
  def map between middle_cerebral_L118_module and middle_cerebral_superior_terminal_branch_L120_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L118_module and middle_cerebral_inferior_terminal_branch_L136_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and anterior_choroidal_T98_R54_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R56_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and feedback_MCAR_module for
    vars v and v;
  enddef;
  def map between middle_cerebral_R56_module and middle_cerebral_superior_terminal_branch_R58_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R56_module and middle_cerebral_inferior_terminal_branch_R74_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120_module and lateral_frontobasal_T45_L122_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120_module and middle_cerebral_superior_terminal_branch_L124_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124_module and prefrontal_T65_L126_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124_module and middle_cerebral_superior_terminal_branch_L128_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L128_module and artery_of_precentral_sulcus_T38_L130_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58_module and middle_cerebral_superior_terminal_branch_R62_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58_module and lateral_frontobasal_T110_R60_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62_module and prefrontal_T130_R64_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62_module and middle_cerebral_superior_terminal_branch_R66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R66_module and artery_of_precentral_sulcus_T103_R68_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L14_module and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L14_module and occipital_lateral_L18_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L18_module and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L18_module and occipital_lateral_L22_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L22_module and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R210_module and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R210_module and occipital_lateral_R214_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R214_module and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R214_module and occipital_lateral_R218_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R218_module and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L32_module and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L32_module and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L36_module and pericallosal_L32_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L36_module and pericallosal_precuneal_branch_T61_L34_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R228_module and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R228_module and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R232_module and pericallosal_R228_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R232_module and pericallosal_precuneal_branch_T125_R230_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and medial_occipital_L26_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and occipital_lateral_L14_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and feedback_PCAL_module for
    vars v and v;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and occipital_lateral_R210_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and medial_occipital_R222_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and feedback_PCAR_module for
    vars v and v;
  enddef;
  def map between posterior_cerebral_precommunicating_part_L6_module and posterior_cerebral_postcommunicating_part_L12_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_precommunicating_part_R204_module and posterior_cerebral_postcommunicating_part_R208_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_L8_module and posterior_cerebral_postcommunicating_part_L12_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_cerebral_postcommunicating_part_R208_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between vertebral_L2_module and basilar_C4_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between vertebral_R272_module and basilar_C4_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68_module and artery_of_central_sulcus_T101_R70_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68_module and artery_of_precentral_sulcus_T103_R72_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130_module and artery_of_central_sulcus_T36_L132_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130_module and artery_of_precentral_sulcus_T38_L134_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262_module and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262_module and medial_occipital_parietal_branch_T81_R264_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194_module and medial_occipital_parietal_branch_T53_L196_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194_module and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104_module and posterior_parietal_T129_R106_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104_module and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166_module and posterior_parietal_T64_L168_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166_module and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92_module and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92_module and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154_module and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154_module and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and internal_iliac_T1_R218_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and profundus_T2_R224_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and femoral_R226_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R226_module and popliteal_R228_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and anterior_tibial_T3_R230_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and popliteal_R232_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R232_module and tibiofibular_trunk_R234_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_R234_module and posterior_tibial_T4_R236_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and internal_iliac_T1_L196_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and profundus_T2_L202_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and femoral_L204_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L204_module and popliteal_L206_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and anterior_tibial_T3_L208_T_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and popliteal_L210_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L210_module and tibiofibular_trunk_L212_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_L212_module and posterior_tibial_T4_L214_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ivc_module and heart_module for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart_module for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  def map between feedback_module and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_parietal_branch_T53_L196_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_parietal_branch_T81_R264_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and anterior_choroidal_T34_L116_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and anterior_choroidal_T98_R54_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and anterior_parietal_T100_R100_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and anterior_parietal_T35_L162_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_central_sulcus_T101_R70_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_central_sulcus_T36_L132_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_precentral_sulcus_T103_R72_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and artery_of_precentral_sulcus_T38_L134_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_cingular_branch_T105_R250_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_cingular_branch_T40_L182_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and distal_medial_striate_T109_R236_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and distal_medial_striate_T44_L40_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_frontobasal_T110_R60_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_frontobasal_T45_L122_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and pericallosal_precuneal_branch_T125_R230_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and pericallosal_precuneal_branch_T61_L34_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and polar_temporal_T127_R76_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and polar_temporal_T63_L138_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and posterior_parietal_T129_R106_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and posterior_parietal_T64_L168_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and prefrontal_T130_R64_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_module and prefrontal_T65_L126_T_module for
    vars u and u_a;
  enddef;
  def map between feedback_PCAL_module and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and medial_occipital_parietal_branch_T53_L196_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAL_module and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and medial_occipital_parietal_branch_T81_R264_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_PCAR_module and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and anterior_choroidal_T34_L116_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and anterior_parietal_T35_L162_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and artery_of_central_sulcus_T36_L132_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and artery_of_precentral_sulcus_T38_L134_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and lateral_frontobasal_T45_L122_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and polar_temporal_T63_L138_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and posterior_parietal_T64_L168_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAL_module and prefrontal_T65_L126_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and anterior_choroidal_T98_R54_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and anterior_parietal_T100_R100_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and artery_of_central_sulcus_T101_R70_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and artery_of_precentral_sulcus_T103_R72_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and lateral_frontobasal_T110_R60_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and polar_temporal_T127_R76_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and posterior_parietal_T129_R106_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_MCAR_module and prefrontal_T130_R64_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and callosomarginal_cingular_branch_T40_L182_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and distal_medial_striate_T44_L40_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAL_module and pericallosal_precuneal_branch_T61_L34_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and callosomarginal_cingular_branch_T105_R250_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and distal_medial_striate_T109_R236_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars v and v_a;
  enddef;
  def map between feedback_ACAR_module and pericallosal_precuneal_branch_T125_R230_T_module for
    vars v and v_a;
  enddef;
  def map between par_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  // ------------terminal venous connection------------//
  def map between posterior_intercostal_T1_R98_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_intercostal_T1_R98_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T1_R98_T;
  enddef;
  def map between posterior_intercostal_T1_L102_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_intercostal_T1_L102_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T1_L102_T;
  enddef;
  def map between posterior_intercostal_T2_R106_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_intercostal_T2_R106_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T2_R106_T;
  enddef;
  def map between posterior_intercostal_T2_L110_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_intercostal_T2_L110_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T2_L110_T;
  enddef;
  def map between left_gastric_T3_C120_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between left_gastric_T3_C120_T_module and terminal_venous_connection for
    vars v_T and v_left_gastric_T3_C120_T;
  enddef;
  def map between dorsal_pancreatic_T1_C124_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between dorsal_pancreatic_T1_C124_T_module and terminal_venous_connection for
    vars v_T and v_dorsal_pancreatic_T1_C124_T;
  enddef;
  def map between splenic_T2_C126_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between splenic_T2_C126_T_module and terminal_venous_connection for
    vars v_T and v_splenic_T2_C126_T;
  enddef;
  def map between hepatic_artery_proper_left_branch_C132_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between hepatic_artery_proper_left_branch_C132_T_module and terminal_venous_connection for
    vars v_T and v_hepatic_artery_proper_left_branch_C132_T;
  enddef;
  def map between hepatic_artery_proper_right_branch_C134_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between hepatic_artery_proper_right_branch_C134_T_module and terminal_venous_connection for
    vars v_T and v_hepatic_artery_proper_right_branch_C134_T;
  enddef;
  def map between middle_colic_T8_C140_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between middle_colic_T8_C140_T_module and terminal_venous_connection for
    vars v_T and v_middle_colic_T8_C140_T;
  enddef;
  def map between jejunal_3_T10_C144_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between jejunal_3_T10_C144_T_module and terminal_venous_connection for
    vars v_T and v_jejunal_3_T10_C144_T;
  enddef;
  def map between jejunal_6_T11_C148_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between jejunal_6_T11_C148_T_module and terminal_venous_connection for
    vars v_T and v_jejunal_6_T11_C148_T;
  enddef;
  def map between ileocolic_T9_C152_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between ileocolic_T9_C152_T_module and terminal_venous_connection for
    vars v_T and v_ileocolic_T9_C152_T;
  enddef;
  def map between ileal_4_T12_C156_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between ileal_4_T12_C156_T_module and terminal_venous_connection for
    vars v_T and v_ileal_4_T12_C156_T;
  enddef;
  def map between ileal_6_T13_C160_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between ileal_6_T13_C160_T_module and terminal_venous_connection for
    vars v_T and v_ileal_6_T13_C160_T;
  enddef;
  def map between superior_mesenteric_T4_C162_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between superior_mesenteric_T4_C162_T_module and terminal_venous_connection for
    vars v_T and v_superior_mesenteric_T4_C162_T;
  enddef;
  def map between inferior_segmental_T5_L170_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between inferior_segmental_T5_L170_T_module and terminal_venous_connection for
    vars v_T and v_inferior_segmental_T5_L170_T;
  enddef;
  def map between superior_segmental_T4_L172_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between superior_segmental_T4_L172_T_module and terminal_venous_connection for
    vars v_T and v_superior_segmental_T4_L172_T;
  enddef;
  def map between renal_posterior_branch_T3_L174_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between renal_posterior_branch_T3_L174_T_module and terminal_venous_connection for
    vars v_T and v_renal_posterior_branch_T3_L174_T;
  enddef;
  def map between superior_segmental_T4_R182_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between superior_segmental_T4_R182_T_module and terminal_venous_connection for
    vars v_T and v_superior_segmental_T4_R182_T;
  enddef;
  def map between inferior_segmental_T5_R184_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between inferior_segmental_T5_R184_T_module and terminal_venous_connection for
    vars v_T and v_inferior_segmental_T5_R184_T;
  enddef;
  def map between renal_posterior_branch_T3_R186_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between renal_posterior_branch_T3_R186_T_module and terminal_venous_connection for
    vars v_T and v_renal_posterior_branch_T3_R186_T;
  enddef;
  def map between inferior_mesenteric_T5_C190_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between inferior_mesenteric_T5_C190_T_module and terminal_venous_connection for
    vars v_T and v_inferior_mesenteric_T5_C190_T;
  enddef;
  def map between posterior_interosseous_T3_R40_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_interosseous_T3_R40_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_T3_R40_T;
  enddef;
  def map between ulnar_T2_R42_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between ulnar_T2_R42_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_T2_R42_T;
  enddef;
  def map between radial_T1_R44_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between radial_T1_R44_T_module and terminal_venous_connection for
    vars v_T and v_radial_T1_R44_T;
  enddef;
  def map between posterior_interosseous_T3_L88_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_interosseous_T3_L88_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_T3_L88_T;
  enddef;
  def map between ulnar_T2_L90_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between ulnar_T2_L90_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_T2_L90_T;
  enddef;
  def map between radial_T1_L92_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between radial_T1_L92_T_module and terminal_venous_connection for
    vars v_T and v_radial_T1_L92_T;
  enddef;
  def map between external_carotid_T2_R26_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_T2_R26_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_T2_R26_T;
  enddef;
  def map between external_carotid_T2_L62_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_T2_L62_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_T2_L62_T;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T47_L20_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T47_L20_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_intermediate_temporal_branch_T47_L20_T;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T76_R216_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T76_R216_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_intermediate_temporal_branch_T76_R216_T;
  enddef;
  def map between medial_occipital_calcarine_branch_T51_L202_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_calcarine_branch_T51_L202_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_calcarine_branch_T51_L202_T;
  enddef;
  def map between medial_occipital_calcarine_branch_T79_R270_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_calcarine_branch_T79_R270_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_calcarine_branch_T79_R270_T;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T52_L190_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T52_L190_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_occipitotemporal_branch_T52_L190_T;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T80_R258_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T80_R258_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_occipitotemporal_branch_T80_R258_T;
  enddef;
  def map between medial_occipital_parietal_branch_T53_L196_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_parietal_branch_T53_L196_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_parietal_branch_T53_L196_T;
  enddef;
  def map between medial_occipital_parietal_branch_T81_R264_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_parietal_branch_T81_R264_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_parietal_branch_T81_R264_T;
  enddef;
  def map between anterior_choroidal_T34_L116_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_choroidal_T34_L116_T_module and terminal_venous_connection for
    vars v_T and v_anterior_choroidal_T34_L116_T;
  enddef;
  def map between anterior_choroidal_T98_R54_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_choroidal_T98_R54_T_module and terminal_venous_connection for
    vars v_T and v_anterior_choroidal_T98_R54_T;
  enddef;
  def map between anterior_parietal_T100_R100_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_parietal_T100_R100_T_module and terminal_venous_connection for
    vars v_T and v_anterior_parietal_T100_R100_T;
  enddef;
  def map between anterior_parietal_T35_L162_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_parietal_T35_L162_T_module and terminal_venous_connection for
    vars v_T and v_anterior_parietal_T35_L162_T;
  enddef;
  def map between artery_of_central_sulcus_T101_R70_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_central_sulcus_T101_R70_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_central_sulcus_T101_R70_T;
  enddef;
  def map between artery_of_central_sulcus_T36_L132_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_central_sulcus_T36_L132_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_central_sulcus_T36_L132_T;
  enddef;
  def map between artery_of_postcentral_sulcus_T102_R88_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_postcentral_sulcus_T102_R88_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_postcentral_sulcus_T102_R88_T;
  enddef;
  def map between artery_of_postcentral_sulcus_T37_L150_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_postcentral_sulcus_T37_L150_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_postcentral_sulcus_T37_L150_T;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R72_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R72_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_precentral_sulcus_T103_R72_T;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L134_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L134_T_module and terminal_venous_connection for
    vars v_T and v_artery_of_precentral_sulcus_T38_L134_T;
  enddef;
  def map between callosomarginal_cingular_branch_T105_R250_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_cingular_branch_T105_R250_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_cingular_branch_T105_R250_T;
  enddef;
  def map between callosomarginal_cingular_branch_T40_L182_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_cingular_branch_T40_L182_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_cingular_branch_T40_L182_T;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_intermediomedial_frontal_branch_T106_R242_T;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_intermediomedial_frontal_branch_T41_L174_T;
  enddef;
  def map between callosomarginal_paracentral_branch_T107_R254_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_paracentral_branch_T107_R254_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_paracentral_branch_T107_R254_T;
  enddef;
  def map between callosomarginal_paracentral_branch_T42_L186_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_paracentral_branch_T42_L186_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_paracentral_branch_T42_L186_T;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T108_R246_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T108_R246_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_posteromedial_frontal_branch_T108_R246_T;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T43_L178_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T43_L178_T_module and terminal_venous_connection for
    vars v_T and v_callosomarginal_posteromedial_frontal_branch_T43_L178_T;
  enddef;
  def map between distal_medial_striate_T109_R236_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between distal_medial_striate_T109_R236_T_module and terminal_venous_connection for
    vars v_T and v_distal_medial_striate_T109_R236_T;
  enddef;
  def map between distal_medial_striate_T44_L40_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between distal_medial_striate_T44_L40_T_module and terminal_venous_connection for
    vars v_T and v_distal_medial_striate_T44_L40_T;
  enddef;
  def map between lateral_frontobasal_T110_R60_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_frontobasal_T110_R60_T_module and terminal_venous_connection for
    vars v_T and v_lateral_frontobasal_T110_R60_T;
  enddef;
  def map between lateral_frontobasal_T45_L122_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_frontobasal_T45_L122_T_module and terminal_venous_connection for
    vars v_T and v_lateral_frontobasal_T45_L122_T;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T111_R212_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T111_R212_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_anterior_temporal_branch_T111_R212_T;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T46_L16_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T46_L16_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_anterior_temporal_branch_T46_L16_T;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T112_R220_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T112_R220_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_posterior_temporal_branch_T112_R220_T;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T48_L24_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T48_L24_T_module and terminal_venous_connection for
    vars v_T and v_lateral_occipital_posterior_temporal_branch_T48_L24_T;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R266_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R266_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_parieto_occipital_branch_T118_R266_T;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L198_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L198_T_module and terminal_venous_connection for
    vars v_T and v_medial_occipital_parieto_occipital_branch_T54_L198_T;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T119_R80_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T119_R80_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_anterior_temporal_branch_T119_R80_T;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T55_L142_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T55_L142_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_anterior_temporal_branch_T55_L142_T;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_branch_to_angular_gyrus_T120_R108_T;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_branch_to_angular_gyrus_T56_L170_T;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T121_R84_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T121_R84_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_middle_temporal_branch_T121_R84_T;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T57_L146_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T57_L146_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_middle_temporal_branch_T57_L146_T;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R96_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R96_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_posterior_temporal_branch_T122_R96_T;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L158_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L158_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_posterior_temporal_branch_T58_L158_T;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_posterior_temp_occipital_branch_T123_R94_T;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_posterior_temp_occipital_branch_T59_L156_T;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T124_R226_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T124_R226_T_module and terminal_venous_connection for
    vars v_T and v_pericallosal_parieto_occipital_branch_T124_R226_T;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T60_L30_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T60_L30_T_module and terminal_venous_connection for
    vars v_T and v_pericallosal_parieto_occipital_branch_T60_L30_T;
  enddef;
  def map between pericallosal_precuneal_branch_T125_R230_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between pericallosal_precuneal_branch_T125_R230_T_module and terminal_venous_connection for
    vars v_T and v_pericallosal_precuneal_branch_T125_R230_T;
  enddef;
  def map between pericallosal_precuneal_branch_T61_L34_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between pericallosal_precuneal_branch_T61_L34_T_module and terminal_venous_connection for
    vars v_T and v_pericallosal_precuneal_branch_T61_L34_T;
  enddef;
  def map between polar_temporal_T127_R76_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between polar_temporal_T127_R76_T_module and terminal_venous_connection for
    vars v_T and v_polar_temporal_T127_R76_T;
  enddef;
  def map between polar_temporal_T63_L138_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between polar_temporal_T63_L138_T_module and terminal_venous_connection for
    vars v_T and v_polar_temporal_T63_L138_T;
  enddef;
  def map between posterior_parietal_T129_R106_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_parietal_T129_R106_T_module and terminal_venous_connection for
    vars v_T and v_posterior_parietal_T129_R106_T;
  enddef;
  def map between posterior_parietal_T64_L168_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_parietal_T64_L168_T_module and terminal_venous_connection for
    vars v_T and v_posterior_parietal_T64_L168_T;
  enddef;
  def map between prefrontal_T130_R64_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between prefrontal_T130_R64_T_module and terminal_venous_connection for
    vars v_T and v_prefrontal_T130_R64_T;
  enddef;
  def map between prefrontal_T65_L126_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between prefrontal_T65_L126_T_module and terminal_venous_connection for
    vars v_T and v_prefrontal_T65_L126_T;
  enddef;
  def map between internal_iliac_T1_R218_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between internal_iliac_T1_R218_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_T1_R218_T;
  enddef;
  def map between profundus_T2_R224_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between profundus_T2_R224_T_module and terminal_venous_connection for
    vars v_T and v_profundus_T2_R224_T;
  enddef;
  def map between anterior_tibial_T3_R230_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between anterior_tibial_T3_R230_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_T3_R230_T;
  enddef;
  def map between posterior_tibial_T4_R236_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_tibial_T4_R236_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_T4_R236_T;
  enddef;
  def map between internal_iliac_T1_L196_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between internal_iliac_T1_L196_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_T1_L196_T;
  enddef;
  def map between profundus_T2_L202_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between profundus_T2_L202_T_module and terminal_venous_connection for
    vars v_T and v_profundus_T2_L202_T;
  enddef;
  def map between anterior_tibial_T3_L208_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between anterior_tibial_T3_L208_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_T3_L208_T;
  enddef;
  def map between posterior_tibial_T4_L214_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between posterior_tibial_T4_L214_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_T4_L214_T;
  enddef;
  def map between terminal_venous_connection and venous_lb_module for
    vars v_venous_lb and v_in;
  enddef;
  def map between terminal_venous_connection and venous_ub_module for
    vars v_venous_ub and v_in;
  enddef;

  def comp terminal_venous_connection as
    var v_posterior_intercostal_T1_R98_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T1_L102_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T2_R106_T: m3_per_s {pub: in};
    var v_posterior_intercostal_T2_L110_T: m3_per_s {pub: in};
    var v_left_gastric_T3_C120_T: m3_per_s {pub: in};
    var v_dorsal_pancreatic_T1_C124_T: m3_per_s {pub: in};
    var v_splenic_T2_C126_T: m3_per_s {pub: in};
    var v_hepatic_artery_proper_left_branch_C132_T: m3_per_s {pub: in};
    var v_hepatic_artery_proper_right_branch_C134_T: m3_per_s {pub: in};
    var v_middle_colic_T8_C140_T: m3_per_s {pub: in};
    var v_jejunal_3_T10_C144_T: m3_per_s {pub: in};
    var v_jejunal_6_T11_C148_T: m3_per_s {pub: in};
    var v_ileocolic_T9_C152_T: m3_per_s {pub: in};
    var v_ileal_4_T12_C156_T: m3_per_s {pub: in};
    var v_ileal_6_T13_C160_T: m3_per_s {pub: in};
    var v_superior_mesenteric_T4_C162_T: m3_per_s {pub: in};
    var v_inferior_segmental_T5_L170_T: m3_per_s {pub: in};
    var v_superior_segmental_T4_L172_T: m3_per_s {pub: in};
    var v_renal_posterior_branch_T3_L174_T: m3_per_s {pub: in};
    var v_superior_segmental_T4_R182_T: m3_per_s {pub: in};
    var v_inferior_segmental_T5_R184_T: m3_per_s {pub: in};
    var v_renal_posterior_branch_T3_R186_T: m3_per_s {pub: in};
    var v_inferior_mesenteric_T5_C190_T: m3_per_s {pub: in};
    var v_internal_iliac_T1_R218_T: m3_per_s {pub: in};
    var v_profundus_T2_R224_T: m3_per_s {pub: in};
    var v_anterior_tibial_T3_R230_T: m3_per_s {pub: in};
    var v_posterior_tibial_T4_R236_T: m3_per_s {pub: in};
    var v_internal_iliac_T1_L196_T: m3_per_s {pub: in};
    var v_profundus_T2_L202_T: m3_per_s {pub: in};
    var v_anterior_tibial_T3_L208_T: m3_per_s {pub: in};
    var v_posterior_tibial_T4_L214_T: m3_per_s {pub: in};
    var v_venous_lb: m3_per_s {pub: out};
    var v_posterior_interosseous_T3_R40_T: m3_per_s {pub: in};
    var v_ulnar_T2_R42_T: m3_per_s {pub: in};
    var v_radial_T1_R44_T: m3_per_s {pub: in};
    var v_posterior_interosseous_T3_L88_T: m3_per_s {pub: in};
    var v_ulnar_T2_L90_T: m3_per_s {pub: in};
    var v_radial_T1_L92_T: m3_per_s {pub: in};
    var v_external_carotid_T2_R26_T: m3_per_s {pub: in};
    var v_external_carotid_T2_L62_T: m3_per_s {pub: in};
    var v_lateral_occipital_intermediate_temporal_branch_T47_L20_T: m3_per_s {pub: in};
    var v_lateral_occipital_intermediate_temporal_branch_T76_R216_T: m3_per_s {pub: in};
    var v_medial_occipital_calcarine_branch_T51_L202_T: m3_per_s {pub: in};
    var v_medial_occipital_calcarine_branch_T79_R270_T: m3_per_s {pub: in};
    var v_medial_occipital_occipitotemporal_branch_T52_L190_T: m3_per_s {pub: in};
    var v_medial_occipital_occipitotemporal_branch_T80_R258_T: m3_per_s {pub: in};
    var v_medial_occipital_parietal_branch_T53_L196_T: m3_per_s {pub: in};
    var v_medial_occipital_parietal_branch_T81_R264_T: m3_per_s {pub: in};
    var v_anterior_choroidal_T34_L116_T: m3_per_s {pub: in};
    var v_anterior_choroidal_T98_R54_T: m3_per_s {pub: in};
    var v_anterior_parietal_T100_R100_T: m3_per_s {pub: in};
    var v_anterior_parietal_T35_L162_T: m3_per_s {pub: in};
    var v_artery_of_central_sulcus_T101_R70_T: m3_per_s {pub: in};
    var v_artery_of_central_sulcus_T36_L132_T: m3_per_s {pub: in};
    var v_artery_of_postcentral_sulcus_T102_R88_T: m3_per_s {pub: in};
    var v_artery_of_postcentral_sulcus_T37_L150_T: m3_per_s {pub: in};
    var v_artery_of_precentral_sulcus_T103_R72_T: m3_per_s {pub: in};
    var v_artery_of_precentral_sulcus_T38_L134_T: m3_per_s {pub: in};
    var v_callosomarginal_cingular_branch_T105_R250_T: m3_per_s {pub: in};
    var v_callosomarginal_cingular_branch_T40_L182_T: m3_per_s {pub: in};
    var v_callosomarginal_intermediomedial_frontal_branch_T106_R242_T: m3_per_s {pub: in};
    var v_callosomarginal_intermediomedial_frontal_branch_T41_L174_T: m3_per_s {pub: in};
    var v_callosomarginal_paracentral_branch_T107_R254_T: m3_per_s {pub: in};
    var v_callosomarginal_paracentral_branch_T42_L186_T: m3_per_s {pub: in};
    var v_callosomarginal_posteromedial_frontal_branch_T108_R246_T: m3_per_s {pub: in};
    var v_callosomarginal_posteromedial_frontal_branch_T43_L178_T: m3_per_s {pub: in};
    var v_distal_medial_striate_T109_R236_T: m3_per_s {pub: in};
    var v_distal_medial_striate_T44_L40_T: m3_per_s {pub: in};
    var v_lateral_frontobasal_T110_R60_T: m3_per_s {pub: in};
    var v_lateral_frontobasal_T45_L122_T: m3_per_s {pub: in};
    var v_lateral_occipital_anterior_temporal_branch_T111_R212_T: m3_per_s {pub: in};
    var v_lateral_occipital_anterior_temporal_branch_T46_L16_T: m3_per_s {pub: in};
    var v_lateral_occipital_posterior_temporal_branch_T112_R220_T: m3_per_s {pub: in};
    var v_lateral_occipital_posterior_temporal_branch_T48_L24_T: m3_per_s {pub: in};
    var v_medial_occipital_parieto_occipital_branch_T118_R266_T: m3_per_s {pub: in};
    var v_medial_occipital_parieto_occipital_branch_T54_L198_T: m3_per_s {pub: in};
    var v_middle_cerebral_anterior_temporal_branch_T119_R80_T: m3_per_s {pub: in};
    var v_middle_cerebral_anterior_temporal_branch_T55_L142_T: m3_per_s {pub: in};
    var v_middle_cerebral_branch_to_angular_gyrus_T120_R108_T: m3_per_s {pub: in};
    var v_middle_cerebral_branch_to_angular_gyrus_T56_L170_T: m3_per_s {pub: in};
    var v_middle_cerebral_middle_temporal_branch_T121_R84_T: m3_per_s {pub: in};
    var v_middle_cerebral_middle_temporal_branch_T57_L146_T: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporal_branch_T122_R96_T: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporal_branch_T58_L158_T: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temp_occipital_branch_T123_R94_T: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temp_occipital_branch_T59_L156_T: m3_per_s {pub: in};
    var v_pericallosal_parieto_occipital_branch_T124_R226_T: m3_per_s {pub: in};
    var v_pericallosal_parieto_occipital_branch_T60_L30_T: m3_per_s {pub: in};
    var v_pericallosal_precuneal_branch_T125_R230_T: m3_per_s {pub: in};
    var v_pericallosal_precuneal_branch_T61_L34_T: m3_per_s {pub: in};
    var v_polar_temporal_T127_R76_T: m3_per_s {pub: in};
    var v_polar_temporal_T63_L138_T: m3_per_s {pub: in};
    var v_posterior_parietal_T129_R106_T: m3_per_s {pub: in};
    var v_posterior_parietal_T64_L168_T: m3_per_s {pub: in};
    var v_prefrontal_T130_R64_T: m3_per_s {pub: in};
    var v_prefrontal_T65_L126_T: m3_per_s {pub: in};
    var v_venous_ub: m3_per_s {pub: out};
    v_venous_lb = v_posterior_intercostal_T1_R98_T+v_posterior_intercostal_T1_L102_T+v_posterior_intercostal_T2_R106_T+v_posterior_intercostal_T2_L110_T+v_left_gastric_T3_C120_T+v_dorsal_pancreatic_T1_C124_T+v_splenic_T2_C126_T+v_hepatic_artery_proper_left_branch_C132_T+v_hepatic_artery_proper_right_branch_C134_T+v_middle_colic_T8_C140_T+v_jejunal_3_T10_C144_T+v_jejunal_6_T11_C148_T+v_ileocolic_T9_C152_T+v_ileal_4_T12_C156_T+v_ileal_6_T13_C160_T+v_superior_mesenteric_T4_C162_T+v_inferior_segmental_T5_L170_T+v_superior_segmental_T4_L172_T+v_renal_posterior_branch_T3_L174_T+v_superior_segmental_T4_R182_T+v_inferior_segmental_T5_R184_T+v_renal_posterior_branch_T3_R186_T+v_inferior_mesenteric_T5_C190_T+v_internal_iliac_T1_R218_T+v_profundus_T2_R224_T+v_anterior_tibial_T3_R230_T+v_posterior_tibial_T4_R236_T+v_internal_iliac_T1_L196_T+v_profundus_T2_L202_T+v_anterior_tibial_T3_L208_T+v_posterior_tibial_T4_L214_T;
    v_venous_ub = v_posterior_interosseous_T3_R40_T+v_ulnar_T2_R42_T+v_radial_T1_R44_T+v_posterior_interosseous_T3_L88_T+v_ulnar_T2_L90_T+v_radial_T1_L92_T+v_external_carotid_T2_R26_T+v_external_carotid_T2_L62_T+v_lateral_occipital_intermediate_temporal_branch_T47_L20_T+v_lateral_occipital_intermediate_temporal_branch_T76_R216_T+v_medial_occipital_calcarine_branch_T51_L202_T+v_medial_occipital_calcarine_branch_T79_R270_T+v_medial_occipital_occipitotemporal_branch_T52_L190_T+v_medial_occipital_occipitotemporal_branch_T80_R258_T+v_medial_occipital_parietal_branch_T53_L196_T+v_medial_occipital_parietal_branch_T81_R264_T+v_anterior_choroidal_T34_L116_T+v_anterior_choroidal_T98_R54_T+v_anterior_parietal_T100_R100_T+v_anterior_parietal_T35_L162_T+v_artery_of_central_sulcus_T101_R70_T+v_artery_of_central_sulcus_T36_L132_T+v_artery_of_postcentral_sulcus_T102_R88_T+v_artery_of_postcentral_sulcus_T37_L150_T+v_artery_of_precentral_sulcus_T103_R72_T+v_artery_of_precentral_sulcus_T38_L134_T+v_callosomarginal_cingular_branch_T105_R250_T+v_callosomarginal_cingular_branch_T40_L182_T+v_callosomarginal_intermediomedial_frontal_branch_T106_R242_T+v_callosomarginal_intermediomedial_frontal_branch_T41_L174_T+v_callosomarginal_paracentral_branch_T107_R254_T+v_callosomarginal_paracentral_branch_T42_L186_T+v_callosomarginal_posteromedial_frontal_branch_T108_R246_T+v_callosomarginal_posteromedial_frontal_branch_T43_L178_T+v_distal_medial_striate_T109_R236_T+v_distal_medial_striate_T44_L40_T+v_lateral_frontobasal_T110_R60_T+v_lateral_frontobasal_T45_L122_T+v_lateral_occipital_anterior_temporal_branch_T111_R212_T+v_lateral_occipital_anterior_temporal_branch_T46_L16_T+v_lateral_occipital_posterior_temporal_branch_T112_R220_T+v_lateral_occipital_posterior_temporal_branch_T48_L24_T+v_medial_occipital_parieto_occipital_branch_T118_R266_T+v_medial_occipital_parieto_occipital_branch_T54_L198_T+v_middle_cerebral_anterior_temporal_branch_T119_R80_T+v_middle_cerebral_anterior_temporal_branch_T55_L142_T+v_middle_cerebral_branch_to_angular_gyrus_T120_R108_T+v_middle_cerebral_branch_to_angular_gyrus_T56_L170_T+v_middle_cerebral_middle_temporal_branch_T121_R84_T+v_middle_cerebral_middle_temporal_branch_T57_L146_T+v_middle_cerebral_posterior_temporal_branch_T122_R96_T+v_middle_cerebral_posterior_temporal_branch_T58_L158_T+v_middle_cerebral_posterior_temp_occipital_branch_T123_R94_T+v_middle_cerebral_posterior_temp_occipital_branch_T59_L156_T+v_pericallosal_parieto_occipital_branch_T124_R226_T+v_pericallosal_parieto_occipital_branch_T60_L30_T+v_pericallosal_precuneal_branch_T125_R230_T+v_pericallosal_precuneal_branch_T61_L34_T+v_polar_temporal_T127_R76_T+v_polar_temporal_T63_L138_T+v_posterior_parietal_T129_R106_T+v_posterior_parietal_T64_L168_T+v_prefrontal_T130_R64_T+v_prefrontal_T65_L126_T;
  enddef;
  // ------------access_variables------------//

  def comp heart as
    var rho: Js2_per_m5 {pub: in};
    var T: second {pub: in};
    var mt: second {pub: in};
    var u_ra: J_per_m3 {pub: in};
    var u_rv: J_per_m3 {pub: in};
    var u_la: J_per_m3 {pub: in};
    var u_lv: J_per_m3 {pub: in};
    var q_ra: m3 {pub: in};
    var q_rv: m3 {pub: in};
    var q_la: m3 {pub: in};
    var q_lv: m3 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var t_astart: second {pub: in};
    var t_astart_norm: second {pub: in};
    var chi_a: dimensionless {pub: in};
    var chi_afloor: dimensionless {pub: in};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var t_vstart: second {pub: in};
    var t_vstart_norm: second {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var e_a: dimensionless {pub: in};
    var e_v: dimensionless {pub: in};
    var v_trv: m3_per_s {pub: in};
    var v_puv: m3_per_s {pub: in};
    var v_miv: m3_per_s {pub: in};
    var v_aov: m3_per_s {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var A_eff_trv: m2 {pub: in};
    var A_eff_puv: m2 {pub: in};
    var A_eff_miv: m2 {pub: in};
    var A_eff_aov: m2 {pub: in};
  enddef;

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T1_R98_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T1_L102_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T2_R106_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp posterior_intercostal_T2_L110_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp celiac_trunk_C116 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp splenic_T2_C118 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp left_gastric_T3_C120_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp splenic_T2_C122 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp dorsal_pancreatic_T1_C124_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp splenic_T2_C126_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp common_hepatic_C128 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_C130 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_left_branch_C132_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp hepatic_artery_proper_right_branch_C134_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C138 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_colic_T8_C140_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C142 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp jejunal_3_T10_C144_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C146 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp jejunal_6_T11_C148_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C150 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ileocolic_T9_C152_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C154 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ileal_4_T12_C156_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C158 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ileal_6_T13_C160_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C162_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp renal_L166 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp renal_anterior_branch_L168 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp inferior_segmental_T5_L170_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp superior_segmental_T4_L172_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_L174_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp renal_R178 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp renal_anterior_branch_R180 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp superior_segmental_T4_R182_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp inferior_segmental_T5_R184_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_R186_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp inferior_mesenteric_T5_C190_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp axillary_R32 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ulnar_T2_R36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_interosseous_R38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_interosseous_T3_R40_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp ulnar_T2_R42_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp radial_T1_R44_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp axillary_L80 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ulnar_T2_L84 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_interosseous_L86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_interosseous_T3_L88_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp ulnar_T2_L90_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp radial_T1_L92_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp common_carotid_R6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_carotid_T2_R26_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp common_carotid_L48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L50 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_carotid_T2_L62_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R234 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_L172 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_L176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_L180 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_L184 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_R240 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_R244 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_R248 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp callosomarginal_R252 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_dorsal_branch_to_corpus_callosum_L28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_dorsal_branch_to_corpus_callosum_R224 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_L188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_L192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_L26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_R256 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_R260 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_R268 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L140 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L144 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L148 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L152 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L160 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R102 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R74 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R90 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R98 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_L118 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_R56 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L120 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L124 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L128 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R58 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_L14 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_L18 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_L22 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_R210 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_R214 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp occipital_lateral_R218 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp pericallosal_L32 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp pericallosal_L36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp pericallosal_R228 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp pericallosal_R232 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_postcommunicating_part_L12 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_postcommunicating_part_R208 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_precommunicating_part_L6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_cerebral_precommunicating_part_R204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T103_R68 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T38_L130 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T118_R262 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T54_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T120_R104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T56_L166 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T122_R92 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T58_L154 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp lateral_occipital_intermediate_temporal_branch_T47_L20_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_occipital_intermediate_temporal_branch_T76_R216_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_calcarine_branch_T51_L202_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_calcarine_branch_T79_R270_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_occipitotemporal_branch_T52_L190_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_occipitotemporal_branch_T80_R258_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_parietal_branch_T53_L196_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_parietal_branch_T81_R264_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp anterior_choroidal_T34_L116_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp anterior_choroidal_T98_R54_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp anterior_parietal_T100_R100_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp anterior_parietal_T35_L162_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_central_sulcus_T101_R70_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_central_sulcus_T36_L132_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_postcentral_sulcus_T102_R88_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_postcentral_sulcus_T37_L150_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T103_R72_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T38_L134_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_cingular_branch_T105_R250_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_cingular_branch_T40_L182_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_intermediomedial_frontal_branch_T106_R242_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_intermediomedial_frontal_branch_T41_L174_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_paracentral_branch_T107_R254_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_paracentral_branch_T42_L186_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_posteromedial_frontal_branch_T108_R246_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp callosomarginal_posteromedial_frontal_branch_T43_L178_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp distal_medial_striate_T109_R236_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp distal_medial_striate_T44_L40_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_frontobasal_T110_R60_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_frontobasal_T45_L122_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_occipital_anterior_temporal_branch_T111_R212_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_occipital_anterior_temporal_branch_T46_L16_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_occipital_posterior_temporal_branch_T112_R220_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp lateral_occipital_posterior_temporal_branch_T48_L24_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T118_R266_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T54_L198_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_anterior_temporal_branch_T119_R80_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_anterior_temporal_branch_T55_L142_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T120_R108_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T56_L170_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_middle_temporal_branch_T121_R84_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_middle_temporal_branch_T57_L146_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T122_R96_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T58_L158_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temp_occipital_branch_T123_R94_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temp_occipital_branch_T59_L156_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp pericallosal_parieto_occipital_branch_T124_R226_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp pericallosal_parieto_occipital_branch_T60_L30_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp pericallosal_precuneal_branch_T125_R230_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp pericallosal_precuneal_branch_T61_L34_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp polar_temporal_T127_R76_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp polar_temporal_T63_L138_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp posterior_parietal_T129_R106_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp posterior_parietal_T64_L168_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp prefrontal_T130_R64_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp prefrontal_T65_L126_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_iliac_T1_R218_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp profundus_T2_R224_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp femoral_R226 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp popliteal_R228 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_tibial_T3_R230_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp popliteal_R232 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp tibiofibular_trunk_R234 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_tibial_T4_R236_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp internal_iliac_T1_L196_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp profundus_T2_L202_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp femoral_L204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp popliteal_L206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp anterior_tibial_T3_L208_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp popliteal_L210 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp tibiofibular_trunk_L212 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp posterior_tibial_T4_L214_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var q_T: m3 {pub: in};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp feedback as
  enddef;

  def comp feedback_PCAL as
  enddef;

  def comp feedback_PCAR as
  enddef;

  def comp feedback_MCAL as
  enddef;

  def comp feedback_MCAR as
  enddef;

  def comp feedback_ACAL as
  enddef;

  def comp feedback_ACAR as
  enddef;

  def comp par as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp pvn as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var q_C: m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;
  // ------------vessel mappings------------//
  def map between heart and heart_module for
    vars rho and rho;
    vars T and T;
    vars mt and mt;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars q_ra and q_ra;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_lv and q_lv;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars e_a and e_a;
    vars e_v and e_v;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
  enddef;
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_intercostal_T1_R98_T and posterior_intercostal_T1_R98_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between posterior_intercostal_T1_L102_T and posterior_intercostal_T1_L102_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between posterior_intercostal_T2_R106_T and posterior_intercostal_T2_R106_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between posterior_intercostal_T2_L110_T and posterior_intercostal_T2_L110_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between celiac_trunk_C116 and celiac_trunk_C116_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between splenic_T2_C118 and splenic_T2_C118_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between left_gastric_T3_C120_T and left_gastric_T3_C120_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between splenic_T2_C122 and splenic_T2_C122_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between dorsal_pancreatic_T1_C124_T and dorsal_pancreatic_T1_C124_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between splenic_T2_C126_T and splenic_T2_C126_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between common_hepatic_C128 and common_hepatic_C128_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between hepatic_artery_proper_C130 and hepatic_artery_proper_C130_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between hepatic_artery_proper_left_branch_C132_T and hepatic_artery_proper_left_branch_C132_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between hepatic_artery_proper_right_branch_C134_T and hepatic_artery_proper_right_branch_C134_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C138 and superior_mesenteric_T4_C138_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_colic_T8_C140_T and middle_colic_T8_C140_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C142 and superior_mesenteric_T4_C142_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between jejunal_3_T10_C144_T and jejunal_3_T10_C144_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C146 and superior_mesenteric_T4_C146_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between jejunal_6_T11_C148_T and jejunal_6_T11_C148_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C150 and superior_mesenteric_T4_C150_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ileocolic_T9_C152_T and ileocolic_T9_C152_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C154 and superior_mesenteric_T4_C154_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ileal_4_T12_C156_T and ileal_4_T12_C156_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C158 and superior_mesenteric_T4_C158_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ileal_6_T13_C160_T and ileal_6_T13_C160_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_mesenteric_T4_C162_T and superior_mesenteric_T4_C162_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between renal_L166 and renal_L166_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between renal_anterior_branch_L168 and renal_anterior_branch_L168_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between inferior_segmental_T5_L170_T and inferior_segmental_T5_L170_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between superior_segmental_T4_L172_T and superior_segmental_T4_L172_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between renal_posterior_branch_T3_L174_T and renal_posterior_branch_T3_L174_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between renal_R178 and renal_R178_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between renal_anterior_branch_R180 and renal_anterior_branch_R180_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between superior_segmental_T4_R182_T and superior_segmental_T4_R182_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between inferior_segmental_T5_R184_T and inferior_segmental_T5_R184_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between renal_posterior_branch_T3_R186_T and renal_posterior_branch_T3_R186_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between inferior_mesenteric_T5_C190_T and inferior_mesenteric_T5_C190_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between axillary_R32 and axillary_R32_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachial_R34 and brachial_R34_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ulnar_T2_R36 and ulnar_T2_R36_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_interosseous_R38 and common_interosseous_R38_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_interosseous_T3_R40_T and posterior_interosseous_T3_R40_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between ulnar_T2_R42_T and ulnar_T2_R42_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between radial_T1_R44_T and radial_T1_R44_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between axillary_L80 and axillary_L80_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between brachial_L82 and brachial_L82_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ulnar_T2_L84 and ulnar_T2_L84_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_interosseous_L86 and common_interosseous_L86_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_interosseous_T3_L88_T and posterior_interosseous_T3_L88_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between ulnar_T2_L90_T and ulnar_T2_L90_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between radial_T1_L92_T and radial_T1_L92_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between common_carotid_R6 and common_carotid_R6_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R8 and internal_carotid_R8_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_carotid_T2_R26_T and external_carotid_T2_R26_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between common_carotid_L48 and common_carotid_L48_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L50 and internal_carotid_L50_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_carotid_T2_L62_T and external_carotid_T2_L62_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between anterior_cerebral_L110 and anterior_cerebral_L110_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_L38 and anterior_cerebral_L38_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_L42 and anterior_cerebral_L42_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_R234 and anterior_cerebral_R234_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_R238 and anterior_cerebral_R238_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_cerebral_R46 and anterior_cerebral_R46_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_communicating_C44 and anterior_communicating_C44_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between basilar_C4 and basilar_C4_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_L172 and callosomarginal_L172_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_L176 and callosomarginal_L176_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_L180 and callosomarginal_L180_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_L184 and callosomarginal_L184_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_R240 and callosomarginal_R240_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_R244 and callosomarginal_R244_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_R248 and callosomarginal_R248_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between callosomarginal_R252 and callosomarginal_R252_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_L112 and internal_carotid_L112_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_carotid_R48 and internal_carotid_R48_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_L28 and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_R224 and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_L188 and medial_occipital_L188_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_L192 and medial_occipital_L192_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_L200 and medial_occipital_L200_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_L26 and medial_occipital_L26_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_R222 and medial_occipital_R222_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_R256 and medial_occipital_R256_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_R260 and medial_occipital_R260_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_R268 and medial_occipital_R268_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136 and middle_cerebral_inferior_terminal_branch_L136_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140 and middle_cerebral_inferior_terminal_branch_L140_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144 and middle_cerebral_inferior_terminal_branch_L144_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148 and middle_cerebral_inferior_terminal_branch_L148_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152 and middle_cerebral_inferior_terminal_branch_L152_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160 and middle_cerebral_inferior_terminal_branch_L160_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L164 and middle_cerebral_inferior_terminal_branch_L164_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R102 and middle_cerebral_inferior_terminal_branch_R102_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74 and middle_cerebral_inferior_terminal_branch_R74_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78 and middle_cerebral_inferior_terminal_branch_R78_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82 and middle_cerebral_inferior_terminal_branch_R82_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86 and middle_cerebral_inferior_terminal_branch_R86_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90 and middle_cerebral_inferior_terminal_branch_R90_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98 and middle_cerebral_inferior_terminal_branch_R98_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_L114 and middle_cerebral_L114_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_L118 and middle_cerebral_L118_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_R52 and middle_cerebral_R52_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_R56 and middle_cerebral_R56_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120 and middle_cerebral_superior_terminal_branch_L120_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124 and middle_cerebral_superior_terminal_branch_L124_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L128 and middle_cerebral_superior_terminal_branch_L128_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58 and middle_cerebral_superior_terminal_branch_R58_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62 and middle_cerebral_superior_terminal_branch_R62_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R66 and middle_cerebral_superior_terminal_branch_R66_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_L14 and occipital_lateral_L14_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_L18 and occipital_lateral_L18_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_L22 and occipital_lateral_L22_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_R210 and occipital_lateral_R210_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_R214 and occipital_lateral_R214_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between occipital_lateral_R218 and occipital_lateral_R218_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between pericallosal_L32 and pericallosal_L32_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between pericallosal_L36 and pericallosal_L36_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between pericallosal_R228 and pericallosal_R228_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between pericallosal_R232 and pericallosal_R232_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12 and posterior_cerebral_postcommunicating_part_L12_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208 and posterior_cerebral_postcommunicating_part_R208_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_precommunicating_part_L6 and posterior_cerebral_precommunicating_part_L6_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_cerebral_precommunicating_part_R204 and posterior_cerebral_precommunicating_part_R204_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_communicating_L8 and posterior_communicating_L8_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_communicating_R206 and posterior_communicating_R206_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68 and artery_of_precentral_sulcus_T103_R68_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130 and artery_of_precentral_sulcus_T38_L130_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262 and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194 and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104 and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166 and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92 and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154 and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T47_L20_T and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T76_R216_T and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_calcarine_branch_T51_L202_T and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_calcarine_branch_T79_R270_T and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T52_L190_T and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T80_R258_T and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_parietal_branch_T53_L196_T and medial_occipital_parietal_branch_T53_L196_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_parietal_branch_T81_R264_T and medial_occipital_parietal_branch_T81_R264_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between anterior_choroidal_T34_L116_T and anterior_choroidal_T34_L116_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between anterior_choroidal_T98_R54_T and anterior_choroidal_T98_R54_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between anterior_parietal_T100_R100_T and anterior_parietal_T100_R100_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between anterior_parietal_T35_L162_T and anterior_parietal_T35_L162_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_central_sulcus_T101_R70_T and artery_of_central_sulcus_T101_R70_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_central_sulcus_T36_L132_T and artery_of_central_sulcus_T36_L132_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_postcentral_sulcus_T102_R88_T and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_postcentral_sulcus_T37_L150_T and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R72_T and artery_of_precentral_sulcus_T103_R72_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L134_T and artery_of_precentral_sulcus_T38_L134_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_cingular_branch_T105_R250_T and callosomarginal_cingular_branch_T105_R250_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_cingular_branch_T40_L182_T and callosomarginal_cingular_branch_T40_L182_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T106_R242_T and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T41_L174_T and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_paracentral_branch_T107_R254_T and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_paracentral_branch_T42_L186_T and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T108_R246_T and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T43_L178_T and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between distal_medial_striate_T109_R236_T and distal_medial_striate_T109_R236_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between distal_medial_striate_T44_L40_T and distal_medial_striate_T44_L40_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_frontobasal_T110_R60_T and lateral_frontobasal_T110_R60_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_frontobasal_T45_L122_T and lateral_frontobasal_T45_L122_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T111_R212_T and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T46_L16_T and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T112_R220_T and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T48_L24_T and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R266_T and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L198_T and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T119_R80_T and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T55_L142_T and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R108_T and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L170_T and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T121_R84_T and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T57_L146_T and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R96_T and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L158_T and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T123_R94_T and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between middle_cerebral_posterior_temp_occipital_branch_T59_L156_T and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T124_R226_T and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T60_L30_T and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between pericallosal_precuneal_branch_T125_R230_T and pericallosal_precuneal_branch_T125_R230_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between pericallosal_precuneal_branch_T61_L34_T and pericallosal_precuneal_branch_T61_L34_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between polar_temporal_T127_R76_T and polar_temporal_T127_R76_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between polar_temporal_T63_L138_T and polar_temporal_T63_L138_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between posterior_parietal_T129_R106_T and posterior_parietal_T129_R106_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between posterior_parietal_T64_L168_T and posterior_parietal_T64_L168_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between prefrontal_T130_R64_T and prefrontal_T130_R64_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between prefrontal_T65_L126_T and prefrontal_T65_L126_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars BFF_ASL and BFF_ASL;
    vars q_T and q_T;
  enddef;
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_iliac_T1_R218_T and internal_iliac_T1_R218_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between profundus_T2_R224_T and profundus_T2_R224_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between femoral_R226 and femoral_R226_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between popliteal_R228 and popliteal_R228_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_tibial_T3_R230_T and anterior_tibial_T3_R230_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between popliteal_R232 and popliteal_R232_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between tibiofibular_trunk_R234 and tibiofibular_trunk_R234_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_tibial_T4_R236_T and posterior_tibial_T4_R236_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between internal_iliac_T1_L196_T and internal_iliac_T1_L196_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between profundus_T2_L202_T and profundus_T2_L202_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between femoral_L204 and femoral_L204_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between popliteal_L206 and popliteal_L206_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between anterior_tibial_T3_L208_T and anterior_tibial_T3_L208_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between popliteal_L210 and popliteal_L210_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between tibiofibular_trunk_L212 and tibiofibular_trunk_L212_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between posterior_tibial_T4_L214_T and posterior_tibial_T4_L214_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars q_T and q_T;
  enddef;
  def map between venous_lb and venous_lb_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_ub and venous_ub_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between feedback and feedback_module for
  enddef;
  def map between feedback_PCAL and feedback_PCAL_module for
  enddef;
  def map between feedback_PCAR and feedback_PCAR_module for
  enddef;
  def map between feedback_MCAL and feedback_MCAL_module for
  enddef;
  def map between feedback_MCAR and feedback_MCAR_module for
  enddef;
  def map between feedback_ACAL and feedback_ACAL_module for
  enddef;
  def map between feedback_ACAR and feedback_ACAR_module for
  enddef;
  def map between par and par_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  def map between pvn and pvn_module for
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars R and R;
    vars C and C;
    vars I and I;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters and heart_module for
  enddef;
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters and ascending_aorta_A_module for
    vars E_ascending_aorta_A and E;
    vars l_ascending_aorta_A and l;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
  enddef;
  def map between parameters_global and ascending_aorta_A_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_B_module for
    vars E_ascending_aorta_B and E;
    vars l_ascending_aorta_B and l;
    vars r_ascending_aorta_B and r;
    vars theta_ascending_aorta_B and theta;
  enddef;
  def map between parameters_global and ascending_aorta_B_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_C_module for
    vars E_ascending_aorta_C and E;
    vars l_ascending_aorta_C and l;
    vars r_ascending_aorta_C and r;
    vars theta_ascending_aorta_C and theta;
  enddef;
  def map between parameters_global and ascending_aorta_C_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ascending_aorta_D_module for
    vars E_ascending_aorta_D and E;
    vars l_ascending_aorta_D and l;
    vars r_ascending_aorta_D and r;
    vars theta_ascending_aorta_D and theta;
  enddef;
  def map between parameters_global and ascending_aorta_D_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C2_module for
    vars E_aortic_arch_C2 and E;
    vars l_aortic_arch_C2 and l;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachiocephalic_trunk_C4_module for
    vars E_brachiocephalic_trunk_C4 and E;
    vars l_brachiocephalic_trunk_C4 and l;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C46_module for
    vars E_aortic_arch_C46 and E;
    vars l_aortic_arch_C46 and l;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C64_module for
    vars E_aortic_arch_C64 and E;
    vars l_aortic_arch_C64 and l;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C64_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and aortic_arch_C94_module for
    vars E_aortic_arch_C94 and E;
    vars l_aortic_arch_C94 and l;
    vars r_aortic_arch_C94 and r;
    vars theta_aortic_arch_C94 and theta;
  enddef;
  def map between parameters_global and aortic_arch_C94_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C96_module for
    vars E_thoracic_aorta_C96 and E;
    vars l_thoracic_aorta_C96 and l;
    vars r_thoracic_aorta_C96 and r;
    vars theta_thoracic_aorta_C96 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C96_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C100_module for
    vars E_thoracic_aorta_C100 and E;
    vars l_thoracic_aorta_C100 and l;
    vars r_thoracic_aorta_C100 and r;
    vars theta_thoracic_aorta_C100 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C100_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C104_module for
    vars E_thoracic_aorta_C104 and E;
    vars l_thoracic_aorta_C104 and l;
    vars r_thoracic_aorta_C104 and r;
    vars theta_thoracic_aorta_C104 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C104_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C108_module for
    vars E_thoracic_aorta_C108 and E;
    vars l_thoracic_aorta_C108 and l;
    vars r_thoracic_aorta_C108 and r;
    vars theta_thoracic_aorta_C108 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C108_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and thoracic_aorta_C112_module for
    vars E_thoracic_aorta_C112 and E;
    vars l_thoracic_aorta_C112 and l;
    vars r_thoracic_aorta_C112 and r;
    vars theta_thoracic_aorta_C112 and theta;
  enddef;
  def map between parameters_global and thoracic_aorta_C112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C114_module for
    vars E_abdominal_aorta_C114 and E;
    vars l_abdominal_aorta_C114 and l;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C136_module for
    vars E_abdominal_aorta_C136 and E;
    vars l_abdominal_aorta_C136 and l;
    vars r_abdominal_aorta_C136 and r;
    vars theta_abdominal_aorta_C136 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C136_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C164_module for
    vars E_abdominal_aorta_C164 and E;
    vars l_abdominal_aorta_C164 and l;
    vars r_abdominal_aorta_C164 and r;
    vars theta_abdominal_aorta_C164 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C164_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C176_module for
    vars E_abdominal_aorta_C176 and E;
    vars l_abdominal_aorta_C176 and l;
    vars r_abdominal_aorta_C176 and r;
    vars theta_abdominal_aorta_C176 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C176_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C188_module for
    vars E_abdominal_aorta_C188 and E;
    vars l_abdominal_aorta_C188 and l;
    vars r_abdominal_aorta_C188 and r;
    vars theta_abdominal_aorta_C188 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C188_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and abdominal_aorta_C192_module for
    vars E_abdominal_aorta_C192 and E;
    vars l_abdominal_aorta_C192 and l;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
  enddef;
  def map between parameters_global and abdominal_aorta_C192_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_intercostal_T1_R98_T_module for
    vars R_T_posterior_intercostal_T1_R98 and R_T;
    vars C_T_posterior_intercostal_T1_R98 and C_T;
  enddef;
  def map between parameters_global and posterior_intercostal_T1_R98_T_module for
  enddef;
  def map between parameters and posterior_intercostal_T1_L102_T_module for
    vars R_T_posterior_intercostal_T1_L102 and R_T;
    vars C_T_posterior_intercostal_T1_L102 and C_T;
  enddef;
  def map between parameters_global and posterior_intercostal_T1_L102_T_module for
  enddef;
  def map between parameters and posterior_intercostal_T2_R106_T_module for
    vars R_T_posterior_intercostal_T2_R106 and R_T;
    vars C_T_posterior_intercostal_T2_R106 and C_T;
  enddef;
  def map between parameters_global and posterior_intercostal_T2_R106_T_module for
  enddef;
  def map between parameters and posterior_intercostal_T2_L110_T_module for
    vars R_T_posterior_intercostal_T2_L110 and R_T;
    vars C_T_posterior_intercostal_T2_L110 and C_T;
  enddef;
  def map between parameters_global and posterior_intercostal_T2_L110_T_module for
  enddef;
  def map between parameters and celiac_trunk_C116_module for
    vars E_celiac_trunk_C116 and E;
    vars l_celiac_trunk_C116 and l;
    vars r_celiac_trunk_C116 and r;
    vars theta_celiac_trunk_C116 and theta;
  enddef;
  def map between parameters_global and celiac_trunk_C116_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and splenic_T2_C118_module for
    vars E_splenic_T2_C118 and E;
    vars l_splenic_T2_C118 and l;
    vars r_splenic_T2_C118 and r;
    vars theta_splenic_T2_C118 and theta;
  enddef;
  def map between parameters_global and splenic_T2_C118_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and left_gastric_T3_C120_T_module for
    vars R_T_left_gastric_T3_C120 and R_T;
    vars C_T_left_gastric_T3_C120 and C_T;
  enddef;
  def map between parameters_global and left_gastric_T3_C120_T_module for
  enddef;
  def map between parameters and splenic_T2_C122_module for
    vars E_splenic_T2_C122 and E;
    vars l_splenic_T2_C122 and l;
    vars r_splenic_T2_C122 and r;
    vars theta_splenic_T2_C122 and theta;
  enddef;
  def map between parameters_global and splenic_T2_C122_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and dorsal_pancreatic_T1_C124_T_module for
    vars R_T_dorsal_pancreatic_T1_C124 and R_T;
    vars C_T_dorsal_pancreatic_T1_C124 and C_T;
  enddef;
  def map between parameters_global and dorsal_pancreatic_T1_C124_T_module for
  enddef;
  def map between parameters and splenic_T2_C126_T_module for
    vars R_T_splenic_T2_C126 and R_T;
    vars C_T_splenic_T2_C126 and C_T;
  enddef;
  def map between parameters_global and splenic_T2_C126_T_module for
  enddef;
  def map between parameters and common_hepatic_C128_module for
    vars E_common_hepatic_C128 and E;
    vars l_common_hepatic_C128 and l;
    vars r_common_hepatic_C128 and r;
    vars theta_common_hepatic_C128 and theta;
  enddef;
  def map between parameters_global and common_hepatic_C128_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and hepatic_artery_proper_C130_module for
    vars E_hepatic_artery_proper_C130 and E;
    vars l_hepatic_artery_proper_C130 and l;
    vars r_hepatic_artery_proper_C130 and r;
    vars theta_hepatic_artery_proper_C130 and theta;
  enddef;
  def map between parameters_global and hepatic_artery_proper_C130_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and hepatic_artery_proper_left_branch_C132_T_module for
    vars R_T_hepatic_artery_proper_left_branch_C132 and R_T;
    vars C_T_hepatic_artery_proper_left_branch_C132 and C_T;
  enddef;
  def map between parameters_global and hepatic_artery_proper_left_branch_C132_T_module for
  enddef;
  def map between parameters and hepatic_artery_proper_right_branch_C134_T_module for
    vars R_T_hepatic_artery_proper_right_branch_C134 and R_T;
    vars C_T_hepatic_artery_proper_right_branch_C134 and C_T;
  enddef;
  def map between parameters_global and hepatic_artery_proper_right_branch_C134_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C138_module for
    vars E_superior_mesenteric_T4_C138 and E;
    vars l_superior_mesenteric_T4_C138 and l;
    vars r_superior_mesenteric_T4_C138 and r;
    vars theta_superior_mesenteric_T4_C138 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C138_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_colic_T8_C140_T_module for
    vars R_T_middle_colic_T8_C140 and R_T;
    vars C_T_middle_colic_T8_C140 and C_T;
  enddef;
  def map between parameters_global and middle_colic_T8_C140_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C142_module for
    vars E_superior_mesenteric_T4_C142 and E;
    vars l_superior_mesenteric_T4_C142 and l;
    vars r_superior_mesenteric_T4_C142 and r;
    vars theta_superior_mesenteric_T4_C142 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C142_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and jejunal_3_T10_C144_T_module for
    vars R_T_jejunal_3_T10_C144 and R_T;
    vars C_T_jejunal_3_T10_C144 and C_T;
  enddef;
  def map between parameters_global and jejunal_3_T10_C144_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C146_module for
    vars E_superior_mesenteric_T4_C146 and E;
    vars l_superior_mesenteric_T4_C146 and l;
    vars r_superior_mesenteric_T4_C146 and r;
    vars theta_superior_mesenteric_T4_C146 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C146_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and jejunal_6_T11_C148_T_module for
    vars R_T_jejunal_6_T11_C148 and R_T;
    vars C_T_jejunal_6_T11_C148 and C_T;
  enddef;
  def map between parameters_global and jejunal_6_T11_C148_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C150_module for
    vars E_superior_mesenteric_T4_C150 and E;
    vars l_superior_mesenteric_T4_C150 and l;
    vars r_superior_mesenteric_T4_C150 and r;
    vars theta_superior_mesenteric_T4_C150 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C150_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ileocolic_T9_C152_T_module for
    vars R_T_ileocolic_T9_C152 and R_T;
    vars C_T_ileocolic_T9_C152 and C_T;
  enddef;
  def map between parameters_global and ileocolic_T9_C152_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C154_module for
    vars E_superior_mesenteric_T4_C154 and E;
    vars l_superior_mesenteric_T4_C154 and l;
    vars r_superior_mesenteric_T4_C154 and r;
    vars theta_superior_mesenteric_T4_C154 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C154_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ileal_4_T12_C156_T_module for
    vars R_T_ileal_4_T12_C156 and R_T;
    vars C_T_ileal_4_T12_C156 and C_T;
  enddef;
  def map between parameters_global and ileal_4_T12_C156_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C158_module for
    vars E_superior_mesenteric_T4_C158 and E;
    vars l_superior_mesenteric_T4_C158 and l;
    vars r_superior_mesenteric_T4_C158 and r;
    vars theta_superior_mesenteric_T4_C158 and theta;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C158_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ileal_6_T13_C160_T_module for
    vars R_T_ileal_6_T13_C160 and R_T;
    vars C_T_ileal_6_T13_C160 and C_T;
  enddef;
  def map between parameters_global and ileal_6_T13_C160_T_module for
  enddef;
  def map between parameters and superior_mesenteric_T4_C162_T_module for
    vars R_T_superior_mesenteric_T4_C162 and R_T;
    vars C_T_superior_mesenteric_T4_C162 and C_T;
  enddef;
  def map between parameters_global and superior_mesenteric_T4_C162_T_module for
  enddef;
  def map between parameters and renal_L166_module for
    vars E_renal_L166 and E;
    vars l_renal_L166 and l;
    vars r_renal_L166 and r;
    vars theta_renal_L166 and theta;
  enddef;
  def map between parameters_global and renal_L166_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and renal_anterior_branch_L168_module for
    vars E_renal_anterior_branch_L168 and E;
    vars l_renal_anterior_branch_L168 and l;
    vars r_renal_anterior_branch_L168 and r;
    vars theta_renal_anterior_branch_L168 and theta;
  enddef;
  def map between parameters_global and renal_anterior_branch_L168_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and inferior_segmental_T5_L170_T_module for
    vars R_T_inferior_segmental_T5_L170 and R_T;
    vars C_T_inferior_segmental_T5_L170 and C_T;
  enddef;
  def map between parameters_global and inferior_segmental_T5_L170_T_module for
  enddef;
  def map between parameters and superior_segmental_T4_L172_T_module for
    vars R_T_superior_segmental_T4_L172 and R_T;
    vars C_T_superior_segmental_T4_L172 and C_T;
  enddef;
  def map between parameters_global and superior_segmental_T4_L172_T_module for
  enddef;
  def map between parameters and renal_posterior_branch_T3_L174_T_module for
    vars R_T_renal_posterior_branch_T3_L174 and R_T;
    vars C_T_renal_posterior_branch_T3_L174 and C_T;
  enddef;
  def map between parameters_global and renal_posterior_branch_T3_L174_T_module for
  enddef;
  def map between parameters and renal_R178_module for
    vars E_renal_R178 and E;
    vars l_renal_R178 and l;
    vars r_renal_R178 and r;
    vars theta_renal_R178 and theta;
  enddef;
  def map between parameters_global and renal_R178_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and renal_anterior_branch_R180_module for
    vars E_renal_anterior_branch_R180 and E;
    vars l_renal_anterior_branch_R180 and l;
    vars r_renal_anterior_branch_R180 and r;
    vars theta_renal_anterior_branch_R180 and theta;
  enddef;
  def map between parameters_global and renal_anterior_branch_R180_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and superior_segmental_T4_R182_T_module for
    vars R_T_superior_segmental_T4_R182 and R_T;
    vars C_T_superior_segmental_T4_R182 and C_T;
  enddef;
  def map between parameters_global and superior_segmental_T4_R182_T_module for
  enddef;
  def map between parameters and inferior_segmental_T5_R184_T_module for
    vars R_T_inferior_segmental_T5_R184 and R_T;
    vars C_T_inferior_segmental_T5_R184 and C_T;
  enddef;
  def map between parameters_global and inferior_segmental_T5_R184_T_module for
  enddef;
  def map between parameters and renal_posterior_branch_T3_R186_T_module for
    vars R_T_renal_posterior_branch_T3_R186 and R_T;
    vars C_T_renal_posterior_branch_T3_R186 and C_T;
  enddef;
  def map between parameters_global and renal_posterior_branch_T3_R186_T_module for
  enddef;
  def map between parameters and inferior_mesenteric_T5_C190_T_module for
    vars R_T_inferior_mesenteric_T5_C190 and R_T;
    vars C_T_inferior_mesenteric_T5_C190 and C_T;
  enddef;
  def map between parameters_global and inferior_mesenteric_T5_C190_T_module for
  enddef;
  def map between parameters and subclavian_R28_module for
    vars E_subclavian_R28 and E;
    vars l_subclavian_R28 and l;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
  enddef;
  def map between parameters_global and subclavian_R28_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_R30_module for
    vars E_subclavian_R30 and E;
    vars l_subclavian_R30 and l;
    vars r_subclavian_R30 and r;
    vars theta_subclavian_R30 and theta;
  enddef;
  def map between parameters_global and subclavian_R30_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and axillary_R32_module for
    vars E_axillary_R32 and E;
    vars l_axillary_R32 and l;
    vars r_axillary_R32 and r;
    vars theta_axillary_R32 and theta;
  enddef;
  def map between parameters_global and axillary_R32_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_R34_module for
    vars E_brachial_R34 and E;
    vars l_brachial_R34 and l;
    vars r_brachial_R34 and r;
    vars theta_brachial_R34 and theta;
  enddef;
  def map between parameters_global and brachial_R34_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ulnar_T2_R36_module for
    vars E_ulnar_T2_R36 and E;
    vars l_ulnar_T2_R36 and l;
    vars r_ulnar_T2_R36 and r;
    vars theta_ulnar_T2_R36 and theta;
  enddef;
  def map between parameters_global and ulnar_T2_R36_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_interosseous_R38_module for
    vars E_common_interosseous_R38 and E;
    vars l_common_interosseous_R38 and l;
    vars r_common_interosseous_R38 and r;
    vars theta_common_interosseous_R38 and theta;
  enddef;
  def map between parameters_global and common_interosseous_R38_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_interosseous_T3_R40_T_module for
    vars R_T_posterior_interosseous_T3_R40 and R_T;
    vars C_T_posterior_interosseous_T3_R40 and C_T;
  enddef;
  def map between parameters_global and posterior_interosseous_T3_R40_T_module for
  enddef;
  def map between parameters and ulnar_T2_R42_T_module for
    vars R_T_ulnar_T2_R42 and R_T;
    vars C_T_ulnar_T2_R42 and C_T;
  enddef;
  def map between parameters_global and ulnar_T2_R42_T_module for
  enddef;
  def map between parameters and radial_T1_R44_T_module for
    vars R_T_radial_T1_R44 and R_T;
    vars C_T_radial_T1_R44 and C_T;
  enddef;
  def map between parameters_global and radial_T1_R44_T_module for
  enddef;
  def map between parameters and subclavian_L66_module for
    vars E_subclavian_L66 and E;
    vars l_subclavian_L66 and l;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
  enddef;
  def map between parameters_global and subclavian_L66_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and subclavian_L78_module for
    vars E_subclavian_L78 and E;
    vars l_subclavian_L78 and l;
    vars r_subclavian_L78 and r;
    vars theta_subclavian_L78 and theta;
  enddef;
  def map between parameters_global and subclavian_L78_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and axillary_L80_module for
    vars E_axillary_L80 and E;
    vars l_axillary_L80 and l;
    vars r_axillary_L80 and r;
    vars theta_axillary_L80 and theta;
  enddef;
  def map between parameters_global and axillary_L80_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and brachial_L82_module for
    vars E_brachial_L82 and E;
    vars l_brachial_L82 and l;
    vars r_brachial_L82 and r;
    vars theta_brachial_L82 and theta;
  enddef;
  def map between parameters_global and brachial_L82_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and ulnar_T2_L84_module for
    vars E_ulnar_T2_L84 and E;
    vars l_ulnar_T2_L84 and l;
    vars r_ulnar_T2_L84 and r;
    vars theta_ulnar_T2_L84 and theta;
  enddef;
  def map between parameters_global and ulnar_T2_L84_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and common_interosseous_L86_module for
    vars E_common_interosseous_L86 and E;
    vars l_common_interosseous_L86 and l;
    vars r_common_interosseous_L86 and r;
    vars theta_common_interosseous_L86 and theta;
  enddef;
  def map between parameters_global and common_interosseous_L86_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_interosseous_T3_L88_T_module for
    vars R_T_posterior_interosseous_T3_L88 and R_T;
    vars C_T_posterior_interosseous_T3_L88 and C_T;
  enddef;
  def map between parameters_global and posterior_interosseous_T3_L88_T_module for
  enddef;
  def map between parameters and ulnar_T2_L90_T_module for
    vars R_T_ulnar_T2_L90 and R_T;
    vars C_T_ulnar_T2_L90 and C_T;
  enddef;
  def map between parameters_global and ulnar_T2_L90_T_module for
  enddef;
  def map between parameters and radial_T1_L92_T_module for
    vars R_T_radial_T1_L92 and R_T;
    vars C_T_radial_T1_L92 and C_T;
  enddef;
  def map between parameters_global and radial_T1_L92_T_module for
  enddef;
  def map between parameters and common_carotid_R6_module for
    vars E_common_carotid_R6 and E;
    vars l_common_carotid_R6 and l;
    vars r_common_carotid_R6 and r;
    vars theta_common_carotid_R6 and theta;
  enddef;
  def map between parameters_global and common_carotid_R6_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R8_module for
    vars E_internal_carotid_R8 and E;
    vars l_internal_carotid_R8 and l;
    vars r_internal_carotid_R8 and r;
    vars theta_internal_carotid_R8 and theta;
  enddef;
  def map between parameters_global and internal_carotid_R8_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_T2_R26_T_module for
    vars R_T_external_carotid_T2_R26 and R_T;
    vars C_T_external_carotid_T2_R26 and C_T;
  enddef;
  def map between parameters_global and external_carotid_T2_R26_T_module for
  enddef;
  def map between parameters and common_carotid_L48_module for
    vars E_common_carotid_L48 and E;
    vars l_common_carotid_L48 and l;
    vars r_common_carotid_L48 and r;
    vars theta_common_carotid_L48 and theta;
  enddef;
  def map between parameters_global and common_carotid_L48_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L50_module for
    vars E_internal_carotid_L50 and E;
    vars l_internal_carotid_L50 and l;
    vars r_internal_carotid_L50 and r;
    vars theta_internal_carotid_L50 and theta;
  enddef;
  def map between parameters_global and internal_carotid_L50_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and external_carotid_T2_L62_T_module for
    vars R_T_external_carotid_T2_L62 and R_T;
    vars C_T_external_carotid_T2_L62 and C_T;
  enddef;
  def map between parameters_global and external_carotid_T2_L62_T_module for
  enddef;
  def map between parameters and anterior_cerebral_L110_module for
    vars E_anterior_cerebral_L110 and E;
    vars l_anterior_cerebral_L110 and l;
    vars r_anterior_cerebral_L110 and r;
    vars theta_anterior_cerebral_L110 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L110_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L38_module for
    vars E_anterior_cerebral_L38 and E;
    vars l_anterior_cerebral_L38 and l;
    vars r_anterior_cerebral_L38 and r;
    vars theta_anterior_cerebral_L38 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L38_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_L42_module for
    vars E_anterior_cerebral_L42 and E;
    vars l_anterior_cerebral_L42 and l;
    vars r_anterior_cerebral_L42 and r;
    vars theta_anterior_cerebral_L42 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_L42_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R234_module for
    vars E_anterior_cerebral_R234 and E;
    vars l_anterior_cerebral_R234 and l;
    vars r_anterior_cerebral_R234 and r;
    vars theta_anterior_cerebral_R234 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R234_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R238_module for
    vars E_anterior_cerebral_R238 and E;
    vars l_anterior_cerebral_R238 and l;
    vars r_anterior_cerebral_R238 and r;
    vars theta_anterior_cerebral_R238 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R238_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_cerebral_R46_module for
    vars E_anterior_cerebral_R46 and E;
    vars l_anterior_cerebral_R46 and l;
    vars r_anterior_cerebral_R46 and r;
    vars theta_anterior_cerebral_R46 and theta;
  enddef;
  def map between parameters_global and anterior_cerebral_R46_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_communicating_C44_module for
    vars E_anterior_communicating_C44 and E;
    vars l_anterior_communicating_C44 and l;
    vars r_anterior_communicating_C44 and r;
    vars theta_anterior_communicating_C44 and theta;
  enddef;
  def map between parameters_global and anterior_communicating_C44_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and basilar_C4_module for
    vars E_basilar_C4 and E;
    vars l_basilar_C4 and l;
    vars r_basilar_C4 and r;
    vars theta_basilar_C4 and theta;
  enddef;
  def map between parameters_global and basilar_C4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_L172_module for
    vars E_callosomarginal_L172 and E;
    vars l_callosomarginal_L172 and l;
    vars r_callosomarginal_L172 and r;
    vars theta_callosomarginal_L172 and theta;
  enddef;
  def map between parameters_global and callosomarginal_L172_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_L176_module for
    vars E_callosomarginal_L176 and E;
    vars l_callosomarginal_L176 and l;
    vars r_callosomarginal_L176 and r;
    vars theta_callosomarginal_L176 and theta;
  enddef;
  def map between parameters_global and callosomarginal_L176_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_L180_module for
    vars E_callosomarginal_L180 and E;
    vars l_callosomarginal_L180 and l;
    vars r_callosomarginal_L180 and r;
    vars theta_callosomarginal_L180 and theta;
  enddef;
  def map between parameters_global and callosomarginal_L180_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_L184_module for
    vars E_callosomarginal_L184 and E;
    vars l_callosomarginal_L184 and l;
    vars r_callosomarginal_L184 and r;
    vars theta_callosomarginal_L184 and theta;
  enddef;
  def map between parameters_global and callosomarginal_L184_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_R240_module for
    vars E_callosomarginal_R240 and E;
    vars l_callosomarginal_R240 and l;
    vars r_callosomarginal_R240 and r;
    vars theta_callosomarginal_R240 and theta;
  enddef;
  def map between parameters_global and callosomarginal_R240_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_R244_module for
    vars E_callosomarginal_R244 and E;
    vars l_callosomarginal_R244 and l;
    vars r_callosomarginal_R244 and r;
    vars theta_callosomarginal_R244 and theta;
  enddef;
  def map between parameters_global and callosomarginal_R244_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_R248_module for
    vars E_callosomarginal_R248 and E;
    vars l_callosomarginal_R248 and l;
    vars r_callosomarginal_R248 and r;
    vars theta_callosomarginal_R248 and theta;
  enddef;
  def map between parameters_global and callosomarginal_R248_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and callosomarginal_R252_module for
    vars E_callosomarginal_R252 and E;
    vars l_callosomarginal_R252 and l;
    vars r_callosomarginal_R252 and r;
    vars theta_callosomarginal_R252 and theta;
  enddef;
  def map between parameters_global and callosomarginal_R252_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_L112_module for
    vars E_internal_carotid_L112 and E;
    vars l_internal_carotid_L112 and l;
    vars r_internal_carotid_L112 and r;
    vars theta_internal_carotid_L112 and theta;
  enddef;
  def map between parameters_global and internal_carotid_L112_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_carotid_R48_module for
    vars E_internal_carotid_R48 and E;
    vars l_internal_carotid_R48 and l;
    vars r_internal_carotid_R48 and r;
    vars theta_internal_carotid_R48 and theta;
  enddef;
  def map between parameters_global and internal_carotid_R48_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars E_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and E;
    vars l_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and l;
    vars r_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and r;
    vars theta_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and theta;
  enddef;
  def map between parameters_global and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars E_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and E;
    vars l_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and l;
    vars r_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and r;
    vars theta_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and theta;
  enddef;
  def map between parameters_global and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_L188_module for
    vars E_medial_occipital_L188 and E;
    vars l_medial_occipital_L188 and l;
    vars r_medial_occipital_L188 and r;
    vars theta_medial_occipital_L188 and theta;
  enddef;
  def map between parameters_global and medial_occipital_L188_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_L192_module for
    vars E_medial_occipital_L192 and E;
    vars l_medial_occipital_L192 and l;
    vars r_medial_occipital_L192 and r;
    vars theta_medial_occipital_L192 and theta;
  enddef;
  def map between parameters_global and medial_occipital_L192_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_L200_module for
    vars E_medial_occipital_L200 and E;
    vars l_medial_occipital_L200 and l;
    vars r_medial_occipital_L200 and r;
    vars theta_medial_occipital_L200 and theta;
  enddef;
  def map between parameters_global and medial_occipital_L200_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_L26_module for
    vars E_medial_occipital_L26 and E;
    vars l_medial_occipital_L26 and l;
    vars r_medial_occipital_L26 and r;
    vars theta_medial_occipital_L26 and theta;
  enddef;
  def map between parameters_global and medial_occipital_L26_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_R222_module for
    vars E_medial_occipital_R222 and E;
    vars l_medial_occipital_R222 and l;
    vars r_medial_occipital_R222 and r;
    vars theta_medial_occipital_R222 and theta;
  enddef;
  def map between parameters_global and medial_occipital_R222_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_R256_module for
    vars E_medial_occipital_R256 and E;
    vars l_medial_occipital_R256 and l;
    vars r_medial_occipital_R256 and r;
    vars theta_medial_occipital_R256 and theta;
  enddef;
  def map between parameters_global and medial_occipital_R256_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_R260_module for
    vars E_medial_occipital_R260 and E;
    vars l_medial_occipital_R260 and l;
    vars r_medial_occipital_R260 and r;
    vars theta_medial_occipital_R260 and theta;
  enddef;
  def map between parameters_global and medial_occipital_R260_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_R268_module for
    vars E_medial_occipital_R268 and E;
    vars l_medial_occipital_R268 and l;
    vars r_medial_occipital_R268 and r;
    vars theta_medial_occipital_R268 and theta;
  enddef;
  def map between parameters_global and medial_occipital_R268_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L136_module for
    vars E_middle_cerebral_inferior_terminal_branch_L136 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L136 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L136 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L136 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L136_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L140_module for
    vars E_middle_cerebral_inferior_terminal_branch_L140 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L140 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L140 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L140 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L140_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L144_module for
    vars E_middle_cerebral_inferior_terminal_branch_L144 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L144 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L144 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L144 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L144_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L148_module for
    vars E_middle_cerebral_inferior_terminal_branch_L148 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L148 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L148 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L148 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L148_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L152_module for
    vars E_middle_cerebral_inferior_terminal_branch_L152 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L152 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L152 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L152 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L152_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L160_module for
    vars E_middle_cerebral_inferior_terminal_branch_L160 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L160 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L160 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L160 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L160_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_L164_module for
    vars E_middle_cerebral_inferior_terminal_branch_L164 and E;
    vars l_middle_cerebral_inferior_terminal_branch_L164 and l;
    vars r_middle_cerebral_inferior_terminal_branch_L164 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L164 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_L164_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R102_module for
    vars E_middle_cerebral_inferior_terminal_branch_R102 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R102 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R102 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R102 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R102_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R74_module for
    vars E_middle_cerebral_inferior_terminal_branch_R74 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R74 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R74 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R74 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R74_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R78_module for
    vars E_middle_cerebral_inferior_terminal_branch_R78 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R78 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R78 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R78 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R78_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R82_module for
    vars E_middle_cerebral_inferior_terminal_branch_R82 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R82 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R82 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R82 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R82_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R86_module for
    vars E_middle_cerebral_inferior_terminal_branch_R86 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R86 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R86 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R86 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R86_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R90_module for
    vars E_middle_cerebral_inferior_terminal_branch_R90 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R90 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R90 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R90 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R90_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_inferior_terminal_branch_R98_module for
    vars E_middle_cerebral_inferior_terminal_branch_R98 and E;
    vars l_middle_cerebral_inferior_terminal_branch_R98 and l;
    vars r_middle_cerebral_inferior_terminal_branch_R98 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R98 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_inferior_terminal_branch_R98_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_L114_module for
    vars E_middle_cerebral_L114 and E;
    vars l_middle_cerebral_L114 and l;
    vars r_middle_cerebral_L114 and r;
    vars theta_middle_cerebral_L114 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_L114_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_L118_module for
    vars E_middle_cerebral_L118 and E;
    vars l_middle_cerebral_L118 and l;
    vars r_middle_cerebral_L118 and r;
    vars theta_middle_cerebral_L118 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_L118_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_R52_module for
    vars E_middle_cerebral_R52 and E;
    vars l_middle_cerebral_R52 and l;
    vars r_middle_cerebral_R52 and r;
    vars theta_middle_cerebral_R52 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_R52_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_R56_module for
    vars E_middle_cerebral_R56 and E;
    vars l_middle_cerebral_R56 and l;
    vars r_middle_cerebral_R56 and r;
    vars theta_middle_cerebral_R56 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_R56_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_L120_module for
    vars E_middle_cerebral_superior_terminal_branch_L120 and E;
    vars l_middle_cerebral_superior_terminal_branch_L120 and l;
    vars r_middle_cerebral_superior_terminal_branch_L120 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L120 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_L120_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_L124_module for
    vars E_middle_cerebral_superior_terminal_branch_L124 and E;
    vars l_middle_cerebral_superior_terminal_branch_L124 and l;
    vars r_middle_cerebral_superior_terminal_branch_L124 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L124 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_L124_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_L128_module for
    vars E_middle_cerebral_superior_terminal_branch_L128 and E;
    vars l_middle_cerebral_superior_terminal_branch_L128 and l;
    vars r_middle_cerebral_superior_terminal_branch_L128 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L128 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_L128_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_R58_module for
    vars E_middle_cerebral_superior_terminal_branch_R58 and E;
    vars l_middle_cerebral_superior_terminal_branch_R58 and l;
    vars r_middle_cerebral_superior_terminal_branch_R58 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R58 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_R58_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_R62_module for
    vars E_middle_cerebral_superior_terminal_branch_R62 and E;
    vars l_middle_cerebral_superior_terminal_branch_R62 and l;
    vars r_middle_cerebral_superior_terminal_branch_R62 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R62 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_R62_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_superior_terminal_branch_R66_module for
    vars E_middle_cerebral_superior_terminal_branch_R66 and E;
    vars l_middle_cerebral_superior_terminal_branch_R66 and l;
    vars r_middle_cerebral_superior_terminal_branch_R66 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R66 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_superior_terminal_branch_R66_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_L14_module for
    vars E_occipital_lateral_L14 and E;
    vars l_occipital_lateral_L14 and l;
    vars r_occipital_lateral_L14 and r;
    vars theta_occipital_lateral_L14 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_L14_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_L18_module for
    vars E_occipital_lateral_L18 and E;
    vars l_occipital_lateral_L18 and l;
    vars r_occipital_lateral_L18 and r;
    vars theta_occipital_lateral_L18 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_L18_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_L22_module for
    vars E_occipital_lateral_L22 and E;
    vars l_occipital_lateral_L22 and l;
    vars r_occipital_lateral_L22 and r;
    vars theta_occipital_lateral_L22 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_L22_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_R210_module for
    vars E_occipital_lateral_R210 and E;
    vars l_occipital_lateral_R210 and l;
    vars r_occipital_lateral_R210 and r;
    vars theta_occipital_lateral_R210 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_R210_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_R214_module for
    vars E_occipital_lateral_R214 and E;
    vars l_occipital_lateral_R214 and l;
    vars r_occipital_lateral_R214 and r;
    vars theta_occipital_lateral_R214 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_R214_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and occipital_lateral_R218_module for
    vars E_occipital_lateral_R218 and E;
    vars l_occipital_lateral_R218 and l;
    vars r_occipital_lateral_R218 and r;
    vars theta_occipital_lateral_R218 and theta;
  enddef;
  def map between parameters_global and occipital_lateral_R218_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and pericallosal_L32_module for
    vars E_pericallosal_L32 and E;
    vars l_pericallosal_L32 and l;
    vars r_pericallosal_L32 and r;
    vars theta_pericallosal_L32 and theta;
  enddef;
  def map between parameters_global and pericallosal_L32_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and pericallosal_L36_module for
    vars E_pericallosal_L36 and E;
    vars l_pericallosal_L36 and l;
    vars r_pericallosal_L36 and r;
    vars theta_pericallosal_L36 and theta;
  enddef;
  def map between parameters_global and pericallosal_L36_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and pericallosal_R228_module for
    vars E_pericallosal_R228 and E;
    vars l_pericallosal_R228 and l;
    vars r_pericallosal_R228 and r;
    vars theta_pericallosal_R228 and theta;
  enddef;
  def map between parameters_global and pericallosal_R228_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and pericallosal_R232_module for
    vars E_pericallosal_R232 and E;
    vars l_pericallosal_R232 and l;
    vars r_pericallosal_R232 and r;
    vars theta_pericallosal_R232 and theta;
  enddef;
  def map between parameters_global and pericallosal_R232_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_postcommunicating_part_L12_module for
    vars E_posterior_cerebral_postcommunicating_part_L12 and E;
    vars l_posterior_cerebral_postcommunicating_part_L12 and l;
    vars r_posterior_cerebral_postcommunicating_part_L12 and r;
    vars theta_posterior_cerebral_postcommunicating_part_L12 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_postcommunicating_part_L12_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_postcommunicating_part_R208_module for
    vars E_posterior_cerebral_postcommunicating_part_R208 and E;
    vars l_posterior_cerebral_postcommunicating_part_R208 and l;
    vars r_posterior_cerebral_postcommunicating_part_R208 and r;
    vars theta_posterior_cerebral_postcommunicating_part_R208 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_postcommunicating_part_R208_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_precommunicating_part_L6_module for
    vars E_posterior_cerebral_precommunicating_part_L6 and E;
    vars l_posterior_cerebral_precommunicating_part_L6 and l;
    vars r_posterior_cerebral_precommunicating_part_L6 and r;
    vars theta_posterior_cerebral_precommunicating_part_L6 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_precommunicating_part_L6_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_cerebral_precommunicating_part_R204_module for
    vars E_posterior_cerebral_precommunicating_part_R204 and E;
    vars l_posterior_cerebral_precommunicating_part_R204 and l;
    vars r_posterior_cerebral_precommunicating_part_R204 and r;
    vars theta_posterior_cerebral_precommunicating_part_R204 and theta;
  enddef;
  def map between parameters_global and posterior_cerebral_precommunicating_part_R204_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_L8_module for
    vars E_posterior_communicating_L8 and E;
    vars l_posterior_communicating_L8 and l;
    vars r_posterior_communicating_L8 and r;
    vars theta_posterior_communicating_L8 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_L8_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_communicating_R206_module for
    vars E_posterior_communicating_R206 and E;
    vars l_posterior_communicating_R206 and l;
    vars r_posterior_communicating_R206 and r;
    vars theta_posterior_communicating_R206 and theta;
  enddef;
  def map between parameters_global and posterior_communicating_R206_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_L2_module for
    vars E_vertebral_L2 and E;
    vars l_vertebral_L2 and l;
    vars r_vertebral_L2 and r;
    vars theta_vertebral_L2 and theta;
  enddef;
  def map between parameters_global and vertebral_L2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and vertebral_R272_module for
    vars E_vertebral_R272 and E;
    vars l_vertebral_R272 and l;
    vars r_vertebral_R272 and r;
    vars theta_vertebral_R272 and theta;
  enddef;
  def map between parameters_global and vertebral_R272_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and artery_of_precentral_sulcus_T103_R68_module for
    vars E_artery_of_precentral_sulcus_T103_R68 and E;
    vars l_artery_of_precentral_sulcus_T103_R68 and l;
    vars r_artery_of_precentral_sulcus_T103_R68 and r;
    vars theta_artery_of_precentral_sulcus_T103_R68 and theta;
  enddef;
  def map between parameters_global and artery_of_precentral_sulcus_T103_R68_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and artery_of_precentral_sulcus_T38_L130_module for
    vars E_artery_of_precentral_sulcus_T38_L130 and E;
    vars l_artery_of_precentral_sulcus_T38_L130 and l;
    vars r_artery_of_precentral_sulcus_T38_L130 and r;
    vars theta_artery_of_precentral_sulcus_T38_L130 and theta;
  enddef;
  def map between parameters_global and artery_of_precentral_sulcus_T38_L130_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars E_medial_occipital_parieto_occipital_branch_T118_R262 and E;
    vars l_medial_occipital_parieto_occipital_branch_T118_R262 and l;
    vars r_medial_occipital_parieto_occipital_branch_T118_R262 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T118_R262 and theta;
  enddef;
  def map between parameters_global and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars E_medial_occipital_parieto_occipital_branch_T54_L194 and E;
    vars l_medial_occipital_parieto_occipital_branch_T54_L194 and l;
    vars r_medial_occipital_parieto_occipital_branch_T54_L194 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T54_L194 and theta;
  enddef;
  def map between parameters_global and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars E_middle_cerebral_branch_to_angular_gyrus_T120_R104 and E;
    vars l_middle_cerebral_branch_to_angular_gyrus_T120_R104 and l;
    vars r_middle_cerebral_branch_to_angular_gyrus_T120_R104 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T120_R104 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars E_middle_cerebral_branch_to_angular_gyrus_T56_L166 and E;
    vars l_middle_cerebral_branch_to_angular_gyrus_T56_L166 and l;
    vars r_middle_cerebral_branch_to_angular_gyrus_T56_L166 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T56_L166 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars E_middle_cerebral_posterior_temporal_branch_T122_R92 and E;
    vars l_middle_cerebral_posterior_temporal_branch_T122_R92 and l;
    vars r_middle_cerebral_posterior_temporal_branch_T122_R92 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T122_R92 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars E_middle_cerebral_posterior_temporal_branch_T58_L154 and E;
    vars l_middle_cerebral_posterior_temporal_branch_T58_L154 and l;
    vars r_middle_cerebral_posterior_temporal_branch_T58_L154 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T58_L154 and theta;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars C_T_lateral_occipital_intermediate_temporal_branch_T47_L20 and C_T;
    vars BFF_ASL_lateral_occipital_intermediate_temporal_branch_T47_L20 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars C_T_lateral_occipital_intermediate_temporal_branch_T76_R216 and C_T;
    vars BFF_ASL_lateral_occipital_intermediate_temporal_branch_T76_R216 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars C_T_medial_occipital_calcarine_branch_T51_L202 and C_T;
    vars BFF_ASL_medial_occipital_calcarine_branch_T51_L202 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars C_T_medial_occipital_calcarine_branch_T79_R270 and C_T;
    vars BFF_ASL_medial_occipital_calcarine_branch_T79_R270 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars C_T_medial_occipital_occipitotemporal_branch_T52_L190 and C_T;
    vars BFF_ASL_medial_occipital_occipitotemporal_branch_T52_L190 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars C_T_medial_occipital_occipitotemporal_branch_T80_R258 and C_T;
    vars BFF_ASL_medial_occipital_occipitotemporal_branch_T80_R258 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_parietal_branch_T53_L196_T_module for
    vars C_T_medial_occipital_parietal_branch_T53_L196 and C_T;
    vars BFF_ASL_medial_occipital_parietal_branch_T53_L196 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_parietal_branch_T53_L196_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_parietal_branch_T81_R264_T_module for
    vars C_T_medial_occipital_parietal_branch_T81_R264 and C_T;
    vars BFF_ASL_medial_occipital_parietal_branch_T81_R264 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_parietal_branch_T81_R264_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and anterior_choroidal_T34_L116_T_module for
    vars C_T_anterior_choroidal_T34_L116 and C_T;
    vars BFF_ASL_anterior_choroidal_T34_L116 and BFF_ASL;
  enddef;
  def map between parameters_global and anterior_choroidal_T34_L116_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and anterior_choroidal_T98_R54_T_module for
    vars C_T_anterior_choroidal_T98_R54 and C_T;
    vars BFF_ASL_anterior_choroidal_T98_R54 and BFF_ASL;
  enddef;
  def map between parameters_global and anterior_choroidal_T98_R54_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and anterior_parietal_T100_R100_T_module for
    vars C_T_anterior_parietal_T100_R100 and C_T;
    vars BFF_ASL_anterior_parietal_T100_R100 and BFF_ASL;
  enddef;
  def map between parameters_global and anterior_parietal_T100_R100_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and anterior_parietal_T35_L162_T_module for
    vars C_T_anterior_parietal_T35_L162 and C_T;
    vars BFF_ASL_anterior_parietal_T35_L162 and BFF_ASL;
  enddef;
  def map between parameters_global and anterior_parietal_T35_L162_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_central_sulcus_T101_R70_T_module for
    vars C_T_artery_of_central_sulcus_T101_R70 and C_T;
    vars BFF_ASL_artery_of_central_sulcus_T101_R70 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_central_sulcus_T101_R70_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_central_sulcus_T36_L132_T_module for
    vars C_T_artery_of_central_sulcus_T36_L132 and C_T;
    vars BFF_ASL_artery_of_central_sulcus_T36_L132 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_central_sulcus_T36_L132_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars C_T_artery_of_postcentral_sulcus_T102_R88 and C_T;
    vars BFF_ASL_artery_of_postcentral_sulcus_T102_R88 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars C_T_artery_of_postcentral_sulcus_T37_L150 and C_T;
    vars BFF_ASL_artery_of_postcentral_sulcus_T37_L150 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_precentral_sulcus_T103_R72_T_module for
    vars C_T_artery_of_precentral_sulcus_T103_R72 and C_T;
    vars BFF_ASL_artery_of_precentral_sulcus_T103_R72 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_precentral_sulcus_T103_R72_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and artery_of_precentral_sulcus_T38_L134_T_module for
    vars C_T_artery_of_precentral_sulcus_T38_L134 and C_T;
    vars BFF_ASL_artery_of_precentral_sulcus_T38_L134 and BFF_ASL;
  enddef;
  def map between parameters_global and artery_of_precentral_sulcus_T38_L134_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_cingular_branch_T105_R250_T_module for
    vars C_T_callosomarginal_cingular_branch_T105_R250 and C_T;
    vars BFF_ASL_callosomarginal_cingular_branch_T105_R250 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_cingular_branch_T105_R250_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_cingular_branch_T40_L182_T_module for
    vars C_T_callosomarginal_cingular_branch_T40_L182 and C_T;
    vars BFF_ASL_callosomarginal_cingular_branch_T40_L182 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_cingular_branch_T40_L182_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars C_T_callosomarginal_intermediomedial_frontal_branch_T106_R242 and C_T;
    vars BFF_ASL_callosomarginal_intermediomedial_frontal_branch_T106_R242 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars C_T_callosomarginal_intermediomedial_frontal_branch_T41_L174 and C_T;
    vars BFF_ASL_callosomarginal_intermediomedial_frontal_branch_T41_L174 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars C_T_callosomarginal_paracentral_branch_T107_R254 and C_T;
    vars BFF_ASL_callosomarginal_paracentral_branch_T107_R254 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars C_T_callosomarginal_paracentral_branch_T42_L186 and C_T;
    vars BFF_ASL_callosomarginal_paracentral_branch_T42_L186 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars C_T_callosomarginal_posteromedial_frontal_branch_T108_R246 and C_T;
    vars BFF_ASL_callosomarginal_posteromedial_frontal_branch_T108_R246 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars C_T_callosomarginal_posteromedial_frontal_branch_T43_L178 and C_T;
    vars BFF_ASL_callosomarginal_posteromedial_frontal_branch_T43_L178 and BFF_ASL;
  enddef;
  def map between parameters_global and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and distal_medial_striate_T109_R236_T_module for
    vars C_T_distal_medial_striate_T109_R236 and C_T;
    vars BFF_ASL_distal_medial_striate_T109_R236 and BFF_ASL;
  enddef;
  def map between parameters_global and distal_medial_striate_T109_R236_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and distal_medial_striate_T44_L40_T_module for
    vars C_T_distal_medial_striate_T44_L40 and C_T;
    vars BFF_ASL_distal_medial_striate_T44_L40 and BFF_ASL;
  enddef;
  def map between parameters_global and distal_medial_striate_T44_L40_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_frontobasal_T110_R60_T_module for
    vars C_T_lateral_frontobasal_T110_R60 and C_T;
    vars BFF_ASL_lateral_frontobasal_T110_R60 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_frontobasal_T110_R60_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_frontobasal_T45_L122_T_module for
    vars C_T_lateral_frontobasal_T45_L122 and C_T;
    vars BFF_ASL_lateral_frontobasal_T45_L122 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_frontobasal_T45_L122_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars C_T_lateral_occipital_anterior_temporal_branch_T111_R212 and C_T;
    vars BFF_ASL_lateral_occipital_anterior_temporal_branch_T111_R212 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars C_T_lateral_occipital_anterior_temporal_branch_T46_L16 and C_T;
    vars BFF_ASL_lateral_occipital_anterior_temporal_branch_T46_L16 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars C_T_lateral_occipital_posterior_temporal_branch_T112_R220 and C_T;
    vars BFF_ASL_lateral_occipital_posterior_temporal_branch_T112_R220 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars C_T_lateral_occipital_posterior_temporal_branch_T48_L24 and C_T;
    vars BFF_ASL_lateral_occipital_posterior_temporal_branch_T48_L24 and BFF_ASL;
  enddef;
  def map between parameters_global and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars C_T_medial_occipital_parieto_occipital_branch_T118_R266 and C_T;
    vars BFF_ASL_medial_occipital_parieto_occipital_branch_T118_R266 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars C_T_medial_occipital_parieto_occipital_branch_T54_L198 and C_T;
    vars BFF_ASL_medial_occipital_parieto_occipital_branch_T54_L198 and BFF_ASL;
  enddef;
  def map between parameters_global and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars C_T_middle_cerebral_anterior_temporal_branch_T119_R80 and C_T;
    vars BFF_ASL_middle_cerebral_anterior_temporal_branch_T119_R80 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars C_T_middle_cerebral_anterior_temporal_branch_T55_L142 and C_T;
    vars BFF_ASL_middle_cerebral_anterior_temporal_branch_T55_L142 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars C_T_middle_cerebral_branch_to_angular_gyrus_T120_R108 and C_T;
    vars BFF_ASL_middle_cerebral_branch_to_angular_gyrus_T120_R108 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars C_T_middle_cerebral_branch_to_angular_gyrus_T56_L170 and C_T;
    vars BFF_ASL_middle_cerebral_branch_to_angular_gyrus_T56_L170 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars C_T_middle_cerebral_middle_temporal_branch_T121_R84 and C_T;
    vars BFF_ASL_middle_cerebral_middle_temporal_branch_T121_R84 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars C_T_middle_cerebral_middle_temporal_branch_T57_L146 and C_T;
    vars BFF_ASL_middle_cerebral_middle_temporal_branch_T57_L146 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars C_T_middle_cerebral_posterior_temporal_branch_T122_R96 and C_T;
    vars BFF_ASL_middle_cerebral_posterior_temporal_branch_T122_R96 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars C_T_middle_cerebral_posterior_temporal_branch_T58_L158 and C_T;
    vars BFF_ASL_middle_cerebral_posterior_temporal_branch_T58_L158 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars C_T_middle_cerebral_posterior_temp_occipital_branch_T123_R94 and C_T;
    vars BFF_ASL_middle_cerebral_posterior_temp_occipital_branch_T123_R94 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars C_T_middle_cerebral_posterior_temp_occipital_branch_T59_L156 and C_T;
    vars BFF_ASL_middle_cerebral_posterior_temp_occipital_branch_T59_L156 and BFF_ASL;
  enddef;
  def map between parameters_global and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars C_T_pericallosal_parieto_occipital_branch_T124_R226 and C_T;
    vars BFF_ASL_pericallosal_parieto_occipital_branch_T124_R226 and BFF_ASL;
  enddef;
  def map between parameters_global and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars C_T_pericallosal_parieto_occipital_branch_T60_L30 and C_T;
    vars BFF_ASL_pericallosal_parieto_occipital_branch_T60_L30 and BFF_ASL;
  enddef;
  def map between parameters_global and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and pericallosal_precuneal_branch_T125_R230_T_module for
    vars C_T_pericallosal_precuneal_branch_T125_R230 and C_T;
    vars BFF_ASL_pericallosal_precuneal_branch_T125_R230 and BFF_ASL;
  enddef;
  def map between parameters_global and pericallosal_precuneal_branch_T125_R230_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and pericallosal_precuneal_branch_T61_L34_T_module for
    vars C_T_pericallosal_precuneal_branch_T61_L34 and C_T;
    vars BFF_ASL_pericallosal_precuneal_branch_T61_L34 and BFF_ASL;
  enddef;
  def map between parameters_global and pericallosal_precuneal_branch_T61_L34_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and polar_temporal_T127_R76_T_module for
    vars C_T_polar_temporal_T127_R76 and C_T;
    vars BFF_ASL_polar_temporal_T127_R76 and BFF_ASL;
  enddef;
  def map between parameters_global and polar_temporal_T127_R76_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and polar_temporal_T63_L138_T_module for
    vars C_T_polar_temporal_T63_L138 and C_T;
    vars BFF_ASL_polar_temporal_T63_L138 and BFF_ASL;
  enddef;
  def map between parameters_global and polar_temporal_T63_L138_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and posterior_parietal_T129_R106_T_module for
    vars C_T_posterior_parietal_T129_R106 and C_T;
    vars BFF_ASL_posterior_parietal_T129_R106 and BFF_ASL;
  enddef;
  def map between parameters_global and posterior_parietal_T129_R106_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and posterior_parietal_T64_L168_T_module for
    vars C_T_posterior_parietal_T64_L168 and C_T;
    vars BFF_ASL_posterior_parietal_T64_L168 and BFF_ASL;
  enddef;
  def map between parameters_global and posterior_parietal_T64_L168_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and prefrontal_T130_R64_T_module for
    vars C_T_prefrontal_T130_R64 and C_T;
    vars BFF_ASL_prefrontal_T130_R64 and BFF_ASL;
  enddef;
  def map between parameters_global and prefrontal_T130_R64_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and prefrontal_T65_L126_T_module for
    vars C_T_prefrontal_T65_L126 and C_T;
    vars BFF_ASL_prefrontal_T65_L126 and BFF_ASL;
  enddef;
  def map between parameters_global and prefrontal_T65_L126_T_module for
    vars pressure_d and pressure_d;
    vars meanflow_4dflow and meanflow_4dflow;
  enddef;
  def map between parameters and common_iliac_R216_module for
    vars E_common_iliac_R216 and E;
    vars l_common_iliac_R216 and l;
    vars r_common_iliac_R216 and r;
    vars theta_common_iliac_R216 and theta;
  enddef;
  def map between parameters_global and common_iliac_R216_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_iliac_T1_R218_T_module for
    vars R_T_internal_iliac_T1_R218 and R_T;
    vars C_T_internal_iliac_T1_R218 and C_T;
  enddef;
  def map between parameters_global and internal_iliac_T1_R218_T_module for
  enddef;
  def map between parameters and external_iliac_R220_module for
    vars E_external_iliac_R220 and E;
    vars l_external_iliac_R220 and l;
    vars r_external_iliac_R220 and r;
    vars theta_external_iliac_R220 and theta;
  enddef;
  def map between parameters_global and external_iliac_R220_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_R222_module for
    vars E_femoral_R222 and E;
    vars l_femoral_R222 and l;
    vars r_femoral_R222 and r;
    vars theta_femoral_R222 and theta;
  enddef;
  def map between parameters_global and femoral_R222_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and profundus_T2_R224_T_module for
    vars R_T_profundus_T2_R224 and R_T;
    vars C_T_profundus_T2_R224 and C_T;
  enddef;
  def map between parameters_global and profundus_T2_R224_T_module for
  enddef;
  def map between parameters and femoral_R226_module for
    vars E_femoral_R226 and E;
    vars l_femoral_R226 and l;
    vars r_femoral_R226 and r;
    vars theta_femoral_R226 and theta;
  enddef;
  def map between parameters_global and femoral_R226_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and popliteal_R228_module for
    vars E_popliteal_R228 and E;
    vars l_popliteal_R228 and l;
    vars r_popliteal_R228 and r;
    vars theta_popliteal_R228 and theta;
  enddef;
  def map between parameters_global and popliteal_R228_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_tibial_T3_R230_T_module for
    vars R_T_anterior_tibial_T3_R230 and R_T;
    vars C_T_anterior_tibial_T3_R230 and C_T;
  enddef;
  def map between parameters_global and anterior_tibial_T3_R230_T_module for
  enddef;
  def map between parameters and popliteal_R232_module for
    vars E_popliteal_R232 and E;
    vars l_popliteal_R232 and l;
    vars r_popliteal_R232 and r;
    vars theta_popliteal_R232 and theta;
  enddef;
  def map between parameters_global and popliteal_R232_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and tibiofibular_trunk_R234_module for
    vars E_tibiofibular_trunk_R234 and E;
    vars l_tibiofibular_trunk_R234 and l;
    vars r_tibiofibular_trunk_R234 and r;
    vars theta_tibiofibular_trunk_R234 and theta;
  enddef;
  def map between parameters_global and tibiofibular_trunk_R234_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_tibial_T4_R236_T_module for
    vars R_T_posterior_tibial_T4_R236 and R_T;
    vars C_T_posterior_tibial_T4_R236 and C_T;
  enddef;
  def map between parameters_global and posterior_tibial_T4_R236_T_module for
  enddef;
  def map between parameters and common_iliac_L194_module for
    vars E_common_iliac_L194 and E;
    vars l_common_iliac_L194 and l;
    vars r_common_iliac_L194 and r;
    vars theta_common_iliac_L194 and theta;
  enddef;
  def map between parameters_global and common_iliac_L194_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and internal_iliac_T1_L196_T_module for
    vars R_T_internal_iliac_T1_L196 and R_T;
    vars C_T_internal_iliac_T1_L196 and C_T;
  enddef;
  def map between parameters_global and internal_iliac_T1_L196_T_module for
  enddef;
  def map between parameters and external_iliac_L198_module for
    vars E_external_iliac_L198 and E;
    vars l_external_iliac_L198 and l;
    vars r_external_iliac_L198 and r;
    vars theta_external_iliac_L198 and theta;
  enddef;
  def map between parameters_global and external_iliac_L198_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and femoral_L200_module for
    vars E_femoral_L200 and E;
    vars l_femoral_L200 and l;
    vars r_femoral_L200 and r;
    vars theta_femoral_L200 and theta;
  enddef;
  def map between parameters_global and femoral_L200_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and profundus_T2_L202_T_module for
    vars R_T_profundus_T2_L202 and R_T;
    vars C_T_profundus_T2_L202 and C_T;
  enddef;
  def map between parameters_global and profundus_T2_L202_T_module for
  enddef;
  def map between parameters and femoral_L204_module for
    vars E_femoral_L204 and E;
    vars l_femoral_L204 and l;
    vars r_femoral_L204 and r;
    vars theta_femoral_L204 and theta;
  enddef;
  def map between parameters_global and femoral_L204_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and popliteal_L206_module for
    vars E_popliteal_L206 and E;
    vars l_popliteal_L206 and l;
    vars r_popliteal_L206 and r;
    vars theta_popliteal_L206 and theta;
  enddef;
  def map between parameters_global and popliteal_L206_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and anterior_tibial_T3_L208_T_module for
    vars R_T_anterior_tibial_T3_L208 and R_T;
    vars C_T_anterior_tibial_T3_L208 and C_T;
  enddef;
  def map between parameters_global and anterior_tibial_T3_L208_T_module for
  enddef;
  def map between parameters and popliteal_L210_module for
    vars E_popliteal_L210 and E;
    vars l_popliteal_L210 and l;
    vars r_popliteal_L210 and r;
    vars theta_popliteal_L210 and theta;
  enddef;
  def map between parameters_global and popliteal_L210_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and tibiofibular_trunk_L212_module for
    vars E_tibiofibular_trunk_L212 and E;
    vars l_tibiofibular_trunk_L212 and l;
    vars r_tibiofibular_trunk_L212 and r;
    vars theta_tibiofibular_trunk_L212 and theta;
  enddef;
  def map between parameters_global and tibiofibular_trunk_L212_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters and posterior_tibial_T4_L214_T_module for
    vars R_T_posterior_tibial_T4_L214 and R_T;
    vars C_T_posterior_tibial_T4_L214 and C_T;
  enddef;
  def map between parameters_global and posterior_tibial_T4_L214_T_module for
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars I_venous_lb and I;
  enddef;
  def map between parameters_global and venous_lb_module for
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars I_venous_ub and I;
  enddef;
  def map between parameters_global and venous_ub_module for
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars I_venous_ivc and I;
  enddef;
  def map between parameters_global and venous_ivc_module for
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars I_venous_svc and I;
  enddef;
  def map between parameters_global and venous_svc_module for
  enddef;
  def map between parameters and feedback_module for
  enddef;
  def map between parameters_global and feedback_module for
  enddef;
  def map between parameters and feedback_PCAL_module for
  enddef;
  def map between parameters_global and feedback_PCAL_module for
  enddef;
  def map between parameters and feedback_PCAR_module for
  enddef;
  def map between parameters_global and feedback_PCAR_module for
  enddef;
  def map between parameters and feedback_MCAL_module for
  enddef;
  def map between parameters_global and feedback_MCAL_module for
  enddef;
  def map between parameters and feedback_MCAR_module for
  enddef;
  def map between parameters_global and feedback_MCAR_module for
  enddef;
  def map between parameters and feedback_ACAL_module for
  enddef;
  def map between parameters_global and feedback_ACAL_module for
  enddef;
  def map between parameters and feedback_ACAR_module for
  enddef;
  def map between parameters_global and feedback_ACAR_module for
  enddef;
  def map between parameters and par_module for
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
  enddef;
  def map between parameters_global and par_module for
  enddef;
  def map between parameters and pvn_module for
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
  enddef;
  def map between parameters_global and pvn_module for
  enddef;
  // ------------time mapping------------//
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T1_R98_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T1_L102_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T2_R106_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T2_L110_T_module for
    vars time and t;
  enddef;
  def map between environment and celiac_trunk_C116_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C118_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_T3_C120_T_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C122_module for
    vars time and t;
  enddef;
  def map between environment and dorsal_pancreatic_T1_C124_T_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C126_T_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_C128_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_C130_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_left_branch_C132_T_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_right_branch_C134_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C138_module for
    vars time and t;
  enddef;
  def map between environment and middle_colic_T8_C140_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C142_module for
    vars time and t;
  enddef;
  def map between environment and jejunal_3_T10_C144_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C146_module for
    vars time and t;
  enddef;
  def map between environment and jejunal_6_T11_C148_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C150_module for
    vars time and t;
  enddef;
  def map between environment and ileocolic_T9_C152_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C154_module for
    vars time and t;
  enddef;
  def map between environment and ileal_4_T12_C156_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C158_module for
    vars time and t;
  enddef;
  def map between environment and ileal_6_T13_C160_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C162_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_L166_module for
    vars time and t;
  enddef;
  def map between environment and renal_anterior_branch_L168_module for
    vars time and t;
  enddef;
  def map between environment and inferior_segmental_T5_L170_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_segmental_T4_L172_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_posterior_branch_T3_L174_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_R178_module for
    vars time and t;
  enddef;
  def map between environment and renal_anterior_branch_R180_module for
    vars time and t;
  enddef;
  def map between environment and superior_segmental_T4_R182_T_module for
    vars time and t;
  enddef;
  def map between environment and inferior_segmental_T5_R184_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_posterior_branch_T3_R186_T_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_T5_C190_T_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and axillary_R32_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R34_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_R36_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_R38_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_T3_R40_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_R42_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_T1_R44_T_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and axillary_L80_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L82_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_L84_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_L86_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_T3_L88_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_L90_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_T1_L92_T_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_T2_R26_T_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_T2_L62_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L38_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R234_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L172_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L176_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L180_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L184_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R240_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R244_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R248_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R252_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L188_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L192_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L200_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L26_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R222_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R256_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R260_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R268_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L136_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L140_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L144_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L148_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L152_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L160_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L164_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R102_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R74_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R78_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R82_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R86_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R90_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R98_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L118_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R56_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L120_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L124_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L128_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R58_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R62_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R66_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L14_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L18_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L22_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R210_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R214_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R218_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_L32_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_L36_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_R228_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_R232_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_postcommunicating_part_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_postcommunicating_part_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_precommunicating_part_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_precommunicating_part_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T103_R68_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T38_L130_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_intermediate_temporal_branch_T47_L20_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_intermediate_temporal_branch_T76_R216_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_calcarine_branch_T51_L202_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_calcarine_branch_T79_R270_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_occipitotemporal_branch_T52_L190_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_occipitotemporal_branch_T80_R258_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parietal_branch_T53_L196_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parietal_branch_T81_R264_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_choroidal_T34_L116_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_choroidal_T98_R54_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_parietal_T100_R100_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_parietal_T35_L162_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_central_sulcus_T101_R70_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_central_sulcus_T36_L132_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_postcentral_sulcus_T102_R88_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_postcentral_sulcus_T37_L150_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T103_R72_T_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T38_L134_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_cingular_branch_T105_R250_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_cingular_branch_T40_L182_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_intermediomedial_frontal_branch_T106_R242_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_intermediomedial_frontal_branch_T41_L174_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_paracentral_branch_T107_R254_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_paracentral_branch_T42_L186_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_posteromedial_frontal_branch_T108_R246_T_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_posteromedial_frontal_branch_T43_L178_T_module for
    vars time and t;
  enddef;
  def map between environment and distal_medial_striate_T109_R236_T_module for
    vars time and t;
  enddef;
  def map between environment and distal_medial_striate_T44_L40_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_frontobasal_T110_R60_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_frontobasal_T45_L122_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_anterior_temporal_branch_T111_R212_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_anterior_temporal_branch_T46_L16_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_posterior_temporal_branch_T112_R220_T_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_posterior_temporal_branch_T48_L24_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T118_R266_T_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T54_L198_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_anterior_temporal_branch_T119_R80_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_anterior_temporal_branch_T55_L142_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T120_R108_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T56_L170_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_middle_temporal_branch_T121_R84_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_middle_temporal_branch_T57_L146_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T122_R96_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T58_L158_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temp_occipital_branch_T123_R94_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temp_occipital_branch_T59_L156_T_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_parieto_occipital_branch_T124_R226_T_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_parieto_occipital_branch_T60_L30_T_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_precuneal_branch_T125_R230_T_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_precuneal_branch_T61_L34_T_module for
    vars time and t;
  enddef;
  def map between environment and polar_temporal_T127_R76_T_module for
    vars time and t;
  enddef;
  def map between environment and polar_temporal_T63_L138_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_parietal_T129_R106_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_parietal_T64_L168_T_module for
    vars time and t;
  enddef;
  def map between environment and prefrontal_T130_R64_T_module for
    vars time and t;
  enddef;
  def map between environment and prefrontal_T65_L126_T_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_T1_R218_T_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and profundus_T2_R224_T_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R226_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R228_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_T3_R230_T_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R232_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_R234_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_T4_R236_T_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_T1_L196_T_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and profundus_T2_L202_T_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L204_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L206_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_T3_L208_T_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L210_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_L212_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_T4_L214_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and feedback_module for
    vars time and t;
  enddef;
  def map between environment and feedback_PCAL_module for
    vars time and t;
  enddef;
  def map between environment and feedback_PCAR_module for
    vars time and t;
  enddef;
  def map between environment and feedback_MCAL_module for
    vars time and t;
  enddef;
  def map between environment and feedback_MCAR_module for
    vars time and t;
  enddef;
  def map between environment and feedback_ACAL_module for
    vars time and t;
  enddef;
  def map between environment and feedback_ACAR_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
enddef;
