<?xml version='1.0' encoding='UTF-8'?>
<model name="CardiovascularSystem" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="neonatal_units.cellml">
        <units name="m2" units_ref="m2"/>
        <units name="m3" units_ref="m3"/>
        <units name="m3_per_s" units_ref="m3_per_s"/>
        <units name="m_per_s2" units_ref="m_per_s2"/>
        <units name="m_per_s" units_ref="m_per_s"/>
        <units name="m6_per_J" units_ref="m6_per_J"/>
        <units name="m6_per_Js" units_ref="m6_per_Js"/>
        <units name="per_m" units_ref="per_m"/>
        <units name="per_s" units_ref="per_s"/>
        <units name="J_per_m3" units_ref="J_per_m3"/>
        <units name="J_per_m3s" units_ref="J_per_m3s"/>
        <units name="m3_per_J" units_ref="m3_per_J"/>
        <units name="J2_per_m6" units_ref="J2_per_m6"/>
        <units name="Js_per_m6" units_ref="Js_per_m6"/>
        <units name="Js2_per_m6" units_ref="Js2_per_m6"/>
        <units name="Js2_per_m5" units_ref="Js2_per_m5"/>
        <units name="J_per_s" units_ref="J_per_s"/>
        <units name="J_per_m6" units_ref="J_per_m6"/>
        <units name="Js_per_m3" units_ref="Js_per_m3"/>
        <units name="UnitValve" units_ref="UnitValve"/>
        <units name="J_per_m9" units_ref="J_per_m9"/>
        <units name="m3_per_Js" units_ref="m3_per_Js"/>
        <units name="kg_per_m3" units_ref="kg_per_m3"/>
        <units name="m3_per_kg" units_ref="m3_per_kg"/>
    </import>
    <import xlink:href="neonatal_parameters.cellml">
        <component component_ref="parameters" name="parameters"/>
        <component component_ref="parameters_global" name="parameters_global"/>
    </import>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <!--#STARTGENBELOW-->
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;imports&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="heart_simple_LVprop" name="heart_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="vv_simple_type" name="aortic_root_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="ascending_aorta_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="brachiocephalic_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_type" name="subclavian_R_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_type" name="common_carotid_R_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="aortic_arch_I_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_type" name="common_carotid_L_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="aortic_arch_II_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_type" name="subclavian_L_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="descending_aorta_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pv_split_type" name="abdominal_aorta_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="abdomen_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="head_L_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="head_R_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="arm_L_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="arm_R_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="leg_L_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="pp_T_type" name="leg_R_T_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="vp_simple_type" name="venous_ivc_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="vp_simple_type" name="venous_svc_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="vp_simple_type" name="par_module"/>
</import>
<import xlink:href="neonatal_modules.cellml">
    <component component_ref="vp_simple_type" name="pvn_module"/>
</import>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;vessel mappings&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="heart_module" component_2="aortic_root_module"/>
   <map_variables variable_1="v_aov" variable_2="v_in"/>
   <map_variables variable_1="u_root" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="heart_module" component_2="par_module"/>
   <map_variables variable_1="v_puv" variable_2="v_in"/>
   <map_variables variable_1="u_par" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="aortic_root_module" component_2="ascending_aorta_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u_d" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="ascending_aorta_module" component_2="aortic_arch_I_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="ascending_aorta_module" component_2="brachiocephalic_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="brachiocephalic_module" component_2="subclavian_R_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="brachiocephalic_module" component_2="common_carotid_R_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="subclavian_R_module" component_2="arm_R_T_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="common_carotid_R_module" component_2="head_R_T_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_I_module" component_2="aortic_arch_II_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_I_module" component_2="common_carotid_L_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="common_carotid_L_module" component_2="head_L_T_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_II_module" component_2="descending_aorta_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_II_module" component_2="subclavian_L_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="subclavian_L_module" component_2="arm_L_T_module"/>
   <map_variables variable_1="v_out" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="descending_aorta_module" component_2="abdominal_aorta_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="descending_aorta_module" component_2="abdomen_T_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="abdominal_aorta_module" component_2="leg_L_T_module"/>
   <map_variables variable_1="v_out_1" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="abdominal_aorta_module" component_2="leg_R_T_module"/>
   <map_variables variable_1="v_out_2" variable_2="v"/>
   <map_variables variable_1="u" variable_2="u_in"/>
</connection>
<connection>
   <map_components component_1="par_module" component_2="pvn_module"/>
   <map_variables variable_1="v" variable_2="v_in"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="pvn_module" component_2="heart_module"/>
   <map_variables variable_1="v" variable_2="v_pvn"/>
   <map_variables variable_1="u_out" variable_2="u_la"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;terminal venous connection&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="abdomen_T_module" component_2="venous_ivc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="abdomen_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_abdomen_T"/>
</connection>
<connection>
   <map_components component_1="head_L_T_module" component_2="venous_svc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="head_L_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_head_L_T"/>
</connection>
<connection>
   <map_components component_1="head_R_T_module" component_2="venous_svc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="head_R_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_head_R_T"/>
</connection>
<connection>
   <map_components component_1="arm_L_T_module" component_2="venous_svc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="arm_L_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_arm_L_T"/>
</connection>
<connection>
   <map_components component_1="arm_R_T_module" component_2="venous_svc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="arm_R_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_arm_R_T"/>
</connection>
<connection>
   <map_components component_1="leg_L_T_module" component_2="venous_ivc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="leg_L_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_leg_L_T"/>
</connection>
<connection>
   <map_components component_1="leg_R_T_module" component_2="venous_ivc_module"/>
   <map_variables variable_1="u_out" variable_2="u"/>
</connection>
<connection>
   <map_components component_1="leg_R_T_module" component_2="terminal_venous_connection"/>
   <map_variables variable_1="v_T" variable_2="v_leg_R_T"/>
</connection>
<connection>
   <map_components component_1="terminal_venous_connection" component_2="venous_ivc_module"/>
   <map_variables variable_1="v_venous_ivc" variable_2="v_in"/>
</connection>
<connection>
   <map_components component_1="terminal_venous_connection" component_2="venous_svc_module"/>
   <map_variables variable_1="v_venous_svc" variable_2="v_in"/>
</connection>
<component name="terminal_venous_connection">
<variable name="v_abdomen_T" public_interface="in" units="m3_per_s"/>
<variable name="v_leg_L_T" public_interface="in" units="m3_per_s"/>
<variable name="v_leg_R_T" public_interface="in" units="m3_per_s"/>
<variable name="v_venous_ivc" public_interface="out" units="m3_per_s"/>
<variable name="v_head_L_T" public_interface="in" units="m3_per_s"/>
<variable name="v_head_R_T" public_interface="in" units="m3_per_s"/>
<variable name="v_arm_L_T" public_interface="in" units="m3_per_s"/>
<variable name="v_arm_R_T" public_interface="in" units="m3_per_s"/>
<variable name="v_venous_svc" public_interface="out" units="m3_per_s"/>
<math xmlns="http://www.w3.org/1998/Math/MathML">
   <apply>
       <eq/>
       <ci>v_venous_ivc</ci>
       <apply>
           <plus/>
            <ci>v_abdomen_T</ci>
            <ci>v_leg_L_T</ci>
            <ci>v_leg_R_T</ci>
       </apply>
   </apply>
</math>
<math xmlns="http://www.w3.org/1998/Math/MathML">
   <apply>
       <eq/>
       <ci>v_venous_svc</ci>
       <apply>
           <plus/>
            <ci>v_head_L_T</ci>
            <ci>v_head_R_T</ci>
            <ci>v_arm_L_T</ci>
            <ci>v_arm_R_T</ci>
       </apply>
   </apply>
</math>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;access_variables&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<component name="heart">
   <variable name="rho" public_interface="in" units="Js2_per_m5"/>
   <variable name="T" public_interface="in" units="second"/>
   <variable name="mt" public_interface="in" units="second"/>
   <variable name="u_ra" public_interface="in" units="J_per_m3"/>
   <variable name="u_rv" public_interface="in" units="J_per_m3"/>
   <variable name="u_la" public_interface="in" units="J_per_m3"/>
   <variable name="u_lv" public_interface="in" units="J_per_m3"/>
   <variable name="q_ra" public_interface="in" units="m3"/>
   <variable name="q_rv" public_interface="in" units="m3"/>
   <variable name="q_la" public_interface="in" units="m3"/>
   <variable name="q_lv" public_interface="in" units="m3"/>
   <variable name="q_ra_0" public_interface="in" units="m3"/>
   <variable name="q_rv_0" public_interface="in" units="m3"/>
   <variable name="q_la_0" public_interface="in" units="m3"/>
   <variable name="q_lv_0" public_interface="in" units="m3"/>
   <variable name="T_ac" public_interface="in" units="second"/>
   <variable name="T_ar" public_interface="in" units="second"/>
   <variable name="t_astart" public_interface="in" units="second"/>
   <variable name="t_astart_norm" public_interface="in" units="second"/>
   <variable name="chi_a" public_interface="in" units="dimensionless"/>
   <variable name="chi_afloor" public_interface="in" units="dimensionless"/>
   <variable name="T_vc" public_interface="in" units="second"/>
   <variable name="T_vr" public_interface="in" units="second"/>
   <variable name="t_vstart" public_interface="in" units="second"/>
   <variable name="t_vstart_norm" public_interface="in" units="second"/>
   <variable name="E_lv_A" public_interface="in" units="J_per_m6"/>
   <variable name="E_lv_B" public_interface="in" units="J_per_m6"/>
   <variable name="e_a" public_interface="in" units="dimensionless"/>
   <variable name="e_v" public_interface="in" units="dimensionless"/>
   <variable name="v_trv" public_interface="in" units="m3_per_s"/>
   <variable name="v_puv" public_interface="in" units="m3_per_s"/>
   <variable name="v_miv" public_interface="in" units="m3_per_s"/>
   <variable name="v_aov" public_interface="in" units="m3_per_s"/>
   <variable name="vel_trv" public_interface="in" units="m_per_s"/>
   <variable name="vel_puv" public_interface="in" units="m_per_s"/>
   <variable name="vel_miv" public_interface="in" units="m_per_s"/>
   <variable name="vel_aov" public_interface="in" units="m_per_s"/>
   <variable name="K_vo_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vo_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_trv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_puv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_miv" public_interface="in" units="m3_per_Js"/>
   <variable name="K_vc_aov" public_interface="in" units="m3_per_Js"/>
   <variable name="M_rg_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_rg_aov" public_interface="in" units="dimensionless"/>
   <variable name="M_st_trv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_puv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_miv" public_interface="in" units="dimensionless"/>
   <variable name="M_st_aov" public_interface="in" units="dimensionless"/>
   <variable name="l_eff" public_interface="in" units="metre"/>
   <variable name="A_nn_trv" public_interface="in" units="m2"/>
   <variable name="A_nn_puv" public_interface="in" units="m2"/>
   <variable name="A_nn_miv" public_interface="in" units="m2"/>
   <variable name="A_nn_aov" public_interface="in" units="m2"/>
   <variable name="A_eff_trv" public_interface="in" units="m2"/>
   <variable name="A_eff_puv" public_interface="in" units="m2"/>
   <variable name="A_eff_miv" public_interface="in" units="m2"/>
   <variable name="A_eff_aov" public_interface="in" units="m2"/>
</component>
<component name="aortic_root">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
</component>
<component name="ascending_aorta">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="brachiocephalic">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="subclavian_R">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="common_carotid_R">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="aortic_arch_I">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="common_carotid_L">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="aortic_arch_II">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="subclavian_L">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="descending_aorta">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="abdominal_aorta">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="E" public_interface="in" units="J_per_m3"/>
</component>
<component name="abdomen_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="head_L_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="head_R_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="arm_L_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="arm_R_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="leg_L_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="leg_R_T">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="v_T" public_interface="in" units="m3_per_s"/>
   <variable name="R_T" public_interface="in" units="Js_per_m6"/>
   <variable name="C_T" public_interface="in" units="m6_per_J"/>
   <variable name="q_T" public_interface="in" units="m3"/>
</component>
<component name="venous_ivc">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
</component>
<component name="venous_svc">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
</component>
<component name="par">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
</component>
<component name="pvn">
   <variable name="u" public_interface="in" units="J_per_m3"/>
   <variable name="v" public_interface="in" units="m3_per_s"/>
   <variable name="q_C" public_interface="in" units="m3"/>
   <variable name="R" public_interface="in" units="Js_per_m6"/>
   <variable name="C" public_interface="in" units="m6_per_J"/>
   <variable name="I" public_interface="in" units="Js2_per_m6"/>
</component>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;vessel mappings&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="heart" component_2="heart_module"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="T" variable_2="T"/>
   <map_variables variable_1="mt" variable_2="mt"/>
   <map_variables variable_1="u_ra" variable_2="u_ra"/>
   <map_variables variable_1="u_rv" variable_2="u_rv"/>
   <map_variables variable_1="u_la" variable_2="u_la"/>
   <map_variables variable_1="u_lv" variable_2="u_lv"/>
   <map_variables variable_1="q_ra" variable_2="q_ra"/>
   <map_variables variable_1="q_rv" variable_2="q_rv"/>
   <map_variables variable_1="q_la" variable_2="q_la"/>
   <map_variables variable_1="q_lv" variable_2="q_lv"/>
   <map_variables variable_1="q_ra_0" variable_2="q_ra_0"/>
   <map_variables variable_1="q_rv_0" variable_2="q_rv_0"/>
   <map_variables variable_1="q_la_0" variable_2="q_la_0"/>
   <map_variables variable_1="q_lv_0" variable_2="q_lv_0"/>
   <map_variables variable_1="T_ac" variable_2="T_ac"/>
   <map_variables variable_1="T_ar" variable_2="T_ar"/>
   <map_variables variable_1="t_astart" variable_2="t_astart"/>
   <map_variables variable_1="t_astart_norm" variable_2="t_astart_norm"/>
   <map_variables variable_1="chi_a" variable_2="chi_a"/>
   <map_variables variable_1="chi_afloor" variable_2="chi_afloor"/>
   <map_variables variable_1="T_vc" variable_2="T_vc"/>
   <map_variables variable_1="T_vr" variable_2="T_vr"/>
   <map_variables variable_1="t_vstart" variable_2="t_vstart"/>
   <map_variables variable_1="t_vstart_norm" variable_2="t_vstart_norm"/>
   <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
   <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
   <map_variables variable_1="e_a" variable_2="e_a"/>
   <map_variables variable_1="e_v" variable_2="e_v"/>
   <map_variables variable_1="v_trv" variable_2="v_trv"/>
   <map_variables variable_1="v_puv" variable_2="v_puv"/>
   <map_variables variable_1="v_miv" variable_2="v_miv"/>
   <map_variables variable_1="v_aov" variable_2="v_aov"/>
   <map_variables variable_1="vel_trv" variable_2="vel_trv"/>
   <map_variables variable_1="vel_puv" variable_2="vel_puv"/>
   <map_variables variable_1="vel_miv" variable_2="vel_miv"/>
   <map_variables variable_1="vel_aov" variable_2="vel_aov"/>
   <map_variables variable_1="K_vo_trv" variable_2="K_vo_trv"/>
   <map_variables variable_1="K_vo_puv" variable_2="K_vo_puv"/>
   <map_variables variable_1="K_vo_miv" variable_2="K_vo_miv"/>
   <map_variables variable_1="K_vo_aov" variable_2="K_vo_aov"/>
   <map_variables variable_1="K_vc_trv" variable_2="K_vc_trv"/>
   <map_variables variable_1="K_vc_puv" variable_2="K_vc_puv"/>
   <map_variables variable_1="K_vc_miv" variable_2="K_vc_miv"/>
   <map_variables variable_1="K_vc_aov" variable_2="K_vc_aov"/>
   <map_variables variable_1="M_rg_trv" variable_2="M_rg_trv"/>
   <map_variables variable_1="M_rg_puv" variable_2="M_rg_puv"/>
   <map_variables variable_1="M_rg_miv" variable_2="M_rg_miv"/>
   <map_variables variable_1="M_rg_aov" variable_2="M_rg_aov"/>
   <map_variables variable_1="M_st_trv" variable_2="M_st_trv"/>
   <map_variables variable_1="M_st_puv" variable_2="M_st_puv"/>
   <map_variables variable_1="M_st_miv" variable_2="M_st_miv"/>
   <map_variables variable_1="M_st_aov" variable_2="M_st_aov"/>
   <map_variables variable_1="l_eff" variable_2="l_eff"/>
   <map_variables variable_1="A_nn_trv" variable_2="A_nn_trv"/>
   <map_variables variable_1="A_nn_puv" variable_2="A_nn_puv"/>
   <map_variables variable_1="A_nn_miv" variable_2="A_nn_miv"/>
   <map_variables variable_1="A_nn_aov" variable_2="A_nn_aov"/>
   <map_variables variable_1="A_eff_trv" variable_2="A_eff_trv"/>
   <map_variables variable_1="A_eff_puv" variable_2="A_eff_puv"/>
   <map_variables variable_1="A_eff_miv" variable_2="A_eff_miv"/>
   <map_variables variable_1="A_eff_aov" variable_2="A_eff_aov"/>
</connection>
<connection>
   <map_components component_1="aortic_root" component_2="aortic_root_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="ascending_aorta" component_2="ascending_aorta_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="brachiocephalic" component_2="brachiocephalic_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="subclavian_R" component_2="subclavian_R_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="common_carotid_R" component_2="common_carotid_R_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_I" component_2="aortic_arch_I_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="common_carotid_L" component_2="common_carotid_L_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="aortic_arch_II" component_2="aortic_arch_II_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="subclavian_L" component_2="subclavian_L_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="descending_aorta" component_2="descending_aorta_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="abdominal_aorta" component_2="abdominal_aorta_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="E" variable_2="E"/>
</connection>
<connection>
   <map_components component_1="abdomen_T" component_2="abdomen_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="head_L_T" component_2="head_L_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="head_R_T" component_2="head_R_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="arm_L_T" component_2="arm_L_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="arm_R_T" component_2="arm_R_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="leg_L_T" component_2="leg_L_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="leg_R_T" component_2="leg_R_T_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="v_T" variable_2="v_T"/>
   <map_variables variable_1="R_T" variable_2="R_T"/>
   <map_variables variable_1="C_T" variable_2="C_T"/>
   <map_variables variable_1="q_T" variable_2="q_T"/>
</connection>
<connection>
   <map_components component_1="venous_ivc" component_2="venous_ivc_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="venous_svc" component_2="venous_svc_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="par" component_2="par_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="pvn" component_2="pvn_module"/>
   <map_variables variable_1="u" variable_2="u"/>
   <map_variables variable_1="v" variable_2="v"/>
   <map_variables variable_1="q_C" variable_2="q_C"/>
   <map_variables variable_1="R" variable_2="R"/>
   <map_variables variable_1="C" variable_2="C"/>
   <map_variables variable_1="I" variable_2="I"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;parameters mapping to modules&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="parameters" component_2="heart_module"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="heart_module"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="T" variable_2="T"/>
   <map_variables variable_1="q_ra_0" variable_2="q_ra_0"/>
   <map_variables variable_1="q_rv_0" variable_2="q_rv_0"/>
   <map_variables variable_1="q_la_0" variable_2="q_la_0"/>
   <map_variables variable_1="q_lv_0" variable_2="q_lv_0"/>
   <map_variables variable_1="T_ac" variable_2="T_ac"/>
   <map_variables variable_1="T_ar" variable_2="T_ar"/>
   <map_variables variable_1="t_astart" variable_2="t_astart"/>
   <map_variables variable_1="T_vc" variable_2="T_vc"/>
   <map_variables variable_1="T_vr" variable_2="T_vr"/>
   <map_variables variable_1="t_vstart" variable_2="t_vstart"/>
   <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
   <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
   <map_variables variable_1="K_vo_trv" variable_2="K_vo_trv"/>
   <map_variables variable_1="K_vo_puv" variable_2="K_vo_puv"/>
   <map_variables variable_1="K_vo_miv" variable_2="K_vo_miv"/>
   <map_variables variable_1="K_vo_aov" variable_2="K_vo_aov"/>
   <map_variables variable_1="K_vc_trv" variable_2="K_vc_trv"/>
   <map_variables variable_1="K_vc_puv" variable_2="K_vc_puv"/>
   <map_variables variable_1="K_vc_miv" variable_2="K_vc_miv"/>
   <map_variables variable_1="K_vc_aov" variable_2="K_vc_aov"/>
   <map_variables variable_1="M_rg_trv" variable_2="M_rg_trv"/>
   <map_variables variable_1="M_rg_puv" variable_2="M_rg_puv"/>
   <map_variables variable_1="M_rg_miv" variable_2="M_rg_miv"/>
   <map_variables variable_1="M_rg_aov" variable_2="M_rg_aov"/>
   <map_variables variable_1="M_st_trv" variable_2="M_st_trv"/>
   <map_variables variable_1="M_st_puv" variable_2="M_st_puv"/>
   <map_variables variable_1="M_st_miv" variable_2="M_st_miv"/>
   <map_variables variable_1="M_st_aov" variable_2="M_st_aov"/>
   <map_variables variable_1="l_eff" variable_2="l_eff"/>
   <map_variables variable_1="A_nn_trv" variable_2="A_nn_trv"/>
   <map_variables variable_1="A_nn_puv" variable_2="A_nn_puv"/>
   <map_variables variable_1="A_nn_miv" variable_2="A_nn_miv"/>
   <map_variables variable_1="A_nn_aov" variable_2="A_nn_aov"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="aortic_root_module"/>
   <map_variables variable_1="R_aortic_root" variable_2="R"/>
   <map_variables variable_1="C_aortic_root" variable_2="C"/>
   <map_variables variable_1="I_aortic_root" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="aortic_root_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="ascending_aorta_module"/>
   <map_variables variable_1="E_ascending_aorta" variable_2="E"/>
   <map_variables variable_1="l_ascending_aorta" variable_2="l"/>
   <map_variables variable_1="r_ascending_aorta" variable_2="r"/>
   <map_variables variable_1="theta_ascending_aorta" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="ascending_aorta_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="brachiocephalic_module"/>
   <map_variables variable_1="E_brachiocephalic" variable_2="E"/>
   <map_variables variable_1="l_brachiocephalic" variable_2="l"/>
   <map_variables variable_1="r_brachiocephalic" variable_2="r"/>
   <map_variables variable_1="theta_brachiocephalic" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="brachiocephalic_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="subclavian_R_module"/>
   <map_variables variable_1="E_subclavian_R" variable_2="E"/>
   <map_variables variable_1="l_subclavian_R" variable_2="l"/>
   <map_variables variable_1="r_subclavian_R" variable_2="r"/>
   <map_variables variable_1="theta_subclavian_R" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="subclavian_R_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="common_carotid_R_module"/>
   <map_variables variable_1="E_common_carotid_R" variable_2="E"/>
   <map_variables variable_1="l_common_carotid_R" variable_2="l"/>
   <map_variables variable_1="r_common_carotid_R" variable_2="r"/>
   <map_variables variable_1="theta_common_carotid_R" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="common_carotid_R_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="aortic_arch_I_module"/>
   <map_variables variable_1="E_aortic_arch_I" variable_2="E"/>
   <map_variables variable_1="l_aortic_arch_I" variable_2="l"/>
   <map_variables variable_1="r_aortic_arch_I" variable_2="r"/>
   <map_variables variable_1="theta_aortic_arch_I" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="aortic_arch_I_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="common_carotid_L_module"/>
   <map_variables variable_1="E_common_carotid_L" variable_2="E"/>
   <map_variables variable_1="l_common_carotid_L" variable_2="l"/>
   <map_variables variable_1="r_common_carotid_L" variable_2="r"/>
   <map_variables variable_1="theta_common_carotid_L" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="common_carotid_L_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="aortic_arch_II_module"/>
   <map_variables variable_1="E_aortic_arch_II" variable_2="E"/>
   <map_variables variable_1="l_aortic_arch_II" variable_2="l"/>
   <map_variables variable_1="r_aortic_arch_II" variable_2="r"/>
   <map_variables variable_1="theta_aortic_arch_II" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="aortic_arch_II_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="subclavian_L_module"/>
   <map_variables variable_1="E_subclavian_L" variable_2="E"/>
   <map_variables variable_1="l_subclavian_L" variable_2="l"/>
   <map_variables variable_1="r_subclavian_L" variable_2="r"/>
   <map_variables variable_1="theta_subclavian_L" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="subclavian_L_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="descending_aorta_module"/>
   <map_variables variable_1="E_descending_aorta" variable_2="E"/>
   <map_variables variable_1="l_descending_aorta" variable_2="l"/>
   <map_variables variable_1="r_descending_aorta" variable_2="r"/>
   <map_variables variable_1="theta_descending_aorta" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="descending_aorta_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="abdominal_aorta_module"/>
   <map_variables variable_1="E_abdominal_aorta" variable_2="E"/>
   <map_variables variable_1="l_abdominal_aorta" variable_2="l"/>
   <map_variables variable_1="r_abdominal_aorta" variable_2="r"/>
   <map_variables variable_1="theta_abdominal_aorta" variable_2="theta"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="abdominal_aorta_module"/>
   <map_variables variable_1="beta_g" variable_2="beta_g"/>
   <map_variables variable_1="rho" variable_2="rho"/>
   <map_variables variable_1="mu" variable_2="mu"/>
   <map_variables variable_1="g" variable_2="g"/>
   <map_variables variable_1="a_vessel" variable_2="a_vessel"/>
   <map_variables variable_1="b_vessel" variable_2="b_vessel"/>
   <map_variables variable_1="c_vessel" variable_2="c_vessel"/>
   <map_variables variable_1="d_vessel" variable_2="d_vessel"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="abdomen_T_module"/>
   <map_variables variable_1="R_T_abdomen" variable_2="R_T"/>
   <map_variables variable_1="C_T_abdomen" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="abdomen_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="head_L_T_module"/>
   <map_variables variable_1="R_T_head_L" variable_2="R_T"/>
   <map_variables variable_1="C_T_head_L" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="head_L_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="head_R_T_module"/>
   <map_variables variable_1="R_T_head_R" variable_2="R_T"/>
   <map_variables variable_1="C_T_head_R" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="head_R_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="arm_L_T_module"/>
   <map_variables variable_1="R_T_arm_L" variable_2="R_T"/>
   <map_variables variable_1="C_T_arm_L" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="arm_L_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="arm_R_T_module"/>
   <map_variables variable_1="R_T_arm_R" variable_2="R_T"/>
   <map_variables variable_1="C_T_arm_R" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="arm_R_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="leg_L_T_module"/>
   <map_variables variable_1="R_T_leg_L" variable_2="R_T"/>
   <map_variables variable_1="C_T_leg_L" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="leg_L_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="leg_R_T_module"/>
   <map_variables variable_1="R_T_leg_R" variable_2="R_T"/>
   <map_variables variable_1="C_T_leg_R" variable_2="C_T"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="leg_R_T_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="venous_ivc_module"/>
   <map_variables variable_1="R_venous_ivc" variable_2="R"/>
   <map_variables variable_1="C_venous_ivc" variable_2="C"/>
   <map_variables variable_1="I_venous_ivc" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="venous_ivc_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="venous_svc_module"/>
   <map_variables variable_1="R_venous_svc" variable_2="R"/>
   <map_variables variable_1="C_venous_svc" variable_2="C"/>
   <map_variables variable_1="I_venous_svc" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="venous_svc_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="par_module"/>
   <map_variables variable_1="R_par" variable_2="R"/>
   <map_variables variable_1="C_par" variable_2="C"/>
   <map_variables variable_1="I_par" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="par_module"/>
</connection>
<connection>
   <map_components component_1="parameters" component_2="pvn_module"/>
   <map_variables variable_1="R_pvn" variable_2="R"/>
   <map_variables variable_1="C_pvn" variable_2="C"/>
   <map_variables variable_1="I_pvn" variable_2="I"/>
</connection>
<connection>
   <map_components component_1="parameters_global" component_2="pvn_module"/>
</connection>
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;time mapping&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<connection>
   <map_components component_1="environment" component_2="heart_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="aortic_root_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="ascending_aorta_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="brachiocephalic_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="subclavian_R_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="common_carotid_R_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="aortic_arch_I_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="common_carotid_L_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="aortic_arch_II_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="subclavian_L_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="descending_aorta_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="abdominal_aorta_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="abdomen_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="head_L_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="head_R_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="arm_L_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="arm_R_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="leg_L_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="leg_R_T_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="venous_ivc_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="venous_svc_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="par_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
<connection>
   <map_components component_1="environment" component_2="pvn_module"/>
   <map_variables variable_1="time" variable_2="t"/>
</connection>
</model>
