def model modules as

  def comp Lymph_vessel_blind as
    // Constitutive parameters
    var t: second {pub: in};
    var mu: Js_per_m3 {pub: in};
    var L: meter {pub: in};
    var D: meter {pub: out};
    // var D0: meter {pub: in};
    var q_0: m3 {pub: in};
    var C_L: m6_per_J {pub: in};
    var R_pvb: Js_per_m6 {pub: out};
    var R_p: Js_per_m6 {pub: out};
    var delT: second {pub: in};
    var q_m_init: m3 {pub: in};
    var q_m: m3 {init: q_m_init, pub: out};
    // var a_f: dimensionless {pub: in};
    // var R_sv: Js_per_m6 {pub: in};
    // State Variables
    var v_p: m3_per_s {pub: out};
    // var q_m: m3 {init: 1e-14, pub: out};
    // var v1: m3_per_s {pub: in};
    var v_w: m3_per_s {init: 2e-16, pub: out};
    var u_w: J_per_m3 {pub: in};
    var u_m: J_per_m3 {pub: out};
    var u_out: J_per_m3 {pub: in};
    // var R_svc: js_per_m6 ;
    // Constitutive Relations
    var a: m3_per_J {pub: in};
    // var a: m3_per_J {init: 7.8867e-4};
    //  var N: dimensionless {pub: in};
    // var K_af: J_per_m2 {pub: in};
    //  var u_af: J_per_m3 {pub: out};
    var b: m3_per_J {pub: in};
    var R_pv0: J_per_m4_s {pub: in};
    var d_ec: meter {pub: in};
    var del_pvB: J_per_m3 {pub: out};
    var Q_delayB: m3_per_s {pub: out};
    ode(v_w, t) = (Q_delayB-v_w)/delT;
    Q_delayB = (u_w-u_m)/R_pvb;
    R_pvb = R_pv0/(2{dimensionless}*pi*L*D/d_ec*(cosh(a*del_pvB)-1{dimensionless})*exp(-b*del_pvB));
    del_pvB = u_w-u_m;
    R_p = 64{dimensionless}*mu*L/(pi*pow(D, 4{dimensionless}));
    D = 2{dimensionless}*sqrt(q_m/(pi*L));
    // Conservation Laws
    ode(q_m, t) = v_w-v_p;
    u_m = (q_m-q_0)/C_L+u_w;
    // -u_af;
    //  u_af = N*K_af/(pi*D)*(D0/2{dimensionless}-D/2{dimensionless});
    // *a_f;
    v_p = (u_m-u_out)/R_p;
    // v_w = (u_w-u_m)/R_pv;
  enddef;
  // ////////////////////////////////////

  def comp Lymph_vessel_mid as
    // Constitutive parameters
    var t: second {pub: in};
    var delT: second {pub: in};
    // var u_ec: J_per_m3 {pub: in};
    // var f_1: Hz {pub: in};
    var mu: Js_per_m3 {pub: in};
    var L: meter {pub: in};
    var D: meter {pub: out};
    // var D0: meter {pub: in};
    var q_0: m3 {pub: in};
    var C_L: m6_per_J {pub: in};
    var R_pvm: Js_per_m6 {pub: out};
    var R_p: Js_per_m6 {pub: out};
    // var a_f: dimensionless {pub: in};
    var R_sv: Js_per_m6 {pub: out};
    // State Variables
    var v_p1: m3_per_s {pub: in};
    var v_p2: m3_per_s {pub: in};
    var v_p31: m3_per_s {pub: out};
    var v_p32: m3_per_s {pub: out};
    // var q_m: m3 {init: 2e-14, pub: out};
    // var v1: m3_per_s {pub: in};
    var v_w: m3_per_s {init: 2e-16, pub: out};
    var u_w: J_per_m3 {pub: in};
    var u_m: J_per_m3 {pub: out};
    var u_out: J_per_m3 {pub: in};
    var u_in: J_per_m3 {init: 145, pub: out};
    var q_m_init: m3 {pub: in};
    var q_m: m3 {init: q_m_init, pub: out};
    // var R_svc: js_per_m6 ;
    //  Constitutive Relations
    //  var N: dimensionless {pub: in};
    // var K_af: J_per_m2 {pub: in};
    //  var u_af: J_per_m3 {pub: out};
    var a: m3_per_J {pub: in};
    // var a: m3_per_J {init: 7.8867e-4};
    var b: m3_per_J {pub: in};
    var R_pv0_mid: J_per_m4_s {pub: in};
    var d_ec: meter {pub: in};
    var del_pvm: J_per_m3 {pub: out};
    var Q_delaypv: m3_per_s {pub: out};
    ode(v_w, t) = (Q_delaypv-v_w)/delT;
    Q_delaypv = (u_w-u_m)/R_pvm;
    R_pvm = R_pv0_mid/(2{dimensionless}*pi*L*D/d_ec*(cosh(a*del_pvm)-1{dimensionless})*exp(-b*del_pvm));
    del_pvm = u_w-u_m;
    ode(u_in, t) = 2{dimensionless}*(v_p1+v_p2-v_p31)/C_L;
    ode(q_m, t) = v_w-v_p32+v_p31;
    R_p = 64{dimensionless}*mu*L/(pi*pow(D, 4{dimensionless}));
    v_p31 = (u_in-u_m)/(0.5{dimensionless}*R_p);
    u_m = 1{dimensionless}*(q_m-q_0)/C_L+u_w;
    // -u_af;
    //  u_af = N*K_af/(pi*D)*(D0/2{dimensionless}-D/2{dimensionless});
    v_p32 = (u_m-u_out)/(0.5{dimensionless}*R_p+R_sv);
    D = 2{dimensionless}*sqrt(q_m/(pi*L));
    // u_out = u_ec*98.066{dimensionless}/2{dimensionless}*(3{dimensionless}-cos(2{dimensionless}*pi*f_1*t));
    // v_w = (u_w-u_m)/R_pv;
    R_sv = sel
      case u_m >= u_out:
        1e1{Js_per_m6};
      case u_m < u_out:
        1e25{Js_per_m6};
    endsel;
  enddef;
  // //////////////////////

  def comp Lymph_vessel_out as
    // Constitutive parameters
    var delT: second {pub: in};
    var t: second {pub: in};
    var mu: Js_per_m3 {pub: in};
    var L: meter {pub: in};
    var D: meter {pub: out};
    var D_init: meter {pub: in};
    var q_0: m3 {pub: in};
    var C_L: m6_per_J {pub: in};
    var N: dimensionless {pub: in};
    var N2: dimensionless {pub: in};
    // var N: dimensionless {pub: in};
    var R_pvo: Js_per_m6 {pub: out};
    var R_p: Js_per_m6 {pub: out};
    var K_af: J_per_m2 {pub: in};
    var u_af: J_per_m3 {pub: out};
    // var a_f: dimensionless {pub: in};
    var R_sv: Js_per_m6 {pub: out};
    // State Variables
    var v_p321: m3_per_s {pub: in};
    var v_p322: m3_per_s {pub: in};
    var v_p41: m3_per_s {pub: out};
    var v_p42: m3_per_s {pub: out};
    // var q_m: m3 {init: 2e-12, pub: out};
    // var v1: m3_per_s {pub: in};
    // var N: dimensionless {pub: out};
    // var K_af: J_per_m2 {pub: in};
    var v_w: m3_per_s {init: 2e-12, pub: out};
    var u_w: J_per_m3 {pub: in};
    var u_m: J_per_m3 {pub: out};
    var u_out: J_per_m3 {pub: in};
    var u_in4: J_per_m3 {init: 150, pub: out};
    var q_m_init: m3 {pub: in};
    var q_m: m3 {init: q_m_init, pub: out};
    // var R_svc: js_per_m6 ;
    var a: m3_per_J {pub: in};
    // var a: m3_per_J {init: 7.8867e-4};
    var b: m3_per_J {pub: in};
    var R_pv0_out: J_per_m4_s {pub: in};
    var d_ec: meter {pub: in};
    // Constitutive Relations
    var del_pvO: J_per_m3 {pub: out};
    var Q_delayO: m3_per_s {pub: out};
    ode(v_w, t) = (Q_delayO-v_w)/delT;
    Q_delayO = (u_w-u_m)/R_pvo;
    R_pvo = R_pv0_out/(2{dimensionless}*pi*L*D/d_ec*(cosh(a*del_pvO)-1{dimensionless})*exp(-b*del_pvO));
    del_pvO = u_w-u_m;
    ode(u_in4, t) = 2{dimensionless}*(v_p321+v_p322-v_p41)/C_L;
    ode(q_m, t) = v_w-v_p42+v_p41;
    R_p = 64{dimensionless}*mu*L/(pi*pow(D, 4{dimensionless}));
    v_p41 = (u_in4-u_m)/(0.5{dimensionless}*R_p);
    u_m = 2{dimensionless}*(q_m-q_0)/C_L+u_w-u_af;
    u_af = N*K_af*N2*D_init;
    v_p42 = (u_m-u_out)/(0.5{dimensionless}*R_p+R_sv);
    D = 2{dimensionless}*sqrt(q_m/(pi*L));
    // u_out = u_ec*98.066{dimensionless}/2{dimensionless}*(3{dimensionless}-cos(2{dimensionless}*pi*f_1*t));
    // v_w = (u_w-u_m)/R_pv;
    // R_pvo = sel
    //  case u_w >= u_m:
    //     1000{dimensionless}/(2{dimensionless}*pi*L*D/d_ec*(cosh(a*del_pvO)-1{dimensionless})*exp(-b*del_pvO));
    //  otherwise:
    //        1e25{Js_per_m6};
    // endsel;
    R_sv = sel
      case u_m >= u_out:
        1e0{Js_per_m6};
      case u_m < u_out:
        1e25{Js_per_m6};
    endsel;
  enddef;
  // //////////////////////////////////////////////////////////////////////

  def comp intersttitial_space as
    var t: second {pub: in};
    var u_ec: J_per_m3 {pub: in};
    var f_1: Hz {pub: in};
    var f_2: Hz {pub: in};
    // var t_01: second {pub: in};
    var mu: Js_per_m3 {pub: in};
    var r: meter {pub: in};
    var D: meter {pub: in};
    // var P_e: dyn_per_cm2 {init: 2100};
    var K: m2 {pub: in};
    var R_I: Js_per_m6 {pub: out};
    // var u_in1: J_per_m3 {init: 150};
    var u_e: J_per_m3 {pub: out};
    var v_wI: m3_per_s {pub: in};
    var v_I: m3_per_s {pub: out};
    var C_I: m6_per_J {pub: in};
    // {init: 6.0015e-15};
    var u_wI: J_per_m3 {init: 150, pub: out};
    var L: meter {pub: in};
    R_I = mu*ln((2{dimensionless}*r+D)/D)/(2{dimensionless}*pi*L*K);
    u_e = u_ec*98.066{dimensionless}/2{dimensionless}*(3{dimensionless}-cos(2{dimensionless}*pi*f_1*t));
    // mu*ln((2{dimensionless}*r+D)/D)/(2{dimensionless}*pi*L*K);
    ode(u_wI, t) = (v_I-v_wI)/C_I;
    v_I = (u_e-u_wI)/R_I;
  enddef;

  def comp vp_nonlinear_lymphatic_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q_total = q_C+q_us;
    // calculated radius
    r = sqrt(q_total/(pi*l));
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_nonlinear_lymphatic_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    q_total = q_C+q_us;
    // calculated radius
    r = sqrt(q_total/(pi*l));
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp K_mod_fitz_hugh_nagumo as
    var t: second {pub: in};
    // constants and algebraic variables
    var t_excited: second {pub: in};
    var f_min: per_s {pub: in};
    var f_Ca: per_s {pub: in};
    var I_mean: dimensionless {pub: out};
    var R_I: dimensionless {pub: in};
    var n_Ca: dimensionless {pub: in};
    var lambda_Ca: dimensionless {pub: in};
    var k1_Ca: per_s {pub: out};
    var k2_Ca: per_s {pub: out};
    var k_rel: per_s {pub: in};
    var a_1: per_s {pub: in};
    var a_2: dimensionless {pub: in};
    var a_3: dimensionless {pub: in};
    var b_1: per_s {pub: in};
    var b_2: per_s {pub: in};
    var c_1: per_s {pub: in};
    var c_2: per_s {pub: in};
    var k_NO: dimensionless {pub: in};
    var tau_NO: pascal {pub: in};
    var n_NO: dimensionless {pub: in};
    var f_I: per_s {pub: out};
    var f_NO: per_s {pub: out};
    var f_s: per_s {pub: out};
    var mu: Js_per_m3 {pub: in};
    // variables from vessel model
    var flow: m3_per_s {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    // derived variables from vessel model;
    var tau: pascal {pub: out};
    var lambda_theta: dimensionless {pub: out};
    // vessel stiffness variables
    var K_min: pascal {pub: in};
    var K_max: pascal {pub: in};
    var K: pascal {pub: out};
    // state variables
    var v: dimensionless {init: v_init, pub: out};
    var w: dimensionless {init: w_init, pub: out};
    var I: dimensionless {init: I_init, pub: out};
    var s: dimensionless {init: s_init, pub: out};
    var v_init: dimensionless {pub: in};
    var w_init: dimensionless {pub: in};
    var I_init: dimensionless {pub: in};
    var s_init: dimensionless {pub: in};
    ode(v, t) = a_1*(v*(v-a_2)*(1{dimensionless}-a_3*v)-w+v*I);
    ode(w, t) = b_1*v*sqr(1{dimensionless}-v)-b_2*w;
    ode(I, t) = f_I;
    ode(s, t) = f_s;
    // calculations for f variables
    I_mean = a_2+sqrt(b_1/a_1);
    k1_Ca = I_mean/(1{dimensionless}/f_min-t_excited);
    k2_Ca = I_mean/(1{dimensionless}/f_Ca-t_excited)-I_mean/(1{dimensionless}/f_min-t_excited);
    f_I = sel
      case sqrt(sqr(v)+sqr(w)) <= R_I:
        (k1_Ca+k2_Ca*pow(lambda_theta/lambda_Ca, n_Ca))*f_NO;
      otherwise:
        -I*k_rel;
    endsel;
    f_NO = 1{dimensionless}-k_NO*(2{dimensionless}/(1{dimensionless}+exp(-pow(abs(tau/tau_NO), n_NO)))-1{dimensionless});
    f_s = sel
      case v > 0{dimensionless}:
        c_1*v*(1{dimensionless}-s);
      otherwise:
        -c_2*s;
    endsel;
    lambda_theta = r/r_us;
    // equation for shear stress derived
    tau = 4{dimensionless}*mu*flow/(pi*pow(r, 3{dimensionless}));
    // K modification part
    K = K_min+s*(K_max-K_min);
  enddef;

  def comp vv_nonlinear_lymphatic_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    // var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    // var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_half_total: m3 {pub: out};
    var q_half_total_d: m3 {pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_half_us: m3 {pub: out};
    // Constitutive Relations
    I = rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // R_v = 0.01{second}/C;
    q_us = pi*sqr(r_us)*l;
    q_half_us = q_us/2{dimensionless};
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q_half_total = q_C+q_half_us;
    // u_C           = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    q_half_total_d = q_C_d+q_half_us;
    q_total = q_half_total+q_half_total_d;
    // calculated radius
    r = sqrt(q_total/(pi*l));
    // u_C_d         = q_C_d/(C/2{dimensionless})+u_ext;
    // u             = u_C+2{dimensionless}*R_v*(v_in-v);
    // u_d           = u_C_d+2{dimensionless}*R_v*(v-v_out);
    u = K_tube*(pow(q_half_total/q_half_us, m_tube)-pow(q_half_total/q_half_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_half_total_d/q_half_us, m_tube)-pow(q_half_total_d/q_half_us, n_tube))+u_ext;
  enddef;

  def comp pp_valve_type as
    var t: second {pub: in};
    var v: m3_per_s {init: 0, pub: out};
    var L: Js2_per_m6 {pub: out};
    var A_eff: m2 {pub: out};
    var A_nn: m2 {pub: in};
    var K_vo: m3_per_Js {pub: in};
    var K_vc: m3_per_Js {pub: in};
    var M_rg: dimensionless {pub: in};
    var M_st: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B: Js2_per_m9 {pub: out};
    var zeta: dimensionless {pub: out};
    var zeta_pre: dimensionless {init: 0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var l_eff: metre {pub: in};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    // Valve model
    B = rho/(2{dimensionless}*sqr(A_eff)+eps_m4);
    L = rho*l_eff/(A_eff+eps_m2);
    A_eff = (M_st*A_nn-M_rg*A_nn)*zeta+M_rg*A_nn;
    ode(zeta_pre, t) = sel
      case u_in >= u_out:
        (1{dimensionless}-zeta_pre)*K_vo*(u_in-u_out);
      otherwise:
        zeta_pre*K_vc*(u_in-u_out);
    endsel;
    // The below ensures zeta can't be negative
    zeta = max(zeta_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v, t) = (-B*v*abs(v)+u_in-u_out)/L;
  enddef;
enddef;
