def model modules as
  // Your code goes here
  // **************************SAN cell membrane potential module****************//

  def comp HH_simple as
    var t: second {pub: in};
    // some physical constant
    // universal gas constant
    var R: joule_per_kilomole_kelvin {pub: in};
    // absolute temperature for 37 centidegree
    var T: kelvin {pub: in};
    // Faraday constant
    var F: coulomb_per_mole {pub: in};
    // cell capacitance
    var C: microF {pub: in};
    // declare and initilize the V_ode variable
    var V_init: millivolt {pub: in};
    var clamp_mode: dimensionless {pub: in};
    // clamp mode condition
    var V_clamp: millivolt {pub: in};
    // declare different ion current
    var i_f: nanoA {pub: in};
    var i_KACh: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Kur: nanoA {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    // output parameters
    var RTONF: millivolt {pub: out};
    var i_tot: nanoA {pub: out};
    var V: millivolt {pub: out};
    var V_ode: millivolt {init: V_init};
    // calculated constant value
    RTONF = R*T/F;
    // declare a total current variable
    i_tot = i_f+i_KACh+i_to+i_Na+i_NaK+i_NaCa+i_Kur+i_CaL+i_Ks+i_Kr+i_CaT;
    // classic formula
    ode(V_ode, t) = -i_tot/C;
    // if preset 1, never use differential formula to calculate the action potential
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
  enddef;
  // **************************Voltage_clamp experiment control****************//

  def comp Voltage_clamp as
    var t: second {pub: in};
    // this function used to test before modify model
    var t_holding: second {pub: in};
    var t_test: second {pub: in};
    // preset test time period, initial value is 0.5s
    var V_test: millivolt {pub: in};
    // only during test time, the action potential set to this value
    var V_holding: millivolt {pub: in};
    // other time, the action potential recovery to this value
    var V_clamp: millivolt {pub: out};
    V_clamp = sel
      case (t > t_holding) and (t < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
    // Used to test changes in related currents observed for a specific action potential that given a specific time period
  enddef;
  // **************************SNS/PNS effect SAN cell mechanism****************//
  // **************************SNS/PNS effect SAN cell mechanism****************//

  def comp NES_experiments as
    var t: second {pub: in};
    var ACh_init: nM {pub: in};
    var ACh: nM {init: ACh_init, pub: out};
    var ISO_init: nM {pub: in};
    var ISO: nM {init: ISO_init, pub: out};
    var test_transp: dimensionless {init: 2000, pub: out};
    var cAMP_nif: uM {pub: out};
    var PDE_cAMP: uM {pub: in};
    // basal CaMKII mechanism maintain basal cAMP/Ca ion balance in cell
    var cAMP_basal: uM {pub: out};
    var AC_basal: nmole {pub: out};
    var ACCa_max: nmol_per_umeter2 {pub: in};
    var Area_Ca: umeter2 {pub: in};
    var EC50_Ca: nM {pub: in};
    var CaMKII: nM {pub: in};
    var AC2cAMP_conversion: per_cmeter3 {pub: in};
    // ACh bind M2R process
    var M2_max: nmol_per_umeter2 {pub: in};
    var M2R: nmole {pub: out};
    var Area_M2R: umeter2 {pub: in};
    var IC50_M2: nM {pub: in};
    var k_M2bindGi: dimensionless {pub: in};
    var Gi_M2: nmole {pub: out};
    // ISO bind beta-AR process
    var beta_ntotal: nmol_per_umeter2 {pub: in};
    var k_beta1: dimensionless {pub: in};
    var K_beta2: dimensionless {pub: in};
    var beta1_max: nmol_per_umeter2 {pub: out};
    var beta2_max: nmol_per_umeter2 {pub: out};
    var Area_betaAR: umeter2 {pub: in};
    var EC50_beta1: nM {pub: in};
    var beta1_actived: nmole {pub: out};
    var EC50_beta2: nM {pub: in};
    var beta2_actived: nmole {pub: out};
    var IC50_beta2: nM {pub: in};
    var beta2_inhibited: nmole {pub: out};
    var k_b1coupleGs: dimensionless {pub: in};
    var Gs_beta1: nmole {pub: out};
    // high ISO lead to beta2-AR bind Gi
    var PKA_init: dimensionless {pub: in};
    var PKA: dimensionless {init: PKA_init, pub: out};
    var T_PKAPbeta2: dimensionless {pub: in};
    var Gi_beta2: nmole {pub: out};
    var k_b2coupleGi: dimensionless {pub: in};
    var Gs_beta2: nmole {pub: out};
    var k_b2coupleGs: dimensionless {pub: in};
    var GS_total: nmole {pub: out};
    var Gi_total: nmole {pub: out};
    var EC50_Gs: nmole {pub: in};
    var k_Gi: dimensionless {pub: in};
    var AC_maxstimulated: nmole {pub: in};
    var AC_actived: nmole {pub: out};
    var cAMP: uM {pub: out};
    var T_cAMPPKA: uM {pub: in};
    var PKA_new: dimensionless {pub: out};
    // //*****************simplified equations about Ca to cAMP basal********************////
    AC_basal = ACCa_max*Area_Ca*pow(CaMKII, 1{dimensionless})/(pow(EC50_Ca, 1{dimensionless})+pow(CaMKII, 1{dimensionless}));
    cAMP_basal = AC2cAMP_conversion*AC_basal;
    // //*****************simplified equations about ACh to Gi********************////
    M2R = M2_max*Area_M2R*pow(ACh, 1{dimensionless})/(pow(IC50_M2, 1{dimensionless})+pow(ACh, 1{dimensionless}));
    Gi_M2 = M2R*k_M2bindGi;
    // //*****************simplified equations about ISO to Gs/Gi********************////
    // 1st step, calculate the maximum beta1-AR proportion/number in total beta-AR of SAN cell
    beta1_max = beta_ntotal*k_beta1;
    beta2_max = beta_ntotal*K_beta2;
    // from ISO to beta-AR relationship, reference HILL equation as previous paper:<PHARMACOLOGICAL CHARACTERIZATION OF THE POST JUNCTIONAL 13-ADRENOCEPTORS IN THE RAT GASTRIC FUNDUS>
    beta1_actived = beta1_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta1, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    beta2_actived = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(EC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    beta2_inhibited = beta2_max*Area_betaAR*pow(ISO, 1{dimensionless})/(pow(IC50_beta2, 1{dimensionless})+pow(ISO, 1{dimensionless}));
    Gs_beta1 = beta1_actived*k_b1coupleGs;
    Gi_beta2 = sel
      case PKA < T_PKAPbeta2:
        0{nmole};
      otherwise:
        beta2_inhibited*k_b2coupleGi;
    endsel;
    // total number of beta2-AR is limited, so, some beta2-AR phosphorylated, less Gs protein actived
    Gs_beta2 = sel
      case PKA < T_PKAPbeta2:
        beta2_actived*k_b2coupleGs;
      otherwise:
        beta2_actived*k_b2coupleGs-beta2_inhibited*k_b2coupleGi;
    endsel;
    // //*****************simplified equations about Gs/Gi to AC********************////
    GS_total = Gs_beta1+Gs_beta2;
    Gi_total = Gi_beta2+Gi_M2;
    AC_actived = AC_maxstimulated*GS_total/(EC50_Gs+GS_total+k_Gi*Gi_total);
    // //*****************simplified equations about AC to catalyze cAMP********************////
    cAMP = AC2cAMP_conversion*AC_actived;
    // //*****************simplified equations about total cAMP product********************////
    cAMP_nif = (PDE_cAMP+cAMP_basal+cAMP)*1{dimensionless};
    // //*****************simplified equation parameters about cAMP to PKA********************////
    // therefore, the PKA range is [0.0296->0.808->0.9922] while cAMP from 0 to infinity
    PKA_new = sel
      case cAMP_nif < T_cAMPPKA:
        -0.9483{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0656{dimensionless})+0.9778{dimensionless};
      otherwise:
        -0.4526{dimensionless}*exp(-1{per_uM}*cAMP_nif*0.0340{dimensionless})+0.9922{dimensionless};
    endsel;
  enddef;
  // **************************steady state variable****************//
  // **************************Ionic_values module****************//

  def comp Ionic_values as
    var t: second {pub: in};
    // declare and define some fixed ion variable value, such as concentrations
    // global constant
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    // calculated variable, from other module
    var Nai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    // calculated variable, as output
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
  enddef;
  // **************************Nai_concentration module****************//

  def comp Nai_concentration as
    var t: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    // those common variable use the membrane shared
    var Nai_clamp: dimensionless {pub: in};
    var V_sub: millimetre3 {pub: in};
    var V_i: millimetre3 {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    // not mention on the paper, but looks like just package all Na input related variables
    var Nai: millimolar {pub: out};
    var Nai_: millimolar {init: 5};
    ode(Nai_, t) = (1{dimensionless}-Nai_clamp)*(-1{mA_nA})*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = Nai_;
    // so, Na input variable is not a constant value, it will be change by dependences
  enddef;
  // **************************Cell_parameters module****************//

  def comp Cell_parameters as
    var t: second {pub: in};
    var V_jsr_part: dimensionless {pub: in};
    var V_i_part: dimensionless {pub: in};
    var V_nsr_part: dimensionless {pub: in};
    var R_cell: micrometre {pub: in};
    var L_cell: micrometre {pub: in};
    var L_sub: micrometre {pub: in};
    var V_i: millimetre3 {pub: out};
    var V_sub: millimetre3 {pub: out};
    var V_jsr: millimetre3 {pub: out};
    var V_nsr: millimetre3 {pub: out};
    var V_cell: millimetre3;
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;
  // ***************Dynamics of Ca ion concentrations in cell compartments****************//

  def comp Ca_dynamics as
    var t: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V_i: millimetre3 {pub: in};
    var V_jsr: millimetre3 {pub: in};
    var V_nsr: millimetre3 {pub: in};
    var V_sub: millimetre3 {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var j_SRCarel: millimolar_per_second {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: in};
    var j_tr: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_second {pub: in};
    var delta_fCMi: per_second {pub: in};
    var delta_fCMs: per_second {pub: in};
    var delta_fTC: per_second {pub: in};
    var delta_fCQ: per_second {pub: in};
    var Cai: millimolar {init: 9.15641e-6, pub: out};
    var Ca_nsr: millimolar {init: 0.435148, pub: out};
    var Ca_jsr: millimolar {init: 0.409551, pub: out};
    var Ca_sub: millimolar {init: 6.226104e-5, pub: out};
    ode(Cai, t) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, t) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, t) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, t) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;
  // ***************SR release Ca ions in cell compartments****************//

  def comp Ca_SR_release as
    var t: second {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var j_SRCarel: millimolar_per_second {pub: out};
    var diff: millimolar;
    var P_tot: dimensionless;
    var R: dimensionless {init: 0.9308};
    var O: dimensionless {init: 6.181512e-9};
    var I: dimensionless {init: 4.595622e-10};
    var RI: dimensionless {init: 0.069199};
    var ks: per_second {init: 148041085.1};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.6829};
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_second;
    var kiSRCa: per_millimolar_second;
    var koCa: per_millimolar2_second {init: 10000};
    var kiCa: per_millimolar_second {init: 500};
    var kCaSR: dimensionless;
    var kim: per_second {init: 5};
    var kom: per_second {init: 660};
    // the KoCa should calibrated by formula, but I don't know how to get RyR_min and other parameters, based on Linder's paper table4
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    diff = Ca_jsr-Ca_sub;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, t) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, t) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, t) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, t) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
    P_tot = R+O+I+RI;
  enddef;
  // ***************SR influx Ca ion in cell compartments****************//

  def comp Ca_intracellular_fluxes as
    var t: second {pub: in};
    var ACh: millimolar {pub: in};
    var ISO: nM {pub: in};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: out};
    var j_up: millimolar_per_second {pub: out};
    var j_tr: millimolar_per_second {pub: out};
    var tau_dif_Ca: second {init: 5.469e-5};
    var tau_tr: second {init: 0.04};
    var P_up: millimolar_per_second;
    var P_up_basal: millimolar_per_second {init: 5};
    var b_up: dimensionless;
    var K_up: millimolar {init: 0.000286113};
    var slope_up: millimolar {init: 5e-5};
    b_up = sel
      case ISO > 0{nM}:
        -0.25{dimensionless};
      case ACh > 0{millimolar}:
        0.7{dimensionless}*ACh/(0.00009{millimolar}+ACh);
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+exp((-Cai+K_up)/slope_up));
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;
  // ***************Buffer of Ca ion in cell compartments****************//

  def comp Ca_buffering as
    var t: second {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_second {pub: out};
    var delta_fTMC: per_second {pub: out};
    var delta_fCMs: per_second {pub: out};
    var delta_fCMi: per_second {pub: out};
    var delta_fCQ: per_second {pub: out};
    var delta_fTMM: per_second;
    var fTMM: dimensionless {init: 0.653777};
    var fCMi: dimensionless {init: 0.217311};
    var fCMs: dimensionless {init: 0.158521};
    var fTC: dimensionless {init: 0.017929};
    var fTMC: dimensionless {init: 0.259947};
    var fCQ: dimensionless {init: 0.138975};
    var kf_TC: per_millimolar_second {init: 88800};
    var kf_TMM: per_millimolar_second {init: 2277};
    var kf_TMC: per_millimolar_second {init: 227700};
    var kf_CM: per_millimolar_second {init: 1.642e6};
    var kf_CQ: per_millimolar_second {init: 175.4};
    var kb_TC: per_second {init: 446};
    var kb_TMC: per_second {init: 7.51};
    var kb_TMM: per_second {init: 751};
    var kb_CM: per_second {init: 542};
    var kb_CQ: per_second {init: 445};
    var Mgi: millimolar {init: 2.5};
    ode(fTC, t) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, t) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, t) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, t) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, t) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, t) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;
  // **************************I_f current module****************//

  def comp i_f as
    var t: second {pub: in};
    var Ko: millimolar {pub: in};
    var blockade: dimensionless {pub: in};
    var g_f: microS {pub: in};
    var Km_f: millimolar {pub: in};
    var alpha: dimensionless {pub: in};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var y: dimensionless {pub: in};
    var G_f: microS {pub: out};
    var g_f_Na: microS {pub: out};
    var G_f_Na: microS {pub: out};
    var g_f_K: microS {pub: out};
    var G_f_K: microS {pub: out};
    var i_fK: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var i_f: nanoA {pub: out};
    G_f = g_f/(Ko/(Ko+Km_f));
    G_f_K = G_f/(alpha+1{dimensionless});
    G_f_Na = alpha*G_f_K;
    g_f_Na = G_f_Na*Ko/(Ko+Km_f);
    g_f_K = G_f_K*Ko/(Ko+Km_f);
    i_fNa = y*g_f_Na*(V-E_Na)*(1{dimensionless}-blockade);
    i_fK = y*g_f_K*(V-E_K)*(1{dimensionless}-blockade);
    // according to the definition, I_f peak position should around action potential hyperpolarization position, but in the simulation result, not match!!!
    // it dependence on the coefficient 'tau_y'
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var t: second {pub: in};
    var y_init: dimensionless {pub: in};
    // this variable parameter preset value just temporary, and I think use this value will make the result more closely
    var cAMP_iter: dimensionless {pub: in};
    // var cAMP_iter: dimensionless {init: 1};
    // I don't know why consider y_shift
    var y_shift: millivolt {pub: in};
    var K_If: millivolt {pub: in};
    var K05_If: uM {pub: in};
    var ACh: millimolar {pub: in};
    var cAMP_nif: uM {pub: in};
    var V: millivolt {pub: in};
    var cAMP_out: dimensionless {init: 0, pub: out};
    var cAMP_out2: uM {pub: out};
    var y_infinity: dimensionless {pub: out};
    var ACh_shift: millivolt {pub: out};
    var Iso_shift: millivolt {pub: out};
    var Iso_shift2: millivolt {pub: out};
    var tau_y: second {pub: out};
    var y: dimensionless {init: y_init, pub: out};
    // the EC50=1.26E-8M(close), max=-7.2,nf=0.69(close) in rabbit SAN cell, based on<Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    ode(cAMP_out, t) = 1{per_second};
    cAMP_out2 = cAMP_out*0{uM}+cAMP_nif;
    // Iso_shift = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         7.5{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    // based on Linder's paper<Sympathetic Stimulation Can Compensate for  Hypocalcaemia-Induced Bradycardia in Human and  Rabbit Sinoatrial Node Cells> table1, but not build relationship yet
    // n=7 (based on <Real-time relationship between PKA biochemical signal network dynamics and increased action potential firing rate in heart pacemaker cells> p6 that AP firing rate in response to ISO)
    // according to Fabbri model, Iso_shift_max = 7.5mV, but not find the calculation formula, so just multiple a coefficient 1.33, <An updated computational model of rabbit sinoatrial action potential to investigate the mechanisms of heart rate modulation>
    // need check later!!! the range is [-24.4,7.5],the original should multiple with 1.0e-6
    // in here, we assume that protein concentration = 1000 mg/L, so K05_If=17.33 nM
    Iso_shift2 = (K_If*pow(1{per_uM}*cAMP_nif, 1{dimensionless})/(1.0{dimensionless}*pow(1{per_uM}*K05_If, 1{dimensionless})+pow(1{per_uM}*cAMP_nif, 1{dimensionless}))-18.76{millivolt})*1.33{dimensionless};
    // Iso_shift = Iso_shift2;
    Iso_shift = sel
      case Iso_shift2 > 0{millivolt}:
        Iso_shift2;
      otherwise:
        0{millivolt};
    endsel;
    // not totally match with the paper, add ACh and ISO influence factors
    // from mathematic aspect, could explain that this coefficient could delay the I_f activate time
    tau_y = 1{dimensionless}/(0.36{per_millivolt_second}*(V+148.8{millivolt}-ACh_shift-Iso_shift)/(exp(0.066{per_millivolt}*(V+148.8{millivolt}-ACh_shift-Iso_shift))-1{dimensionless})+0.1{per_millivolt_second}*(V+87.3{millivolt}-ACh_shift-Iso_shift)/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+87.3{millivolt}-ACh_shift-Iso_shift))))-0.054{second};
    y_infinity = sel
      case V < -(80{millivolt}-ACh_shift-Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1{dimensionless}+exp((V+97.134{millivolt}-ACh_shift-Iso_shift-y_shift)/8.1752{millivolt}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-Iso_shift-y_shift)/12.861{millivolt});
    endsel;
    ode(y, t) = (y_infinity-y)/tau_y;
  enddef;
  // **************************I_KACh current module****************//

  def comp i_KACh as
    var t: second {pub: in};
    var g_KACh: microS {pub: in};
    var ACh: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var a: dimensionless {pub: in};
    var ACh_on: dimensionless {pub: in};
    var i_KACh: nanoA {pub: out};
    // add a switch
    // this paper's i_KACh equation different: <Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    i_KACh = sel
      case ACh > 0{millimolar}:
        ACh_on*g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp i_KACh_a_gate as
    var t: second {pub: in};
    var a_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var ACh: millimolar {pub: in};
    var a: dimensionless {init: a_init, pub: out};
    var alpha_a: per_second;
    var beta_a: per_second;
    var a_infinity: dimensionless;
    var tau_a: second;
    alpha_a = (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1{per_millimolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    beta_a = 10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, t) = (a_infinity-a)/tau_a;
  enddef;
  // **************************I_to current module****************//

  def comp i_to as
    var t: second {pub: in};
    var g_to: microS {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var q: dimensionless {pub: in};
    var r: dimensionless {pub: in};
    var i_to: nanoA {pub: out};
    i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_to_q_gate as
    var t: second {pub: in};
    var q_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var q: dimensionless {init: q_init, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, t) = (q_infinity-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var t: second {pub: in};
    var r_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var r: dimensionless {init: r_init, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, t) = (r_infinity-r)/tau_r;
  enddef;
  // **************************I_Na current module****************//

  def comp i_Na as
    var t: second {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var g_Na: microS {pub: in};
    var g_Na_L: microS {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var m: dimensionless {pub: in};
    var h: dimensionless {pub: in};
    var i_Na: nanoA {pub: out};
    var i_Na_: nanoA;
    var i_Na_L: nanoA;
    var E_mh: millivolt;
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
    i_Na_ = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
    // not sure why in here add a new algorithm to calculate the i_Na, although preset 0
    i_Na_L = g_Na_L*pow(m, 3{dimensionless})*(V-E_mh);
    i_Na = i_Na_+i_Na_L;
  enddef;

  def comp i_Na_m_gate as
    var t: second {pub: in};
    var m_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var delta_m: millivolt {pub: in};
    var m: dimensionless {init: m_init, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var m_infinity: dimensionless;
    var tau_m: second;
    var E0_m: millivolt;
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+42.0504{millivolt})/8.3106{millivolt}));
    E0_m = V+41{millivolt};
    // if the voltage too small, use preset parameter
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, t) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var t: second {pub: in};
    var h_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var h: dimensionless {init: h_init, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless;
    var tau_h: second;
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+69.804{millivolt})/4.4565{millivolt}));
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, t) = (h_infinity-h)/tau_h;
  enddef;
  // **************************I_CaL current module****************//

  def comp i_CaL as
    var t: second {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var P_CaL: nanoA_per_millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var PKA_new: dimensionless {pub: in};
    var ACh: millimolar {pub: in};
    var dL: dimensionless {pub: in};
    var fL: dimensionless {pub: in};
    var fCa: dimensionless {pub: in};
    var i_CaL: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var i_siK: nanoA;
    var ACh_block: dimensionless;
    var Iso_increase: dimensionless;
    var Iso_increase2: dimensionless;
    // var ISO: nM {pub: in};
    Iso_increase2 = (-0.2152{dimensionless}+0.4707{dimensionless}*pow(PKA_new, 10.0808{dimensionless}))/(pow(0.7303{dimensionless}, 10.0808{dimensionless})+pow(PKA_new, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // 3 formulas are match with the paper
    i_siCa = 2{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Ko*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    // in here, also add a block coefficient
    // the EC50=9E-8M(same), max=0.56 in rabbit SAN cell, based on<Analysis of the Chronotropic Effect of Acetylcholine on Sinoatrial Node Cells>
    ACh_block = 0.31{dimensionless}*ACh/(ACh+0.00009{millimolar});
    i_CaL = (i_siCa+i_siK+i_siNa)*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase;
  enddef;

  def comp i_CaL_dL_gate as
    var t: second {pub: in};
    var dL_init: dimensionless {pub: in};
    var k_dL: millivolt {pub: in};
    var V_dL: millivolt {pub: in};
    // add new equation about Iso_shift/Iso_slope that control by PKA, b-AR -> AC -> cAMP -> PKA
    var PKA_new: dimensionless {pub: in};
    var V: millivolt {pub: in};
    // var ISO: nM {pub: in};
    var dL: dimensionless {init: dL_init, pub: out};
    var Iso_shift_dL2: millivolt;
    var Iso_slope_dL2: dimensionless;
    var Iso_shift_dL: millivolt;
    var Iso_slope_dL: dimensionless;
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var alpha_dL: per_second;
    var beta_dL: per_second;
    var adVm: millivolt;
    var bdVm: millivolt;
    // those are original formula by Fabbri fitting
    // Iso_shift_dL = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         -8{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    // Iso_slope_dL = sel
    //    case Iso_1_nM > 0{dimensionless}:
    //      -27{dimensionless};
    //    otherwise:
    //         0{dimensionless};
    // endsel;
    // add new equation about Iso_shift/Iso_slope that control by PKA, b-AR -> AC -> cAMP -> PKA, from Linder's paper table2
    // the Iso_shift_dL2 range is [18.76,-8.14], the Iso_slope_dL2 range is [0.657,0.935]
    // calibrated by original formula, the Iso_shift_dL should not be positive value
    Iso_shift_dL2 = -1{millivolt}*(27.5262{dimensionless}*pow(PKA_new, 9.281{dimensionless})/(pow(0.6615{dimensionless}, 9.281{dimensionless})+pow(PKA_new, 9.281{dimensionless}))-18.76{dimensionless});
    // if directly use Iso_shift_dL2, need Iso>0.095 that activate the Iso_shift_dL2 make it lower than 0
    // Iso_shift_dL = Iso_shift_dL2;
    Iso_shift_dL = sel
      case Iso_shift_dL2 > 0{millivolt}:
        0{millivolt};
      otherwise:
        Iso_shift_dL2;
    endsel;
    // I don't know why substract 17 then the results of I_CaL are similar with original results while set Iso=0.1!!!
    // based on the PKA range is [0.0296,0.9922], so the Iso_slope_dL2 range is [2.0782,0.6572]
    // maybe the key is make Iso_slope_dL2 lower than 1(the I_CaL activated only Iso>0.95, that while PKA>0.76, then make Iso_slope_dL2<1)
    Iso_slope_dL2 = -1.4762{dimensionless}*PKA_new+2.1219{dimensionless};
    // increase the constant value could make the cycle more longer, but sometimes Iso=0 CANNOT active the current
    // Iso_slope_dL = Iso_slope_dL2 - 0.0{dimensionless};
    Iso_slope_dL = 0{dimensionless};
    // this formula is different from paper
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_dL-Iso_shift_dL)/(k_dL*(1{dimensionless}+Iso_slope_dL/100{dimensionless}))));
    // below 2 formulas are match with paper
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt})/(exp(-(adVm+41.8{millivolt})/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt})/(exp(-(adVm+6.8{millivolt})/4.8{millivolt})-1{dimensionless});
    // I don't know why add this switch formula
    adVm = sel
      case V == -41.8{millivolt}:
        -41.80001{millivolt};
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}:
        -6.80001{millivolt};
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt})/(exp((bdVm+1.8{millivolt})/2.5{millivolt})-1{dimensionless});
    // same question, looks like it doesn't need
    bdVm = sel
      case V == -1.8{millivolt}:
        -1.80001{millivolt};
      otherwise:
        V;
    endsel;
    ode(dL, t) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var t: second {pub: in};
    var fL_init: dimensionless {pub: in};
    var k_fL: millivolt {pub: in};
    var shift_fL: millivolt {pub: in};
    var V: millivolt {pub: in};
    var fL: dimensionless {init: fL_init, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt}+shift_fL)/(5.3{millivolt}+k_fL)));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, t) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var t: second {pub: in};
    var fCa_init: dimensionless {pub: in};
    var alpha_fCa: per_second {pub: in};
    var Km_fCa: millimolar {pub: in};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var fCa: dimensionless {init: fCa_init, pub: out};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, t) = (fCa_infinity-fCa)/tau_fCa;
  enddef;
  // **************************I_NaK current module****************//

  def comp i_NaK as
    var t: second {pub: in};
    var Ko: millimolar {pub: in};
    var Km_Kp: millimolar {pub: in};
    var Km_Nap: millimolar {pub: in};
    var i_NaK_max: nanoA {pub: in};
    var Nai: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var PKA_new: dimensionless {pub: in};
    var i_NaK: nanoA {pub: out};
    var Iso_increase: dimensionless;
    var Iso_increase2: dimensionless;
    // the Iso_increase2 range is [-7.38,0.20]
    Iso_increase2 = (-0.2152{dimensionless}+0.4357{dimensionless}*pow(PKA_new, 10.0808{dimensionless}))/(pow(0.7042{dimensionless}, 10.0808{dimensionless})+pow(PKA_new, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1.0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // add a enhanced coefficient
    // original Fabbri fitting
    // Iso_increase = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         1.2{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    i_NaK = Iso_increase*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
  enddef;
  // **************************I_NaCa current module****************//

  def comp i_NaCa as
    var t: second {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var K_NaCa: nanoA {pub: in};
    var Qci: dimensionless {pub: in};
    var Qn: dimensionless {pub: in};
    var Qco: dimensionless {pub: in};
    var K3ni: millimolar {pub: in};
    var Kci: millimolar {pub: in};
    var K1ni: millimolar {pub: in};
    var K2ni: millimolar {pub: in};
    var Kcni: millimolar {pub: in};
    var K3no: millimolar {pub: in};
    var K1no: millimolar {pub: in};
    var K2no: millimolar {pub: in};
    var Kco: millimolar {pub: in};
    var blockade_NaCa: dimensionless {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var i_NaCa: nanoA {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var do: dimensionless;
    var di: dimensionless;
    // add a blockade coefficient about Na-Ca pump
    i_NaCa = (1{dimensionless}-blockade_NaCa)*K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;
  // **************************I_Kur current module****************//

  def comp i_Kur as
    var t: second {pub: in};
    var g_Kur: microS {pub: in};
    var r_Kur: dimensionless {pub: in};
    var s_Kur: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_Kur: nanoA {pub: out};
    i_Kur = g_Kur*r_Kur*s_Kur*(V-E_K);
  enddef;

  def comp i_Kur_rKur_gate as
    var t: second {pub: in};
    var r_Kur_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var r_Kur: dimensionless {init: r_Kur_init, pub: out};
    var tau_r_Kur: second;
    var r_Kur_infinity: dimensionless;
    ode(r_Kur, t) = (r_Kur_infinity-r_Kur)/tau_r_Kur;
    r_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+6{millivolt})/(-8.6{millivolt})));
    tau_r_Kur = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp i_Kur_sKur_gate as
    var t: second {pub: in};
    var s_Kur_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var s_Kur: dimensionless {init: s_Kur_init, pub: out};
    var tau_s_Kur: second;
    var s_Kur_infinity: dimensionless;
    ode(s_Kur, t) = (s_Kur_infinity-s_Kur)/tau_s_Kur;
    s_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+7.5{millivolt})/10{millivolt}));
    tau_s_Kur = 0.59{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+3.05{second};
  enddef;
  // **************************I_Ks current module****************//

  def comp i_Ks as
    var t: second {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    // var g_Ks_: microS {pub: in};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var ISO: nM {pub: in};
    var PKA_new: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var i_Ks: nanoA {pub: out};
    var Iso_increase2: dimensionless;
    var Iso_increase: dimensionless;
    var g_Ks: microS;
    var g_Ks_: microS {init: 0.00065};
    var E_Ks: millivolt;
    // define Iso_increase value
    // from this article <Isoprenaline: A Potential Contributor in Sick Sinus Syndrome—Insights from a Mathematical Model of the Rabbit Sinoatrial Node>, the result current should be new_I_ks=old_I_ks*(1+Iso_increase)
    // the Iso_increase2 range is [-7.38,0.20]
    // Iso_increase = Iso_increase2+1{dimensionless};
    Iso_increase2 = (-0.2152{dimensionless}+0.4357{dimensionless}*pow(PKA_new, 10.0808{dimensionless}))/(pow(0.7042{dimensionless}, 10.0808{dimensionless})+pow(PKA_new, 10.0808{dimensionless}));
    Iso_increase = sel
      case Iso_increase2 > 0{dimensionless}:
        Iso_increase2+1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // add a switch coefficient that shift the voltage value, I think it will make this channel current shift
    g_Ks = sel
      case ISO > 0{nM}:
        Iso_increase*g_Ks_;
      otherwise:
        g_Ks_;
    endsel;
    E_Ks = RTONF*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var t: second {pub: in};
    var n_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var PKA_new: dimensionless {pub: in};
    var n: dimensionless {init: n_init, pub: out};
    var Iso_shift: millivolt;
    var alpha_n: per_second;
    var beta_n: per_second;
    var Iso_shift2: millivolt;
    var n_infinity: dimensionless;
    var tau_n: second;
    // add new equation about Iso_shift that control by PKA, b-AR -> AC -> cAMP -> PKA, from Linder's paper table3
    // the Iso_shift2 range is [18.76,-14.3]
    // the same as I_CaL and I_f, usually need Iso_shift2 lower than 0
    Iso_shift2 = -1{millivolt}*(34.4376{dimensionless}*pow(PKA_new, 9.281{dimensionless})/(pow(0.7042{dimensionless}, 9.281{dimensionless})+pow(PKA_new, 9.281{dimensionless}))-18.76{dimensionless});
    // Iso_shift = Iso_shift2;
    Iso_shift = sel
      case Iso_shift2 > 0{millivolt}:
        0{millivolt};
      otherwise:
        Iso_shift2;
    endsel;
    // original Fabbri fitting
    // Iso_shift = sel
    //     case Iso_1_nM > 0{dimensionless}:
    //         -14{millivolt};
    //     otherwise:
    //         0{millivolt};
    // endsel;
    n_infinity = sqrt(1{dimensionless}/(1{dimensionless}+exp(-(V+0.6383{millivolt}-Iso_shift)/10.7071{millivolt})));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift-5{millivolt})/25{millivolt});
    ode(n, t) = (n_infinity-n)/tau_n;
  enddef;
  // **************************I_Kr current module****************//

  def comp i_Kr as
    var t: second {pub: in};
    var g_Kr: microS {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var paS: dimensionless {pub: in};
    var paF: dimensionless {pub: in};
    var piy: dimensionless {pub: in};
    var i_Kr: nanoA {pub: out};
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp i_Kr_pa_gate as
    var t: second {pub: in};
    var paS_init: dimensionless {pub: in};
    var paF_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var paS: dimensionless {init: paS_init, pub: out};
    var paF: dimensionless {init: paF_init, pub: out};
    var pa_infinity: dimensionless;
    var alfapaF: per_second;
    var betapaF: per_second;
    var tau_paS: second;
    var tau_paF: second;
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    // below all the same as the paper
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.0144{millivolt})/7.6607{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, t) = (pa_infinity-paS)/tau_paS;
    ode(paF, t) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var t: second {pub: in};
    var piy_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var piy: dimensionless {init: piy_init, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, t) = (pi_infinity-piy)/tau_pi;
  enddef;
  // **************************I_CaT current module****************//

  def comp i_CaT as
    var t: second {pub: in};
    var Cao: millimolar {pub: in};
    var P_CaT: nanoA_per_millimolar {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var dT: dimensionless {pub: in};
    var fT: dimensionless {pub: in};
    var i_CaT: nanoA {pub: out};
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var t: second {pub: in};
    var dT_init: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var dT: dimensionless {init: dT_init, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, t) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var t: second {pub: in};
    var fT_init: dimensionless {pub: in};
    var offset_fT: second {pub: in};
    var V: millivolt {pub: in};
    var fT: dimensionless {init: fT_init, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    // this formula add an offset coefficient, not the same as paper
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}))+offset_fT;
    ode(fT, t) = (fT_infinity-fT)/tau_fT;
  enddef;
  // **************************end current module****************//
enddef;
