def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    // Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp rat_flow_interp_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var v: m3_per_s {pub: out};
    var P: J_per_m3 {pub: in};
    var t_loc: second {pub: out};
    t_loc = t-floor(t/T)*T;
    var t_0: second {pub: out};
    var t_1: second {pub: out};
    var t_2: second {pub: out};
    var t_3: second {pub: out};
    var t_4: second {pub: out};
    var t_5: second {pub: out};
    var t_6: second {pub: out};
    var t_7: second {pub: out};
    var t_8: second {pub: out};
    var t_9: second {pub: out};
    var t_10: second {pub: out};
    var t_11: second {pub: out};
    var t_12: second {pub: out};
    var t_13: second {pub: out};
    var t_14: second {pub: out};
    var t_15: second {pub: out};
    var t_16: second {pub: out};
    var t_17: second {pub: out};
    var t_18: second {pub: out};
    var t_19: second {pub: out};
    var t_20: second {pub: out};
    var t_21: second {pub: out};
    var q_0: m3_per_s {pub: out};
    var q_1: m3_per_s {pub: out};
    var q_2: m3_per_s {pub: out};
    var q_3: m3_per_s {pub: out};
    var q_4: m3_per_s {pub: out};
    var q_5: m3_per_s {pub: out};
    var q_6: m3_per_s {pub: out};
    var q_7: m3_per_s {pub: out};
    var q_8: m3_per_s {pub: out};
    var q_9: m3_per_s {pub: out};
    var q_10: m3_per_s {pub: out};
    var q_11: m3_per_s {pub: out};
    var q_12: m3_per_s {pub: out};
    var q_13: m3_per_s {pub: out};
    var q_14: m3_per_s {pub: out};
    var q_15: m3_per_s {pub: out};
    var q_16: m3_per_s {pub: out};
    var q_17: m3_per_s {pub: out};
    var q_18: m3_per_s {pub: out};
    var q_19: m3_per_s {pub: out};
    var q_20: m3_per_s {pub: out};
    var q_21: m3_per_s {pub: out};
    t_0 = 0.0{second};
    t_1 = 0.003814{second};
    t_2 = 0.007183{second};
    t_3 = 0.010553{second};
    t_4 = 0.013923{second};
    t_5 = 0.017292{second};
    t_6 = 0.020662{second};
    t_7 = 0.022346{second};
    t_8 = 0.024031{second};
    t_9 = 0.027401{second};
    t_10 = 0.030770{second};
    t_11 = 0.034140{second};
    t_12 = 0.042564{second};
    t_13 = 0.056042{second};
    t_14 = 0.061097{second};
    t_15 = 0.067836{second};
    t_16 = 0.072194{second};
    t_17 = 0.076097{second};
    t_18 = 0.084683{second};
    t_19 = 0.089738{second};
    t_20 = 0.101531{second};
    t_21 = 0.173913{second};
    q_0 = 0.0{m3_per_s};
    q_1 = 0.0{m3_per_s};
    q_2 = 0.000001901057{m3_per_s};
    q_3 = 0.000004942724{m3_per_s};
    q_4 = 0.000007319059{m3_per_s};
    q_5 = 0.000009695358{m3_per_s};
    q_6 = 0.000010265680{m3_per_s};
    q_7 = 0.000010360743{m3_per_s};
    q_8 = 0.000010265680{m3_per_s};
    q_9 = 0.000009695358{m3_per_s};
    q_10 = 0.000008839901{m3_per_s};
    q_11 = 0.000008174534{m3_per_s};
    q_12 = 0.000005703154{m3_per_s};
    q_13 = 0.000003231792{m3_per_s};
    q_14 = 0.000002471362{m3_per_s};
    q_15 = 0.0{m3_per_s};
    q_16 = -0.000002946640{m3_per_s};
    q_17 = -0.000000380211{m3_per_s};
    q_18 = 0.0{m3_per_s};
    q_19 = 0.000000095053{m3_per_s};
    q_20 = 0.0{m3_per_s};
    q_21 = 0.0{m3_per_s};
    v = sel
      case (t_loc >= t_0) and (t_loc <= t_1):
        (1{dimensionless}-(t_loc-t_0)/(t_1-t_0))*q_0+(t_loc-t_0)/(t_1-t_0)*q_1;
      case (t_loc >= t_1) and (t_loc <= t_2):
        (1{dimensionless}-(t_loc-t_1)/(t_2-t_1))*q_1+(t_loc-t_1)/(t_2-t_1)*q_2;
      case (t_loc >= t_2) and (t_loc <= t_3):
        (1{dimensionless}-(t_loc-t_2)/(t_3-t_2))*q_2+(t_loc-t_2)/(t_3-t_2)*q_3;
      case (t_loc >= t_3) and (t_loc <= t_4):
        (1{dimensionless}-(t_loc-t_3)/(t_4-t_3))*q_3+(t_loc-t_3)/(t_4-t_3)*q_4;
      case (t_loc >= t_4) and (t_loc <= t_5):
        (1{dimensionless}-(t_loc-t_4)/(t_5-t_4))*q_4+(t_loc-t_4)/(t_5-t_4)*q_5;
      case (t_loc >= t_5) and (t_loc <= t_6):
        (1{dimensionless}-(t_loc-t_5)/(t_6-t_5))*q_5+(t_loc-t_5)/(t_6-t_5)*q_6;
      case (t_loc >= t_6) and (t_loc <= t_7):
        (1{dimensionless}-(t_loc-t_6)/(t_7-t_6))*q_6+(t_loc-t_6)/(t_7-t_6)*q_7;
      case (t_loc >= t_7) and (t_loc <= t_8):
        (1{dimensionless}-(t_loc-t_7)/(t_8-t_7))*q_7+(t_loc-t_7)/(t_8-t_7)*q_8;
      case (t_loc >= t_8) and (t_loc <= t_9):
        (1{dimensionless}-(t_loc-t_8)/(t_9-t_8))*q_8+(t_loc-t_8)/(t_9-t_8)*q_9;
      case (t_loc >= t_9) and (t_loc <= t_10):
        (1{dimensionless}-(t_loc-t_9)/(t_10-t_9))*q_9+(t_loc-t_9)/(t_10-t_9)*q_10;
      case (t_loc >= t_10) and (t_loc <= t_11):
        (1{dimensionless}-(t_loc-t_10)/(t_11-t_10))*q_10+(t_loc-t_10)/(t_11-t_10)*q_11;
      case (t_loc >= t_11) and (t_loc <= t_12):
        (1{dimensionless}-(t_loc-t_11)/(t_12-t_11))*q_11+(t_loc-t_11)/(t_12-t_11)*q_12;
      case (t_loc >= t_12) and (t_loc <= t_13):
        (1{dimensionless}-(t_loc-t_12)/(t_13-t_12))*q_12+(t_loc-t_12)/(t_13-t_12)*q_13;
      case (t_loc >= t_13) and (t_loc <= t_14):
        (1{dimensionless}-(t_loc-t_13)/(t_14-t_13))*q_13+(t_loc-t_13)/(t_14-t_13)*q_14;
      case (t_loc >= t_14) and (t_loc <= t_15):
        (1{dimensionless}-(t_loc-t_14)/(t_15-t_14))*q_14+(t_loc-t_14)/(t_15-t_14)*q_15;
      case (t_loc >= t_15) and (t_loc <= t_16):
        (1{dimensionless}-(t_loc-t_15)/(t_16-t_15))*q_15+(t_loc-t_15)/(t_16-t_15)*q_16;
      case (t_loc >= t_16) and (t_loc <= t_17):
        (1{dimensionless}-(t_loc-t_16)/(t_17-t_16))*q_16+(t_loc-t_16)/(t_17-t_16)*q_17;
      case (t_loc >= t_17) and (t_loc <= t_18):
        (1{dimensionless}-(t_loc-t_17)/(t_18-t_17))*q_17+(t_loc-t_17)/(t_18-t_17)*q_18;
      case (t_loc >= t_18) and (t_loc <= t_19):
        (1{dimensionless}-(t_loc-t_18)/(t_19-t_18))*q_18+(t_loc-t_18)/(t_19-t_18)*q_19;
      case (t_loc >= t_19) and (t_loc <= t_20):
        (1{dimensionless}-(t_loc-t_19)/(t_20-t_19))*q_19+(t_loc-t_19)/(t_20-t_19)*q_20;
      case (t_loc >= t_20) and (t_loc <= t_21):
        (1{dimensionless}-(t_loc-t_20)/(t_21-t_20))*q_20+(t_loc-t_20)/(t_21-t_20)*q_21;
    endsel;
  enddef;

  def comp pp_T_R1CR2_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_1_T: Js_per_m6 {pub: in};
    var R_2_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_1_T)/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_2_T)/I_T;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // --------------- NONLINEAR ELASTIC/VISCOELASTIC VESSEL MODULES ---------------//
  // -----------------------------------------------------------------------------//

  def comp pv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    // {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    // boundary_condition provided by its own module
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp pv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vv_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
enddef;
