def model CardiovascularSystem as
  def import using "Units.cellml" for
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m_per_s2 using unit m_per_s2;
    unit m6_per_J using unit m6_per_J;
    unit per_m using unit per_m;
    unit J_per_m3 using unit J_per_m3;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
  enddef;
  def import using "Parameters218.cellml" for
    comp Parameters_Systemic using comp Parameters_Systemic;
    comp Parameters_Pulmonary using comp Parameters_Pulmonary;
    comp Parameters_Heart using comp Parameters_Heart;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // ------------ Systemic Circulation ------------//

  def comp Systemic as
    var t: second {pub: in};
    // gravity
    var beta_g: dimensionless {priv: in};
    // local control gain
    var gain_int: dimensionless {priv: in};
    // Constitutive Parameters
    var C_svl: m6_per_J {pub: in};
    var C_svn: m6_per_J {pub: in};
    var C_svc: m6_per_J {pub: in};
    var C_ivl: m6_per_J {pub: in};
    var C_ivn: m6_per_J {pub: in};
    var C_ivc: m6_per_J {pub: in};
    var R_svl: Js_per_m6 {pub: in};
    var R_svn: Js_per_m6 {pub: in};
    var R_svc: Js_per_m6 {pub: in};
    var R_ivl: Js_per_m6 {pub: in};
    var R_ivn: Js_per_m6 {pub: in};
    var R_ivc: Js_per_m6 {pub: in};
    var I_svl: Js2_per_m6 {pub: in};
    var I_svn: Js2_per_m6 {pub: in};
    var I_svc: Js2_per_m6 {pub: in};
    var I_ivl: Js2_per_m6 {pub: in};
    var I_ivn: Js2_per_m6 {pub: in};
    var I_ivc: Js2_per_m6 {pub: in};
    // Parameters for scaling the resistance
    var alpha_head: dimensionless {init: 1.0, pub: out};
    var alpha_trunk: dimensionless {init: 1.0, pub: out};
    var alpha_peripheral: dimensionless {init: 1.0, pub: out};
    // State Variables
    var u_ra: J_per_m3 {pub: in};
    var u_svl: J_per_m3 {pub: out};
    var u_svn: J_per_m3 {pub: out};
    var u_svc: J_per_m3 {pub: out};
    var u_ivl: J_per_m3 {pub: out};
    var u_ivn: J_per_m3 {pub: out};
    var u_ivc: J_per_m3 {pub: out};
    var q_svl: J_per_m3 {init: 0.0, pub: out};
    var q_svn: J_per_m3 {init: 0.0, pub: out};
    var q_svc: J_per_m3 {init: 0.0, pub: out};
    var q_ivl: J_per_m3 {init: 0.0, pub: out};
    var q_ivn: J_per_m3 {init: 0.0, pub: out};
    var q_ivc: J_per_m3 {init: 0.0, pub: out};
    var v_svl: m3_per_s {init: 0.0, pub: out};
    var v_svn: m3_per_s {init: 0.0, pub: out};
    var v_svc: m3_per_s {init: 0.0, pub: out};
    var v_ivl: m3_per_s {init: 0.0, pub: out};
    var v_ivn: m3_per_s {init: 0.0, pub: out};
    var v_ivc: m3_per_s {init: 0.0, pub: out};
    var v_sup_vcap: m3_per_s {pub: out};
    var v_inf_vcap: m3_per_s {pub: out};
    var v_chest: m3_per_s {pub: out};
    var v_trunk: m3_per_s {pub: out};
    var v_kidneys: m3_per_s {pub: out};
    var v_intestines: m3_per_s {pub: out};
    var v_legs: m3_per_s {pub: out};
    var v_arms: m3_per_s {pub: out};
    var v_head_1: m3_per_s {pub: out};
    var v_head_2: m3_per_s {pub: out};
    var v_head_3: m3_per_s {pub: out};
    var v_head_4: m3_per_s {pub: out};
    var v_head_5: m3_per_s {pub: out};
    var v_head_6: m3_per_s {pub: out};
    var v_head_7: m3_per_s {pub: out};
    var v_head_8: m3_per_s {pub: out};
    var v_head_9: m3_per_s {pub: out};
    var v_head_10: m3_per_s {pub: out};
    var v_head_11: m3_per_s {pub: out};
    var v_head_12: m3_per_s {pub: out};
    var v_head_13: m3_per_s {pub: out};
    var v_head_14: m3_per_s {pub: out};
    var v_posterior_intercostal_T1_R98: m3_per_s {pub: in};
    var v_posterior_intercostal_T1_L102: m3_per_s {pub: in};
    var v_posterior_intercostal_T2_R106: m3_per_s {pub: in};
    var v_posterior_intercostal_T2_L110: m3_per_s {pub: in};
    var v_left_gastric_T3_C120: m3_per_s {pub: in};
    var v_dorsal_pancreatic_T1_C124: m3_per_s {pub: in};
    var v_splenic_T2_C126: m3_per_s {pub: in};
    var v_hepatic_artery_proper_left_branch_C132: m3_per_s {pub: in};
    var v_hepatic_artery_proper_right_branch_C134: m3_per_s {pub: in};
    var v_middle_colic_T8_C140: m3_per_s {pub: in};
    var v_jejunal_3_T10_C144: m3_per_s {pub: in};
    var v_jejunal_6_T11_C148: m3_per_s {pub: in};
    var v_ileocolic_T9_C152: m3_per_s {pub: in};
    var v_ileal_4_T12_C156: m3_per_s {pub: in};
    var v_ileal_6_T13_C160: m3_per_s {pub: in};
    var v_superior_mesenteric_T4_C162: m3_per_s {pub: in};
    var v_inferior_segmental_T5_L170: m3_per_s {pub: in};
    var v_superior_segmental_T4_L172: m3_per_s {pub: in};
    var v_renal_posterior_branch_T3_L174: m3_per_s {pub: in};
    var v_superior_segmental_T4_R182: m3_per_s {pub: in};
    var v_inferior_segmental_T5_R184: m3_per_s {pub: in};
    var v_renal_posterior_branch_T3_R186: m3_per_s {pub: in};
    var v_inferior_mesenteric_T5_C190: m3_per_s {pub: in};
    var v_internal_iliac_T1_R218: m3_per_s {pub: in};
    var v_profundus_T2_R224: m3_per_s {pub: in};
    var v_anterior_tibial_T3_R230: m3_per_s {pub: in};
    var v_posterior_tibial_T4_R236: m3_per_s {pub: in};
    var v_internal_iliac_T1_L196: m3_per_s {pub: in};
    var v_profundus_T2_L202: m3_per_s {pub: in};
    var v_anterior_tibial_T3_L208: m3_per_s {pub: in};
    var v_posterior_tibial_T4_L214: m3_per_s {pub: in};
    var v_posterior_interosseous_T3_R40: m3_per_s {pub: in};
    var v_ulnar_T2_R42: m3_per_s {pub: in};
    var v_radial_T1_R44: m3_per_s {pub: in};
    var v_posterior_interosseous_T3_L88: m3_per_s {pub: in};
    var v_ulnar_T2_L90: m3_per_s {pub: in};
    var v_radial_T1_L92: m3_per_s {pub: in};
    var v_external_carotid_T2_R26: m3_per_s {pub: in};
    var v_external_carotid_T2_L62: m3_per_s {pub: in};
    var v_lateral_occipital_intermediate_temporal_branch_T47_L20: m3_per_s {pub: in};
    var v_lateral_occipital_intermediate_temporal_branch_T76_R216: m3_per_s {pub: in};
    var v_medial_occipital_calcarine_branch_T51_L202: m3_per_s {pub: in};
    var v_medial_occipital_calcarine_branch_T79_R270: m3_per_s {pub: in};
    var v_medial_occipital_occipitotemporal_branch_T52_L190: m3_per_s {pub: in};
    var v_medial_occipital_occipitotemporal_branch_T80_R258: m3_per_s {pub: in};
    var v_medial_occipital_parietal_branch_T53_L196: m3_per_s {pub: in};
    var v_medial_occipital_parietal_branch_T81_R264: m3_per_s {pub: in};
    var v_anterior_choroidal_T34_L116: m3_per_s {pub: in};
    var v_anterior_choroidal_T98_R54: m3_per_s {pub: in};
    var v_anterior_parietal_T100_R100: m3_per_s {pub: in};
    var v_anterior_parietal_T35_L162: m3_per_s {pub: in};
    var v_artery_of_central_sulcus_T101_R70: m3_per_s {pub: in};
    var v_artery_of_central_sulcus_T36_L132: m3_per_s {pub: in};
    var v_artery_of_postcentral_sulcus_T102_R88: m3_per_s {pub: in};
    var v_artery_of_postcentral_sulcus_T37_L150: m3_per_s {pub: in};
    var v_artery_of_precentral_sulcus_T103_R72: m3_per_s {pub: in};
    var v_artery_of_precentral_sulcus_T38_L134: m3_per_s {pub: in};
    var v_callosomarginal_cingular_branch_T105_R250: m3_per_s {pub: in};
    var v_callosomarginal_cingular_branch_T40_L182: m3_per_s {pub: in};
    var v_callosomarginal_intermediomedial_frontal_branch_T106_R242: m3_per_s {pub: in};
    var v_callosomarginal_intermediomedial_frontal_branch_T41_L174: m3_per_s {pub: in};
    var v_callosomarginal_paracentral_branch_T107_R254: m3_per_s {pub: in};
    var v_callosomarginal_paracentral_branch_T42_L186: m3_per_s {pub: in};
    var v_callosomarginal_posteromedial_frontal_branch_T108_R246: m3_per_s {pub: in};
    var v_callosomarginal_posteromedial_frontal_branch_T43_L178: m3_per_s {pub: in};
    var v_distal_medial_striate_T109_R236: m3_per_s {pub: in};
    var v_distal_medial_striate_T44_L40: m3_per_s {pub: in};
    var v_lateral_frontobasal_T110_R60: m3_per_s {pub: in};
    var v_lateral_frontobasal_T45_L122: m3_per_s {pub: in};
    var v_lateral_occipital_anterior_temporal_branch_T111_R212: m3_per_s {pub: in};
    var v_lateral_occipital_anterior_temporal_branch_T46_L16: m3_per_s {pub: in};
    var v_lateral_occipital_posterior_temporal_branch_T112_R220: m3_per_s {pub: in};
    var v_lateral_occipital_posterior_temporal_branch_T48_L24: m3_per_s {pub: in};
    var v_medial_occipital_parieto_occipital_branch_T118_R266: m3_per_s {pub: in};
    var v_medial_occipital_parieto_occipital_branch_T54_L198: m3_per_s {pub: in};
    var v_middle_cerebral_anterior_temporal_branch_T119_R80: m3_per_s {pub: in};
    var v_middle_cerebral_anterior_temporal_branch_T55_L142: m3_per_s {pub: in};
    var v_middle_cerebral_branch_to_angular_gyrus_T120_R108: m3_per_s {pub: in};
    var v_middle_cerebral_branch_to_angular_gyrus_T56_L170: m3_per_s {pub: in};
    var v_middle_cerebral_middle_temporal_branch_T121_R84: m3_per_s {pub: in};
    var v_middle_cerebral_middle_temporal_branch_T57_L146: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporal_branch_T122_R96: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporal_branch_T58_L158: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporo_occipital_branch_T123_R94: m3_per_s {pub: in};
    var v_middle_cerebral_posterior_temporo_occipital_branch_T59_L156: m3_per_s {pub: in};
    var v_pericallosal_parieto_occipital_branch_T124_R226: m3_per_s {pub: in};
    var v_pericallosal_parieto_occipital_branch_T60_L30: m3_per_s {pub: in};
    var v_pericallosal_precuneal_branch_T125_R230: m3_per_s {pub: in};
    var v_pericallosal_precuneal_branch_T61_L34: m3_per_s {pub: in};
    var v_polar_temporal_T127_R76: m3_per_s {pub: in};
    var v_polar_temporal_T63_L138: m3_per_s {pub: in};
    var v_posterior_parietal_T129_R106: m3_per_s {pub: in};
    var v_posterior_parietal_T64_L168: m3_per_s {pub: in};
    var v_prefrontal_T130_R64: m3_per_s {pub: in};
    var v_prefrontal_T65_L126: m3_per_s {pub: in};
    // Constitutive Relations
    ode(q_svl, t) = v_sup_vcap-v_svl;
    u_svl = q_svl/C_svl;
    ode(q_ivl, t) = v_inf_vcap-v_ivl;
    u_ivl = q_ivl/C_ivl;
    ode(q_svn, t) = v_svl-v_svn;
    u_svn = q_svn/C_svn;
    ode(q_svc, t) = v_svn-v_svc;
    u_svc = q_svc/C_svc;
    ode(q_ivn, t) = v_ivl-v_ivn;
    u_ivn = q_ivn/C_ivn;
    ode(q_ivc, t) = v_ivn-v_ivc;
    u_ivc = q_ivc/C_ivc;
    ode(v_svl, t) = (u_svl-u_svn-v_svl*R_svl)/I_svl;
    ode(v_svn, t) = (u_svn-u_svc-v_svn*R_svn)/I_svn;
    ode(v_svc, t) = (u_svc-u_ra-v_svc*R_svc)/I_svc;
    ode(v_ivl, t) = (u_ivl-u_ivn-v_ivl*R_ivl)/I_ivl;
    ode(v_ivn, t) = (u_ivn-u_ivc-v_ivn*R_ivn)/I_ivn;
    ode(v_ivc, t) = (u_ivc-u_ra-v_ivc*R_ivc)/I_ivc;
    // Conservation Laws
    v_chest = v_posterior_intercostal_T1_R98+v_posterior_intercostal_T1_L102+v_posterior_intercostal_T2_R106+v_posterior_intercostal_T2_L110;
    v_trunk = v_left_gastric_T3_C120+v_dorsal_pancreatic_T1_C124+v_splenic_T2_C126+v_hepatic_artery_proper_left_branch_C132+v_hepatic_artery_proper_right_branch_C134;
    v_intestines = v_middle_colic_T8_C140+v_jejunal_3_T10_C144+v_jejunal_6_T11_C148+v_ileocolic_T9_C152+v_ileal_4_T12_C156+v_ileal_6_T13_C160+v_superior_mesenteric_T4_C162+v_inferior_mesenteric_T5_C190;
    v_kidneys = v_inferior_segmental_T5_L170+v_superior_segmental_T4_L172+v_renal_posterior_branch_T3_L174+v_superior_segmental_T4_R182+v_inferior_segmental_T5_R184+v_renal_posterior_branch_T3_R186;
    v_legs = v_internal_iliac_T1_R218+v_profundus_T2_R224+v_anterior_tibial_T3_R230+v_posterior_tibial_T4_R236+v_internal_iliac_T1_L196+v_profundus_T2_L202+v_anterior_tibial_T3_L208+v_posterior_tibial_T4_L214;
    v_arms = v_posterior_interosseous_T3_R40+v_ulnar_T2_R42+v_radial_T1_R44+v_posterior_interosseous_T3_L88+v_ulnar_T2_L90+v_radial_T1_L92;
    v_head_1 = v_external_carotid_T2_R26+v_external_carotid_T2_L62+v_lateral_occipital_intermediate_temporal_branch_T47_L20+v_lateral_occipital_intermediate_temporal_branch_T76_R216;
    v_head_2 = v_medial_occipital_calcarine_branch_T51_L202+v_medial_occipital_calcarine_branch_T79_R270+v_medial_occipital_occipitotemporal_branch_T52_L190+v_medial_occipital_occipitotemporal_branch_T80_R258;
    v_head_3 = v_medial_occipital_parietal_branch_T53_L196+v_medial_occipital_parietal_branch_T81_R264+v_anterior_choroidal_T34_L116+v_anterior_choroidal_T98_R54;
    v_head_4 = v_anterior_parietal_T100_R100+v_anterior_parietal_T35_L162+v_artery_of_central_sulcus_T101_R70+v_artery_of_central_sulcus_T36_L132;
    v_head_5 = v_artery_of_postcentral_sulcus_T102_R88+v_artery_of_postcentral_sulcus_T37_L150+v_artery_of_precentral_sulcus_T103_R72+v_artery_of_precentral_sulcus_T38_L134;
    v_head_6 = v_callosomarginal_cingular_branch_T105_R250+v_callosomarginal_cingular_branch_T40_L182+v_callosomarginal_intermediomedial_frontal_branch_T106_R242+v_callosomarginal_intermediomedial_frontal_branch_T41_L174;
    v_head_7 = v_callosomarginal_paracentral_branch_T107_R254+v_callosomarginal_paracentral_branch_T42_L186+v_callosomarginal_posteromedial_frontal_branch_T108_R246+v_callosomarginal_posteromedial_frontal_branch_T43_L178;
    v_head_8 = v_distal_medial_striate_T109_R236+v_distal_medial_striate_T44_L40+v_lateral_frontobasal_T110_R60+v_lateral_frontobasal_T45_L122;
    v_head_9 = v_lateral_occipital_anterior_temporal_branch_T111_R212+v_lateral_occipital_anterior_temporal_branch_T46_L16+v_lateral_occipital_posterior_temporal_branch_T112_R220+v_lateral_occipital_posterior_temporal_branch_T48_L24;
    v_head_10 = v_medial_occipital_parieto_occipital_branch_T118_R266+v_medial_occipital_parieto_occipital_branch_T54_L198+v_middle_cerebral_anterior_temporal_branch_T119_R80+v_middle_cerebral_anterior_temporal_branch_T55_L142;
    v_head_11 = v_middle_cerebral_branch_to_angular_gyrus_T120_R108+v_middle_cerebral_branch_to_angular_gyrus_T56_L170+v_middle_cerebral_middle_temporal_branch_T121_R84+v_middle_cerebral_middle_temporal_branch_T57_L146;
    v_head_12 = v_middle_cerebral_posterior_temporal_branch_T122_R96+v_middle_cerebral_posterior_temporal_branch_T58_L158+v_middle_cerebral_posterior_temporo_occipital_branch_T123_R94+v_middle_cerebral_posterior_temporo_occipital_branch_T59_L156;
    v_head_13 = v_pericallosal_parieto_occipital_branch_T124_R226+v_pericallosal_parieto_occipital_branch_T60_L30+v_pericallosal_precuneal_branch_T125_R230+v_pericallosal_precuneal_branch_T61_L34;
    v_head_14 = v_polar_temporal_T127_R76+v_polar_temporal_T63_L138+v_posterior_parietal_T129_R106+v_posterior_parietal_T64_L168+v_prefrontal_T130_R64+v_prefrontal_T65_L126;
    v_sup_vcap = v_arms+v_head_1+v_head_2+v_head_3+v_head_4+v_head_5+v_head_6+v_head_7+v_head_8+v_head_9+v_head_10+v_head_11+v_head_12+v_head_13+v_head_14;
    v_inf_vcap = v_chest+v_trunk+v_intestines+v_kidneys+v_legs;
  enddef;
  // ------------ Pulmonary Circulation ------------//

  def comp Pulmonary as
    var t: second {pub: in};
    // Constitutive Parameters_Systemic
    var C_par: m6_per_J {pub: in};
    var C_pvn: m6_per_J {pub: in};
    var R_par: Js_per_m6 {pub: in};
    var R_pvn: Js_per_m6 {pub: in};
    var I_par: Js2_per_m6 {pub: in};
    var I_pvn: Js2_per_m6 {pub: in};
    // State Variables
    var u_par: J_per_m3 {init: 4000.0, pub: out};
    var u_pvn: J_per_m3 {init: 0.0, pub: out};
    var u_la: J_per_m3 {pub: in};
    var v_par: m3_per_s {init: 0.0, pub: out};
    var v_pvn: m3_per_s {init: 0.0, pub: out};
    var v_rv: m3_per_s {pub: in};
    // Constitutive Relations
    ode(u_par, t) = (v_rv-v_par)/C_par;
    ode(u_pvn, t) = (v_par-v_pvn)/C_pvn;
    ode(v_par, t) = (u_par-u_pvn-v_par*R_par)/I_par;
    ode(v_pvn, t) = (u_pvn-u_la-v_pvn*R_pvn)/I_pvn;
  enddef;
  // ------------ Heart ------------//

  def comp Heart as
    var t: second {pub: in};
    // Constitutive Parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var t_ac: dimensionless {pub: in};
    var t_ar: dimensionless {pub: in};
    var T_ac: dimensionless {pub: in};
    var T_ar: dimensionless {pub: in};
    var T_vc: dimensionless {pub: in};
    var T_vr: dimensionless {pub: in};
    var CQ_trv: UnitValve {pub: in};
    var CQ_puv: UnitValve {pub: in};
    var CQ_miv: UnitValve {pub: in};
    var CQ_aov: UnitValve {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_ra: m3_per_s;
    var v_rv: m3_per_s {pub: out};
    var v_la: m3_per_s;
    var v_lv: m3_per_s {pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    // These params are to be optimised.
    //        var q_ra: m3 {init: 20.0e-6};
    //        var q_rv: m3 {init: 500.0e-6};
    //        var q_la: m3 {init: 20.0e-6};
    //        var q_lv: m3 {init: 500.0e-6};
    var q_lv: m3 {init: 700.0e-06};
    var q_rv: m3 {init: 500.0e-6};
    var q_la: m3 {init: 31.270e-6};
    var q_ra: m3 {init: 6.46e-6};
    // Elastance Functions
    mt = t-T*floor(t/T);
    // TODO MAKE SURE YOU CHECK THESE FUNCTIONS WITH THE PAPERS, THERE ARE T VARIABLES PUT RANDOMLY IN HERE
    e_a = sel
      case (mt >= 0{second}) and (mt <= t_ar+T_ar-T):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt+T-t_ar)/T_ar));
      case (mt > t_ar+T_ar-T) and (mt <= t_ac):
        0{dimensionless};
      case (mt > t_ac) and (mt <= t_ac+T_ac):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*(mt-t_ac)/T_ac));
      case (mt > t_ac+T_ac) and (mt <= T):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-t_ar)/T_ar));
    endsel;
    e_v = sel
      case (mt >= 0{second}) and (mt <= T_vc):
        0.5{dimensionless}*(1{dimensionless}-cos(pi*mt/T_vc));
      case (mt > T_vc) and (mt <= T_vc+T_vr):
        0.5{dimensionless}*(1{dimensionless}+cos(pi*(mt-T_vc)/T_vr));
      case (mt > T_vc+T_vr) and (mt < T):
        0{dimensionless};
    endsel;
    // Constitutive Relations
    v_ra = sel
      case u_ra >= u_rv:
        CQ_trv*sqrt(u_ra-u_rv);
      case u_ra < u_rv:
        0{m3_per_s};
    endsel;
    v_rv = sel
      case u_rv >= u_par:
        CQ_puv*sqrt(u_rv-u_par);
      case u_rv < u_par:
        0{m3_per_s};
    endsel;
    v_la = sel
      case u_la >= u_lv:
        CQ_miv*sqrt(u_la-u_lv);
      case u_la < u_lv:
        0{m3_per_s};
    endsel;
    v_lv = sel
      case u_lv >= u_root:
        CQ_aov*sqrt(u_lv-u_root);
      case u_lv < u_root:
        0{m3_per_s};
    endsel;
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_ra;
    ode(q_rv, t) = v_ra-v_rv;
    ode(q_la, t) = v_pvn-v_la;
    ode(q_lv, t) = v_la-v_lv;
  enddef;
  // ------------ Mapping ------------//
  def map between Heart and ascending_aorta_A_module for
    vars u_root and u_C;
    vars v_lv and v_in;
  enddef;
  def map between Heart and Systemic for
    vars v_svc and v_svc;
    vars v_ivc and v_ivc;
    vars u_ra and u_ra;
  enddef;
  def map between Heart and Pulmonary for
    vars u_par and u_par;
    vars v_pvn and v_pvn;
    vars u_la and u_la;
    vars v_rv and v_rv;
  enddef;
  def map between Parameters_Systemic and Systemic for
    vars C_svl and C_svl;
    vars C_svn and C_svn;
    vars C_svc and C_svc;
    vars C_ivl and C_ivl;
    vars C_ivn and C_ivn;
    vars C_ivc and C_ivc;
    vars R_svl and R_svl;
    vars R_svn and R_svn;
    vars R_svc and R_svc;
    vars R_ivl and R_ivl;
    vars R_ivn and R_ivn;
    vars R_ivc and R_ivc;
    vars I_svl and I_svl;
    vars I_svn and I_svn;
    vars I_svc and I_svc;
    vars I_ivl and I_ivl;
    vars I_ivn and I_ivn;
    vars I_ivc and I_ivc;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Pulmonary and Pulmonary for
    vars C_par and C_par;
    vars C_pvn and C_pvn;
    vars R_par and R_par;
    vars R_pvn and R_pvn;
    vars I_par and I_par;
    vars I_pvn and I_pvn;
  enddef;
  def map between Parameters_Heart and Heart for
    vars T and T;
    vars t_ac and t_ac;
    vars t_ar and t_ar;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars CQ_trv and CQ_trv;
    vars CQ_puv and CQ_puv;
    vars CQ_miv and CQ_miv;
    vars CQ_aov and CQ_aov;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
  enddef;
  def map between environment and Heart for
    vars time and t;
  enddef;
  def map between environment and Systemic for
    vars time and t;
  enddef;
  def map between environment and Pulmonary for
    vars time and t;
  enddef;
  // Terminal
  def map between Systemic and posterior_intercostal_T1_R98_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T1_R98 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T1_L102_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T1_L102 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T2_R106_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T2_R106 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and posterior_intercostal_T2_L110_module for
    vars u_ivl and u_out;
    vars v_posterior_intercostal_T2_L110 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and left_gastric_T3_C120_module for
    vars u_ivl and u_out;
    vars v_left_gastric_T3_C120 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and dorsal_pancreatic_T1_C124_module for
    vars u_ivl and u_out;
    vars v_dorsal_pancreatic_T1_C124 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and splenic_T2_C126_module for
    vars u_ivl and u_out;
    vars v_splenic_T2_C126 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and hepatic_artery_proper_left_branch_C132_module for
    vars u_ivl and u_out;
    vars v_hepatic_artery_proper_left_branch_C132 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and hepatic_artery_proper_right_branch_C134_module for
    vars u_ivl and u_out;
    vars v_hepatic_artery_proper_right_branch_C134 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and middle_colic_T8_C140_module for
    vars u_ivl and u_out;
    vars v_middle_colic_T8_C140 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and jejunal_3_T10_C144_module for
    vars u_ivl and u_out;
    vars v_jejunal_3_T10_C144 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and jejunal_6_T11_C148_module for
    vars u_ivl and u_out;
    vars v_jejunal_6_T11_C148 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and ileocolic_T9_C152_module for
    vars u_ivl and u_out;
    vars v_ileocolic_T9_C152 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and ileal_4_T12_C156_module for
    vars u_ivl and u_out;
    vars v_ileal_4_T12_C156 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and ileal_6_T13_C160_module for
    vars u_ivl and u_out;
    vars v_ileal_6_T13_C160 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and superior_mesenteric_T4_C162_module for
    vars u_ivl and u_out;
    vars v_superior_mesenteric_T4_C162 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and inferior_segmental_T5_L170_module for
    vars u_ivl and u_out;
    vars v_inferior_segmental_T5_L170 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and superior_segmental_T4_L172_module for
    vars u_ivl and u_out;
    vars v_superior_segmental_T4_L172 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and renal_posterior_branch_T3_L174_module for
    vars u_ivl and u_out;
    vars v_renal_posterior_branch_T3_L174 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and superior_segmental_T4_R182_module for
    vars u_ivl and u_out;
    vars v_superior_segmental_T4_R182 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and inferior_segmental_T5_R184_module for
    vars u_ivl and u_out;
    vars v_inferior_segmental_T5_R184 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and renal_posterior_branch_T3_R186_module for
    vars u_ivl and u_out;
    vars v_renal_posterior_branch_T3_R186 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and inferior_mesenteric_T5_C190_module for
    vars u_ivl and u_out;
    vars v_inferior_mesenteric_T5_C190 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and internal_iliac_T1_R218_module for
    vars u_ivl and u_out;
    vars v_internal_iliac_T1_R218 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and profundus_T2_R224_module for
    vars u_ivl and u_out;
    vars v_profundus_T2_R224 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and anterior_tibial_T3_R230_module for
    vars u_ivl and u_out;
    vars v_anterior_tibial_T3_R230 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and posterior_tibial_T4_R236_module for
    vars u_ivl and u_out;
    vars v_posterior_tibial_T4_R236 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and internal_iliac_T1_L196_module for
    vars u_ivl and u_out;
    vars v_internal_iliac_T1_L196 and v_T;
    vars alpha_trunk and alpha;
  enddef;
  def map between Systemic and profundus_T2_L202_module for
    vars u_ivl and u_out;
    vars v_profundus_T2_L202 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and anterior_tibial_T3_L208_module for
    vars u_ivl and u_out;
    vars v_anterior_tibial_T3_L208 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and posterior_tibial_T4_L214_module for
    vars u_ivl and u_out;
    vars v_posterior_tibial_T4_L214 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and posterior_interosseous_T3_R40_module for
    vars u_svl and u_out;
    vars v_posterior_interosseous_T3_R40 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and ulnar_T2_R42_module for
    vars u_svl and u_out;
    vars v_ulnar_T2_R42 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and radial_T1_R44_module for
    vars u_svl and u_out;
    vars v_radial_T1_R44 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and posterior_interosseous_T3_L88_module for
    vars u_svl and u_out;
    vars v_posterior_interosseous_T3_L88 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and ulnar_T2_L90_module for
    vars u_svl and u_out;
    vars v_ulnar_T2_L90 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and radial_T1_L92_module for
    vars u_svl and u_out;
    vars v_radial_T1_L92 and v_T;
    vars alpha_peripheral and alpha;
  enddef;
  def map between Systemic and external_carotid_T2_R26_module for
    vars u_svl and u_out;
    vars v_external_carotid_T2_R26 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and external_carotid_T2_L62_module for
    vars u_svl and u_out;
    vars v_external_carotid_T2_L62 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_intermediate_temporal_branch_T47_L20_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_intermediate_temporal_branch_T47_L20 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_intermediate_temporal_branch_T76_R216_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_intermediate_temporal_branch_T76_R216 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_calcarine_branch_T51_L202_module for
    vars u_svl and u_out;
    vars v_medial_occipital_calcarine_branch_T51_L202 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_calcarine_branch_T79_R270_module for
    vars u_svl and u_out;
    vars v_medial_occipital_calcarine_branch_T79_R270 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_occipitotemporal_branch_T52_L190_module for
    vars u_svl and u_out;
    vars v_medial_occipital_occipitotemporal_branch_T52_L190 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_occipitotemporal_branch_T80_R258_module for
    vars u_svl and u_out;
    vars v_medial_occipital_occipitotemporal_branch_T80_R258 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_parietal_branch_T53_L196_module for
    vars u_svl and u_out;
    vars v_medial_occipital_parietal_branch_T53_L196 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_parietal_branch_T81_R264_module for
    vars u_svl and u_out;
    vars v_medial_occipital_parietal_branch_T81_R264 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and anterior_choroidal_T34_L116_module for
    vars u_svl and u_out;
    vars v_anterior_choroidal_T34_L116 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and anterior_choroidal_T98_R54_module for
    vars u_svl and u_out;
    vars v_anterior_choroidal_T98_R54 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and anterior_parietal_T100_R100_module for
    vars u_svl and u_out;
    vars v_anterior_parietal_T100_R100 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and anterior_parietal_T35_L162_module for
    vars u_svl and u_out;
    vars v_anterior_parietal_T35_L162 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_central_sulcus_T101_R70_module for
    vars u_svl and u_out;
    vars v_artery_of_central_sulcus_T101_R70 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_central_sulcus_T36_L132_module for
    vars u_svl and u_out;
    vars v_artery_of_central_sulcus_T36_L132 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_postcentral_sulcus_T102_R88_module for
    vars u_svl and u_out;
    vars v_artery_of_postcentral_sulcus_T102_R88 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_postcentral_sulcus_T37_L150_module for
    vars u_svl and u_out;
    vars v_artery_of_postcentral_sulcus_T37_L150 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_precentral_sulcus_T103_R72_module for
    vars u_svl and u_out;
    vars v_artery_of_precentral_sulcus_T103_R72 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and artery_of_precentral_sulcus_T38_L134_module for
    vars u_svl and u_out;
    vars v_artery_of_precentral_sulcus_T38_L134 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_cingular_branch_T105_R250_module for
    vars u_svl and u_out;
    vars v_callosomarginal_cingular_branch_T105_R250 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_cingular_branch_T40_L182_module for
    vars u_svl and u_out;
    vars v_callosomarginal_cingular_branch_T40_L182 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_intermediomedial_frontal_branch_T106_R242_module for
    vars u_svl and u_out;
    vars v_callosomarginal_intermediomedial_frontal_branch_T106_R242 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_intermediomedial_frontal_branch_T41_L174_module for
    vars u_svl and u_out;
    vars v_callosomarginal_intermediomedial_frontal_branch_T41_L174 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_paracentral_branch_T107_R254_module for
    vars u_svl and u_out;
    vars v_callosomarginal_paracentral_branch_T107_R254 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_paracentral_branch_T42_L186_module for
    vars u_svl and u_out;
    vars v_callosomarginal_paracentral_branch_T42_L186 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_posteromedial_frontal_branch_T108_R246_module for
    vars u_svl and u_out;
    vars v_callosomarginal_posteromedial_frontal_branch_T108_R246 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and callosomarginal_posteromedial_frontal_branch_T43_L178_module for
    vars u_svl and u_out;
    vars v_callosomarginal_posteromedial_frontal_branch_T43_L178 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and distal_medial_striate_T109_R236_module for
    vars u_svl and u_out;
    vars v_distal_medial_striate_T109_R236 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and distal_medial_striate_T44_L40_module for
    vars u_svl and u_out;
    vars v_distal_medial_striate_T44_L40 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_frontobasal_T110_R60_module for
    vars u_svl and u_out;
    vars v_lateral_frontobasal_T110_R60 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_frontobasal_T45_L122_module for
    vars u_svl and u_out;
    vars v_lateral_frontobasal_T45_L122 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_anterior_temporal_branch_T111_R212_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_anterior_temporal_branch_T111_R212 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_anterior_temporal_branch_T46_L16_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_anterior_temporal_branch_T46_L16 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_posterior_temporal_branch_T112_R220_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_posterior_temporal_branch_T112_R220 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and lateral_occipital_posterior_temporal_branch_T48_L24_module for
    vars u_svl and u_out;
    vars v_lateral_occipital_posterior_temporal_branch_T48_L24 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_parieto_occipital_branch_T118_R266_module for
    vars u_svl and u_out;
    vars v_medial_occipital_parieto_occipital_branch_T118_R266 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and medial_occipital_parieto_occipital_branch_T54_L198_module for
    vars u_svl and u_out;
    vars v_medial_occipital_parieto_occipital_branch_T54_L198 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_anterior_temporal_branch_T119_R80_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_anterior_temporal_branch_T119_R80 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_anterior_temporal_branch_T55_L142_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_anterior_temporal_branch_T55_L142 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_branch_to_angular_gyrus_T120_R108_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_branch_to_angular_gyrus_T120_R108 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_branch_to_angular_gyrus_T56_L170_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_branch_to_angular_gyrus_T56_L170 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_middle_temporal_branch_T121_R84_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_middle_temporal_branch_T121_R84 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_middle_temporal_branch_T57_L146_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_middle_temporal_branch_T57_L146 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_posterior_temporal_branch_T122_R96_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_posterior_temporal_branch_T122_R96 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_posterior_temporal_branch_T58_L158_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_posterior_temporal_branch_T58_L158 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module for
    vars u_svl and u_out;
    vars v_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and pericallosal_parieto_occipital_branch_T124_R226_module for
    vars u_svl and u_out;
    vars v_pericallosal_parieto_occipital_branch_T124_R226 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and pericallosal_parieto_occipital_branch_T60_L30_module for
    vars u_svl and u_out;
    vars v_pericallosal_parieto_occipital_branch_T60_L30 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and pericallosal_precuneal_branch_T125_R230_module for
    vars u_svl and u_out;
    vars v_pericallosal_precuneal_branch_T125_R230 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and pericallosal_precuneal_branch_T61_L34_module for
    vars u_svl and u_out;
    vars v_pericallosal_precuneal_branch_T61_L34 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and polar_temporal_T127_R76_module for
    vars u_svl and u_out;
    vars v_polar_temporal_T127_R76 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and polar_temporal_T63_L138_module for
    vars u_svl and u_out;
    vars v_polar_temporal_T63_L138 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and posterior_parietal_T129_R106_module for
    vars u_svl and u_out;
    vars v_posterior_parietal_T129_R106 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and posterior_parietal_T64_L168_module for
    vars u_svl and u_out;
    vars v_posterior_parietal_T64_L168 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and prefrontal_T130_R64_module for
    vars u_svl and u_out;
    vars v_prefrontal_T130_R64 and v_T;
    vars alpha_head and alpha;
  enddef;
  def map between Systemic and prefrontal_T65_L126_module for
    vars u_svl and u_out;
    vars v_prefrontal_T65_L126 and v_T;
    vars alpha_head and alpha;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Importing Vessels //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C2_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C46_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C64_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_jII_type;
  enddef;
  // Trunk
  def import using "BG_Modules.cellml" for
    comp posterior_intercostal_T1_R98_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_intercostal_T1_L102_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_intercostal_T2_R106_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_intercostal_T2_L110_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp celiac_trunk_C116_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp splenic_T2_C118_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp left_gastric_T3_C120_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp splenic_T2_C122_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp dorsal_pancreatic_T1_C124_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp splenic_T2_C126_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_hepatic_C128_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp hepatic_artery_proper_C130_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp hepatic_artery_proper_left_branch_C132_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp hepatic_artery_proper_right_branch_C134_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C138_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_colic_T8_C140_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C142_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp jejunal_3_T10_C144_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C146_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp jejunal_6_T11_C148_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C150_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ileocolic_T9_C152_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C154_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ileal_4_T12_C156_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C158_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ileal_6_T13_C160_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_mesenteric_T4_C162_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_L166_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_anterior_branch_L168_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp inferior_segmental_T5_L170_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_segmental_T4_L172_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_posterior_branch_T3_L174_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_R178_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_anterior_branch_R180_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp superior_segmental_T4_R182_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp inferior_segmental_T5_R184_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp renal_posterior_branch_T3_R186_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp inferior_mesenteric_T5_C190_module using comp pp_BC_type;
  enddef;
  // Lower Limbs
  def import using "BG_Modules.cellml" for
    comp common_iliac_R216_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_iliac_T1_R218_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_R222_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp profundus_T2_R224_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_R226_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp popliteal_R228_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_tibial_T3_R230_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp popliteal_R232_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp tibiofibular_trunk_R234_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_tibial_T4_R236_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_iliac_L194_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_iliac_T1_L196_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_L200_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp profundus_T2_L202_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp femoral_L204_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp popliteal_L206_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_tibial_T3_L208_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp popliteal_L210_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp tibiofibular_trunk_L212_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_tibial_T4_L214_module using comp pp_BC_type;
  enddef;
  // Upper Limbs
  def import using "BG_Modules.cellml" for
    comp subclavian_R28_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_R30_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp axillary_R32_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp brachial_R34_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ulnar_T2_R36_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_interosseous_R38_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_interosseous_T3_R40_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ulnar_T2_R42_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp radial_T1_R44_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_L66_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp subclavian_L78_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp axillary_L80_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp brachial_L82_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ulnar_T2_L84_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_interosseous_L86_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_interosseous_T3_L88_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp ulnar_T2_L90_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp radial_T1_L92_module using comp pp_BC_type;
  enddef;
  // Head
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_R6_C_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R8_C_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_T2_R26_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_C_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp common_carotid_L48_D_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_A_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_B_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L50_C_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp external_carotid_T2_L62_module using comp pp_BC_type;
  enddef;
  // Cerebral
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L110_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L38_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_L42_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R234_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R238_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_cerebral_R46_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_communicating_C44_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp basilar_C4_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_L172_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_L176_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_L180_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_L184_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_R240_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_R244_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_R248_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_R252_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_L112_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp internal_carotid_R48_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_dorsal_branch_to_corpus_callosum_L28_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_dorsal_branch_to_corpus_callosum_R224_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_L188_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_L192_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_L200_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_L26_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_R222_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_R256_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_R260_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_R268_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L136_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L140_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L144_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L148_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L152_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L160_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_L164_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R102_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R74_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R78_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R82_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R86_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R90_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_inferior_terminal_branch_R98_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_L114_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_L118_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_R52_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_R56_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L120_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L124_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_L128_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R58_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R62_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_superior_terminal_branch_R66_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_L14_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_L18_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_L22_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_R210_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_R214_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp occipital_lateral_R218_module using comp pv_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_L32_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_L36_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_R228_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_R232_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_postcommunicating_part_L12_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_postcommunicating_part_R208_module using comp vv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_precommunicating_part_L6_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_cerebral_precommunicating_part_R204_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_communicating_L8_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_communicating_R206_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp vertebral_L2_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp vertebral_R272_module using comp pp_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_precentral_sulcus_T103_R68_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_precentral_sulcus_T38_L130_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T118_R262_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T54_L194_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T120_R104_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T56_L166_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T122_R92_module using comp pv_jII_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T58_L154_module using comp pv_jII_type;
  enddef;
  // Terminal
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_intermediate_temporal_branch_T47_L20_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_intermediate_temporal_branch_T76_R216_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_calcarine_branch_T51_L202_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_calcarine_branch_T79_R270_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_occipitotemporal_branch_T52_L190_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_occipitotemporal_branch_T80_R258_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parietal_branch_T53_L196_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parietal_branch_T81_R264_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_choroidal_T34_L116_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_choroidal_T98_R54_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_parietal_T100_R100_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp anterior_parietal_T35_L162_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_central_sulcus_T101_R70_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_central_sulcus_T36_L132_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_postcentral_sulcus_T102_R88_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_postcentral_sulcus_T37_L150_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_precentral_sulcus_T103_R72_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp artery_of_precentral_sulcus_T38_L134_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_cingular_branch_T105_R250_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_cingular_branch_T40_L182_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_intermediomedial_frontal_branch_T106_R242_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_intermediomedial_frontal_branch_T41_L174_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_paracentral_branch_T107_R254_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_paracentral_branch_T42_L186_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_posteromedial_frontal_branch_T108_R246_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp callosomarginal_posteromedial_frontal_branch_T43_L178_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp distal_medial_striate_T109_R236_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp distal_medial_striate_T44_L40_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_frontobasal_T110_R60_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_frontobasal_T45_L122_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_anterior_temporal_branch_T111_R212_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_anterior_temporal_branch_T46_L16_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_posterior_temporal_branch_T112_R220_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp lateral_occipital_posterior_temporal_branch_T48_L24_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T118_R266_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp medial_occipital_parieto_occipital_branch_T54_L198_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_anterior_temporal_branch_T119_R80_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_anterior_temporal_branch_T55_L142_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T120_R108_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_branch_to_angular_gyrus_T56_L170_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_middle_temporal_branch_T121_R84_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_middle_temporal_branch_T57_L146_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T122_R96_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporal_branch_T58_L158_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_parieto_occipital_branch_T124_R226_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_parieto_occipital_branch_T60_L30_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_precuneal_branch_T125_R230_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp pericallosal_precuneal_branch_T61_L34_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp polar_temporal_T127_R76_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp polar_temporal_T63_L138_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_parietal_T129_R106_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp posterior_parietal_T64_L168_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp prefrontal_T130_R64_module using comp pp_BC_type;
  enddef;
  def import using "BG_Modules.cellml" for
    comp prefrontal_T65_L126_module using comp pp_BC_type;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Vessels Output ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // Trunk

  def comp posterior_intercostal_T1_R98 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_intercostal_T1_L102 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_intercostal_T2_R106 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_intercostal_T2_L110 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp celiac_trunk_C116 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp splenic_T2_C118 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp left_gastric_T3_C120 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp splenic_T2_C122 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp dorsal_pancreatic_T1_C124 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp splenic_T2_C126 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_hepatic_C128 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp hepatic_artery_proper_C130 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp hepatic_artery_proper_left_branch_C132 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp hepatic_artery_proper_right_branch_C134 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C138 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_colic_T8_C140 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C142 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp jejunal_3_T10_C144 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C146 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp jejunal_6_T11_C148 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C150 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ileocolic_T9_C152 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C154 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ileal_4_T12_C156 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C158 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ileal_6_T13_C160 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_mesenteric_T4_C162 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_L166 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_anterior_branch_L168 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp inferior_segmental_T5_L170 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_segmental_T4_L172 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_L174 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_R178 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_anterior_branch_R180 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp superior_segmental_T4_R182 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp inferior_segmental_T5_R184 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp renal_posterior_branch_T3_R186 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp inferior_mesenteric_T5_C190 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // Lower Limbs

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_iliac_T1_R218 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp profundus_T2_R224 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_R226 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp popliteal_R228 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_tibial_T3_R230 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp popliteal_R232 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp tibiofibular_trunk_R234 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_tibial_T4_R236 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_iliac_T1_L196 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp profundus_T2_L202 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp femoral_L204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp popliteal_L206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_tibial_T3_L208 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp popliteal_L210 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp tibiofibular_trunk_L212 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_tibial_T4_L214 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // Upper Limbs

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp axillary_R32 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ulnar_T2_R36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_interosseous_R38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_interosseous_T3_R40 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ulnar_T2_R42 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp radial_T1_R44 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp axillary_L80 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ulnar_T2_L84 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_interosseous_L86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_interosseous_T3_L88 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp ulnar_T2_L90 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp radial_T1_L92 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // Head

  def comp common_carotid_R6_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_R6_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_R6_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R8_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_T2_R26 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L50_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp external_carotid_T2_L62 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L38 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_calcarine_branch_T51_L202 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_calcarine_branch_T79_R270 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_occipitotemporal_branch_T52_L190 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_choroidal_T34_L116 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_choroidal_T98_R54 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_occipitotemporal_branch_T80_R258 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parietal_branch_T53_L196 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parietal_branch_T81_R264 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_parietal_T100_R100 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_parietal_T35_L162 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_central_sulcus_T101_R70 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T103_R68 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T103_R72 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_central_sulcus_T36_L132 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_postcentral_sulcus_T102_R88 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_postcentral_sulcus_T37_L150 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T38_L130 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp artery_of_precentral_sulcus_T38_L134 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_cingular_branch_T105_R250 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_paracentral_branch_T107_R254 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_paracentral_branch_T42_L186 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_cingular_branch_T40_L182 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_intermediomedial_frontal_branch_T106_R242 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_intermediomedial_frontal_branch_T41_L174 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_posteromedial_frontal_branch_T108_R246 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_posteromedial_frontal_branch_T43_L178 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp distal_medial_striate_T109_R236 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_anterior_temporal_branch_T111_R212 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_anterior_temporal_branch_T46_L16 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp distal_medial_striate_T44_L40 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_frontobasal_T110_R60 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_frontobasal_T45_L122 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_posterior_temporal_branch_T112_R220 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_posterior_temporal_branch_T48_L24 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T118_R262 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_anterior_temporal_branch_T119_R80 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_anterior_temporal_branch_T55_L142 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T118_R266 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T54_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_parieto_occipital_branch_T54_L198 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T120_R104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T120_R108 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T56_L166 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T122_R92 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T122_R96 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_branch_to_angular_gyrus_T56_L170 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_middle_temporal_branch_T121_R84 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_middle_temporal_branch_T57_L146 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T58_L154 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporal_branch_T58_L158 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporo_occipital_branch_T123_R94 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_precuneal_branch_T125_R230 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_precuneal_branch_T61_L34 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_posterior_temporo_occipital_branch_T59_L156 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_parieto_occipital_branch_T124_R226 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_parieto_occipital_branch_T60_L30 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp polar_temporal_T127_R76 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp polar_temporal_T63_L138 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_parietal_T129_R106 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R234 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_parietal_T64_L168 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp prefrontal_T130_R64 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp prefrontal_T65_L126 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_L184 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_R240 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_L172 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_L176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_L180 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_R244 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_R248 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp callosomarginal_R252 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_dorsal_branch_to_corpus_callosum_L28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_dorsal_branch_to_corpus_callosum_R224 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_L188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_L192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_R256 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_R260 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_L26 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp medial_occipital_R268 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L140 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L160 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L144 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L148 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_L152 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R102 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R74 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R78 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R98 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R82 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R86 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_inferior_terminal_branch_R90 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_L118 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_R56 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R58 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R62 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L120 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L124 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_L128 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp middle_cerebral_superior_terminal_branch_R66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_L14 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_L18 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_R218 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_L32 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_L22 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_R210 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp occipital_lateral_R214 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_L36 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_R228 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp pericallosal_R232 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_precommunicating_part_R204 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_postcommunicating_part_L12 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_postcommunicating_part_R208 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_cerebral_precommunicating_part_L6 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_intermediate_temporal_branch_T47_L20 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp lateral_occipital_intermediate_temporal_branch_T76_R216 as
    var R_T: Js_per_m6 {priv: in};
    var C_T: m6_per_J {priv: in};
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Vessels Mapping ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Junctions
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and posterior_intercostal_T1_R98_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and posterior_intercostal_T1_L102_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and posterior_intercostal_T2_R106_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and posterior_intercostal_T2_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and celiac_trunk_C116_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C136_module and superior_mesenteric_T4_C138_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and renal_L166_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and renal_R178_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and inferior_mesenteric_T5_C190_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and internal_iliac_T1_R218_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and profundus_T2_R224_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and femoral_R226_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and anterior_tibial_T3_R230_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_R228_module and popliteal_R232_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and internal_iliac_T1_L196_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and profundus_T2_L202_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and femoral_L204_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and anterior_tibial_T3_L208_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L206_module and popliteal_L210_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and ulnar_T2_R36_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_R34_module and radial_T1_R44_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and common_interosseous_R38_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_R36_module and ulnar_T2_R42_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and ulnar_T2_L84_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachial_L82_module and radial_T1_L92_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and common_interosseous_L86_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between ulnar_T2_L84_module and ulnar_T2_L90_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_C_module and external_carotid_T2_R26_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_D_module and external_carotid_T2_L62_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and splenic_T2_C118_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between celiac_trunk_C116_module and left_gastric_T3_C120_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and splenic_T2_C122_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C118_module and dorsal_pancreatic_T1_C124_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and splenic_T2_C126_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between splenic_T2_C122_module and common_hepatic_C128_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_left_branch_C132_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between hepatic_artery_proper_C130_module and hepatic_artery_proper_right_branch_C134_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and middle_colic_T8_C140_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C138_module and superior_mesenteric_T4_C142_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and jejunal_3_T10_C144_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C142_module and superior_mesenteric_T4_C146_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and jejunal_6_T11_C148_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C146_module and superior_mesenteric_T4_C150_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and ileocolic_T9_C152_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C150_module and superior_mesenteric_T4_C154_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and ileal_4_T12_C156_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C154_module and superior_mesenteric_T4_C158_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and ileal_6_T13_C160_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between superior_mesenteric_T4_C158_module and superior_mesenteric_T4_C162_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_anterior_branch_L168_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_L166_module and renal_posterior_branch_T3_L174_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and inferior_segmental_T5_L170_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_L168_module and superior_segmental_T4_L172_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_anterior_branch_R180_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_R178_module and renal_posterior_branch_T3_R186_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and superior_segmental_T4_R182_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between renal_anterior_branch_R180_module and inferior_segmental_T5_R184_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between basilar_C4_module and vertebral_L2_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between basilar_C4_module and vertebral_R272_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_precommunicating_part_L6_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_precommunicating_part_R204_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and posterior_cerebral_precommunicating_part_R204_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and posterior_communicating_R206_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and occipital_lateral_R210_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208_module and medial_occipital_R222_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between occipital_lateral_R210_module and lateral_occipital_anterior_temporal_branch_T111_R212_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R210_module and occipital_lateral_R214_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R214_module and lateral_occipital_intermediate_temporal_branch_T76_R216_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_R214_module and occipital_lateral_R218_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and posterior_cerebral_precommunicating_part_L6_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and posterior_communicating_L8_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and medial_occipital_L26_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12_module and occipital_lateral_L14_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between occipital_lateral_L14_module and lateral_occipital_anterior_temporal_branch_T46_L16_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L14_module and occipital_lateral_L18_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L18_module and lateral_occipital_intermediate_temporal_branch_T47_L20_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between occipital_lateral_L18_module and occipital_lateral_L22_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and posterior_communicating_L8_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L112_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and distal_medial_striate_T109_R236_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R234_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R234_module and callosomarginal_R240_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_R234_module and pericallosal_R232_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R240_module and callosomarginal_intermediomedial_frontal_branch_T106_R242_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R240_module and callosomarginal_R244_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R244_module and callosomarginal_posteromedial_frontal_branch_T108_R246_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R244_module and callosomarginal_R248_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R248_module and callosomarginal_cingular_branch_T105_R250_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R248_module and callosomarginal_R252_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and posterior_communicating_R206_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R48_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L110_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_communicating_C44_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between anterior_cerebral_L42_module and distal_medial_striate_T44_L40_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L38_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between anterior_cerebral_L38_module and pericallosal_L36_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between anterior_cerebral_L38_module and callosomarginal_L172_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L172_module and callosomarginal_intermediomedial_frontal_branch_T41_L174_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L172_module and callosomarginal_L176_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L176_module and callosomarginal_posteromedial_frontal_branch_T43_L178_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L176_module and callosomarginal_L180_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L180_module and callosomarginal_cingular_branch_T40_L182_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_L180_module and callosomarginal_L184_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R232_module and pericallosal_R228_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R232_module and pericallosal_precuneal_branch_T125_R230_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R228_module and pericallosal_parieto_occipital_branch_T124_R226_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_R228_module and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_R222_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_occipitotemporal_branch_T80_R258_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_R256_module and medial_occipital_R260_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_R260_module and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_R260_module and medial_occipital_R268_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262_module and medial_occipital_parieto_occipital_branch_T118_R266_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262_module and medial_occipital_parietal_branch_T81_R264_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L36_module and pericallosal_L32_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L36_module and pericallosal_precuneal_branch_T61_L34_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L32_module and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between pericallosal_L32_module and pericallosal_parieto_occipital_branch_T60_L30_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_L26_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_L192_module for
    vars v_out_1 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_L188_module and medial_occipital_occipitotemporal_branch_T52_L190_module for
    vars v_out_2 and v;
    vars u_d and u_in;
  enddef;
  def map between medial_occipital_L192_module and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L192_module and medial_occipital_L200_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194_module and medial_occipital_parietal_branch_T53_L196_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194_module and medial_occipital_parieto_occipital_branch_T54_L198_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and anterior_choroidal_T98_R54_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R56_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R56_module and middle_cerebral_superior_terminal_branch_R58_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_R56_module and middle_cerebral_inferior_terminal_branch_R74_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58_module and middle_cerebral_superior_terminal_branch_R62_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58_module and lateral_frontobasal_T110_R60_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62_module and prefrontal_T130_R64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62_module and middle_cerebral_superior_terminal_branch_R66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68_module and artery_of_central_sulcus_T101_R70_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68_module and artery_of_precentral_sulcus_T103_R72_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74_module and polar_temporal_T127_R76_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74_module and middle_cerebral_inferior_terminal_branch_R78_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78_module and middle_cerebral_anterior_temporal_branch_T119_R80_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78_module and middle_cerebral_inferior_terminal_branch_R82_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82_module and middle_cerebral_middle_temporal_branch_T121_R84_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82_module and middle_cerebral_inferior_terminal_branch_R86_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86_module and artery_of_postcentral_sulcus_T102_R88_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86_module and middle_cerebral_inferior_terminal_branch_R90_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90_module and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90_module and middle_cerebral_inferior_terminal_branch_R98_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92_module and middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92_module and middle_cerebral_posterior_temporal_branch_T122_R96_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98_module and anterior_parietal_T100_R100_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98_module and middle_cerebral_inferior_terminal_branch_R102_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104_module and posterior_parietal_T129_R106_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104_module and middle_cerebral_branch_to_angular_gyrus_T120_R108_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and anterior_choroidal_T34_L116_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L118_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L118_module and middle_cerebral_superior_terminal_branch_L120_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_L118_module and middle_cerebral_inferior_terminal_branch_L136_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120_module and lateral_frontobasal_T45_L122_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120_module and middle_cerebral_superior_terminal_branch_L124_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124_module and prefrontal_T65_L126_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124_module and middle_cerebral_superior_terminal_branch_L128_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130_module and artery_of_central_sulcus_T36_L132_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130_module and artery_of_precentral_sulcus_T38_L134_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136_module and polar_temporal_T63_L138_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136_module and middle_cerebral_inferior_terminal_branch_L140_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140_module and middle_cerebral_anterior_temporal_branch_T55_L142_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140_module and middle_cerebral_inferior_terminal_branch_L144_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144_module and middle_cerebral_middle_temporal_branch_T57_L146_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144_module and middle_cerebral_inferior_terminal_branch_L148_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148_module and artery_of_postcentral_sulcus_T37_L150_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148_module and middle_cerebral_inferior_terminal_branch_L152_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152_module and middle_cerebral_inferior_terminal_branch_L160_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152_module and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154_module and middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154_module and middle_cerebral_posterior_temporal_branch_T58_L158_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160_module and anterior_parietal_T35_L162_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160_module and middle_cerebral_inferior_terminal_branch_L164_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166_module and posterior_parietal_T64_L168_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166_module and middle_cerebral_branch_to_angular_gyrus_T56_L170_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  // Aorta & Trunk
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_hepatic_C128_module and hepatic_artery_proper_C130_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // Lower Limb
  def map between femoral_R226_module and popliteal_R228_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_R232_module and tibiofibular_trunk_R234_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between tibiofibular_trunk_R234_module and posterior_tibial_T4_R236_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L204_module and popliteal_L206_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between popliteal_L210_module and tibiofibular_trunk_L212_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between tibiofibular_trunk_L212_module and posterior_tibial_T4_L214_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // Upper Limb
  def map between subclavian_R30_module and axillary_R32_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between axillary_R32_module and brachial_R34_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_R38_module and posterior_interosseous_T3_R40_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L78_module and axillary_L80_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between axillary_L80_module and brachial_L82_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_interosseous_L86_module and posterior_interosseous_T3_L88_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  // Head
  def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // Cerebral
  def map between occipital_lateral_R218_module and lateral_occipital_posterior_temporal_branch_T112_R220_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between occipital_lateral_L22_module and lateral_occipital_posterior_temporal_branch_T48_L24_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R102_module and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L164_module and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R66_module and artery_of_precentral_sulcus_T103_R68_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L128_module and artery_of_precentral_sulcus_T38_L130_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between medial_occipital_R268_module and medial_occipital_calcarine_branch_T79_R270_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between medial_occipital_L200_module and medial_occipital_calcarine_branch_T51_L202_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between callosomarginal_R252_module and callosomarginal_paracentral_branch_T107_R254_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between callosomarginal_L184_module and callosomarginal_paracentral_branch_T42_L186_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ////////////////////////////////////////// Output Mapping ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
  enddef;
  // Trunk
  def map between posterior_intercostal_T1_R98 and posterior_intercostal_T1_R98_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_intercostal_T1_L102 and posterior_intercostal_T1_L102_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_intercostal_T2_R106 and posterior_intercostal_T2_R106_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_intercostal_T2_L110 and posterior_intercostal_T2_L110_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between celiac_trunk_C116 and celiac_trunk_C116_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between splenic_T2_C118 and splenic_T2_C118_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between left_gastric_T3_C120 and left_gastric_T3_C120_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between splenic_T2_C122 and splenic_T2_C122_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between dorsal_pancreatic_T1_C124 and dorsal_pancreatic_T1_C124_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between splenic_T2_C126 and splenic_T2_C126_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between common_hepatic_C128 and common_hepatic_C128_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between hepatic_artery_proper_C130 and hepatic_artery_proper_C130_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between hepatic_artery_proper_left_branch_C132 and hepatic_artery_proper_left_branch_C132_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between hepatic_artery_proper_right_branch_C134 and hepatic_artery_proper_right_branch_C134_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C138 and superior_mesenteric_T4_C138_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_colic_T8_C140 and middle_colic_T8_C140_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C142 and superior_mesenteric_T4_C142_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between jejunal_3_T10_C144 and jejunal_3_T10_C144_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C146 and superior_mesenteric_T4_C146_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between jejunal_6_T11_C148 and jejunal_6_T11_C148_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C150 and superior_mesenteric_T4_C150_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ileocolic_T9_C152 and ileocolic_T9_C152_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C154 and superior_mesenteric_T4_C154_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ileal_4_T12_C156 and ileal_4_T12_C156_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C158 and superior_mesenteric_T4_C158_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ileal_6_T13_C160 and ileal_6_T13_C160_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_mesenteric_T4_C162 and superior_mesenteric_T4_C162_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_L166 and renal_L166_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_anterior_branch_L168 and renal_anterior_branch_L168_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between inferior_segmental_T5_L170 and inferior_segmental_T5_L170_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_segmental_T4_L172 and superior_segmental_T4_L172_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_posterior_branch_T3_L174 and renal_posterior_branch_T3_L174_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_R178 and renal_R178_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_anterior_branch_R180 and renal_anterior_branch_R180_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between superior_segmental_T4_R182 and superior_segmental_T4_R182_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between inferior_segmental_T5_R184 and inferior_segmental_T5_R184_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between renal_posterior_branch_T3_R186 and renal_posterior_branch_T3_R186_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between inferior_mesenteric_T5_C190 and inferior_mesenteric_T5_C190_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  // Lower Limbs
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_iliac_T1_R218 and internal_iliac_T1_R218_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between profundus_T2_R224 and profundus_T2_R224_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_R226 and femoral_R226_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between popliteal_R228 and popliteal_R228_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_tibial_T3_R230 and anterior_tibial_T3_R230_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between popliteal_R232 and popliteal_R232_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between tibiofibular_trunk_R234 and tibiofibular_trunk_R234_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_tibial_T4_R236 and posterior_tibial_T4_R236_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_iliac_T1_L196 and internal_iliac_T1_L196_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between profundus_T2_L202 and profundus_T2_L202_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between femoral_L204 and femoral_L204_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between popliteal_L206 and popliteal_L206_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_tibial_T3_L208 and anterior_tibial_T3_L208_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between popliteal_L210 and popliteal_L210_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between tibiofibular_trunk_L212 and tibiofibular_trunk_L212_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_tibial_T4_L214 and posterior_tibial_T4_L214_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  // Upper Limbs
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_R30 and subclavian_R30_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between axillary_R32 and axillary_R32_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between brachial_R34 and brachial_R34_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ulnar_T2_R36 and ulnar_T2_R36_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_interosseous_R38 and common_interosseous_R38_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_interosseous_T3_R40 and posterior_interosseous_T3_R40_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between ulnar_T2_R42 and ulnar_T2_R42_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between radial_T1_R44 and radial_T1_R44_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between subclavian_L78 and subclavian_L78_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between axillary_L80 and axillary_L80_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between brachial_L82 and brachial_L82_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between ulnar_T2_L84 and ulnar_T2_L84_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_interosseous_L86 and common_interosseous_L86_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_interosseous_T3_L88 and posterior_interosseous_T3_L88_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between ulnar_T2_L90 and ulnar_T2_L90_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between radial_T1_L92 and radial_T1_L92_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  // Head
  def map between common_carotid_R6_A and common_carotid_R6_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_R6_B and common_carotid_R6_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_R6_C and common_carotid_R6_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_A and internal_carotid_R8_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_B and internal_carotid_R8_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R8_C and internal_carotid_R8_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_carotid_T2_R26 and external_carotid_T2_R26_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_A and common_carotid_L48_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_B and common_carotid_L48_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_C and common_carotid_L48_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_D and common_carotid_L48_D_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_A and internal_carotid_L50_A_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_B and internal_carotid_L50_B_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L50_C and internal_carotid_L50_C_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between external_carotid_T2_L62 and external_carotid_T2_L62_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  // Cerebral
  def map between anterior_cerebral_L110 and anterior_cerebral_L110_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_L38 and anterior_cerebral_L38_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_L42 and anterior_cerebral_L42_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_R234 and anterior_cerebral_R234_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_R238 and anterior_cerebral_R238_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_R46 and anterior_cerebral_R46_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_communicating_C44 and anterior_communicating_C44_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between basilar_C4 and basilar_C4_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_L172 and callosomarginal_L172_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_L176 and callosomarginal_L176_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_L180 and callosomarginal_L180_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_L184 and callosomarginal_L184_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_R240 and callosomarginal_R240_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_R244 and callosomarginal_R244_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_R248 and callosomarginal_R248_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_R252 and callosomarginal_R252_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_L112 and internal_carotid_L112_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between internal_carotid_R48 and internal_carotid_R48_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_L28 and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_dorsal_branch_to_corpus_callosum_R224 and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_L188 and medial_occipital_L188_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_L192 and medial_occipital_L192_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_L200 and medial_occipital_L200_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_L26 and medial_occipital_L26_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_R222 and medial_occipital_R222_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_R256 and medial_occipital_R256_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_R260 and medial_occipital_R260_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_R268 and medial_occipital_R268_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L136 and middle_cerebral_inferior_terminal_branch_L136_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L140 and middle_cerebral_inferior_terminal_branch_L140_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L144 and middle_cerebral_inferior_terminal_branch_L144_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L148 and middle_cerebral_inferior_terminal_branch_L148_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L152 and middle_cerebral_inferior_terminal_branch_L152_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L160 and middle_cerebral_inferior_terminal_branch_L160_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_L164 and middle_cerebral_inferior_terminal_branch_L164_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R102 and middle_cerebral_inferior_terminal_branch_R102_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R74 and middle_cerebral_inferior_terminal_branch_R74_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R78 and middle_cerebral_inferior_terminal_branch_R78_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R82 and middle_cerebral_inferior_terminal_branch_R82_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R86 and middle_cerebral_inferior_terminal_branch_R86_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R90 and middle_cerebral_inferior_terminal_branch_R90_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_inferior_terminal_branch_R98 and middle_cerebral_inferior_terminal_branch_R98_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_L114 and middle_cerebral_L114_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_L118 and middle_cerebral_L118_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_R52 and middle_cerebral_R52_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_R56 and middle_cerebral_R56_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L120 and middle_cerebral_superior_terminal_branch_L120_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L124 and middle_cerebral_superior_terminal_branch_L124_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_L128 and middle_cerebral_superior_terminal_branch_L128_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R58 and middle_cerebral_superior_terminal_branch_R58_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R62 and middle_cerebral_superior_terminal_branch_R62_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_superior_terminal_branch_R66 and middle_cerebral_superior_terminal_branch_R66_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_L14 and occipital_lateral_L14_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_L18 and occipital_lateral_L18_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_L22 and occipital_lateral_L22_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_R210 and occipital_lateral_R210_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_R214 and occipital_lateral_R214_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between occipital_lateral_R218 and occipital_lateral_R218_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_L32 and pericallosal_L32_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_L36 and pericallosal_L36_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_R228 and pericallosal_R228_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_R232 and pericallosal_R232_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_L12 and posterior_cerebral_postcommunicating_part_L12_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_postcommunicating_part_R208 and posterior_cerebral_postcommunicating_part_R208_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_precommunicating_part_L6 and posterior_cerebral_precommunicating_part_L6_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_precommunicating_part_R204 and posterior_cerebral_precommunicating_part_R204_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_communicating_L8 and posterior_communicating_L8_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_communicating_R206 and posterior_communicating_R206_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between vertebral_L2 and vertebral_L2_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between vertebral_R272 and vertebral_R272_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T47_L20 and lateral_occipital_intermediate_temporal_branch_T47_L20_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_intermediate_temporal_branch_T76_R216 and lateral_occipital_intermediate_temporal_branch_T76_R216_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_calcarine_branch_T51_L202 and medial_occipital_calcarine_branch_T51_L202_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_calcarine_branch_T79_R270 and medial_occipital_calcarine_branch_T79_R270_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T52_L190 and medial_occipital_occipitotemporal_branch_T52_L190_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_occipitotemporal_branch_T80_R258 and medial_occipital_occipitotemporal_branch_T80_R258_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parietal_branch_T53_L196 and medial_occipital_parietal_branch_T53_L196_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parietal_branch_T81_R264 and medial_occipital_parietal_branch_T81_R264_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_choroidal_T34_L116 and anterior_choroidal_T34_L116_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_choroidal_T98_R54 and anterior_choroidal_T98_R54_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_parietal_T100_R100 and anterior_parietal_T100_R100_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_parietal_T35_L162 and anterior_parietal_T35_L162_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_central_sulcus_T101_R70 and artery_of_central_sulcus_T101_R70_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_central_sulcus_T36_L132 and artery_of_central_sulcus_T36_L132_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_postcentral_sulcus_T102_R88 and artery_of_postcentral_sulcus_T102_R88_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_postcentral_sulcus_T37_L150 and artery_of_postcentral_sulcus_T37_L150_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R68 and artery_of_precentral_sulcus_T103_R68_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_precentral_sulcus_T103_R72 and artery_of_precentral_sulcus_T103_R72_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L130 and artery_of_precentral_sulcus_T38_L130_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between artery_of_precentral_sulcus_T38_L134 and artery_of_precentral_sulcus_T38_L134_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_cingular_branch_T105_R250 and callosomarginal_cingular_branch_T105_R250_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_cingular_branch_T40_L182 and callosomarginal_cingular_branch_T40_L182_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T106_R242 and callosomarginal_intermediomedial_frontal_branch_T106_R242_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_intermediomedial_frontal_branch_T41_L174 and callosomarginal_intermediomedial_frontal_branch_T41_L174_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_paracentral_branch_T107_R254 and callosomarginal_paracentral_branch_T107_R254_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_paracentral_branch_T42_L186 and callosomarginal_paracentral_branch_T42_L186_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T108_R246 and callosomarginal_posteromedial_frontal_branch_T108_R246_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between callosomarginal_posteromedial_frontal_branch_T43_L178 and callosomarginal_posteromedial_frontal_branch_T43_L178_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between distal_medial_striate_T109_R236 and distal_medial_striate_T109_R236_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between distal_medial_striate_T44_L40 and distal_medial_striate_T44_L40_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_frontobasal_T110_R60 and lateral_frontobasal_T110_R60_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_frontobasal_T45_L122 and lateral_frontobasal_T45_L122_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T111_R212 and lateral_occipital_anterior_temporal_branch_T111_R212_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_anterior_temporal_branch_T46_L16 and lateral_occipital_anterior_temporal_branch_T46_L16_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T112_R220 and lateral_occipital_posterior_temporal_branch_T112_R220_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between lateral_occipital_posterior_temporal_branch_T48_L24 and lateral_occipital_posterior_temporal_branch_T48_L24_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R262 and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T118_R266 and medial_occipital_parieto_occipital_branch_T118_R266_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L194 and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between medial_occipital_parieto_occipital_branch_T54_L198 and medial_occipital_parieto_occipital_branch_T54_L198_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T119_R80 and middle_cerebral_anterior_temporal_branch_T119_R80_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_anterior_temporal_branch_T55_L142 and middle_cerebral_anterior_temporal_branch_T55_L142_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R104 and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T120_R108 and middle_cerebral_branch_to_angular_gyrus_T120_R108_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L166 and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_branch_to_angular_gyrus_T56_L170 and middle_cerebral_branch_to_angular_gyrus_T56_L170_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T121_R84 and middle_cerebral_middle_temporal_branch_T121_R84_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_middle_temporal_branch_T57_L146 and middle_cerebral_middle_temporal_branch_T57_L146_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R92 and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T122_R96 and middle_cerebral_posterior_temporal_branch_T122_R96_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L154 and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporal_branch_T58_L158 and middle_cerebral_posterior_temporal_branch_T58_L158_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T124_R226 and pericallosal_parieto_occipital_branch_T124_R226_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_parieto_occipital_branch_T60_L30 and pericallosal_parieto_occipital_branch_T60_L30_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_precuneal_branch_T125_R230 and pericallosal_precuneal_branch_T125_R230_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between pericallosal_precuneal_branch_T61_L34 and pericallosal_precuneal_branch_T61_L34_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between polar_temporal_T127_R76 and polar_temporal_T127_R76_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between polar_temporal_T63_L138 and polar_temporal_T63_L138_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_parietal_T129_R106 and posterior_parietal_T129_R106_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_parietal_T64_L168 and posterior_parietal_T64_L168_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between prefrontal_T130_R64 and prefrontal_T130_R64_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  def map between prefrontal_T65_L126 and prefrontal_T65_L126_module for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u and u;
    vars v and v;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////// Parameters_Systemic Mapping //////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between Parameters_Systemic and ascending_aorta_A_module for
    vars l_ascending_aorta_A and l;
    vars E_ascending_aorta_A and E;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and ascending_aorta_B_module for
    vars l_ascending_aorta_B and l;
    vars E_ascending_aorta_B and E;
    vars r_ascending_aorta_B and r;
    vars theta_ascending_aorta_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and ascending_aorta_C_module for
    vars l_ascending_aorta_C and l;
    vars E_ascending_aorta_C and E;
    vars r_ascending_aorta_C and r;
    vars theta_ascending_aorta_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and ascending_aorta_D_module for
    vars l_ascending_aorta_D and l;
    vars E_ascending_aorta_D and E;
    vars r_ascending_aorta_D and r;
    vars theta_ascending_aorta_D and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C2_module for
    vars l_aortic_arch_C2 and l;
    vars E_aortic_arch_C2 and E;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and brachiocephalic_trunk_C4_module for
    vars l_brachiocephalic_trunk_C4 and l;
    vars E_brachiocephalic_trunk_C4 and E;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C46_module for
    vars l_aortic_arch_C46 and l;
    vars E_aortic_arch_C46 and E;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C64_module for
    vars l_aortic_arch_C64 and l;
    vars E_aortic_arch_C64 and E;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and aortic_arch_C94_module for
    vars l_aortic_arch_C94 and l;
    vars E_aortic_arch_C94 and E;
    vars r_aortic_arch_C94 and r;
    vars theta_aortic_arch_C94 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C96_module for
    vars l_thoracic_aorta_C96 and l;
    vars E_thoracic_aorta_C96 and E;
    vars r_thoracic_aorta_C96 and r;
    vars theta_thoracic_aorta_C96 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C100_module for
    vars l_thoracic_aorta_C100 and l;
    vars E_thoracic_aorta_C100 and E;
    vars r_thoracic_aorta_C100 and r;
    vars theta_thoracic_aorta_C100 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C104_module for
    vars l_thoracic_aorta_C104 and l;
    vars E_thoracic_aorta_C104 and E;
    vars r_thoracic_aorta_C104 and r;
    vars theta_thoracic_aorta_C104 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C108_module for
    vars l_thoracic_aorta_C108 and l;
    vars E_thoracic_aorta_C108 and E;
    vars r_thoracic_aorta_C108 and r;
    vars theta_thoracic_aorta_C108 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and thoracic_aorta_C112_module for
    vars l_thoracic_aorta_C112 and l;
    vars E_thoracic_aorta_C112 and E;
    vars r_thoracic_aorta_C112 and r;
    vars theta_thoracic_aorta_C112 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C114_module for
    vars l_abdominal_aorta_C114 and l;
    vars E_abdominal_aorta_C114 and E;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C136_module for
    vars l_abdominal_aorta_C136 and l;
    vars E_abdominal_aorta_C136 and E;
    vars r_abdominal_aorta_C136 and r;
    vars theta_abdominal_aorta_C136 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C164_module for
    vars l_abdominal_aorta_C164 and l;
    vars E_abdominal_aorta_C164 and E;
    vars r_abdominal_aorta_C164 and r;
    vars theta_abdominal_aorta_C164 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C176_module for
    vars l_abdominal_aorta_C176 and l;
    vars E_abdominal_aorta_C176 and E;
    vars r_abdominal_aorta_C176 and r;
    vars theta_abdominal_aorta_C176 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C188_module for
    vars l_abdominal_aorta_C188 and l;
    vars E_abdominal_aorta_C188 and E;
    vars r_abdominal_aorta_C188 and r;
    vars theta_abdominal_aorta_C188 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and abdominal_aorta_C192_module for
    vars l_abdominal_aorta_C192 and l;
    vars E_abdominal_aorta_C192 and E;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
    vars beta_g and beta_g;
  enddef;
  // Trunk
  def map between Parameters_Systemic and celiac_trunk_C116_module for
    vars l_celiac_trunk_C116 and l;
    vars E_celiac_trunk_C116 and E;
    vars r_celiac_trunk_C116 and r;
    vars theta_celiac_trunk_C116 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C118_module for
    vars l_splenic_T2_C118 and l;
    vars E_splenic_T2_C118 and E;
    vars r_splenic_T2_C118 and r;
    vars theta_splenic_T2_C118 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C122_module for
    vars l_splenic_T2_C122 and l;
    vars E_splenic_T2_C122 and E;
    vars r_splenic_T2_C122 and r;
    vars theta_splenic_T2_C122 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_hepatic_C128_module for
    vars l_common_hepatic_C128 and l;
    vars E_common_hepatic_C128 and E;
    vars r_common_hepatic_C128 and r;
    vars theta_common_hepatic_C128 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_C130_module for
    vars l_hepatic_artery_proper_C130 and l;
    vars E_hepatic_artery_proper_C130 and E;
    vars r_hepatic_artery_proper_C130 and r;
    vars theta_hepatic_artery_proper_C130 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C138_module for
    vars l_superior_mesenteric_T4_C138 and l;
    vars E_superior_mesenteric_T4_C138 and E;
    vars r_superior_mesenteric_T4_C138 and r;
    vars theta_superior_mesenteric_T4_C138 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C142_module for
    vars l_superior_mesenteric_T4_C142 and l;
    vars E_superior_mesenteric_T4_C142 and E;
    vars r_superior_mesenteric_T4_C142 and r;
    vars theta_superior_mesenteric_T4_C142 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C146_module for
    vars l_superior_mesenteric_T4_C146 and l;
    vars E_superior_mesenteric_T4_C146 and E;
    vars r_superior_mesenteric_T4_C146 and r;
    vars theta_superior_mesenteric_T4_C146 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C150_module for
    vars l_superior_mesenteric_T4_C150 and l;
    vars E_superior_mesenteric_T4_C150 and E;
    vars r_superior_mesenteric_T4_C150 and r;
    vars theta_superior_mesenteric_T4_C150 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C154_module for
    vars l_superior_mesenteric_T4_C154 and l;
    vars E_superior_mesenteric_T4_C154 and E;
    vars r_superior_mesenteric_T4_C154 and r;
    vars theta_superior_mesenteric_T4_C154 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C158_module for
    vars l_superior_mesenteric_T4_C158 and l;
    vars E_superior_mesenteric_T4_C158 and E;
    vars r_superior_mesenteric_T4_C158 and r;
    vars theta_superior_mesenteric_T4_C158 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and renal_L166_module for
    vars l_renal_L166 and l;
    vars E_renal_L166 and E;
    vars r_renal_L166 and r;
    vars theta_renal_L166 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and renal_anterior_branch_L168_module for
    vars l_renal_anterior_branch_L168 and l;
    vars E_renal_anterior_branch_L168 and E;
    vars r_renal_anterior_branch_L168 and r;
    vars theta_renal_anterior_branch_L168 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and renal_R178_module for
    vars l_renal_R178 and l;
    vars E_renal_R178 and E;
    vars r_renal_R178 and r;
    vars theta_renal_R178 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and renal_anterior_branch_R180_module for
    vars l_renal_anterior_branch_R180 and l;
    vars E_renal_anterior_branch_R180 and E;
    vars r_renal_anterior_branch_R180 and r;
    vars theta_renal_anterior_branch_R180 and theta;
    vars beta_g and beta_g;
  enddef;
  // Lower Limbs
  def map between Parameters_Systemic and common_iliac_R216_module for
    vars l_common_iliac_R216 and l;
    vars E_common_iliac_R216 and E;
    vars r_common_iliac_R216 and r;
    vars theta_common_iliac_R216 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and external_iliac_R220_module for
    vars l_external_iliac_R220 and l;
    vars E_external_iliac_R220 and E;
    vars r_external_iliac_R220 and r;
    vars theta_external_iliac_R220 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and femoral_R222_module for
    vars l_femoral_R222 and l;
    vars E_femoral_R222 and E;
    vars r_femoral_R222 and r;
    vars theta_femoral_R222 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and femoral_R226_module for
    vars l_femoral_R226 and l;
    vars E_femoral_R226 and E;
    vars r_femoral_R226 and r;
    vars theta_femoral_R226 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and popliteal_R228_module for
    vars l_popliteal_R228 and l;
    vars E_popliteal_R228 and E;
    vars r_popliteal_R228 and r;
    vars theta_popliteal_R228 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and popliteal_R232_module for
    vars l_popliteal_R232 and l;
    vars E_popliteal_R232 and E;
    vars r_popliteal_R232 and r;
    vars theta_popliteal_R232 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and tibiofibular_trunk_R234_module for
    vars l_tibiofibular_trunk_R234 and l;
    vars E_tibiofibular_trunk_R234 and E;
    vars r_tibiofibular_trunk_R234 and r;
    vars theta_tibiofibular_trunk_R234 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_iliac_L194_module for
    vars l_common_iliac_L194 and l;
    vars E_common_iliac_L194 and E;
    vars r_common_iliac_L194 and r;
    vars theta_common_iliac_L194 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and external_iliac_L198_module for
    vars l_external_iliac_L198 and l;
    vars E_external_iliac_L198 and E;
    vars r_external_iliac_L198 and r;
    vars theta_external_iliac_L198 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and femoral_L200_module for
    vars l_femoral_L200 and l;
    vars E_femoral_L200 and E;
    vars r_femoral_L200 and r;
    vars theta_femoral_L200 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and femoral_L204_module for
    vars l_femoral_L204 and l;
    vars E_femoral_L204 and E;
    vars r_femoral_L204 and r;
    vars theta_femoral_L204 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and popliteal_L206_module for
    vars l_popliteal_L206 and l;
    vars E_popliteal_L206 and E;
    vars r_popliteal_L206 and r;
    vars theta_popliteal_L206 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and popliteal_L210_module for
    vars l_popliteal_L210 and l;
    vars E_popliteal_L210 and E;
    vars r_popliteal_L210 and r;
    vars theta_popliteal_L210 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and tibiofibular_trunk_L212_module for
    vars l_tibiofibular_trunk_L212 and l;
    vars E_tibiofibular_trunk_L212 and E;
    vars r_tibiofibular_trunk_L212 and r;
    vars theta_tibiofibular_trunk_L212 and theta;
    vars beta_g and beta_g;
  enddef;
  // Upper Limbs
  def map between Parameters_Systemic and subclavian_R28_module for
    vars l_subclavian_R28 and l;
    vars E_subclavian_R28 and E;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and subclavian_R30_module for
    vars l_subclavian_R30 and l;
    vars E_subclavian_R30 and E;
    vars r_subclavian_R30 and r;
    vars theta_subclavian_R30 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and axillary_R32_module for
    vars l_axillary_R32 and l;
    vars E_axillary_R32 and E;
    vars r_axillary_R32 and r;
    vars theta_axillary_R32 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and brachial_R34_module for
    vars l_brachial_R34 and l;
    vars E_brachial_R34 and E;
    vars r_brachial_R34 and r;
    vars theta_brachial_R34 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_R36_module for
    vars l_ulnar_T2_R36 and l;
    vars E_ulnar_T2_R36 and E;
    vars r_ulnar_T2_R36 and r;
    vars theta_ulnar_T2_R36 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_interosseous_R38_module for
    vars l_common_interosseous_R38 and l;
    vars E_common_interosseous_R38 and E;
    vars r_common_interosseous_R38 and r;
    vars theta_common_interosseous_R38 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and subclavian_L66_module for
    vars l_subclavian_L66 and l;
    vars E_subclavian_L66 and E;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and subclavian_L78_module for
    vars l_subclavian_L78 and l;
    vars E_subclavian_L78 and E;
    vars r_subclavian_L78 and r;
    vars theta_subclavian_L78 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and axillary_L80_module for
    vars l_axillary_L80 and l;
    vars E_axillary_L80 and E;
    vars r_axillary_L80 and r;
    vars theta_axillary_L80 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and brachial_L82_module for
    vars l_brachial_L82 and l;
    vars E_brachial_L82 and E;
    vars r_brachial_L82 and r;
    vars theta_brachial_L82 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_L84_module for
    vars l_ulnar_T2_L84 and l;
    vars E_ulnar_T2_L84 and E;
    vars r_ulnar_T2_L84 and r;
    vars theta_ulnar_T2_L84 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_interosseous_L86_module for
    vars l_common_interosseous_L86 and l;
    vars E_common_interosseous_L86 and E;
    vars r_common_interosseous_L86 and r;
    vars theta_common_interosseous_L86 and theta;
    vars beta_g and beta_g;
  enddef;
  // Head
  def map between Parameters_Systemic and common_carotid_R6_A_module for
    vars l_common_carotid_R6_A and l;
    vars E_common_carotid_R6_A and E;
    vars r_common_carotid_R6_A and r;
    vars theta_common_carotid_R6_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_R6_B_module for
    vars l_common_carotid_R6_B and l;
    vars E_common_carotid_R6_B and E;
    vars r_common_carotid_R6_B and r;
    vars theta_common_carotid_R6_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_R6_C_module for
    vars l_common_carotid_R6_C and l;
    vars E_common_carotid_R6_C and E;
    vars r_common_carotid_R6_C and r;
    vars theta_common_carotid_R6_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_R8_A_module for
    vars l_internal_carotid_R8_A and l;
    vars E_internal_carotid_R8_A and E;
    vars r_internal_carotid_R8_A and r;
    vars theta_internal_carotid_R8_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_R8_B_module for
    vars l_internal_carotid_R8_B and l;
    vars E_internal_carotid_R8_B and E;
    vars r_internal_carotid_R8_B and r;
    vars theta_internal_carotid_R8_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_R8_C_module for
    vars l_internal_carotid_R8_C and l;
    vars E_internal_carotid_R8_C and E;
    vars r_internal_carotid_R8_C and r;
    vars theta_internal_carotid_R8_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_L48_A_module for
    vars l_common_carotid_L48_A and l;
    vars E_common_carotid_L48_A and E;
    vars r_common_carotid_L48_A and r;
    vars theta_common_carotid_L48_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_L48_B_module for
    vars l_common_carotid_L48_B and l;
    vars E_common_carotid_L48_B and E;
    vars r_common_carotid_L48_B and r;
    vars theta_common_carotid_L48_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_L48_C_module for
    vars l_common_carotid_L48_C and l;
    vars E_common_carotid_L48_C and E;
    vars r_common_carotid_L48_C and r;
    vars theta_common_carotid_L48_C and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and common_carotid_L48_D_module for
    vars l_common_carotid_L48_D and l;
    vars E_common_carotid_L48_D and E;
    vars r_common_carotid_L48_D and r;
    vars theta_common_carotid_L48_D and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_L50_A_module for
    vars l_internal_carotid_L50_A and l;
    vars E_internal_carotid_L50_A and E;
    vars r_internal_carotid_L50_A and r;
    vars theta_internal_carotid_L50_A and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_L50_B_module for
    vars l_internal_carotid_L50_B and l;
    vars E_internal_carotid_L50_B and E;
    vars r_internal_carotid_L50_B and r;
    vars theta_internal_carotid_L50_B and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_L50_C_module for
    vars l_internal_carotid_L50_C and l;
    vars E_internal_carotid_L50_C and E;
    vars r_internal_carotid_L50_C and r;
    vars theta_internal_carotid_L50_C and theta;
    vars beta_g and beta_g;
  enddef;
  // Cerebral
  def map between Parameters_Systemic and anterior_cerebral_L110_module for
    vars l_anterior_cerebral_L110 and l;
    vars E_anterior_cerebral_L110 and E;
    vars r_anterior_cerebral_L110 and r;
    vars theta_anterior_cerebral_L110 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_cerebral_L38_module for
    vars l_anterior_cerebral_L38 and l;
    vars E_anterior_cerebral_L38 and E;
    vars r_anterior_cerebral_L38 and r;
    vars theta_anterior_cerebral_L38 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_cerebral_L42_module for
    vars l_anterior_cerebral_L42 and l;
    vars E_anterior_cerebral_L42 and E;
    vars r_anterior_cerebral_L42 and r;
    vars theta_anterior_cerebral_L42 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_cerebral_R234_module for
    vars l_anterior_cerebral_R234 and l;
    vars E_anterior_cerebral_R234 and E;
    vars r_anterior_cerebral_R234 and r;
    vars theta_anterior_cerebral_R234 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_cerebral_R238_module for
    vars l_anterior_cerebral_R238 and l;
    vars E_anterior_cerebral_R238 and E;
    vars r_anterior_cerebral_R238 and r;
    vars theta_anterior_cerebral_R238 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_cerebral_R46_module for
    vars l_anterior_cerebral_R46 and l;
    vars E_anterior_cerebral_R46 and E;
    vars r_anterior_cerebral_R46 and r;
    vars theta_anterior_cerebral_R46 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and anterior_communicating_C44_module for
    vars l_anterior_communicating_C44 and l;
    vars E_anterior_communicating_C44 and E;
    vars r_anterior_communicating_C44 and r;
    vars theta_anterior_communicating_C44 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and basilar_C4_module for
    vars l_basilar_C4 and l;
    vars E_basilar_C4 and E;
    vars r_basilar_C4 and r;
    vars theta_basilar_C4 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_L172_module for
    vars l_callosomarginal_L172 and l;
    vars E_callosomarginal_L172 and E;
    vars r_callosomarginal_L172 and r;
    vars theta_callosomarginal_L172 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_L176_module for
    vars l_callosomarginal_L176 and l;
    vars E_callosomarginal_L176 and E;
    vars r_callosomarginal_L176 and r;
    vars theta_callosomarginal_L176 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_L180_module for
    vars l_callosomarginal_L180 and l;
    vars E_callosomarginal_L180 and E;
    vars r_callosomarginal_L180 and r;
    vars theta_callosomarginal_L180 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_L184_module for
    vars l_callosomarginal_L184 and l;
    vars E_callosomarginal_L184 and E;
    vars r_callosomarginal_L184 and r;
    vars theta_callosomarginal_L184 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_R240_module for
    vars l_callosomarginal_R240 and l;
    vars E_callosomarginal_R240 and E;
    vars r_callosomarginal_R240 and r;
    vars theta_callosomarginal_R240 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_R244_module for
    vars l_callosomarginal_R244 and l;
    vars E_callosomarginal_R244 and E;
    vars r_callosomarginal_R244 and r;
    vars theta_callosomarginal_R244 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_R248_module for
    vars l_callosomarginal_R248 and l;
    vars E_callosomarginal_R248 and E;
    vars r_callosomarginal_R248 and r;
    vars theta_callosomarginal_R248 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and callosomarginal_R252_module for
    vars l_callosomarginal_R252 and l;
    vars E_callosomarginal_R252 and E;
    vars r_callosomarginal_R252 and r;
    vars theta_callosomarginal_R252 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_L112_module for
    vars l_internal_carotid_L112 and l;
    vars E_internal_carotid_L112 and E;
    vars r_internal_carotid_L112 and r;
    vars theta_internal_carotid_L112 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and internal_carotid_R48_module for
    vars l_internal_carotid_R48 and l;
    vars E_internal_carotid_R48 and E;
    vars r_internal_carotid_R48 and r;
    vars theta_internal_carotid_R48 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars l_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and l;
    vars E_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and E;
    vars r_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and r;
    vars theta_medial_occipital_dorsal_branch_to_corpus_callosum_L28 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars l_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and l;
    vars E_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and E;
    vars r_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and r;
    vars theta_medial_occipital_dorsal_branch_to_corpus_callosum_R224 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_L188_module for
    vars l_medial_occipital_L188 and l;
    vars E_medial_occipital_L188 and E;
    vars r_medial_occipital_L188 and r;
    vars theta_medial_occipital_L188 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_L192_module for
    vars l_medial_occipital_L192 and l;
    vars E_medial_occipital_L192 and E;
    vars r_medial_occipital_L192 and r;
    vars theta_medial_occipital_L192 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_L200_module for
    vars l_medial_occipital_L200 and l;
    vars E_medial_occipital_L200 and E;
    vars r_medial_occipital_L200 and r;
    vars theta_medial_occipital_L200 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_L26_module for
    vars l_medial_occipital_L26 and l;
    vars E_medial_occipital_L26 and E;
    vars r_medial_occipital_L26 and r;
    vars theta_medial_occipital_L26 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_R222_module for
    vars l_medial_occipital_R222 and l;
    vars E_medial_occipital_R222 and E;
    vars r_medial_occipital_R222 and r;
    vars theta_medial_occipital_R222 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_R256_module for
    vars l_medial_occipital_R256 and l;
    vars E_medial_occipital_R256 and E;
    vars r_medial_occipital_R256 and r;
    vars theta_medial_occipital_R256 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_R260_module for
    vars l_medial_occipital_R260 and l;
    vars E_medial_occipital_R260 and E;
    vars r_medial_occipital_R260 and r;
    vars theta_medial_occipital_R260 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_R268_module for
    vars l_medial_occipital_R268 and l;
    vars E_medial_occipital_R268 and E;
    vars r_medial_occipital_R268 and r;
    vars theta_medial_occipital_R268 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L136_module for
    vars l_middle_cerebral_inferior_terminal_branch_L136 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L136 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L136 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L136 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L140_module for
    vars l_middle_cerebral_inferior_terminal_branch_L140 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L140 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L140 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L140 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L144_module for
    vars l_middle_cerebral_inferior_terminal_branch_L144 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L144 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L144 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L144 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L148_module for
    vars l_middle_cerebral_inferior_terminal_branch_L148 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L148 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L148 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L148 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L152_module for
    vars l_middle_cerebral_inferior_terminal_branch_L152 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L152 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L152 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L152 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L160_module for
    vars l_middle_cerebral_inferior_terminal_branch_L160 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L160 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L160 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L160 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_L164_module for
    vars l_middle_cerebral_inferior_terminal_branch_L164 and l;
    vars E_middle_cerebral_inferior_terminal_branch_L164 and E;
    vars r_middle_cerebral_inferior_terminal_branch_L164 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_L164 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R102_module for
    vars l_middle_cerebral_inferior_terminal_branch_R102 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R102 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R102 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R102 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R74_module for
    vars l_middle_cerebral_inferior_terminal_branch_R74 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R74 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R74 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R74 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R78_module for
    vars l_middle_cerebral_inferior_terminal_branch_R78 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R78 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R78 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R78 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R82_module for
    vars l_middle_cerebral_inferior_terminal_branch_R82 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R82 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R82 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R82 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R86_module for
    vars l_middle_cerebral_inferior_terminal_branch_R86 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R86 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R86 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R86 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R90_module for
    vars l_middle_cerebral_inferior_terminal_branch_R90 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R90 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R90 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R90 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_inferior_terminal_branch_R98_module for
    vars l_middle_cerebral_inferior_terminal_branch_R98 and l;
    vars E_middle_cerebral_inferior_terminal_branch_R98 and E;
    vars r_middle_cerebral_inferior_terminal_branch_R98 and r;
    vars theta_middle_cerebral_inferior_terminal_branch_R98 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_L114_module for
    vars l_middle_cerebral_L114 and l;
    vars E_middle_cerebral_L114 and E;
    vars r_middle_cerebral_L114 and r;
    vars theta_middle_cerebral_L114 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_L118_module for
    vars l_middle_cerebral_L118 and l;
    vars E_middle_cerebral_L118 and E;
    vars r_middle_cerebral_L118 and r;
    vars theta_middle_cerebral_L118 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_R52_module for
    vars l_middle_cerebral_R52 and l;
    vars E_middle_cerebral_R52 and E;
    vars r_middle_cerebral_R52 and r;
    vars theta_middle_cerebral_R52 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_R56_module for
    vars l_middle_cerebral_R56 and l;
    vars E_middle_cerebral_R56 and E;
    vars r_middle_cerebral_R56 and r;
    vars theta_middle_cerebral_R56 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_L120_module for
    vars l_middle_cerebral_superior_terminal_branch_L120 and l;
    vars E_middle_cerebral_superior_terminal_branch_L120 and E;
    vars r_middle_cerebral_superior_terminal_branch_L120 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L120 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_L124_module for
    vars l_middle_cerebral_superior_terminal_branch_L124 and l;
    vars E_middle_cerebral_superior_terminal_branch_L124 and E;
    vars r_middle_cerebral_superior_terminal_branch_L124 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L124 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_L128_module for
    vars l_middle_cerebral_superior_terminal_branch_L128 and l;
    vars E_middle_cerebral_superior_terminal_branch_L128 and E;
    vars r_middle_cerebral_superior_terminal_branch_L128 and r;
    vars theta_middle_cerebral_superior_terminal_branch_L128 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_R58_module for
    vars l_middle_cerebral_superior_terminal_branch_R58 and l;
    vars E_middle_cerebral_superior_terminal_branch_R58 and E;
    vars r_middle_cerebral_superior_terminal_branch_R58 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R58 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_R62_module for
    vars l_middle_cerebral_superior_terminal_branch_R62 and l;
    vars E_middle_cerebral_superior_terminal_branch_R62 and E;
    vars r_middle_cerebral_superior_terminal_branch_R62 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R62 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_superior_terminal_branch_R66_module for
    vars l_middle_cerebral_superior_terminal_branch_R66 and l;
    vars E_middle_cerebral_superior_terminal_branch_R66 and E;
    vars r_middle_cerebral_superior_terminal_branch_R66 and r;
    vars theta_middle_cerebral_superior_terminal_branch_R66 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_L14_module for
    vars l_occipital_lateral_L14 and l;
    vars E_occipital_lateral_L14 and E;
    vars r_occipital_lateral_L14 and r;
    vars theta_occipital_lateral_L14 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_L18_module for
    vars l_occipital_lateral_L18 and l;
    vars E_occipital_lateral_L18 and E;
    vars r_occipital_lateral_L18 and r;
    vars theta_occipital_lateral_L18 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_L22_module for
    vars l_occipital_lateral_L22 and l;
    vars E_occipital_lateral_L22 and E;
    vars r_occipital_lateral_L22 and r;
    vars theta_occipital_lateral_L22 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_R210_module for
    vars l_occipital_lateral_R210 and l;
    vars E_occipital_lateral_R210 and E;
    vars r_occipital_lateral_R210 and r;
    vars theta_occipital_lateral_R210 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_R214_module for
    vars l_occipital_lateral_R214 and l;
    vars E_occipital_lateral_R214 and E;
    vars r_occipital_lateral_R214 and r;
    vars theta_occipital_lateral_R214 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and occipital_lateral_R218_module for
    vars l_occipital_lateral_R218 and l;
    vars E_occipital_lateral_R218 and E;
    vars r_occipital_lateral_R218 and r;
    vars theta_occipital_lateral_R218 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and pericallosal_L32_module for
    vars l_pericallosal_L32 and l;
    vars E_pericallosal_L32 and E;
    vars r_pericallosal_L32 and r;
    vars theta_pericallosal_L32 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and pericallosal_L36_module for
    vars l_pericallosal_L36 and l;
    vars E_pericallosal_L36 and E;
    vars r_pericallosal_L36 and r;
    vars theta_pericallosal_L36 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and pericallosal_R228_module for
    vars l_pericallosal_R228 and l;
    vars E_pericallosal_R228 and E;
    vars r_pericallosal_R228 and r;
    vars theta_pericallosal_R228 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and pericallosal_R232_module for
    vars l_pericallosal_R232 and l;
    vars E_pericallosal_R232 and E;
    vars r_pericallosal_R232 and r;
    vars theta_pericallosal_R232 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_cerebral_postcommunicating_part_L12_module for
    vars l_posterior_cerebral_postcommunicating_part_L12 and l;
    vars E_posterior_cerebral_postcommunicating_part_L12 and E;
    vars r_posterior_cerebral_postcommunicating_part_L12 and r;
    vars theta_posterior_cerebral_postcommunicating_part_L12 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_cerebral_postcommunicating_part_R208_module for
    vars l_posterior_cerebral_postcommunicating_part_R208 and l;
    vars E_posterior_cerebral_postcommunicating_part_R208 and E;
    vars r_posterior_cerebral_postcommunicating_part_R208 and r;
    vars theta_posterior_cerebral_postcommunicating_part_R208 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_cerebral_precommunicating_part_L6_module for
    vars l_posterior_cerebral_precommunicating_part_L6 and l;
    vars E_posterior_cerebral_precommunicating_part_L6 and E;
    vars r_posterior_cerebral_precommunicating_part_L6 and r;
    vars theta_posterior_cerebral_precommunicating_part_L6 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_cerebral_precommunicating_part_R204_module for
    vars l_posterior_cerebral_precommunicating_part_R204 and l;
    vars E_posterior_cerebral_precommunicating_part_R204 and E;
    vars r_posterior_cerebral_precommunicating_part_R204 and r;
    vars theta_posterior_cerebral_precommunicating_part_R204 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_communicating_L8_module for
    vars l_posterior_communicating_L8 and l;
    vars E_posterior_communicating_L8 and E;
    vars r_posterior_communicating_L8 and r;
    vars theta_posterior_communicating_L8 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and posterior_communicating_R206_module for
    vars l_posterior_communicating_R206 and l;
    vars E_posterior_communicating_R206 and E;
    vars r_posterior_communicating_R206 and r;
    vars theta_posterior_communicating_R206 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and vertebral_L2_module for
    vars l_vertebral_L2 and l;
    vars E_vertebral_L2 and E;
    vars r_vertebral_L2 and r;
    vars theta_vertebral_L2 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and vertebral_R272_module for
    vars l_vertebral_R272 and l;
    vars E_vertebral_R272 and E;
    vars r_vertebral_R272 and r;
    vars theta_vertebral_R272 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and artery_of_precentral_sulcus_T103_R68_module for
    vars l_artery_of_precentral_sulcus_T103_R68 and l;
    vars E_artery_of_precentral_sulcus_T103_R68 and E;
    vars r_artery_of_precentral_sulcus_T103_R68 and r;
    vars theta_artery_of_precentral_sulcus_T103_R68 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and artery_of_precentral_sulcus_T38_L130_module for
    vars l_artery_of_precentral_sulcus_T38_L130 and l;
    vars E_artery_of_precentral_sulcus_T38_L130 and E;
    vars r_artery_of_precentral_sulcus_T38_L130 and r;
    vars theta_artery_of_precentral_sulcus_T38_L130 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars l_medial_occipital_parieto_occipital_branch_T118_R262 and l;
    vars E_medial_occipital_parieto_occipital_branch_T118_R262 and E;
    vars r_medial_occipital_parieto_occipital_branch_T118_R262 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T118_R262 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars l_medial_occipital_parieto_occipital_branch_T54_L194 and l;
    vars E_medial_occipital_parieto_occipital_branch_T54_L194 and E;
    vars r_medial_occipital_parieto_occipital_branch_T54_L194 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T54_L194 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars l_middle_cerebral_branch_to_angular_gyrus_T120_R104 and l;
    vars E_middle_cerebral_branch_to_angular_gyrus_T120_R104 and E;
    vars r_middle_cerebral_branch_to_angular_gyrus_T120_R104 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T120_R104 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars l_middle_cerebral_branch_to_angular_gyrus_T56_L166 and l;
    vars E_middle_cerebral_branch_to_angular_gyrus_T56_L166 and E;
    vars r_middle_cerebral_branch_to_angular_gyrus_T56_L166 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T56_L166 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars l_middle_cerebral_posterior_temporal_branch_T122_R92 and l;
    vars E_middle_cerebral_posterior_temporal_branch_T122_R92 and E;
    vars r_middle_cerebral_posterior_temporal_branch_T122_R92 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T122_R92 and theta;
    vars beta_g and beta_g;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars l_middle_cerebral_posterior_temporal_branch_T58_L154 and l;
    vars E_middle_cerebral_posterior_temporal_branch_T58_L154 and E;
    vars r_middle_cerebral_posterior_temporal_branch_T58_L154 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T58_L154 and theta;
    vars beta_g and beta_g;
  enddef;
  // Terminal
  def map between Parameters_Systemic and posterior_intercostal_T1_R98_module for
    vars l_posterior_intercostal_T1_R98 and l;
    vars E_posterior_intercostal_T1_R98 and E;
    vars R_T_posterior_intercostal_T1_R98 and R_T;
    vars C_T_posterior_intercostal_T1_R98 and C_T;
    vars r_posterior_intercostal_T1_R98 and r;
    vars theta_posterior_intercostal_T1_R98 and theta;
    vars v_nom_posterior_intercostal_T1_R98 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T1_L102_module for
    vars l_posterior_intercostal_T1_L102 and l;
    vars E_posterior_intercostal_T1_L102 and E;
    vars R_T_posterior_intercostal_T1_L102 and R_T;
    vars C_T_posterior_intercostal_T1_L102 and C_T;
    vars r_posterior_intercostal_T1_L102 and r;
    vars theta_posterior_intercostal_T1_L102 and theta;
    vars v_nom_posterior_intercostal_T1_L102 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T2_R106_module for
    vars l_posterior_intercostal_T2_R106 and l;
    vars E_posterior_intercostal_T2_R106 and E;
    vars R_T_posterior_intercostal_T2_R106 and R_T;
    vars C_T_posterior_intercostal_T2_R106 and C_T;
    vars r_posterior_intercostal_T2_R106 and r;
    vars theta_posterior_intercostal_T2_R106 and theta;
    vars v_nom_posterior_intercostal_T2_R106 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_intercostal_T2_L110_module for
    vars l_posterior_intercostal_T2_L110 and l;
    vars E_posterior_intercostal_T2_L110 and E;
    vars R_T_posterior_intercostal_T2_L110 and R_T;
    vars C_T_posterior_intercostal_T2_L110 and C_T;
    vars r_posterior_intercostal_T2_L110 and r;
    vars theta_posterior_intercostal_T2_L110 and theta;
    vars v_nom_posterior_intercostal_T2_L110 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and left_gastric_T3_C120_module for
    vars l_left_gastric_T3_C120 and l;
    vars E_left_gastric_T3_C120 and E;
    vars R_T_left_gastric_T3_C120 and R_T;
    vars C_T_left_gastric_T3_C120 and C_T;
    vars r_left_gastric_T3_C120 and r;
    vars theta_left_gastric_T3_C120 and theta;
    vars v_nom_left_gastric_T3_C120 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and dorsal_pancreatic_T1_C124_module for
    vars l_dorsal_pancreatic_T1_C124 and l;
    vars E_dorsal_pancreatic_T1_C124 and E;
    vars R_T_dorsal_pancreatic_T1_C124 and R_T;
    vars C_T_dorsal_pancreatic_T1_C124 and C_T;
    vars r_dorsal_pancreatic_T1_C124 and r;
    vars theta_dorsal_pancreatic_T1_C124 and theta;
    vars v_nom_dorsal_pancreatic_T1_C124 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and splenic_T2_C126_module for
    vars l_splenic_T2_C126 and l;
    vars E_splenic_T2_C126 and E;
    vars R_T_splenic_T2_C126 and R_T;
    vars C_T_splenic_T2_C126 and C_T;
    vars r_splenic_T2_C126 and r;
    vars theta_splenic_T2_C126 and theta;
    vars v_nom_splenic_T2_C126 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_left_branch_C132_module for
    vars l_hepatic_artery_proper_left_branch_C132 and l;
    vars E_hepatic_artery_proper_left_branch_C132 and E;
    vars R_T_hepatic_artery_proper_left_branch_C132 and R_T;
    vars C_T_hepatic_artery_proper_left_branch_C132 and C_T;
    vars r_hepatic_artery_proper_left_branch_C132 and r;
    vars theta_hepatic_artery_proper_left_branch_C132 and theta;
    vars v_nom_hepatic_artery_proper_left_branch_C132 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and hepatic_artery_proper_right_branch_C134_module for
    vars l_hepatic_artery_proper_right_branch_C134 and l;
    vars E_hepatic_artery_proper_right_branch_C134 and E;
    vars R_T_hepatic_artery_proper_right_branch_C134 and R_T;
    vars C_T_hepatic_artery_proper_right_branch_C134 and C_T;
    vars r_hepatic_artery_proper_right_branch_C134 and r;
    vars theta_hepatic_artery_proper_right_branch_C134 and theta;
    vars v_nom_hepatic_artery_proper_right_branch_C134 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_colic_T8_C140_module for
    vars l_middle_colic_T8_C140 and l;
    vars E_middle_colic_T8_C140 and E;
    vars R_T_middle_colic_T8_C140 and R_T;
    vars C_T_middle_colic_T8_C140 and C_T;
    vars r_middle_colic_T8_C140 and r;
    vars theta_middle_colic_T8_C140 and theta;
    vars v_nom_middle_colic_T8_C140 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and jejunal_3_T10_C144_module for
    vars l_jejunal_3_T10_C144 and l;
    vars E_jejunal_3_T10_C144 and E;
    vars R_T_jejunal_3_T10_C144 and R_T;
    vars C_T_jejunal_3_T10_C144 and C_T;
    vars r_jejunal_3_T10_C144 and r;
    vars theta_jejunal_3_T10_C144 and theta;
    vars v_nom_jejunal_3_T10_C144 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and jejunal_6_T11_C148_module for
    vars l_jejunal_6_T11_C148 and l;
    vars E_jejunal_6_T11_C148 and E;
    vars R_T_jejunal_6_T11_C148 and R_T;
    vars C_T_jejunal_6_T11_C148 and C_T;
    vars r_jejunal_6_T11_C148 and r;
    vars theta_jejunal_6_T11_C148 and theta;
    vars v_nom_jejunal_6_T11_C148 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and ileocolic_T9_C152_module for
    vars l_ileocolic_T9_C152 and l;
    vars E_ileocolic_T9_C152 and E;
    vars R_T_ileocolic_T9_C152 and R_T;
    vars C_T_ileocolic_T9_C152 and C_T;
    vars r_ileocolic_T9_C152 and r;
    vars theta_ileocolic_T9_C152 and theta;
    vars v_nom_ileocolic_T9_C152 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and ileal_4_T12_C156_module for
    vars l_ileal_4_T12_C156 and l;
    vars E_ileal_4_T12_C156 and E;
    vars R_T_ileal_4_T12_C156 and R_T;
    vars C_T_ileal_4_T12_C156 and C_T;
    vars r_ileal_4_T12_C156 and r;
    vars theta_ileal_4_T12_C156 and theta;
    vars v_nom_ileal_4_T12_C156 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and ileal_6_T13_C160_module for
    vars l_ileal_6_T13_C160 and l;
    vars E_ileal_6_T13_C160 and E;
    vars R_T_ileal_6_T13_C160 and R_T;
    vars C_T_ileal_6_T13_C160 and C_T;
    vars r_ileal_6_T13_C160 and r;
    vars theta_ileal_6_T13_C160 and theta;
    vars v_nom_ileal_6_T13_C160 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and superior_mesenteric_T4_C162_module for
    vars l_superior_mesenteric_T4_C162 and l;
    vars E_superior_mesenteric_T4_C162 and E;
    vars R_T_superior_mesenteric_T4_C162 and R_T;
    vars C_T_superior_mesenteric_T4_C162 and C_T;
    vars r_superior_mesenteric_T4_C162 and r;
    vars theta_superior_mesenteric_T4_C162 and theta;
    vars v_nom_superior_mesenteric_T4_C162 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and inferior_segmental_T5_L170_module for
    vars l_inferior_segmental_T5_L170 and l;
    vars E_inferior_segmental_T5_L170 and E;
    vars R_T_inferior_segmental_T5_L170 and R_T;
    vars C_T_inferior_segmental_T5_L170 and C_T;
    vars r_inferior_segmental_T5_L170 and r;
    vars theta_inferior_segmental_T5_L170 and theta;
    vars v_nom_inferior_segmental_T5_L170 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and superior_segmental_T4_L172_module for
    vars l_superior_segmental_T4_L172 and l;
    vars E_superior_segmental_T4_L172 and E;
    vars R_T_superior_segmental_T4_L172 and R_T;
    vars C_T_superior_segmental_T4_L172 and C_T;
    vars r_superior_segmental_T4_L172 and r;
    vars theta_superior_segmental_T4_L172 and theta;
    vars v_nom_superior_segmental_T4_L172 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and renal_posterior_branch_T3_L174_module for
    vars l_renal_posterior_branch_T3_L174 and l;
    vars E_renal_posterior_branch_T3_L174 and E;
    vars R_T_renal_posterior_branch_T3_L174 and R_T;
    vars C_T_renal_posterior_branch_T3_L174 and C_T;
    vars r_renal_posterior_branch_T3_L174 and r;
    vars theta_renal_posterior_branch_T3_L174 and theta;
    vars v_nom_renal_posterior_branch_T3_L174 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and superior_segmental_T4_R182_module for
    vars l_superior_segmental_T4_R182 and l;
    vars E_superior_segmental_T4_R182 and E;
    vars R_T_superior_segmental_T4_R182 and R_T;
    vars C_T_superior_segmental_T4_R182 and C_T;
    vars r_superior_segmental_T4_R182 and r;
    vars theta_superior_segmental_T4_R182 and theta;
    vars v_nom_superior_segmental_T4_R182 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and inferior_segmental_T5_R184_module for
    vars l_inferior_segmental_T5_R184 and l;
    vars E_inferior_segmental_T5_R184 and E;
    vars R_T_inferior_segmental_T5_R184 and R_T;
    vars C_T_inferior_segmental_T5_R184 and C_T;
    vars r_inferior_segmental_T5_R184 and r;
    vars theta_inferior_segmental_T5_R184 and theta;
    vars v_nom_inferior_segmental_T5_R184 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and renal_posterior_branch_T3_R186_module for
    vars l_renal_posterior_branch_T3_R186 and l;
    vars E_renal_posterior_branch_T3_R186 and E;
    vars R_T_renal_posterior_branch_T3_R186 and R_T;
    vars C_T_renal_posterior_branch_T3_R186 and C_T;
    vars r_renal_posterior_branch_T3_R186 and r;
    vars theta_renal_posterior_branch_T3_R186 and theta;
    vars v_nom_renal_posterior_branch_T3_R186 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and inferior_mesenteric_T5_C190_module for
    vars l_inferior_mesenteric_T5_C190 and l;
    vars E_inferior_mesenteric_T5_C190 and E;
    vars R_T_inferior_mesenteric_T5_C190 and R_T;
    vars C_T_inferior_mesenteric_T5_C190 and C_T;
    vars r_inferior_mesenteric_T5_C190 and r;
    vars theta_inferior_mesenteric_T5_C190 and theta;
    vars v_nom_inferior_mesenteric_T5_C190 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and internal_iliac_T1_R218_module for
    vars l_internal_iliac_T1_R218 and l;
    vars E_internal_iliac_T1_R218 and E;
    vars R_T_internal_iliac_T1_R218 and R_T;
    vars C_T_internal_iliac_T1_R218 and C_T;
    vars r_internal_iliac_T1_R218 and r;
    vars theta_internal_iliac_T1_R218 and theta;
    vars v_nom_internal_iliac_T1_R218 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and profundus_T2_R224_module for
    vars l_profundus_T2_R224 and l;
    vars E_profundus_T2_R224 and E;
    vars R_T_profundus_T2_R224 and R_T;
    vars C_T_profundus_T2_R224 and C_T;
    vars r_profundus_T2_R224 and r;
    vars theta_profundus_T2_R224 and theta;
    vars v_nom_profundus_T2_R224 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_tibial_T3_R230_module for
    vars l_anterior_tibial_T3_R230 and l;
    vars E_anterior_tibial_T3_R230 and E;
    vars R_T_anterior_tibial_T3_R230 and R_T;
    vars C_T_anterior_tibial_T3_R230 and C_T;
    vars r_anterior_tibial_T3_R230 and r;
    vars theta_anterior_tibial_T3_R230 and theta;
    vars v_nom_anterior_tibial_T3_R230 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_tibial_T4_R236_module for
    vars l_posterior_tibial_T4_R236 and l;
    vars E_posterior_tibial_T4_R236 and E;
    vars R_T_posterior_tibial_T4_R236 and R_T;
    vars C_T_posterior_tibial_T4_R236 and C_T;
    vars r_posterior_tibial_T4_R236 and r;
    vars theta_posterior_tibial_T4_R236 and theta;
    vars v_nom_posterior_tibial_T4_R236 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and internal_iliac_T1_L196_module for
    vars l_internal_iliac_T1_L196 and l;
    vars E_internal_iliac_T1_L196 and E;
    vars R_T_internal_iliac_T1_L196 and R_T;
    vars C_T_internal_iliac_T1_L196 and C_T;
    vars r_internal_iliac_T1_L196 and r;
    vars theta_internal_iliac_T1_L196 and theta;
    vars v_nom_internal_iliac_T1_L196 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and profundus_T2_L202_module for
    vars l_profundus_T2_L202 and l;
    vars E_profundus_T2_L202 and E;
    vars R_T_profundus_T2_L202 and R_T;
    vars C_T_profundus_T2_L202 and C_T;
    vars r_profundus_T2_L202 and r;
    vars theta_profundus_T2_L202 and theta;
    vars v_nom_profundus_T2_L202 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_tibial_T3_L208_module for
    vars l_anterior_tibial_T3_L208 and l;
    vars E_anterior_tibial_T3_L208 and E;
    vars R_T_anterior_tibial_T3_L208 and R_T;
    vars C_T_anterior_tibial_T3_L208 and C_T;
    vars r_anterior_tibial_T3_L208 and r;
    vars theta_anterior_tibial_T3_L208 and theta;
    vars v_nom_anterior_tibial_T3_L208 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_tibial_T4_L214_module for
    vars l_posterior_tibial_T4_L214 and l;
    vars E_posterior_tibial_T4_L214 and E;
    vars R_T_posterior_tibial_T4_L214 and R_T;
    vars C_T_posterior_tibial_T4_L214 and C_T;
    vars r_posterior_tibial_T4_L214 and r;
    vars theta_posterior_tibial_T4_L214 and theta;
    vars v_nom_posterior_tibial_T4_L214 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_interosseous_T3_R40_module for
    vars l_posterior_interosseous_T3_R40 and l;
    vars E_posterior_interosseous_T3_R40 and E;
    vars R_T_posterior_interosseous_T3_R40 and R_T;
    vars C_T_posterior_interosseous_T3_R40 and C_T;
    vars r_posterior_interosseous_T3_R40 and r;
    vars theta_posterior_interosseous_T3_R40 and theta;
    vars v_nom_posterior_interosseous_T3_R40 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_R42_module for
    vars l_ulnar_T2_R42 and l;
    vars E_ulnar_T2_R42 and E;
    vars R_T_ulnar_T2_R42 and R_T;
    vars C_T_ulnar_T2_R42 and C_T;
    vars r_ulnar_T2_R42 and r;
    vars theta_ulnar_T2_R42 and theta;
    vars v_nom_ulnar_T2_R42 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and radial_T1_R44_module for
    vars l_radial_T1_R44 and l;
    vars E_radial_T1_R44 and E;
    vars R_T_radial_T1_R44 and R_T;
    vars C_T_radial_T1_R44 and C_T;
    vars r_radial_T1_R44 and r;
    vars theta_radial_T1_R44 and theta;
    vars v_nom_radial_T1_R44 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_interosseous_T3_L88_module for
    vars l_posterior_interosseous_T3_L88 and l;
    vars E_posterior_interosseous_T3_L88 and E;
    vars R_T_posterior_interosseous_T3_L88 and R_T;
    vars C_T_posterior_interosseous_T3_L88 and C_T;
    vars r_posterior_interosseous_T3_L88 and r;
    vars theta_posterior_interosseous_T3_L88 and theta;
    vars v_nom_posterior_interosseous_T3_L88 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and ulnar_T2_L90_module for
    vars l_ulnar_T2_L90 and l;
    vars E_ulnar_T2_L90 and E;
    vars R_T_ulnar_T2_L90 and R_T;
    vars C_T_ulnar_T2_L90 and C_T;
    vars r_ulnar_T2_L90 and r;
    vars theta_ulnar_T2_L90 and theta;
    vars v_nom_ulnar_T2_L90 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and radial_T1_L92_module for
    vars l_radial_T1_L92 and l;
    vars E_radial_T1_L92 and E;
    vars R_T_radial_T1_L92 and R_T;
    vars C_T_radial_T1_L92 and C_T;
    vars r_radial_T1_L92 and r;
    vars theta_radial_T1_L92 and theta;
    vars v_nom_radial_T1_L92 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and external_carotid_T2_R26_module for
    vars l_external_carotid_T2_R26 and l;
    vars E_external_carotid_T2_R26 and E;
    vars R_T_external_carotid_T2_R26 and R_T;
    vars C_T_external_carotid_T2_R26 and C_T;
    vars r_external_carotid_T2_R26 and r;
    vars theta_external_carotid_T2_R26 and theta;
    vars v_nom_external_carotid_T2_R26 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and external_carotid_T2_L62_module for
    vars l_external_carotid_T2_L62 and l;
    vars E_external_carotid_T2_L62 and E;
    vars R_T_external_carotid_T2_L62 and R_T;
    vars C_T_external_carotid_T2_L62 and C_T;
    vars r_external_carotid_T2_L62 and r;
    vars theta_external_carotid_T2_L62 and theta;
    vars v_nom_external_carotid_T2_L62 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_intermediate_temporal_branch_T47_L20_module for
    vars l_lateral_occipital_intermediate_temporal_branch_T47_L20 and l;
    vars E_lateral_occipital_intermediate_temporal_branch_T47_L20 and E;
    vars R_T_lateral_occipital_intermediate_temporal_branch_T47_L20 and R_T;
    vars C_T_lateral_occipital_intermediate_temporal_branch_T47_L20 and C_T;
    vars r_lateral_occipital_intermediate_temporal_branch_T47_L20 and r;
    vars theta_lateral_occipital_intermediate_temporal_branch_T47_L20 and theta;
    vars v_nom_lateral_occipital_intermediate_temporal_branch_T47_L20 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_intermediate_temporal_branch_T76_R216_module for
    vars l_lateral_occipital_intermediate_temporal_branch_T76_R216 and l;
    vars E_lateral_occipital_intermediate_temporal_branch_T76_R216 and E;
    vars R_T_lateral_occipital_intermediate_temporal_branch_T76_R216 and R_T;
    vars C_T_lateral_occipital_intermediate_temporal_branch_T76_R216 and C_T;
    vars r_lateral_occipital_intermediate_temporal_branch_T76_R216 and r;
    vars theta_lateral_occipital_intermediate_temporal_branch_T76_R216 and theta;
    vars v_nom_lateral_occipital_intermediate_temporal_branch_T76_R216 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_calcarine_branch_T51_L202_module for
    vars l_medial_occipital_calcarine_branch_T51_L202 and l;
    vars E_medial_occipital_calcarine_branch_T51_L202 and E;
    vars R_T_medial_occipital_calcarine_branch_T51_L202 and R_T;
    vars C_T_medial_occipital_calcarine_branch_T51_L202 and C_T;
    vars r_medial_occipital_calcarine_branch_T51_L202 and r;
    vars theta_medial_occipital_calcarine_branch_T51_L202 and theta;
    vars v_nom_medial_occipital_calcarine_branch_T51_L202 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_calcarine_branch_T79_R270_module for
    vars l_medial_occipital_calcarine_branch_T79_R270 and l;
    vars E_medial_occipital_calcarine_branch_T79_R270 and E;
    vars R_T_medial_occipital_calcarine_branch_T79_R270 and R_T;
    vars C_T_medial_occipital_calcarine_branch_T79_R270 and C_T;
    vars r_medial_occipital_calcarine_branch_T79_R270 and r;
    vars theta_medial_occipital_calcarine_branch_T79_R270 and theta;
    vars v_nom_medial_occipital_calcarine_branch_T79_R270 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_occipitotemporal_branch_T52_L190_module for
    vars l_medial_occipital_occipitotemporal_branch_T52_L190 and l;
    vars E_medial_occipital_occipitotemporal_branch_T52_L190 and E;
    vars R_T_medial_occipital_occipitotemporal_branch_T52_L190 and R_T;
    vars C_T_medial_occipital_occipitotemporal_branch_T52_L190 and C_T;
    vars r_medial_occipital_occipitotemporal_branch_T52_L190 and r;
    vars theta_medial_occipital_occipitotemporal_branch_T52_L190 and theta;
    vars v_nom_medial_occipital_occipitotemporal_branch_T52_L190 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_occipitotemporal_branch_T80_R258_module for
    vars l_medial_occipital_occipitotemporal_branch_T80_R258 and l;
    vars E_medial_occipital_occipitotemporal_branch_T80_R258 and E;
    vars R_T_medial_occipital_occipitotemporal_branch_T80_R258 and R_T;
    vars C_T_medial_occipital_occipitotemporal_branch_T80_R258 and C_T;
    vars r_medial_occipital_occipitotemporal_branch_T80_R258 and r;
    vars theta_medial_occipital_occipitotemporal_branch_T80_R258 and theta;
    vars v_nom_medial_occipital_occipitotemporal_branch_T80_R258 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parietal_branch_T53_L196_module for
    vars l_medial_occipital_parietal_branch_T53_L196 and l;
    vars E_medial_occipital_parietal_branch_T53_L196 and E;
    vars R_T_medial_occipital_parietal_branch_T53_L196 and R_T;
    vars C_T_medial_occipital_parietal_branch_T53_L196 and C_T;
    vars r_medial_occipital_parietal_branch_T53_L196 and r;
    vars theta_medial_occipital_parietal_branch_T53_L196 and theta;
    vars v_nom_medial_occipital_parietal_branch_T53_L196 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parietal_branch_T81_R264_module for
    vars l_medial_occipital_parietal_branch_T81_R264 and l;
    vars E_medial_occipital_parietal_branch_T81_R264 and E;
    vars R_T_medial_occipital_parietal_branch_T81_R264 and R_T;
    vars C_T_medial_occipital_parietal_branch_T81_R264 and C_T;
    vars r_medial_occipital_parietal_branch_T81_R264 and r;
    vars theta_medial_occipital_parietal_branch_T81_R264 and theta;
    vars v_nom_medial_occipital_parietal_branch_T81_R264 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_choroidal_T34_L116_module for
    vars l_anterior_choroidal_T34_L116 and l;
    vars E_anterior_choroidal_T34_L116 and E;
    vars R_T_anterior_choroidal_T34_L116 and R_T;
    vars C_T_anterior_choroidal_T34_L116 and C_T;
    vars r_anterior_choroidal_T34_L116 and r;
    vars theta_anterior_choroidal_T34_L116 and theta;
    vars v_nom_anterior_choroidal_T34_L116 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_choroidal_T98_R54_module for
    vars l_anterior_choroidal_T98_R54 and l;
    vars E_anterior_choroidal_T98_R54 and E;
    vars R_T_anterior_choroidal_T98_R54 and R_T;
    vars C_T_anterior_choroidal_T98_R54 and C_T;
    vars r_anterior_choroidal_T98_R54 and r;
    vars theta_anterior_choroidal_T98_R54 and theta;
    vars v_nom_anterior_choroidal_T98_R54 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_parietal_T100_R100_module for
    vars l_anterior_parietal_T100_R100 and l;
    vars E_anterior_parietal_T100_R100 and E;
    vars R_T_anterior_parietal_T100_R100 and R_T;
    vars C_T_anterior_parietal_T100_R100 and C_T;
    vars r_anterior_parietal_T100_R100 and r;
    vars theta_anterior_parietal_T100_R100 and theta;
    vars v_nom_anterior_parietal_T100_R100 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and anterior_parietal_T35_L162_module for
    vars l_anterior_parietal_T35_L162 and l;
    vars E_anterior_parietal_T35_L162 and E;
    vars R_T_anterior_parietal_T35_L162 and R_T;
    vars C_T_anterior_parietal_T35_L162 and C_T;
    vars r_anterior_parietal_T35_L162 and r;
    vars theta_anterior_parietal_T35_L162 and theta;
    vars v_nom_anterior_parietal_T35_L162 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_central_sulcus_T101_R70_module for
    vars l_artery_of_central_sulcus_T101_R70 and l;
    vars E_artery_of_central_sulcus_T101_R70 and E;
    vars R_T_artery_of_central_sulcus_T101_R70 and R_T;
    vars C_T_artery_of_central_sulcus_T101_R70 and C_T;
    vars r_artery_of_central_sulcus_T101_R70 and r;
    vars theta_artery_of_central_sulcus_T101_R70 and theta;
    vars v_nom_artery_of_central_sulcus_T101_R70 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_central_sulcus_T36_L132_module for
    vars l_artery_of_central_sulcus_T36_L132 and l;
    vars E_artery_of_central_sulcus_T36_L132 and E;
    vars R_T_artery_of_central_sulcus_T36_L132 and R_T;
    vars C_T_artery_of_central_sulcus_T36_L132 and C_T;
    vars r_artery_of_central_sulcus_T36_L132 and r;
    vars theta_artery_of_central_sulcus_T36_L132 and theta;
    vars v_nom_artery_of_central_sulcus_T36_L132 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_postcentral_sulcus_T102_R88_module for
    vars l_artery_of_postcentral_sulcus_T102_R88 and l;
    vars E_artery_of_postcentral_sulcus_T102_R88 and E;
    vars R_T_artery_of_postcentral_sulcus_T102_R88 and R_T;
    vars C_T_artery_of_postcentral_sulcus_T102_R88 and C_T;
    vars r_artery_of_postcentral_sulcus_T102_R88 and r;
    vars theta_artery_of_postcentral_sulcus_T102_R88 and theta;
    vars v_nom_artery_of_postcentral_sulcus_T102_R88 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_postcentral_sulcus_T37_L150_module for
    vars l_artery_of_postcentral_sulcus_T37_L150 and l;
    vars E_artery_of_postcentral_sulcus_T37_L150 and E;
    vars R_T_artery_of_postcentral_sulcus_T37_L150 and R_T;
    vars C_T_artery_of_postcentral_sulcus_T37_L150 and C_T;
    vars r_artery_of_postcentral_sulcus_T37_L150 and r;
    vars theta_artery_of_postcentral_sulcus_T37_L150 and theta;
    vars v_nom_artery_of_postcentral_sulcus_T37_L150 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_precentral_sulcus_T103_R72_module for
    vars l_artery_of_precentral_sulcus_T103_R72 and l;
    vars E_artery_of_precentral_sulcus_T103_R72 and E;
    vars R_T_artery_of_precentral_sulcus_T103_R72 and R_T;
    vars C_T_artery_of_precentral_sulcus_T103_R72 and C_T;
    vars r_artery_of_precentral_sulcus_T103_R72 and r;
    vars theta_artery_of_precentral_sulcus_T103_R72 and theta;
    vars v_nom_artery_of_precentral_sulcus_T103_R72 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and artery_of_precentral_sulcus_T38_L134_module for
    vars l_artery_of_precentral_sulcus_T38_L134 and l;
    vars E_artery_of_precentral_sulcus_T38_L134 and E;
    vars R_T_artery_of_precentral_sulcus_T38_L134 and R_T;
    vars C_T_artery_of_precentral_sulcus_T38_L134 and C_T;
    vars r_artery_of_precentral_sulcus_T38_L134 and r;
    vars theta_artery_of_precentral_sulcus_T38_L134 and theta;
    vars v_nom_artery_of_precentral_sulcus_T38_L134 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_cingular_branch_T105_R250_module for
    vars l_callosomarginal_cingular_branch_T105_R250 and l;
    vars E_callosomarginal_cingular_branch_T105_R250 and E;
    vars R_T_callosomarginal_cingular_branch_T105_R250 and R_T;
    vars C_T_callosomarginal_cingular_branch_T105_R250 and C_T;
    vars r_callosomarginal_cingular_branch_T105_R250 and r;
    vars theta_callosomarginal_cingular_branch_T105_R250 and theta;
    vars v_nom_callosomarginal_cingular_branch_T105_R250 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_cingular_branch_T40_L182_module for
    vars l_callosomarginal_cingular_branch_T40_L182 and l;
    vars E_callosomarginal_cingular_branch_T40_L182 and E;
    vars R_T_callosomarginal_cingular_branch_T40_L182 and R_T;
    vars C_T_callosomarginal_cingular_branch_T40_L182 and C_T;
    vars r_callosomarginal_cingular_branch_T40_L182 and r;
    vars theta_callosomarginal_cingular_branch_T40_L182 and theta;
    vars v_nom_callosomarginal_cingular_branch_T40_L182 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_intermediomedial_frontal_branch_T106_R242_module for
    vars l_callosomarginal_intermediomedial_frontal_branch_T106_R242 and l;
    vars E_callosomarginal_intermediomedial_frontal_branch_T106_R242 and E;
    vars R_T_callosomarginal_intermediomedial_frontal_branch_T106_R242 and R_T;
    vars C_T_callosomarginal_intermediomedial_frontal_branch_T106_R242 and C_T;
    vars r_callosomarginal_intermediomedial_frontal_branch_T106_R242 and r;
    vars theta_callosomarginal_intermediomedial_frontal_branch_T106_R242 and theta;
    vars v_nom_callosomarginal_intermediomedial_frontal_branch_T106_R242 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_intermediomedial_frontal_branch_T41_L174_module for
    vars l_callosomarginal_intermediomedial_frontal_branch_T41_L174 and l;
    vars E_callosomarginal_intermediomedial_frontal_branch_T41_L174 and E;
    vars R_T_callosomarginal_intermediomedial_frontal_branch_T41_L174 and R_T;
    vars C_T_callosomarginal_intermediomedial_frontal_branch_T41_L174 and C_T;
    vars r_callosomarginal_intermediomedial_frontal_branch_T41_L174 and r;
    vars theta_callosomarginal_intermediomedial_frontal_branch_T41_L174 and theta;
    vars v_nom_callosomarginal_intermediomedial_frontal_branch_T41_L174 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_paracentral_branch_T107_R254_module for
    vars l_callosomarginal_paracentral_branch_T107_R254 and l;
    vars E_callosomarginal_paracentral_branch_T107_R254 and E;
    vars R_T_callosomarginal_paracentral_branch_T107_R254 and R_T;
    vars C_T_callosomarginal_paracentral_branch_T107_R254 and C_T;
    vars r_callosomarginal_paracentral_branch_T107_R254 and r;
    vars theta_callosomarginal_paracentral_branch_T107_R254 and theta;
    vars v_nom_callosomarginal_paracentral_branch_T107_R254 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_paracentral_branch_T42_L186_module for
    vars l_callosomarginal_paracentral_branch_T42_L186 and l;
    vars E_callosomarginal_paracentral_branch_T42_L186 and E;
    vars R_T_callosomarginal_paracentral_branch_T42_L186 and R_T;
    vars C_T_callosomarginal_paracentral_branch_T42_L186 and C_T;
    vars r_callosomarginal_paracentral_branch_T42_L186 and r;
    vars theta_callosomarginal_paracentral_branch_T42_L186 and theta;
    vars v_nom_callosomarginal_paracentral_branch_T42_L186 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_posteromedial_frontal_branch_T108_R246_module for
    vars l_callosomarginal_posteromedial_frontal_branch_T108_R246 and l;
    vars E_callosomarginal_posteromedial_frontal_branch_T108_R246 and E;
    vars R_T_callosomarginal_posteromedial_frontal_branch_T108_R246 and R_T;
    vars C_T_callosomarginal_posteromedial_frontal_branch_T108_R246 and C_T;
    vars r_callosomarginal_posteromedial_frontal_branch_T108_R246 and r;
    vars theta_callosomarginal_posteromedial_frontal_branch_T108_R246 and theta;
    vars v_nom_callosomarginal_posteromedial_frontal_branch_T108_R246 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and callosomarginal_posteromedial_frontal_branch_T43_L178_module for
    vars l_callosomarginal_posteromedial_frontal_branch_T43_L178 and l;
    vars E_callosomarginal_posteromedial_frontal_branch_T43_L178 and E;
    vars R_T_callosomarginal_posteromedial_frontal_branch_T43_L178 and R_T;
    vars C_T_callosomarginal_posteromedial_frontal_branch_T43_L178 and C_T;
    vars r_callosomarginal_posteromedial_frontal_branch_T43_L178 and r;
    vars theta_callosomarginal_posteromedial_frontal_branch_T43_L178 and theta;
    vars v_nom_callosomarginal_posteromedial_frontal_branch_T43_L178 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and distal_medial_striate_T109_R236_module for
    vars l_distal_medial_striate_T109_R236 and l;
    vars E_distal_medial_striate_T109_R236 and E;
    vars R_T_distal_medial_striate_T109_R236 and R_T;
    vars C_T_distal_medial_striate_T109_R236 and C_T;
    vars r_distal_medial_striate_T109_R236 and r;
    vars theta_distal_medial_striate_T109_R236 and theta;
    vars v_nom_distal_medial_striate_T109_R236 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and distal_medial_striate_T44_L40_module for
    vars l_distal_medial_striate_T44_L40 and l;
    vars E_distal_medial_striate_T44_L40 and E;
    vars R_T_distal_medial_striate_T44_L40 and R_T;
    vars C_T_distal_medial_striate_T44_L40 and C_T;
    vars r_distal_medial_striate_T44_L40 and r;
    vars theta_distal_medial_striate_T44_L40 and theta;
    vars v_nom_distal_medial_striate_T44_L40 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_frontobasal_T110_R60_module for
    vars l_lateral_frontobasal_T110_R60 and l;
    vars E_lateral_frontobasal_T110_R60 and E;
    vars R_T_lateral_frontobasal_T110_R60 and R_T;
    vars C_T_lateral_frontobasal_T110_R60 and C_T;
    vars r_lateral_frontobasal_T110_R60 and r;
    vars theta_lateral_frontobasal_T110_R60 and theta;
    vars v_nom_lateral_frontobasal_T110_R60 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_frontobasal_T45_L122_module for
    vars l_lateral_frontobasal_T45_L122 and l;
    vars E_lateral_frontobasal_T45_L122 and E;
    vars R_T_lateral_frontobasal_T45_L122 and R_T;
    vars C_T_lateral_frontobasal_T45_L122 and C_T;
    vars r_lateral_frontobasal_T45_L122 and r;
    vars theta_lateral_frontobasal_T45_L122 and theta;
    vars v_nom_lateral_frontobasal_T45_L122 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_anterior_temporal_branch_T111_R212_module for
    vars l_lateral_occipital_anterior_temporal_branch_T111_R212 and l;
    vars E_lateral_occipital_anterior_temporal_branch_T111_R212 and E;
    vars R_T_lateral_occipital_anterior_temporal_branch_T111_R212 and R_T;
    vars C_T_lateral_occipital_anterior_temporal_branch_T111_R212 and C_T;
    vars r_lateral_occipital_anterior_temporal_branch_T111_R212 and r;
    vars theta_lateral_occipital_anterior_temporal_branch_T111_R212 and theta;
    vars v_nom_lateral_occipital_anterior_temporal_branch_T111_R212 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_anterior_temporal_branch_T46_L16_module for
    vars l_lateral_occipital_anterior_temporal_branch_T46_L16 and l;
    vars E_lateral_occipital_anterior_temporal_branch_T46_L16 and E;
    vars R_T_lateral_occipital_anterior_temporal_branch_T46_L16 and R_T;
    vars C_T_lateral_occipital_anterior_temporal_branch_T46_L16 and C_T;
    vars r_lateral_occipital_anterior_temporal_branch_T46_L16 and r;
    vars theta_lateral_occipital_anterior_temporal_branch_T46_L16 and theta;
    vars v_nom_lateral_occipital_anterior_temporal_branch_T46_L16 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_posterior_temporal_branch_T112_R220_module for
    vars l_lateral_occipital_posterior_temporal_branch_T112_R220 and l;
    vars E_lateral_occipital_posterior_temporal_branch_T112_R220 and E;
    vars R_T_lateral_occipital_posterior_temporal_branch_T112_R220 and R_T;
    vars C_T_lateral_occipital_posterior_temporal_branch_T112_R220 and C_T;
    vars r_lateral_occipital_posterior_temporal_branch_T112_R220 and r;
    vars theta_lateral_occipital_posterior_temporal_branch_T112_R220 and theta;
    vars v_nom_lateral_occipital_posterior_temporal_branch_T112_R220 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and lateral_occipital_posterior_temporal_branch_T48_L24_module for
    vars l_lateral_occipital_posterior_temporal_branch_T48_L24 and l;
    vars E_lateral_occipital_posterior_temporal_branch_T48_L24 and E;
    vars R_T_lateral_occipital_posterior_temporal_branch_T48_L24 and R_T;
    vars C_T_lateral_occipital_posterior_temporal_branch_T48_L24 and C_T;
    vars r_lateral_occipital_posterior_temporal_branch_T48_L24 and r;
    vars theta_lateral_occipital_posterior_temporal_branch_T48_L24 and theta;
    vars v_nom_lateral_occipital_posterior_temporal_branch_T48_L24 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parieto_occipital_branch_T118_R266_module for
    vars l_medial_occipital_parieto_occipital_branch_T118_R266 and l;
    vars E_medial_occipital_parieto_occipital_branch_T118_R266 and E;
    vars R_T_medial_occipital_parieto_occipital_branch_T118_R266 and R_T;
    vars C_T_medial_occipital_parieto_occipital_branch_T118_R266 and C_T;
    vars r_medial_occipital_parieto_occipital_branch_T118_R266 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T118_R266 and theta;
    vars v_nom_medial_occipital_parieto_occipital_branch_T118_R266 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and medial_occipital_parieto_occipital_branch_T54_L198_module for
    vars l_medial_occipital_parieto_occipital_branch_T54_L198 and l;
    vars E_medial_occipital_parieto_occipital_branch_T54_L198 and E;
    vars R_T_medial_occipital_parieto_occipital_branch_T54_L198 and R_T;
    vars C_T_medial_occipital_parieto_occipital_branch_T54_L198 and C_T;
    vars r_medial_occipital_parieto_occipital_branch_T54_L198 and r;
    vars theta_medial_occipital_parieto_occipital_branch_T54_L198 and theta;
    vars v_nom_medial_occipital_parieto_occipital_branch_T54_L198 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_anterior_temporal_branch_T119_R80_module for
    vars l_middle_cerebral_anterior_temporal_branch_T119_R80 and l;
    vars E_middle_cerebral_anterior_temporal_branch_T119_R80 and E;
    vars R_T_middle_cerebral_anterior_temporal_branch_T119_R80 and R_T;
    vars C_T_middle_cerebral_anterior_temporal_branch_T119_R80 and C_T;
    vars r_middle_cerebral_anterior_temporal_branch_T119_R80 and r;
    vars theta_middle_cerebral_anterior_temporal_branch_T119_R80 and theta;
    vars v_nom_middle_cerebral_anterior_temporal_branch_T119_R80 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_anterior_temporal_branch_T55_L142_module for
    vars l_middle_cerebral_anterior_temporal_branch_T55_L142 and l;
    vars E_middle_cerebral_anterior_temporal_branch_T55_L142 and E;
    vars R_T_middle_cerebral_anterior_temporal_branch_T55_L142 and R_T;
    vars C_T_middle_cerebral_anterior_temporal_branch_T55_L142 and C_T;
    vars r_middle_cerebral_anterior_temporal_branch_T55_L142 and r;
    vars theta_middle_cerebral_anterior_temporal_branch_T55_L142 and theta;
    vars v_nom_middle_cerebral_anterior_temporal_branch_T55_L142 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_branch_to_angular_gyrus_T120_R108_module for
    vars l_middle_cerebral_branch_to_angular_gyrus_T120_R108 and l;
    vars E_middle_cerebral_branch_to_angular_gyrus_T120_R108 and E;
    vars R_T_middle_cerebral_branch_to_angular_gyrus_T120_R108 and R_T;
    vars C_T_middle_cerebral_branch_to_angular_gyrus_T120_R108 and C_T;
    vars r_middle_cerebral_branch_to_angular_gyrus_T120_R108 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T120_R108 and theta;
    vars v_nom_middle_cerebral_branch_to_angular_gyrus_T120_R108 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_branch_to_angular_gyrus_T56_L170_module for
    vars l_middle_cerebral_branch_to_angular_gyrus_T56_L170 and l;
    vars E_middle_cerebral_branch_to_angular_gyrus_T56_L170 and E;
    vars R_T_middle_cerebral_branch_to_angular_gyrus_T56_L170 and R_T;
    vars C_T_middle_cerebral_branch_to_angular_gyrus_T56_L170 and C_T;
    vars r_middle_cerebral_branch_to_angular_gyrus_T56_L170 and r;
    vars theta_middle_cerebral_branch_to_angular_gyrus_T56_L170 and theta;
    vars v_nom_middle_cerebral_branch_to_angular_gyrus_T56_L170 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_middle_temporal_branch_T121_R84_module for
    vars l_middle_cerebral_middle_temporal_branch_T121_R84 and l;
    vars E_middle_cerebral_middle_temporal_branch_T121_R84 and E;
    vars R_T_middle_cerebral_middle_temporal_branch_T121_R84 and R_T;
    vars C_T_middle_cerebral_middle_temporal_branch_T121_R84 and C_T;
    vars r_middle_cerebral_middle_temporal_branch_T121_R84 and r;
    vars theta_middle_cerebral_middle_temporal_branch_T121_R84 and theta;
    vars v_nom_middle_cerebral_middle_temporal_branch_T121_R84 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_middle_temporal_branch_T57_L146_module for
    vars l_middle_cerebral_middle_temporal_branch_T57_L146 and l;
    vars E_middle_cerebral_middle_temporal_branch_T57_L146 and E;
    vars R_T_middle_cerebral_middle_temporal_branch_T57_L146 and R_T;
    vars C_T_middle_cerebral_middle_temporal_branch_T57_L146 and C_T;
    vars r_middle_cerebral_middle_temporal_branch_T57_L146 and r;
    vars theta_middle_cerebral_middle_temporal_branch_T57_L146 and theta;
    vars v_nom_middle_cerebral_middle_temporal_branch_T57_L146 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporal_branch_T122_R96_module for
    vars l_middle_cerebral_posterior_temporal_branch_T122_R96 and l;
    vars E_middle_cerebral_posterior_temporal_branch_T122_R96 and E;
    vars R_T_middle_cerebral_posterior_temporal_branch_T122_R96 and R_T;
    vars C_T_middle_cerebral_posterior_temporal_branch_T122_R96 and C_T;
    vars r_middle_cerebral_posterior_temporal_branch_T122_R96 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T122_R96 and theta;
    vars v_nom_middle_cerebral_posterior_temporal_branch_T122_R96 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporal_branch_T58_L158_module for
    vars l_middle_cerebral_posterior_temporal_branch_T58_L158 and l;
    vars E_middle_cerebral_posterior_temporal_branch_T58_L158 and E;
    vars R_T_middle_cerebral_posterior_temporal_branch_T58_L158 and R_T;
    vars C_T_middle_cerebral_posterior_temporal_branch_T58_L158 and C_T;
    vars r_middle_cerebral_posterior_temporal_branch_T58_L158 and r;
    vars theta_middle_cerebral_posterior_temporal_branch_T58_L158 and theta;
    vars v_nom_middle_cerebral_posterior_temporal_branch_T58_L158 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module for
    vars l_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and l;
    vars E_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and E;
    vars R_T_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and R_T;
    vars C_T_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and C_T;
    vars r_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and r;
    vars theta_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and theta;
    vars v_nom_middle_cerebral_posterior_temporo_occipital_branch_T123_R94 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module for
    vars l_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and l;
    vars E_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and E;
    vars R_T_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and R_T;
    vars C_T_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and C_T;
    vars r_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and r;
    vars theta_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and theta;
    vars v_nom_middle_cerebral_posterior_temporo_occipital_branch_T59_L156 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and pericallosal_parieto_occipital_branch_T124_R226_module for
    vars l_pericallosal_parieto_occipital_branch_T124_R226 and l;
    vars E_pericallosal_parieto_occipital_branch_T124_R226 and E;
    vars R_T_pericallosal_parieto_occipital_branch_T124_R226 and R_T;
    vars C_T_pericallosal_parieto_occipital_branch_T124_R226 and C_T;
    vars r_pericallosal_parieto_occipital_branch_T124_R226 and r;
    vars theta_pericallosal_parieto_occipital_branch_T124_R226 and theta;
    vars v_nom_pericallosal_parieto_occipital_branch_T124_R226 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and pericallosal_parieto_occipital_branch_T60_L30_module for
    vars l_pericallosal_parieto_occipital_branch_T60_L30 and l;
    vars E_pericallosal_parieto_occipital_branch_T60_L30 and E;
    vars R_T_pericallosal_parieto_occipital_branch_T60_L30 and R_T;
    vars C_T_pericallosal_parieto_occipital_branch_T60_L30 and C_T;
    vars r_pericallosal_parieto_occipital_branch_T60_L30 and r;
    vars theta_pericallosal_parieto_occipital_branch_T60_L30 and theta;
    vars v_nom_pericallosal_parieto_occipital_branch_T60_L30 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and pericallosal_precuneal_branch_T125_R230_module for
    vars l_pericallosal_precuneal_branch_T125_R230 and l;
    vars E_pericallosal_precuneal_branch_T125_R230 and E;
    vars R_T_pericallosal_precuneal_branch_T125_R230 and R_T;
    vars C_T_pericallosal_precuneal_branch_T125_R230 and C_T;
    vars r_pericallosal_precuneal_branch_T125_R230 and r;
    vars theta_pericallosal_precuneal_branch_T125_R230 and theta;
    vars v_nom_pericallosal_precuneal_branch_T125_R230 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and pericallosal_precuneal_branch_T61_L34_module for
    vars l_pericallosal_precuneal_branch_T61_L34 and l;
    vars E_pericallosal_precuneal_branch_T61_L34 and E;
    vars R_T_pericallosal_precuneal_branch_T61_L34 and R_T;
    vars C_T_pericallosal_precuneal_branch_T61_L34 and C_T;
    vars r_pericallosal_precuneal_branch_T61_L34 and r;
    vars theta_pericallosal_precuneal_branch_T61_L34 and theta;
    vars v_nom_pericallosal_precuneal_branch_T61_L34 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and polar_temporal_T127_R76_module for
    vars l_polar_temporal_T127_R76 and l;
    vars E_polar_temporal_T127_R76 and E;
    vars R_T_polar_temporal_T127_R76 and R_T;
    vars C_T_polar_temporal_T127_R76 and C_T;
    vars r_polar_temporal_T127_R76 and r;
    vars theta_polar_temporal_T127_R76 and theta;
    vars v_nom_polar_temporal_T127_R76 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and polar_temporal_T63_L138_module for
    vars l_polar_temporal_T63_L138 and l;
    vars E_polar_temporal_T63_L138 and E;
    vars R_T_polar_temporal_T63_L138 and R_T;
    vars C_T_polar_temporal_T63_L138 and C_T;
    vars r_polar_temporal_T63_L138 and r;
    vars theta_polar_temporal_T63_L138 and theta;
    vars v_nom_polar_temporal_T63_L138 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_parietal_T129_R106_module for
    vars l_posterior_parietal_T129_R106 and l;
    vars E_posterior_parietal_T129_R106 and E;
    vars R_T_posterior_parietal_T129_R106 and R_T;
    vars C_T_posterior_parietal_T129_R106 and C_T;
    vars r_posterior_parietal_T129_R106 and r;
    vars theta_posterior_parietal_T129_R106 and theta;
    vars v_nom_posterior_parietal_T129_R106 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and posterior_parietal_T64_L168_module for
    vars l_posterior_parietal_T64_L168 and l;
    vars E_posterior_parietal_T64_L168 and E;
    vars R_T_posterior_parietal_T64_L168 and R_T;
    vars C_T_posterior_parietal_T64_L168 and C_T;
    vars r_posterior_parietal_T64_L168 and r;
    vars theta_posterior_parietal_T64_L168 and theta;
    vars v_nom_posterior_parietal_T64_L168 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and prefrontal_T130_R64_module for
    vars l_prefrontal_T130_R64 and l;
    vars E_prefrontal_T130_R64 and E;
    vars R_T_prefrontal_T130_R64 and R_T;
    vars C_T_prefrontal_T130_R64 and C_T;
    vars r_prefrontal_T130_R64 and r;
    vars theta_prefrontal_T130_R64 and theta;
    vars v_nom_prefrontal_T130_R64 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  def map between Parameters_Systemic and prefrontal_T65_L126_module for
    vars l_prefrontal_T65_L126 and l;
    vars E_prefrontal_T65_L126 and E;
    vars R_T_prefrontal_T65_L126 and R_T;
    vars C_T_prefrontal_T65_L126 and C_T;
    vars r_prefrontal_T65_L126 and r;
    vars theta_prefrontal_T65_L126 and theta;
    vars v_nom_prefrontal_T65_L126 and v_nominal;
    vars beta_g and beta_g;
    vars gain_int and gain_int;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// Time Mapping /////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // Aorta
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  // Trunk
  def map between environment and posterior_intercostal_T1_R98_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T1_L102_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T2_R106_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T2_L110_module for
    vars time and t;
  enddef;
  def map between environment and celiac_trunk_C116_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C118_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_T3_C120_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C122_module for
    vars time and t;
  enddef;
  def map between environment and dorsal_pancreatic_T1_C124_module for
    vars time and t;
  enddef;
  def map between environment and splenic_T2_C126_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_C128_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_C130_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_left_branch_C132_module for
    vars time and t;
  enddef;
  def map between environment and hepatic_artery_proper_right_branch_C134_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C138_module for
    vars time and t;
  enddef;
  def map between environment and middle_colic_T8_C140_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C142_module for
    vars time and t;
  enddef;
  def map between environment and jejunal_3_T10_C144_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C146_module for
    vars time and t;
  enddef;
  def map between environment and jejunal_6_T11_C148_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C150_module for
    vars time and t;
  enddef;
  def map between environment and ileocolic_T9_C152_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C154_module for
    vars time and t;
  enddef;
  def map between environment and ileal_4_T12_C156_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C158_module for
    vars time and t;
  enddef;
  def map between environment and ileal_6_T13_C160_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T4_C162_module for
    vars time and t;
  enddef;
  def map between environment and renal_L166_module for
    vars time and t;
  enddef;
  def map between environment and renal_anterior_branch_L168_module for
    vars time and t;
  enddef;
  def map between environment and inferior_segmental_T5_L170_module for
    vars time and t;
  enddef;
  def map between environment and superior_segmental_T4_L172_module for
    vars time and t;
  enddef;
  def map between environment and renal_posterior_branch_T3_L174_module for
    vars time and t;
  enddef;
  def map between environment and renal_R178_module for
    vars time and t;
  enddef;
  def map between environment and renal_anterior_branch_R180_module for
    vars time and t;
  enddef;
  def map between environment and superior_segmental_T4_R182_module for
    vars time and t;
  enddef;
  def map between environment and inferior_segmental_T5_R184_module for
    vars time and t;
  enddef;
  def map between environment and renal_posterior_branch_T3_R186_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_T5_C190_module for
    vars time and t;
  enddef;
  // Lower Limbs
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_T1_R218_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and profundus_T2_R224_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R226_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R228_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_T3_R230_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R232_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_R234_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_T4_R236_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_T1_L196_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and profundus_T2_L202_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L204_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L206_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_T3_L208_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L210_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_L212_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_T4_L214_module for
    vars time and t;
  enddef;
  // Upper Limbs
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and axillary_R32_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R34_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_R36_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_R38_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_T3_R40_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_R42_module for
    vars time and t;
  enddef;
  def map between environment and radial_T1_R44_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and axillary_L80_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L82_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_L84_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_L86_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_T3_L88_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_T2_L90_module for
    vars time and t;
  enddef;
  def map between environment and radial_T1_L92_module for
    vars time and t;
  enddef;
  // Head
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_C_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_T2_R26_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_C_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_D_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_T2_L62_module for
    vars time and t;
  enddef;
  // Cerebral
  def map between environment and lateral_occipital_intermediate_temporal_branch_T47_L20_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_intermediate_temporal_branch_T76_R216_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_calcarine_branch_T51_L202_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_calcarine_branch_T79_R270_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_occipitotemporal_branch_T52_L190_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_occipitotemporal_branch_T80_R258_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parietal_branch_T53_L196_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parietal_branch_T81_R264_module for
    vars time and t;
  enddef;
  def map between environment and anterior_choroidal_T34_L116_module for
    vars time and t;
  enddef;
  def map between environment and anterior_choroidal_T98_R54_module for
    vars time and t;
  enddef;
  def map between environment and anterior_parietal_T100_R100_module for
    vars time and t;
  enddef;
  def map between environment and anterior_parietal_T35_L162_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_central_sulcus_T101_R70_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_central_sulcus_T36_L132_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_postcentral_sulcus_T102_R88_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_postcentral_sulcus_T37_L150_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T103_R72_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T38_L134_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_cingular_branch_T105_R250_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_cingular_branch_T40_L182_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_intermediomedial_frontal_branch_T106_R242_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_intermediomedial_frontal_branch_T41_L174_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_paracentral_branch_T107_R254_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_paracentral_branch_T42_L186_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_posteromedial_frontal_branch_T108_R246_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_posteromedial_frontal_branch_T43_L178_module for
    vars time and t;
  enddef;
  def map between environment and distal_medial_striate_T109_R236_module for
    vars time and t;
  enddef;
  def map between environment and distal_medial_striate_T44_L40_module for
    vars time and t;
  enddef;
  def map between environment and lateral_frontobasal_T110_R60_module for
    vars time and t;
  enddef;
  def map between environment and lateral_frontobasal_T45_L122_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_anterior_temporal_branch_T111_R212_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_anterior_temporal_branch_T46_L16_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_posterior_temporal_branch_T112_R220_module for
    vars time and t;
  enddef;
  def map between environment and lateral_occipital_posterior_temporal_branch_T48_L24_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T118_R266_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T54_L198_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_anterior_temporal_branch_T119_R80_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_anterior_temporal_branch_T55_L142_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T120_R108_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T56_L170_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_middle_temporal_branch_T121_R84_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_middle_temporal_branch_T57_L146_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T122_R96_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T58_L158_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporo_occipital_branch_T123_R94_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporo_occipital_branch_T59_L156_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_parieto_occipital_branch_T124_R226_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_parieto_occipital_branch_T60_L30_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_precuneal_branch_T125_R230_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_precuneal_branch_T61_L34_module for
    vars time and t;
  enddef;
  def map between environment and polar_temporal_T127_R76_module for
    vars time and t;
  enddef;
  def map between environment and polar_temporal_T63_L138_module for
    vars time and t;
  enddef;
  def map between environment and posterior_parietal_T129_R106_module for
    vars time and t;
  enddef;
  def map between environment and posterior_parietal_T64_L168_module for
    vars time and t;
  enddef;
  def map between environment and prefrontal_T130_R64_module for
    vars time and t;
  enddef;
  def map between environment and prefrontal_T65_L126_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L38_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R234_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L172_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L176_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L180_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_L184_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R240_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R244_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R248_module for
    vars time and t;
  enddef;
  def map between environment and callosomarginal_R252_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_dorsal_branch_to_corpus_callosum_L28_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_dorsal_branch_to_corpus_callosum_R224_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L188_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L192_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L200_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_L26_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R222_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R256_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R260_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_R268_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L136_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L140_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L144_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L148_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L152_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L160_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_L164_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R102_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R74_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R78_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R82_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R86_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R90_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_inferior_terminal_branch_R98_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L118_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R56_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L120_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L124_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_L128_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R58_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R62_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_superior_terminal_branch_R66_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L14_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L18_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_L22_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R210_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R214_module for
    vars time and t;
  enddef;
  def map between environment and occipital_lateral_R218_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_L32_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_L36_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_R228_module for
    vars time and t;
  enddef;
  def map between environment and pericallosal_R232_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_postcommunicating_part_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_postcommunicating_part_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_precommunicating_part_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_precommunicating_part_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T103_R68_module for
    vars time and t;
  enddef;
  def map between environment and artery_of_precentral_sulcus_T38_L130_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T118_R262_module for
    vars time and t;
  enddef;
  def map between environment and medial_occipital_parieto_occipital_branch_T54_L194_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T120_R104_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_branch_to_angular_gyrus_T56_L166_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T122_R92_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_posterior_temporal_branch_T58_L154_module for
    vars time and t;
  enddef;
enddef;
