<?xml version='1.0' encoding='UTF-8'?>
<model name="CardiovascularSystem" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="units.cellml">
        <units name="m3" units_ref="m3"/>
        <units name="m3_per_s" units_ref="m3_per_s"/>
        <units name="m_per_s2" units_ref="m_per_s2"/>
        <units name="m6_per_J" units_ref="m6_per_J"/>
        <units name="per_m" units_ref="per_m"/>
        <units name="J_per_m3" units_ref="J_per_m3"/>
        <units name="Js_per_m6" units_ref="Js_per_m6"/>
        <units name="Js2_per_m6" units_ref="Js2_per_m6"/>
        <units name="Js2_per_m5" units_ref="Js2_per_m5"/>
        <units name="J_per_s" units_ref="J_per_s"/>
        <units name="J_per_m6" units_ref="J_per_m6"/>
        <units name="Js_per_m3" units_ref="Js_per_m3"/>
        <units name="UnitValve" units_ref="UnitValve"/>
        <units name="J_per_m9" units_ref="J_per_m9"/>
    </import>
    <import xlink:href="parameters_autogen.cellml">
        <component component_ref="parameters_systemic" name="parameters_systemic"/>
        <component component_ref="parameters_pulmonary" name="parameters_pulmonary"/>
        <component component_ref="parameters_heart" name="parameters_heart"/>
    </import>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45; pulmonary Circulation &#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
    <component name="pulmonary">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters_systemic-->
        <variable name="C_par" public_interface="in" units="m6_per_J"/>
        <variable name="C_pvn" public_interface="in" units="m6_per_J"/>
        <variable name="R_par" public_interface="in" units="Js_per_m6"/>
        <variable name="R_pvn" public_interface="in" units="Js_per_m6"/>
        <variable name="I_par" public_interface="in" units="Js2_per_m6"/>
        <variable name="I_pvn" public_interface="in" units="Js2_per_m6"/>
        <!-- State Variables-->
        <!-- -->
        <variable name="u_par" public_interface="out" units="J_per_m3"/>
        <variable name="u_pvn" public_interface="out" units="J_per_m3"/>
        <!-- TODO the below parameters should be set in an init_states parameter file
 The values are chosen arbitrarily to give the pulmonary system an initial stressed volume.
 Identification of the initial stressed volume is done by identifying initial q_lv-->
        <variable initial_value="0.0" name="q_par" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_pvn" public_interface="out" units="J_per_m3"/>
        <variable name="u_la" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="v_par" public_interface="out" units="m3_per_s"/>
        <variable initial_value="0.0" name="v_pvn" public_interface="out" units="m3_per_s"/>
        <variable name="v_rv" public_interface="in" units="m3_per_s"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_par</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_rv</ci>
                    <ci>v_par</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_pvn</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_par</ci>
                    <ci>v_pvn</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_par</ci>
                <apply>
                    <divide/>
                    <ci>q_par</ci>
                    <ci>C_par</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pvn</ci>
                <apply>
                    <divide/>
                    <ci>q_pvn</ci>
                    <ci>C_par</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_par</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_par</ci>
                            <ci>u_pvn</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>v_par</ci>
                            <ci>R_par</ci>
                        </apply>
                    </apply>
                    <ci>I_par</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_pvn</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pvn</ci>
                            <ci>u_la</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>v_pvn</ci>
                            <ci>R_pvn</ci>
                        </apply>
                    </apply>
                    <ci>I_pvn</ci>
                </apply>
            </apply>
        </math>
    </component>
    <!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45; heart &#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
    <component name="heart">
        <variable name="t" public_interface="in" units="second"/>
        <variable initial_value="0.0" name="s" public_interface="out" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="mt" units="second"/>
        <variable name="e_a" units="dimensionless"/>
        <variable name="e_v" units="dimensionless"/>
        <variable name="T" public_interface="in" units="second"/>
        <variable name="t_ac" public_interface="in" units="dimensionless"/>
        <variable name="t_ar" public_interface="in" units="dimensionless"/>
        <variable name="T_ac" public_interface="in" units="dimensionless"/>
        <variable name="T_ar" public_interface="in" units="dimensionless"/>
        <variable name="T_vc" public_interface="in" units="dimensionless"/>
        <variable name="T_vr" public_interface="in" units="dimensionless"/>
        <variable name="CQ_trv" public_interface="in" units="UnitValve"/>
        <variable name="CQ_puv" public_interface="in" units="UnitValve"/>
        <variable name="CQ_miv" public_interface="in" units="UnitValve"/>
        <variable name="CQ_aov" public_interface="in" units="UnitValve"/>
        <variable name="E_lv_A" public_interface="in" units="J_per_m6"/>
        <variable name="E_lv_B" public_interface="in" units="J_per_m6"/>
        <variable name="E_la_A" public_interface="in" units="J_per_m6"/>
        <variable name="E_la_B" public_interface="in" units="J_per_m6"/>
        <variable name="E_rv_A" public_interface="in" units="J_per_m6"/>
        <variable name="E_rv_B" public_interface="in" units="J_per_m6"/>
        <variable name="E_ra_A" public_interface="in" units="J_per_m6"/>
        <variable name="E_ra_B" public_interface="in" units="J_per_m6"/>
        <variable name="q_ra_0" public_interface="in" units="m3"/>
        <variable name="q_rv_0" public_interface="in" units="m3"/>
        <variable name="q_la_0" public_interface="in" units="m3"/>
        <variable name="q_lv_0" public_interface="in" units="m3"/>
        <!-- State Variables-->
        <variable name="u_ra" public_interface="out" units="J_per_m3"/>
        <variable name="u_rv" units="J_per_m3"/>
        <variable name="u_la" public_interface="out" units="J_per_m3"/>
        <variable name="u_lv" units="J_per_m3"/>
        <variable name="u_root" public_interface="in" units="J_per_m3"/>
        <variable name="u_par" public_interface="in" units="J_per_m3"/>
        <variable name="v_trv" units="m3_per_s"/>
        <variable name="v_puv" public_interface="out" units="m3_per_s"/>
        <variable name="v_miv" units="m3_per_s"/>
        <variable name="v_aov" public_interface="out" units="m3_per_s"/>
        <variable name="v_svc" public_interface="in" units="m3_per_s"/>
        <variable name="v_ivc" public_interface="in" units="m3_per_s"/>
        <variable name="v_pvn" public_interface="in" units="m3_per_s"/>
        <!-- TODO the below parameters should be set in an init_states parameter file
 q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.-->
        <variable initial_value="1900.0e-6" name="q_lv" units="m3"/>
        <variable initial_value="10.0e-6" name="q_rv" units="m3"/>
        <variable initial_value="4.0e-6" name="q_la" units="m3"/>
        <variable initial_value="4.0e-6" name="q_ra" units="m3"/>
        <!-- calculate modified time due to changes in heart period. This can now be modified throughout a simulation.-->
        <variable initial_value="1.0" name="modifiable_T" public_interface="out" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>s</ci>
                </apply>
                <apply>
                    <divide/>
                    <cn cellml:units="second">1</cn>
                    <ci>modifiable_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>mt</ci>
                <apply>
                    <minus/>
                    <ci>s</ci>
                    <apply>
                        <times/>
                        <ci>T</ci>
                        <apply>
                            <floor/>
                            <apply>
                                <divide/>
                                <ci>s</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Elastance Functions-->
            <apply>
                <eq/>
                <ci>e_a</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <cos/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <pi/>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <plus/>
                                                    <ci>mt</ci>
                                                    <ci>T</ci>
                                                </apply>
                                                <ci>t_ar</ci>
                                            </apply>
                                        </apply>
                                        <ci>T_ar</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>mt</ci>
                                <cn cellml:units="second">0</cn>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>t_ar</ci>
                                        <ci>T_ar</ci>
                                    </apply>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>mt</ci>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>t_ar</ci>
                                        <ci>T_ar</ci>
                                    </apply>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <ci>t_ac</ci>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <cos/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <pi/>
                                            <apply>
                                                <minus/>
                                                <ci>mt</ci>
                                                <ci>t_ac</ci>
                                            </apply>
                                        </apply>
                                        <ci>T_ac</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>mt</ci>
                                <ci>t_ac</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <apply>
                                    <plus/>
                                    <ci>t_ac</ci>
                                    <ci>T_ac</ci>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <cos/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <pi/>
                                            <apply>
                                                <minus/>
                                                <ci>mt</ci>
                                                <ci>t_ar</ci>
                                            </apply>
                                        </apply>
                                        <ci>T_ar</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>mt</ci>
                                <apply>
                                    <plus/>
                                    <ci>t_ac</ci>
                                    <ci>T_ac</ci>
                                </apply>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>e_v</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <cos/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <pi/>
                                            <ci>mt</ci>
                                        </apply>
                                        <ci>T_vc</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>mt</ci>
                                <cn cellml:units="second">0</cn>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <ci>T_vc</ci>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <cos/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <pi/>
                                            <apply>
                                                <minus/>
                                                <ci>mt</ci>
                                                <ci>T_vc</ci>
                                            </apply>
                                        </apply>
                                        <ci>T_vr</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>mt</ci>
                                <ci>T_vc</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>mt</ci>
                                <apply>
                                    <plus/>
                                    <ci>T_vc</ci>
                                    <ci>T_vr</ci>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>mt</ci>
                                <apply>
                                    <plus/>
                                    <ci>T_vc</ci>
                                    <ci>T_vr</ci>
                                </apply>
                            </apply>
                            <apply>
                                <lt/>
                                <ci>mt</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <!-- Constitutive Relations-->
            <apply>
                <eq/>
                <ci>v_trv</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>CQ_trv</ci>
                            <apply>
                                <root/>
                                <apply>
                                    <minus/>
                                    <ci>u_ra</ci>
                                    <ci>u_rv</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <geq/>
                            <ci>u_ra</ci>
                            <ci>u_rv</ci>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="m3_per_s">0</cn>
                        <apply>
                            <lt/>
                            <ci>u_ra</ci>
                            <ci>u_rv</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>v_puv</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>CQ_puv</ci>
                            <apply>
                                <root/>
                                <apply>
                                    <minus/>
                                    <ci>u_rv</ci>
                                    <ci>u_par</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <geq/>
                            <ci>u_rv</ci>
                            <ci>u_par</ci>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="m3_per_s">0</cn>
                        <apply>
                            <lt/>
                            <ci>u_rv</ci>
                            <ci>u_par</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>v_miv</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>CQ_miv</ci>
                            <apply>
                                <root/>
                                <apply>
                                    <minus/>
                                    <ci>u_la</ci>
                                    <ci>u_lv</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <geq/>
                            <ci>u_la</ci>
                            <ci>u_lv</ci>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="m3_per_s">0</cn>
                        <apply>
                            <lt/>
                            <ci>u_la</ci>
                            <ci>u_lv</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>v_aov</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>CQ_aov</ci>
                            <apply>
                                <root/>
                                <apply>
                                    <minus/>
                                    <ci>u_lv</ci>
                                    <ci>u_root</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <geq/>
                            <ci>u_lv</ci>
                            <ci>u_root</ci>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="m3_per_s">0</cn>
                        <apply>
                            <lt/>
                            <ci>u_lv</ci>
                            <ci>u_root</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>u_ra</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>e_a</ci>
                            <ci>E_ra_A</ci>
                        </apply>
                        <ci>E_ra_B</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>q_ra</ci>
                        <ci>q_ra_0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_rv</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>e_v</ci>
                            <ci>E_rv_A</ci>
                        </apply>
                        <ci>E_rv_B</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>q_rv</ci>
                        <ci>q_rv_0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_la</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>e_a</ci>
                            <ci>E_la_A</ci>
                        </apply>
                        <ci>E_la_B</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>q_la</ci>
                        <ci>q_la_0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_lv</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>e_v</ci>
                            <ci>E_lv_A</ci>
                        </apply>
                        <ci>E_lv_B</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>q_lv</ci>
                        <ci>q_lv_0</ci>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_ra</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>v_svc</ci>
                        <ci>v_ivc</ci>
                    </apply>
                    <ci>v_trv</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_rv</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_trv</ci>
                    <ci>v_puv</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_la</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_pvn</ci>
                    <ci>v_miv</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_lv</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_miv</ci>
                    <ci>v_aov</ci>
                </apply>
            </apply>
        </math>
    </component>
    <!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45; Mapping &#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
    <connection>
        <map_components component_1="heart" component_2="pulmonary"/>
        <map_variables variable_1="u_par" variable_2="u_par"/>
        <map_variables variable_1="v_pvn" variable_2="v_pvn"/>
        <map_variables variable_1="u_la" variable_2="u_la"/>
        <map_variables variable_1="v_puv" variable_2="v_rv"/>
    </connection>
    <connection>
        <map_components component_1="parameters_pulmonary" component_2="pulmonary"/>
        <map_variables variable_1="C_par" variable_2="C_par"/>
        <map_variables variable_1="C_pvn" variable_2="C_pvn"/>
        <map_variables variable_1="R_par" variable_2="R_par"/>
        <map_variables variable_1="R_pvn" variable_2="R_pvn"/>
        <map_variables variable_1="I_par" variable_2="I_par"/>
        <map_variables variable_1="I_pvn" variable_2="I_pvn"/>
    </connection>
    <connection>
        <map_components component_1="parameters_heart" component_2="heart"/>
        <map_variables variable_1="T" variable_2="T"/>
        <map_variables variable_1="t_ac" variable_2="t_ac"/>
        <map_variables variable_1="t_ar" variable_2="t_ar"/>
        <map_variables variable_1="T_ac" variable_2="T_ac"/>
        <map_variables variable_1="T_ar" variable_2="T_ar"/>
        <map_variables variable_1="T_vc" variable_2="T_vc"/>
        <map_variables variable_1="T_vr" variable_2="T_vr"/>
        <map_variables variable_1="CQ_trv" variable_2="CQ_trv"/>
        <map_variables variable_1="CQ_puv" variable_2="CQ_puv"/>
        <map_variables variable_1="CQ_miv" variable_2="CQ_miv"/>
        <map_variables variable_1="CQ_aov" variable_2="CQ_aov"/>
        <map_variables variable_1="E_lv_A" variable_2="E_lv_A"/>
        <map_variables variable_1="E_lv_B" variable_2="E_lv_B"/>
        <map_variables variable_1="E_la_A" variable_2="E_la_A"/>
        <map_variables variable_1="E_la_B" variable_2="E_la_B"/>
        <map_variables variable_1="E_rv_A" variable_2="E_rv_A"/>
        <map_variables variable_1="E_rv_B" variable_2="E_rv_B"/>
        <map_variables variable_1="E_ra_A" variable_2="E_ra_A"/>
        <map_variables variable_1="E_ra_B" variable_2="E_ra_B"/>
        <map_variables variable_1="q_ra_0" variable_2="q_ra_0"/>
        <map_variables variable_1="q_rv_0" variable_2="q_rv_0"/>
        <map_variables variable_1="q_la_0" variable_2="q_la_0"/>
        <map_variables variable_1="q_lv_0" variable_2="q_lv_0"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="heart"/>
        <map_variables variable_1="time" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="pulmonary"/>
        <map_variables variable_1="time" variable_2="t"/>
    </connection>
    <!--#STARTGENBELOW-->
</model>
