def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// //////////////////modules for different ion channels ///////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp myocyte_membrane_voltage as
    var Vm_init: volt {pub: in};
    var Vm: volt {init: Vm_init, pub: out};
    var t: second {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_f: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_stim: A_per_F {pub: in};
    ode(Vm, t) = -(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_NaCa+i_PCa+i_f+i_b_Na+i_b_Ca-i_stim);
  enddef;

  def comp sympathetic_neuron_membrane_voltage as
    var Vm_init: milliV {pub: in};
    var Vm: milliV {init: Vm_init, pub: out};
    var Vm_volt: volt;
    var t: second {pub: in};
    var i_Ca: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_A: nanoA {pub: in};
    var i_KV: nanoA {pub: in};
    var i_KCa: nanoA {pub: in};
    var i_stim: nanoA {pub: in};
    var C_m: picoF {pub: in};
    ode(Vm, t) = -(i_Na+i_Ca+i_A+i_KV+i_KCa-i_stim)/C_m*1e6{milliV_per_kiloV};
    Vm_volt = Vm/1000{millV_per_V};
  enddef;

  def comp Ca_dynamics_Paci_2013 as
    var Cai_init: millimolar {pub: in};
    var Ca_SR_init: millimolar {pub: in};
    var Cai: millimolar {init: Cai_init, pub: out};
    var Ca_SR: millimolar {init: Ca_SR_init};
    var Vc: microm3 {pub: in};
    var V_SR: microm3 {pub: in};
    var t: second {pub: in};
    var F: C_per_M {pub: in};
    var Vm: volt {pub: in};
    var Cm: farad {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var a_rel: millimolar_per_s {pub: in};
    var b_rel: millimolar {pub: in};
    var c_rel: millimolar_per_s {pub: in};
    var g_init: dimensionless {pub: in};
    var g: dimensionless {init: g_init};
    var tau_g: second {pub: in};
    var g_inf: dimensionless;
    var Kup: millimolar {pub: in};
    var Buf_C: millimolar {pub: in};
    var Buf_SR: millimolar {pub: in};
    var Kbuf_C: millimolar {pub: in};
    var Kbuf_SR: millimolar {pub: in};
    var Cai_bufc: dimensionless;
    var Ca_SR_bufSR: dimensionless;
    var d: dimensionless {pub: in};
    var VmaxUp: millimolar_per_s {pub: in};
    var const2: dimensionless;
    var V_leak: per_s {pub: in};
    var i_rel: millimolar_per_s;
    var i_up: millimolar_per_s;
    var i_leak: millimolar_per_s;
    i_rel = (c_rel+a_rel*sqr(Ca_SR)/(sqr(b_rel)+sqr(Ca_SR)))*d*g*0.0411{dimensionless};
    i_up = VmaxUp/(1{dimensionless}+sqr(Kup)/sqr(Cai));
    i_leak = (Ca_SR-Cai)*V_leak;
    g_inf = sel
      case Cai <= 0.00035{millimolar}:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 16{dimensionless}));
    endsel;
    const2 = sel
      case (g_inf > g) and (Vm > -0.06{volt}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(g, t) = const2*(g_inf-g)/tau_g;
    Cai_bufc = 1{dimensionless}/(1{dimensionless}+Buf_C*Kbuf_C/sqr(Cai+Kbuf_C));
    Ca_SR_bufSR = 1{dimensionless}/(1{dimensionless}+Buf_SR*Kbuf_SR/sqr(Ca_SR+Kbuf_SR));
    ode(Cai, t) = Cai_bufc*(i_leak-i_up+i_rel-(i_CaL+i_b_Ca+i_PCa-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*Vc*F*1e-18{m3_per_microm3}));
    ode(Ca_SR, t) = Ca_SR_bufSR*Vc/V_SR*(i_up-(i_rel+i_leak));
  enddef;

  def comp electric_potentials_Paci_2013 as
    var t: second {pub: in};
    var E_Na: volt {pub: out};
    var E_K: volt {pub: out};
    var E_Ks: volt {pub: out};
    var E_Ca: volt {pub: out};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var PkNa: dimensionless {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Ks = R*T/F*ln((Ko+PkNa*Nao)/(Ki+PkNa*Nai));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Cao/Cai);
  enddef;

  def comp Na_dynamics_Paci_2013 as
    var Nai_init: millimolar {pub: in};
    var Nai: millimolar {init: Nai_init, pub: out};
    var Cm: farad {pub: in};
    var Vc: microm3 {pub: in};
    var t: second {pub: in};
    var F: C_per_M {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    ode(Nai, t) = -Cm*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(F*Vc*1e-18{m3_per_microm3});
  enddef;

  def comp NE_release_Tao_2011 as
    var t: second {pub: in};
    var V_Ca: J_per_M {init: 0.0, pub: out};
    var V_1Ca: J_per_M {init: 0.0, pub: out};
    var V_2Ca: J_per_M {init: 0.0, pub: out};
    var V_3Ca: J_per_M {init: 0.0, pub: out};
    var V_4Ca: J_per_M {init: 0.0, pub: out};
    var V_5Ca: J_per_M {init: 0.0, pub: out};
    var NE: dimensionless {init: 0.0, pub: out};
    var K_off: per_millis {pub: in};
    var K_on: m3_per_millimol_s {pub: in};
    var K_Ca: per_s {pub: in};
    var b: dimensionless {pub: in};
    var E: per_millis {pub: out};
    var Cai: millimol_per_m3 {init: 0.0, pub: out};
    var gamma: m3_per_M_millis {pub: in};
    var i_Ca: nanoA {pub: in};
    var C_m: picoF {pub: in};
    var F: C_per_M {pub: in};
    var V_Z: litre {pub: in};
    var a: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var V_cleft: litre {pub: in};
    var P_up: per_millis {pub: in};
    // Intracellular concentration, input by Ca current, output with
    // a regulating time constant K_Ca.
    ode(Cai, t) = -i_Ca/(2{dimensionless}*F*V_Z*1e-6{dimensionless})-Cai*K_Ca;
    // Kinetics equations.
    ode(V_Ca, t) = K_off*V_1Ca-5{dimensionless}*K_on*Cai*V_Ca;
    ode(V_1Ca, t) = 5{dimensionless}*K_on*Cai*V_Ca+2{dimensionless}*K_off*V_2Ca*b-(K_off*b+4{dimensionless}*K_on*Cai)*V_1Ca;
    ode(V_2Ca, t) = 4{dimensionless}*K_on*Cai*V_1Ca+3{dimensionless}*K_off*V_3Ca*sqr(b)-(2{dimensionless}*K_off*b+3{dimensionless}*K_on*Cai)*V_2Ca;
    ode(V_3Ca, t) = 3{dimensionless}*K_on*Cai*V_2Ca+4{dimensionless}*K_off*V_4Ca*pow(b, 3{dimensionless})-(3{dimensionless}*K_off*sqr(b)+2{dimensionless}*K_on*Cai)*V_3Ca;
    ode(V_4Ca, t) = 2{dimensionless}*K_on*Cai*V_3Ca+5{dimensionless}*K_off*V_5Ca*pow(b, 4{dimensionless})-(4{dimensionless}*K_off*pow(b, 3{dimensionless})+1{dimensionless}*K_on*Cai)*V_4Ca;
    // I think the above V_2Ca should be V_5Ca... error in supp material of Tao 2011?
    ode(V_5Ca, t) = K_on*Cai*V_4Ca-5{dimensionless}*K_off*pow(b, 4{dimensionless})*V_5Ca;
    // Rate of diffusion for the released vesicles.
    E = gamma*V_5Ca;
    // NE in the cleft
    ode(NE, t) = E*n*a/V_cleft-NE*P_up;
  enddef;

  def comp SN_soma as
    var t: second {pub: in};
    // global constants
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var T: kelvin {pub: in};
    // c_ER is the ratio between ER volume and total volume.
    // c_SL is the ration between sub sarcolemmal volume and total volume.
    var c_ER: dimensionless {pub: in};
    var c_SL: dimensionless {pub: in};
    var c_bulk: dimensionless {pub: out};
    c_bulk = 1{dimensionless}-c_SL-c_ER;
    // var Vol_ER: microm3 {pub: out};
    // Vol_ER = Vol*c_ER;
    var N_avo: per_mol {pub: in};
    var epsilon_tau: second {init: 1e-4};
    // this regions volume
    var Vol: microm3 {pub: in};
    // BC inputs
    var I_const: nanoA {pub: in};
    var I_app: nanoA {pub: in};
    // Nernst potentials (Calcium currently not needed, due to the form of the Ca_N equations)
    var ek1: milliV {pub: out};
    var ena1: milliV {pub: out};
    ek1 = R*T/F*ln(ko/ki)*1000{milliV_per_V};
    ena1 = R*T/F*ln(Nao/Nai)*1000{milliV_per_V};
    // voltage calculation
    // neuron capacitance
    var Cm: picoF {pub: in};
    var V_init: milliV {pub: in};
    var V: milliV {init: V_init, pub: out};
    ode(V, t) = -1e6{milliV_per_kiloV}*(iNa_N+iCa_N+ikv+iA+ikCa+iM+iHCN+i_NaCa+I_app+I_const)/Cm;
    // iNa_N
    // Made V_midm a parameter (was 36 mV) to allow the modification of the depolarising voltage
    // made V_denm a parameter (was 7.2 mV) to allow the modification of the depolarising voltage activation amount during hyperpolarisation
    // threshold
    var iNa_N: nanoA {pub: out};
    var gna: microS {pub: in};
    var m_init: dimensionless {pub: in};
    var m: dimensionless {init: m_init, pub: out};
    var h_init: dimensionless {pub: in};
    var h: dimensionless {init: h_init, pub: out};
    var V_midm: milliV {pub: in};
    var V_denm: milliV {pub: in};
    var m_inf: dimensionless {pub: out};
    var h_inf: dimensionless {pub: out};
    var tau_m: millis {pub: out};
    var tau_h: millis {pub: out};
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_midm)/V_denm));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+53.2{milliV})/6.5{milliV}));
    tau_m = 0.06{millis}+1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_h = -0.0046{millis_per_milliV}*V+0.26{millis}+50.85{millis}/(1{dimensionless}+exp((-59.46{milliV}-V)/7.91{milliV})+1{dimensionless}+exp((40.94{milliV}+V)/1.556{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m/1000{millis_per_s})+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h/1000{millis_per_s})+epsilon_tau);
    iNa_N = gna*(V-ena1)*pow(m, 3{dimensionless})*h;
    // I_Ca_N
    var iCa_N: nanoA {pub: out};
    var pCa: m3_per_s {pub: in};
    var c_init: dimensionless {pub: in};
    var c: dimensionless {init: c_init, pub: out};
    var hc_init: dimensionless {pub: in};
    var hc: dimensionless {init: hc_init, pub: out};
    var c_inf: dimensionless {pub: out};
    var hc_inf: dimensionless {pub: out};
    var tau_c: millis {pub: out};
    var tau_hc: millis {pub: out};
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+8.1{milliV})/9.85{milliV}));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+19.91{milliV})/4.5{milliV}));
    // TODO bring this tau_c back and identify a parameter so we can modify this time dynamics.
    tau_c = 0.1{millis}+1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    tau_hc = 17{millis}+1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO check units for pCa, it says millis? TODO next thing to do.
    // TODO I have included a very rough cAMP inclusion here, improve this
    iCa_N = 1e6{nanoA_per_milliA}*sqr(F)*V*pCa*(1{dimensionless}+cAMP)/(R*T)*(Cai*exp(2{dimensionless}/1000{milliV_per_V}*V*F/(R*T))-Cao)/(exp(2e-3{V_per_milliV}*V*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    // I_kv
    var ikv: nanoA {pub: out};
    var gkv: microS {pub: in};
    var n1_init: dimensionless {pub: in};
    var n1: dimensionless {init: n1_init, pub: out};
    var n1_inf: dimensionless {pub: out};
    var tau_n1: millis {pub: out};
    n1_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+6.084{milliV})/8.007{milliV}));
    tau_n1 = 2.31{millis}+1{dimensionless}/(0.385{per_millis}*exp(0.101{per_milliV}*V)+8.134e-4{per_millis}*exp(-0.1177{per_milliV}*V));
    ode(n1, t) = (n1_inf-n1)/(abs(tau_n1/1000{millis_per_s})+epsilon_tau);
    ikv = gkv*(V-ek1)*n1;
    // iA
    // IMPORTANT
    // in Tao's matlab code, this is ek, the cardiomyocyte nernst potential, not ek1, the SN nernst potential, which is an error from them
    // In Belluzi and Sacchi this is calculated differently again from end of cycle concentration. Improve this
    var iA: nanoA {pub: out};
    var gA: microS {pub: in};
    var gkcf: microS {pub: in};
    var gkcs: microS {pub: in};
    var a_init: dimensionless {pub: in};
    var a: dimensionless {init: a_init, pub: out};
    var ah_init: dimensionless {pub: in};
    var ah: dimensionless {init: ah_init, pub: out};
    var a_inf: dimensionless {pub: out};
    var ah_inf: dimensionless {pub: out};
    var tau_a: millis {pub: out};
    var tau_ah: millis {pub: out};
    a_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+49.4{milliV})/9.9{milliV}));
    ah_inf = 1{dimensionless}/(1{dimensionless}+exp((V+80.43{milliV})/7.07{milliV}));
    tau_a = 0.2{millis}+1{dimensionless}/(3.7{per_millis}*exp(0.03856{per_milliV}*V)+0.05362{per_millis}*exp(-0.04448{per_milliV}*V));
    tau_ah = -0.038{millis_per_milliV}*V+6{millis}+87{millis}/(1{dimensionless}+exp((-80{milliV}-V)/5{milliV})+1{dimensionless}+exp((55{milliV}+V)/1.4{milliV}));
    ode(a, t) = (a_inf-a)/(abs(tau_a/1000{millis_per_s})+epsilon_tau);
    ode(ah, t) = (ah_inf-ah)/(abs(tau_ah/1000{millis_per_s})+epsilon_tau);
    iA = gA*(V-ek1)*a*ah;
    // I_kca
    // this ignores a delay that is present in Beluzzi1991
    var ikCa: nanoA {pub: out};
    var kcf_init: dimensionless {pub: in};
    var kcf: dimensionless {init: kcf_init, pub: out};
    var kcs_init: dimensionless {pub: in};
    var kcs: dimensionless {init: kcs_init, pub: out};
    var kcf_inf: dimensionless {pub: out};
    var kcs_inf: dimensionless {pub: out};
    var tau_kcf: millis {pub: out};
    var tau_kcs: millis {pub: out};
    kcf_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+11.54{milliV})/4.99{milliV}));
    kcs_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+15.18{milliV})/4{milliV}));
    tau_kcf = 1.4{millis}+1{dimensionless}/(1292{per_millis}*exp(0.274{per_milliV}*V)+3.59e-3{per_millis}*exp(-0.126{per_milliV}*V));
    tau_kcs = 1{dimensionless}/(0.25{per_millis}*exp(0.7{per_milliV}*V)+7.3e-4{per_millis}*exp(-0.144{per_milliV}*V))+(-1.9{millis_per_milliV}*V)+92{millis};
    ode(kcf, t) = (kcf_inf-kcf)/(abs(tau_kcf/1000{millis_per_s})+epsilon_tau);
    ode(kcs, t) = (kcs_inf-kcs)/(abs(tau_kcs/1000{millis_per_s})+epsilon_tau);
    ikCa = gkcf*(V-ek1)*kcf+gkcs*(V-ek1)*kcs;
    // I_M
    // TODO does this do some of the same things as ikv and iA, how do we differentiate these?
    // TODO calculate cAMP concentration
    // TODO figure out what units cAMP is supposed to have. is it between 0 and 1?
    var iM: nanoA {pub: out};
    var g_M: microS {pub: in};
    var w_init: dimensionless {pub: in};
    var w: dimensionless {init: w_init, pub: out};
    var w_inf: dimensionless {pub: out};
    var cAMP: dimensionless {pub: in};
    var tau_w: millis {pub: out};
    var delta_gM: microS {pub: in};
    // var theta_w: milliV {pub: in};
    // var sigma_w: milliV {pub: in};
    // (from Golomb2006Contribution, pyramidal rat cells!!) z changed to w
    // w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+39)/5));
    // tau_w = 75{millis};
    // cAMP = 0.0{millimolar};
    // (from Martin2023Modelling)
    w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+35{milliV})/10{milliV}));
    // tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/10{milliV})+exp(-(V+35{milliV})/20{milliV}));
    tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/20{milliV})+exp(-(V+35{milliV})/30{milliV}));
    // TODO I need to make sure tau doesn't go to zero so quickly when positive voltage, probably
    // by changing the 10 denominator to 20 or something similar. I HAVE CHANGED THIS, AND IT WORKS.
    // THIS HELPS CALIBRATE THE M-TYPE potassium channel!!
    // general i_M for Golomb and Martin
    ode(w, t) = (w_inf-w)/(tau_w/1000{millis_per_s});
    iM = (g_M+cAMP*delta_gM)*w*(V-ek1);
    // i_HCN
    var iHCN: nanoA {pub: out};
    var g_HCN: microS {pub: in};
    var delta_gHCN: dimensionless {pub: in};
    var r_inf: dimensionless {pub: out};
    var r_init: dimensionless {pub: in};
    var r: dimensionless {init: r_init, pub: out};
    var tau_r: millis {pub: out};
    var eHCN: milliV {pub: in};
    var alpha_r: dimensionless {pub: out};
    var beta_r: dimensionless {pub: out};
    var nu_cAMP: milliV {pub: out};
    // var cAMP: dimensionless {pub: in}; defined in M type block
    nu_cAMP = 95{milliV}*cAMP+103.5{milliV}*(1{dimensionless}-cAMP);
    // TODO move the 0.007 to a variable infront of tau_r and remove it here.
    alpha_r = 0.007{dimensionless}*exp(-(V+nu_cAMP)/19{milliV});
    beta_r = 0.007{dimensionless}*exp((V+nu_cAMP)/22{milliV});
    ode(r, t) = (r_inf-r)/(tau_r/1000{millis_per_s});
    r_inf = alpha_r/(alpha_r+beta_r);
    // The below should have temperature dependence in the denominator, for now ignore it.
    tau_r = 1{millis}/(alpha_r+beta_r);
    iHCN = g_HCN*(1{dimensionless}+cAMP*delta_gHCN)*r*(V-eHCN);
    // NaCa pump. This is from Paci2013 model for a cardiomyocyte. Need to check that it behaves realistically for a neuron.
    // Why does it not have any time dynamics/delay??. Currently it happens way too quickly.
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {pub: in};
    var alpha_NaCa: dimensionless {pub: in};
    var gamma_NaCa: dimensionless {pub: in};
    var Ksat: dimensionless {pub: in};
    var KmCa: millimolar {pub: in};
    var KmNai: millimolar {pub: in};
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))));
    // IP3 channel
    var j_IP3: millimolar_per_s {pub: out};
    var k_IP3: per_s {pub: in};
    var k_leak: per_s {pub: in};
    var m_IP3_inf: dimensionless {pub: out};
    var h_IP3_init: dimensionless {pub: in};
    var h_IP3: dimensionless {init: h_IP3_init, pub: out};
    var h_IP3_inf: dimensionless {pub: out};
    var tau_hIP3: millis {pub: out};
    var IP3: millimolar {pub: in};
    var a_2: per_millimolar {pub: in};
    var d_1: millimolar {pub: in};
    var d_2: millimolar {pub: in};
    var d_3: millimolar {pub: in};
    var d_5: millimolar {pub: in};
    var Q_2: millimolar {pub: out};
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    // leak current from Li1994Equations and equivalent to Shannon2004Mathematical
    var j_leak: millimolar_per_s {pub: out};
    j_leak = -k_leak*(Cai-Ca_ER);
    // SR Ca pump from Shannon2004Mathematical but simplified
    var K_mf: millimolar {pub: in};
    var K_mr: millimolar {pub: in};
    var k_SERCA: millimolar_per_s {pub: in};
    var H_SERCA: dimensionless {pub: in};
    var j_SERCA: millimolar_per_s {pub: out};
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER/K_mr, H_SERCA));
    // Ryanodine receptor channel from Shannon et al.
    var j_RyR: millimolar_per_s {pub: out};
    var Rstate_init: dimensionless {pub: in};
    var Ostate_init: dimensionless {pub: in};
    var Istate_init: dimensionless {pub: in};
    var RIstate_init: dimensionless {pub: in};
    var Rstate: dimensionless {init: Rstate_init, pub: out};
    var Ostate: dimensionless {init: Ostate_init, pub: out};
    var Istate: dimensionless {init: Istate_init, pub: out};
    var RIstate: dimensionless {init: RIstate_init, pub: out};
    // k_RyR is k_s in the paper
    var k_RyR: per_s {pub: in};
    var k_oCa: per_millimolar2_s {pub: in};
    var k_om: per_s {pub: in};
    var k_iCa: per_millimolar_s {pub: in};
    var k_im: per_s {pub: in};
    var k_RI_to_R: per_s {pub: in};
    var EC_50ER: millimolar {pub: in};
    var max_ER: dimensionless {pub: in};
    var min_ER: dimensionless {pub: in};
    var H_ER: dimensionless {pub: in};
    var k_CaER: dimensionless {pub: out};
    var k_oERCa: per_millimolar2_s {pub: out};
    var k_iERCa: per_millimolar_s {pub: out};
    k_CaER = max_ER-(max_ER-min_ER)/(1{dimensionless}+pow(EC_50ER/Ca_ER, H_ER));
    k_oERCa = k_oCa/k_CaER;
    k_iERCa = k_iCa*k_CaER;
    ode(Rstate, t) = k_RI_to_R*RIstate-k_iERCa*Cai*Rstate-(k_oERCa*sqr(Cai)*Rstate-k_om*Ostate);
    ode(Ostate, t) = k_oERCa*sqr(Cai)*Rstate-k_om*Ostate-(k_iERCa*Cai*Ostate-k_im*Istate);
    ode(Istate, t) = k_iERCa*Cai*Ostate-k_im*Istate-(k_om*Istate-k_oERCa*sqr(Cai)*RIstate);
    ode(RIstate, t) = k_om*Istate-k_oERCa*sqr(Cai)*RIstate-(k_RI_to_R*RIstate-k_iERCa*Cai*Rstate);
    j_RyR = k_RyR*Ostate*(Ca_ER-Cai);
    // Ca concentration calculations in each region
    var Cai_init: millimolar {pub: in};
    var Cai: millimolar {init: Cai_init, pub: out};
    var Ca_ER_init: millimolar {pub: in};
    var Ca_ER: millimolar {init: Ca_ER_init, pub: out};
    var Cao: millimolar {pub: in};
    var j_Ca_N: millimolar_per_s {pub: out};
    var j_NaCa: millimolar_per_s {pub: out};
    var Ca_bulk: millimolar {init: Cai_init, pub: out};
    var j_diffCa: millimolar_per_s {pub: out};
    var tau_Ca: millis {pub: in};
    j_Ca_N = -iCa_N/(2{dimensionless}*F*Vol)*1e9{millimolar_per_megamolar};
    j_NaCa = i_NaCa/(F*Vol)*1e9{millimolar_per_megamolar};
    j_diffCa = -(Cai-Ca_bulk)/(tau_Ca/1000{millis_per_s});
    ode(Cai, t) = 1{dimensionless}/c_SL*(j_Ca_N+j_NaCa+j_IP3+j_RyR+j_leak+j_diffCa);
    ode(Ca_bulk, t) = 1{dimensionless}/c_bulk*(j_SERCA-j_diffCa);
    ode(Ca_ER, t) = 1{dimensionless}/c_ER*(-j_IP3-j_SERCA-j_RyR-j_leak);
    // Na concentration: TODO add the NaK pump instead of the k_Na_return
    var Nai_init: millimolar {pub: in};
    var Nai: millimolar {init: Nai_init, pub: out};
    var Nao: millimolar {pub: in};
    var k_Na_return: per_s {pub: in};
    var j_Na_N: millimolar_per_s {pub: out};
    j_Na_N = iNa_N/(F*Vol)*1e9{millimolar_per_megamolar};
    ode(Nai, t) = j_Na_N-0.5{dimensionless}*j_NaCa-k_Na_return*(Nai-Nai_init);
    // k concentration: TODO add the NaK pump instead of the k_k_return
    var ki_init: millimolar {pub: in};
    var ki: millimolar {init: ki_init, pub: out};
    var ko: millimolar {pub: in};
    var k_k_return: per_s {pub: in};
    var j_kA: millimolar_per_s {pub: out};
    var j_kv: millimolar_per_s {pub: out};
    var j_kCa: millimolar_per_s {pub: out};
    var j_kM: millimolar_per_s {pub: out};
    j_kA = iA/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kv = ikv/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kCa = ikCa/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kM = iM/(F*Vol)*1e9{millimolar_per_megamolar};
    ode(ki, t) = j_kA+j_kv+j_kCa+j_kM-k_k_return*(ki-ki_init);
  enddef;

  def comp SN_varicosity as
    var t: second {pub: in};
    // global constants
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var T: kelvin {pub: in};
    // var a_cleft: dimensionless {pub: in};
    // var n_cleft: dimensionless {pub: in};
    // var Vol_cleft: litre {pub: in};
    var N_avo: per_mol {pub: in};
    var epsilon_tau: second {init: 1e-4};
    // Vol of this module
    var Vol: microm3 {pub: in};
    // c_ER is the ratio between ER volume and total volume.
    // c_SL is the ration between sub sarcolemmal volume and total volume.
    var c_ER: dimensionless {pub: in};
    var c_SL: dimensionless {pub: in};
    var c_bulk: dimensionless {pub: out};
    c_bulk = 1{dimensionless}-c_SL-c_ER;
    // var Vol_ER: microm3 {pub: out};
    // Vol_ER = Vol*c_ER;
    // BC inputs
    // voltage is a BC from the soma currently
    var V: milliV {pub: in};
    // Nernst potential
    var ek1: milliV {pub: out};
    var ena1: milliV {pub: out};
    ek1 = R*T/F*ln(ko/ki)*1000{milliV_per_V};
    ena1 = R*T/F*ln(Nao/Nai)*1000{milliV_per_V};
    // iNa_N
    // Made V_midm a parameter (was 36 mV) to allow the modification of the depolarising voltage
    // made V_denm a parameter (was 7.2 mV) to allow the modification of the depolarising voltage activation amount during hyperpolarisation
    // threshold
    var iNa_N: nanoA {pub: out};
    var gna: microS {pub: in};
    var m_init: dimensionless {pub: in};
    var m: dimensionless {init: m_init, pub: out};
    var h_init: dimensionless {pub: in};
    var h: dimensionless {init: h_init, pub: out};
    var V_midm: milliV {pub: in};
    var V_denm: milliV {pub: in};
    var m_inf: dimensionless {pub: out};
    var h_inf: dimensionless {pub: out};
    var tau_m: millis {pub: out};
    var tau_h: millis {pub: out};
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_midm)/V_denm));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+53.2{milliV})/6.5{milliV}));
    tau_m = 0.06{millis}+1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_h = -0.0046{millis_per_milliV}*V+0.26{millis}+50.85{millis}/(1{dimensionless}+exp((-59.46{milliV}-V)/7.91{milliV})+1{dimensionless}+exp((40.94{milliV}+V)/1.556{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m/1000{millis_per_s})+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h/1000{millis_per_s})+epsilon_tau);
    iNa_N = gna*(V-ena1)*pow(m, 3{dimensionless})*h;
    // I_Ca_N
    var iCa_N: nanoA {pub: out};
    var pCa: m3_per_s {pub: in};
    var c_init: dimensionless {pub: in};
    var c: dimensionless {init: c_init, pub: out};
    var hc_init: dimensionless {pub: in};
    var hc: dimensionless {init: hc_init, pub: out};
    var c_inf: dimensionless {pub: out};
    var hc_inf: dimensionless {pub: out};
    var tau_c: millis {pub: out};
    var tau_hc: millis {pub: out};
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+8.1{milliV})/9.85{milliV}));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+19.91{milliV})/4.5{milliV}));
    // TODO bring this tau_c back and identify a parameter so we can modify this time dynamics.
    tau_c = 0.1{millis}+1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    tau_hc = 17{millis}+1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO check units for pCa, it says millis? TODO next thing to do.
    // TODO I have included a very rough cAMP inclusion here, improve this
    iCa_N = 1e6{nanoA_per_milliA}*sqr(F)*V*pCa*(1{dimensionless}+cAMP)/(R*T)*(Cai*exp(2{dimensionless}/1000{milliV_per_V}*V*F/(R*T))-Cao)/(exp(2e-3{V_per_milliV}*V*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    // NaCa pump. This is from Paci2013 model for a cardiomyocyte. Need to check that it behaves realistically for a neuron.
    // Why does it not have any time dynamics/delay??. Currently it happens way too quickly.
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {pub: in};
    var alpha_NaCa: dimensionless {pub: in};
    var gamma_NaCa: dimensionless {pub: in};
    var Ksat: dimensionless {pub: in};
    var KmCa: millimolar {pub: in};
    var KmNai: millimolar {pub: in};
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))));
    // I_kv
    var ikv: nanoA {pub: out};
    var gkv: microS {pub: in};
    var n1_init: dimensionless {pub: in};
    var n1: dimensionless {init: n1_init, pub: out};
    var n1_inf: dimensionless {pub: out};
    var tau_n1: millis {pub: out};
    n1_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+6.084{milliV})/8.007{milliV}));
    tau_n1 = 2.31{millis}+1{dimensionless}/(0.385{per_millis}*exp(0.101{per_milliV}*V)+8.134e-4{per_millis}*exp(-0.1177{per_milliV}*V));
    ode(n1, t) = (n1_inf-n1)/(abs(tau_n1/1000{millis_per_s})+epsilon_tau);
    ikv = gkv*(V-ek1)*n1;
    // iA
    // IMPORTANT
    // in Tao's matlab code, this is ek, the cardiomyocyte nernst potential, not ek1, the SN nernst potential, which is an error from them
    // In Belluzi and Sacchi this is calculated differently again from end of cycle concentration. Improve this
    var iA: nanoA {pub: out};
    var gA: microS {pub: in};
    var gkcf: microS {pub: in};
    var gkcs: microS {pub: in};
    var a_init: dimensionless {pub: in};
    var a: dimensionless {init: a_init, pub: out};
    var ah_init: dimensionless {pub: in};
    var ah: dimensionless {init: ah_init, pub: out};
    var a_inf: dimensionless {pub: out};
    var ah_inf: dimensionless {pub: out};
    var tau_a: millis {pub: out};
    var tau_ah: millis {pub: out};
    a_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+49.4{milliV})/9.9{milliV}));
    ah_inf = 1{dimensionless}/(1{dimensionless}+exp((V+80.43{milliV})/7.07{milliV}));
    tau_a = 0.2{millis}+1{dimensionless}/(3.7{per_millis}*exp(0.03856{per_milliV}*V)+0.05362{per_millis}*exp(-0.04448{per_milliV}*V));
    tau_ah = -0.038{millis_per_milliV}*V+6{millis}+87{millis}/(1{dimensionless}+exp((-80{milliV}-V)/5{milliV})+1{dimensionless}+exp((55{milliV}+V)/1.4{milliV}));
    ode(a, t) = (a_inf-a)/(abs(tau_a/1000{millis_per_s})+epsilon_tau);
    ode(ah, t) = (ah_inf-ah)/(abs(tau_ah/1000{millis_per_s})+epsilon_tau);
    iA = gA*(V-ek1)*a*ah;
    // I_kca
    // this ignores a delay that is present in Beluzzi1991
    var ikCa: nanoA {pub: out};
    var kcf_init: dimensionless {pub: in};
    var kcf: dimensionless {init: kcf_init, pub: out};
    var kcs_init: dimensionless {pub: in};
    var kcs: dimensionless {init: kcs_init, pub: out};
    var kcf_inf: dimensionless {pub: out};
    var kcs_inf: dimensionless {pub: out};
    var tau_kcf: millis {pub: out};
    var tau_kcs: millis {pub: out};
    kcf_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+11.54{milliV})/4.99{milliV}));
    kcs_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+15.18{milliV})/4{milliV}));
    tau_kcf = 1.4{millis}+1{dimensionless}/(1292{per_millis}*exp(0.274{per_milliV}*V)+3.59e-3{per_millis}*exp(-0.126{per_milliV}*V));
    tau_kcs = 1{dimensionless}/(0.25{per_millis}*exp(0.7{per_milliV}*V)+7.3e-4{per_millis}*exp(-0.144{per_milliV}*V))+(-1.9{millis_per_milliV}*V)+92{millis};
    ode(kcf, t) = (kcf_inf-kcf)/(abs(tau_kcf/1000{millis_per_s})+epsilon_tau);
    ode(kcs, t) = (kcs_inf-kcs)/(abs(tau_kcs/1000{millis_per_s})+epsilon_tau);
    ikCa = gkcf*(V-ek1)*kcf+gkcs*(V-ek1)*kcs;
    // I_M
    // TODO does this do some of the same things as ikv and iA, how do we differentiate these?
    // TODO calculate cAMP concentration
    // TODO figure out what units cAMP is supposed to have. is it between 0 and 1?
    var iM: nanoA {pub: out};
    var g_M: microS {pub: in};
    var w_init: dimensionless {pub: in};
    var w: dimensionless {init: w_init, pub: out};
    var w_inf: dimensionless {pub: out};
    var cAMP: dimensionless {pub: in};
    var tau_w: millis {pub: out};
    var delta_gM: microS {pub: in};
    // var theta_w: milliV {pub: in};
    // var sigma_w: milliV {pub: in};
    // (from Golomb2006Contribution, pyramidal rat cells!!) z changed to w
    // w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+39)/5));
    // tau_w = 75{millis};
    // cAMP = 0.0{millimolar};
    // (from Martin2023Modelling)
    w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+35{milliV})/10{milliV}));
    // tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/10{milliV})+exp(-(V+35{milliV})/20{milliV}));
    tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/20{milliV})+exp(-(V+35{milliV})/30{milliV}));
    // TODO I need to make sure tau doesn't go to zero so quickly when positive voltage, probably
    // by changing the 10 denominator to 20 or something similar. I HAVE CHANGED THIS, AND IT WORKS.
    // THIS HELPS CALIBRATE THE M-TYPE potassium channel!!
    // general i_M for Golomb and Martin
    ode(w, t) = (w_inf-w)/(tau_w/1000{millis_per_s});
    iM = (g_M+cAMP*delta_gM)*w*(V-ek1);
    // i_HCN
    var iHCN: nanoA {pub: out};
    var g_HCN: microS {pub: in};
    var delta_gHCN: dimensionless {pub: in};
    var r_inf: dimensionless {pub: out};
    var r_init: dimensionless {pub: in};
    var r: dimensionless {init: r_init, pub: out};
    var tau_r: millis {pub: out};
    var eHCN: milliV {pub: in};
    var alpha_r: dimensionless {pub: out};
    var beta_r: dimensionless {pub: out};
    var nu_cAMP: milliV {pub: out};
    // var cAMP: dimensionless {pub: in}; defined in M type block
    nu_cAMP = 95{milliV}*cAMP+103.5{milliV}*(1{dimensionless}-cAMP);
    // TODO move the 0.007 to a variable infront of tau_r and remove it here.
    alpha_r = 0.007{dimensionless}*exp(-(V+nu_cAMP)/19{milliV});
    beta_r = 0.007{dimensionless}*exp((V+nu_cAMP)/22{milliV});
    ode(r, t) = (r_inf-r)/(tau_r/1000{millis_per_s});
    r_inf = alpha_r/(alpha_r+beta_r);
    // The below should have temperature dependence in the denominator, for now ignore it.
    tau_r = 1{millis}/(alpha_r+beta_r);
    iHCN = g_HCN*(1{dimensionless}+cAMP*delta_gHCN)*r*(V-eHCN);
    // IP3 channel
    var j_IP3: millimolar_per_s {pub: out};
    var k_IP3: per_s {pub: in};
    var k_leak: per_s {pub: in};
    var m_IP3_inf: dimensionless {pub: out};
    var h_IP3_init: dimensionless {pub: in};
    var h_IP3: dimensionless {init: h_IP3_init, pub: out};
    var h_IP3_inf: dimensionless {pub: out};
    var tau_hIP3: millis {pub: out};
    var IP3: millimolar {pub: in};
    var a_2: per_millimolar {pub: in};
    var d_1: millimolar {pub: in};
    var d_2: millimolar {pub: in};
    var d_3: millimolar {pub: in};
    var d_5: millimolar {pub: in};
    var Q_2: millimolar {pub: out};
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    // leak current from Li1994Equations and equivalent to Shannon2004Mathematical
    var j_leak: millimolar_per_s {pub: out};
    j_leak = -k_leak*(Cai-Ca_ER);
    // SR Ca pump from Shannon2004Mathematical but simplified
    var K_mf: millimolar {pub: in};
    var K_mr: millimolar {pub: in};
    var k_SERCA: millimolar_per_s {pub: in};
    var H_SERCA: dimensionless {pub: in};
    var j_SERCA: millimolar_per_s {pub: out};
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER/K_mr, H_SERCA));
    // Ryanodine receptor channel from Shannon et al.
    var j_RyR: millimolar_per_s {pub: out};
    var Rstate_init: dimensionless {pub: in};
    var Ostate_init: dimensionless {pub: in};
    var Istate_init: dimensionless {pub: in};
    var RIstate_init: dimensionless {pub: in};
    var Rstate: dimensionless {init: Rstate_init, pub: out};
    var Ostate: dimensionless {init: Ostate_init, pub: out};
    var Istate: dimensionless {init: Istate_init, pub: out};
    var RIstate: dimensionless {init: RIstate_init, pub: out};
    // k_RyR is k_s in the Shannon2004Mathematical paper
    var k_RyR: per_s {pub: in};
    var k_oCa: per_millimolar2_s {pub: in};
    var k_om: per_s {pub: in};
    var k_iCa: per_millimolar_s {pub: in};
    var k_im: per_s {pub: in};
    var k_RI_to_R: per_s {pub: in};
    var EC_50ER: millimolar {pub: in};
    var max_ER: dimensionless {pub: in};
    var min_ER: dimensionless {pub: in};
    var H_ER: dimensionless {pub: in};
    var k_CaER: dimensionless {pub: out};
    var k_oERCa: per_millimolar2_s {pub: out};
    var k_iERCa: per_millimolar_s {pub: out};
    k_CaER = max_ER-(max_ER-min_ER)/(1{dimensionless}+pow(EC_50ER/Ca_ER, H_ER));
    k_oERCa = k_oCa/k_CaER;
    k_iERCa = k_iCa*k_CaER;
    ode(Rstate, t) = k_RI_to_R*RIstate-k_iERCa*Cai*Rstate-(k_oERCa*sqr(Cai)*Rstate-k_om*Ostate);
    ode(Ostate, t) = k_oERCa*sqr(Cai)*Rstate-k_om*Ostate-(k_iERCa*Cai*Ostate-k_im*Istate);
    ode(Istate, t) = k_iERCa*Cai*Ostate-k_im*Istate-(k_om*Istate-k_oERCa*sqr(Cai)*RIstate);
    ode(RIstate, t) = k_om*Istate-k_oERCa*sqr(Cai)*RIstate-(k_RI_to_R*RIstate-k_iERCa*Cai*Rstate);
    j_RyR = k_RyR*Ostate*(Ca_ER-Cai);
    // Ca concentration calculations in each region
    var Cai_init: millimolar {pub: in};
    var Cai: millimolar {init: Cai_init, pub: out};
    var Ca_ER_init: millimolar {pub: in};
    var Ca_ER: millimolar {init: Ca_ER_init, pub: out};
    var Cao: millimolar {pub: in};
    var j_Ca_N: millimolar_per_s {pub: out};
    var j_NaCa: millimolar_per_s {pub: out};
    var Ca_bulk: millimolar {init: Cai_init, pub: out};
    var j_diffCa: millimolar_per_s {pub: out};
    var tau_Ca: millis {pub: in};
    j_Ca_N = -iCa_N/(2{dimensionless}*F*Vol)*1e9{millimolar_per_megamolar};
    j_NaCa = i_NaCa/(F*Vol)*1e9{millimolar_per_megamolar};
    j_diffCa = -(Cai-Ca_bulk)/(tau_Ca/1000{millis_per_s});
    ode(Cai, t) = 1{dimensionless}/c_SL*(j_Ca_N+j_NaCa+j_IP3+j_RyR+j_leak+j_diffCa);
    ode(Ca_bulk, t) = 1{dimensionless}/c_bulk*(j_SERCA-j_diffCa);
    ode(Ca_ER, t) = 1{dimensionless}/c_ER*(-j_IP3-j_SERCA-j_RyR-j_leak);
    // Na concentration: TODO add the NaK pump instead of the k_Na_return
    var Nai_init: millimolar {pub: in};
    var Nai: millimolar {init: Nai_init, pub: out};
    var Nao: millimolar {pub: in};
    var k_Na_return: per_s {pub: in};
    var j_Na_N: millimolar_per_s {pub: out};
    j_Na_N = iNa_N/(F*Vol)*1e9{millimolar_per_megamolar};
    ode(Nai, t) = j_Na_N-0.5{dimensionless}*j_NaCa-k_Na_return*(Nai-Nai_init);
    // k concentration: TODO add the NaK pump instead of the k_k_return
    var ki_init: millimolar {pub: in};
    var ki: millimolar {init: ki_init, pub: out};
    var ko: millimolar {pub: in};
    var k_k_return: per_s {pub: in};
    var j_kA: millimolar_per_s {pub: out};
    var j_kv: millimolar_per_s {pub: out};
    var j_kCa: millimolar_per_s {pub: out};
    var j_kM: millimolar_per_s {pub: out};
    j_kA = iA/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kv = ikv/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kCa = ikCa/(F*Vol)*1e9{millimolar_per_megamolar};
    j_kM = iM/(F*Vol)*1e9{millimolar_per_megamolar};
    ode(ki, t) = j_kA+j_kv+j_kCa+j_kM-k_k_return*(ki-ki_init);
    // Calcium dependent vesicle binding TODO understand these equations better.
    // units of b changed from picoF
    var b: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var kon: per_millimolar_s {pub: in};
    var koff: per_s {pub: in};
    var B0_init: dimensionless {pub: in};
    var B0: dimensionless {init: B0_init, pub: out};
    var B1_init: dimensionless {pub: in};
    var B1: dimensionless {init: B1_init, pub: out};
    var B2_init: dimensionless {pub: in};
    var B2: dimensionless {init: B2_init, pub: out};
    var B3_init: dimensionless {pub: in};
    var B3: dimensionless {init: B3_init, pub: out};
    var B4_init: dimensionless {pub: in};
    var B4: dimensionless {init: B4_init, pub: out};
    var B5_init: dimensionless {pub: in};
    var B5: dimensionless {init: B5_init, pub: out};
    var NE_init: dimensionless {pub: in};
    var NE: dimensionless {init: NE_init, pub: out};
    var E: dimensionless {pub: out};
    ode(B0, t) = koff*B1-5{dimensionless}*kon*Cai*B0;
    ode(B1, t) = 5{dimensionless}*kon*Cai*B0+2{dimensionless}*koff*B2*pow(b, 1{dimensionless})-(koff*pow(b, 0{dimensionless})+4{dimensionless}*kon*Cai)*B1;
    ode(B2, t) = 4{dimensionless}*kon*Cai*B1+3{dimensionless}*koff*B3*sqr(b)-(2{dimensionless}*koff*pow(b, 1{dimensionless})+3{dimensionless}*kon*Cai)*B2;
    ode(B3, t) = 3{dimensionless}*kon*Cai*B2+4{dimensionless}*koff*B4*pow(b, 3{dimensionless})-(3{dimensionless}*koff*sqr(b)+2{dimensionless}*kon*Cai)*B3;
    ode(B4, t) = 2{dimensionless}*kon*Cai*B3+5{dimensionless}*koff*B5*pow(b, 4{dimensionless})-(4{dimensionless}*koff*pow(b, 3{dimensionless})+kon*Cai)*B4;
    // TODO check the power to 4 here? should it be 5? it breaks the pattern.
    ode(B5, t) = kon*Cai*B4-5{dimensionless}*koff*pow(b, 4{dimensionless})*B5;
    // check units of gamma
    E = gamma*B5;
    // TODO where does the 500 come from
    // This is one of the equations I need to improve, to have accurate reuptake of NE
    // This needs unit change from millis.
    // ode(NE, t) = 1e3{dimensionless}*n_cleft*E*a_cleft/N_avo/V_cleft-NE*0.001{per_s};
    // TODO improve this equation
    ode(NE, t) = 1e-1{per_millimolar_s}*Cai-10{per_s}*(NE-NE_init);
    // - NE*P_up?
  enddef;
enddef;
