def model modules as
  def import using "units.cellml" for
    unit A_per_F using unit A_per_F;
    unit milliV using unit milliV;
    unit nanoA using unit nanoA;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit milliV_per_V using unit milliV_per_V;
    unit millimolar using unit millimolar;
    unit milliV2 using unit milliV2;
    unit C_per_M using unit C_per_M;
    unit s_per_milliV using unit s_per_milliV;
    unit J_per_MK using unit J_per_MK;
    unit microS using unit microS;
    unit per_milliV using unit per_milliV;
    unit per_millimolar using unit per_millimolar;
    unit m_per_s using unit m_per_s;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// //////////////////modules for different ion channels ///////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp i_Na_Paci_2013 as
    var i_Na: A_per_F {pub: out};
    var g_Na: S_per_F {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var E_Na: volt {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    var TTX_3uM: dimensionless {pub: in};
    var TTX_10uM: dimensionless {pub: in};
    var TTX_30uM: dimensionless {pub: in};
    var TTX_coeff: dimensionless;
    TTX_coeff = sel
      case TTX_3uM == 1{dimensionless}:
        0.18{dimensionless};
      case TTX_10uM == 1{dimensionless}:
        0.06{dimensionless};
      case TTX_30uM == 1{dimensionless}:
        0.02{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Na = TTX_coeff*g_Na*pow(m, 3{dimensionless})*h*j*(Vm-E_Na);
  enddef;

  def comp i_Na_m_gate_Paci_2013 as
    var m_init: dimensionless {pub: in};
    var m: dimensionless {init: m_init, pub: out};
    var m_inf: dimensionless;
    var tau_m: second;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    m_inf = 1{dimensionless}/pow(1{dimensionless}+exp((-Vm*1000{milliV_per_V}-34.1{milliV})/5.9{milliV}), 1{dimensionless}/3{dimensionless});
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{milliV_per_V}-60{milliV})/5{milliV}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+35{milliV})/5{milliV}))+0.1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}-50{milliV})/200{milliV}));
    tau_m = 1{second}*alpha_m*beta_m/1000{dimensionless};
    ode(m, t) = (m_inf-m)/tau_m;
  enddef;

  def comp i_Na_h_gate_Paci_2013 as
    var h_init: dimensionless {pub: in};
    var h: dimensionless {init: h_init, pub: out};
    var h_inf: dimensionless;
    var alpha_h: dimensionless;
    var beta_h: dimensionless;
    var tau_h: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    h_inf = 1{dimensionless}/sqrt(1{dimensionless}+exp((Vm*1000{milliV_per_V}+72.1{milliV})/5.7{milliV}));
    alpha_h = sel
      case Vm < -0.04{volt}:
        0.057{dimensionless}*exp(-(Vm*1000{milliV_per_V}+80{milliV})/6.8{milliV});
      otherwise:
        0{dimensionless};
    endsel;
    beta_h = sel
      case Vm < -0.04{volt}:
        2.7{dimensionless}*exp(0.079{per_milliV}*Vm*1000{milliV_per_V})+3.1{dimensionless}*pow(10{dimensionless}, 5{dimensionless})*exp(0.3485{per_milliV}*Vm*1000{milliV_per_V});
      otherwise:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp((Vm*1000{milliV_per_V}+10.66{milliV})/(-11.1{milliV}))));
    endsel;
    tau_h = sel
      case Vm < -0.04{volt}:
        1.5{second}/((alpha_h+beta_h)*1000{dimensionless});
      otherwise:
        2.542{second}/1000{dimensionless};
    endsel;
    ode(h, t) = (h_inf-h)/tau_h;
  enddef;

  def comp i_Na_j_gate_Paci_2013 as
    var j_init: dimensionless {pub: in};
    var j: dimensionless {init: j_init, pub: out};
    var j_inf: dimensionless;
    var alpha_j: dimensionless;
    var beta_j: dimensionless;
    var tau_j: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    j_inf = 1{dimensionless}/sqrt(1{dimensionless}+exp((Vm*1000{milliV_per_V}+72.1{milliV})/5.7{milliV}));
    alpha_j = sel
      case Vm < -0.04{volt}:
        (-25428{per_milliV}*exp(0.2444{per_milliV}*Vm*1000{milliV_per_V})-6.948{per_milliV}*pow(10{dimensionless}, -6{dimensionless})*exp(-0.04391{per_milliV}*Vm*1000{milliV_per_V}))*(Vm*1000{milliV_per_V}+37.78{milliV})/(1{dimensionless}+exp(0.311{per_milliV}*(Vm*1000{milliV_per_V}+79.23{milliV})));
      otherwise:
        0{dimensionless};
    endsel;
    beta_j = sel
      case Vm < -0.04{volt}:
        0.02424{dimensionless}*exp(-0.01052{per_milliV}*Vm*1000{milliV_per_V})/(1{dimensionless}+exp(-0.1378{per_milliV}*(Vm*1000{milliV_per_V}+40.14{milliV})));
      otherwise:
        0.6{dimensionless}*exp(0.057{per_milliV}*Vm*1000{milliV_per_V})/(1{dimensionless}+exp(-0.1{per_milliV}*(Vm*1000{milliV_per_V}+32{milliV})));
    endsel;
    tau_j = 7{second}/((alpha_j+beta_j)*1000{dimensionless});
    ode(j, t) = (j_inf-j)/tau_j;
  enddef;

  def comp i_CaL_Paci_2013 as
    var i_CaL: A_per_F {pub: out};
    var g_CaL: m3_per_Fs {pub: in};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var Cao: millimolar {priv: out, pub: in};
    var d: dimensionless {priv: in, pub: out};
    var f1: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var nifed_3nM: dimensionless {pub: in};
    var nifed_10nM: dimensionless {pub: in};
    var nifed_30nM: dimensionless {pub: in};
    var nifed_100nM: dimensionless {pub: in};
    var nifed_coeff: dimensionless;
    nifed_coeff = sel
      case nifed_3nM == 1{dimensionless}:
        0.93{dimensionless};
      case nifed_10nM == 1{dimensionless}:
        0.79{dimensionless};
      case nifed_30nM == 1{dimensionless}:
        0.56{dimensionless};
      case nifed_100nM == 1{dimensionless}:
        0.28{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // This could be easily modified to be the same as the Tomek model...
    i_CaL = g_CaL*4{dimensionless}*Vm*sqr(F)/(R*T)*(Cai*exp(2{dimensionless}*Vm*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*Vm*F/(R*T))-1{dimensionless})*d*f1*f2*fCa;
  enddef;

  def comp i_CaL_d_gate_Paci_2013 as
    var d_init: dimensionless {pub: in};
    var d: dimensionless {init: d_init, pub: out};
    var d_infinity: dimensionless;
    var tau_d: second;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: dimensionless;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    var Cai: millimolar {priv: out, pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm*1000{milliV_per_V}+9.1{milliV})/7{milliV}));
    alpha_d = 0.25{dimensionless}+1.4{dimensionless}/(1{dimensionless}+exp((-Vm*1000{milliV_per_V}-35{milliV})/13{milliV}));
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+5{milliV})/5{milliV}));
    gamma_d = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{milliV_per_V}+50{milliV})/20{milliV}));
    tau_d = (alpha_d*beta_d+gamma_d)*1{second}/1000{dimensionless};
    ode(d, t) = (d_infinity-d)/tau_d;
  enddef;

  def comp i_CaL_f1_gate_Paci_2013 as
    var f1_init: dimensionless {pub: in};
    var f1: dimensionless {init: f1_init, pub: out};
    var f1_inf: dimensionless;
    var tau_f1: second;
    var constf1: dimensionless;
    var Vm: volt {pub: in};
    var Cai: millimolar {pub: in};
    var t: second {pub: in};
    f1_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+26{milliV})/3{milliV}));
    tau_f1 = (20{second}+1102.5{second}*exp(-sqr(sqr(Vm*1000{milliV_per_V}+27{milliV})/15{milliV2}))+200{second}/(1{dimensionless}+exp((13{milliV}-Vm*1000{milliV_per_V})/10{milliV}))+180{second}/(1{dimensionless}+exp((30{milliV}+Vm*1000{milliV_per_V})/10{milliV})))*constf1/1000{dimensionless};
    constf1 = sel
      case f1_inf-f1 > 0{dimensionless}:
        1{dimensionless}+1433{per_millimolar}*(Cai-50{millimolar}*1e-6{dimensionless});
      otherwise:
        1{dimensionless};
    endsel;
    ode(f1, t) = (f1_inf-f1)/tau_f1;
  enddef;

  def comp i_CaL_f2_gate_Paci_2013 as
    var f2_init: dimensionless {pub: in};
    var f2: dimensionless {init: f2_init, pub: out};
    var f2_inf: dimensionless;
    var tau_f2: second;
    var constf2: dimensionless;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    f2_inf = 0.33{dimensionless}+0.67{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+35{milliV})/4{milliV}));
    constf2 = 1{dimensionless};
    tau_f2 = (600{second}*exp(-sqr(Vm*1000{milliV_per_V}+25{milliV})/170{milliV2})+31{second}/(1{dimensionless}+exp((25{milliV}-Vm*1000{milliV_per_V})/10{milliV}))+16{second}/(1{dimensionless}+exp((30{milliV}+Vm*1000{milliV_per_V})/10{milliV})))*constf2/1000{dimensionless};
    ode(f2, t) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp i_CaL_fCa_gate_Paci_2013 as
    var fCa_init: dimensionless {pub: in};
    var fCa: dimensionless {init: fCa_init, pub: out};
    var constfCa: dimensionless;
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var gamma_fCa: dimensionless;
    var fCa_inf: dimensionless;
    var tau_fCa: second {init: 0.002};
    var Cai: millimolar {pub: in};
    var Vm: volt {pub: in};
    var t: second {pub: in};
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Cai/0.0006{millimolar}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Cai-0.0009{millimolar})/0.0001{millimolar}));
    gamma_fCa = 0.3{dimensionless}/(1{dimensionless}+exp((Cai-0.00075{millimolar})/0.0008{millimolar}));
    fCa_inf = (alpha_fCa+beta_fCa+gamma_fCa)/1.3156{dimensionless};
    constfCa = sel
      case (Vm > -0.06{volt}) and (fCa_inf > fCa):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(fCa, t) = constfCa*(fCa_inf-fCa)/tau_fCa;
  enddef;

  def comp i_Kr_Paci_2013 as
    var i_Kr: A_per_F {pub: out};
    var g_Kr: S_per_F {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var E_K: volt {pub: in};
    var Ko: millimolar {pub: in};
    var Cao: millimolar {priv: out, pub: in};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    var R: J_per_MK {priv: out, pub: in};
    var T: kelvin {priv: out, pub: in};
    var F: C_per_M {priv: out, pub: in};
    var E4031_30nM: dimensionless {pub: in};
    var E4031_100nM: dimensionless {pub: in};
    var E4031_coeff: dimensionless;
    E4031_coeff = sel
      case E4031_30nM == 1{dimensionless}:
        0.77{dimensionless};
      case E4031_100nM == 1{dimensionless}:
        0.5{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Kr = E4031_coeff*g_Kr*(Vm-E_K)*Xr1*Xr2*sqrt(Ko/5.4{millimolar});
  enddef;

  def comp i_Kr_Xr1_gate_Paci_2013 as
    var Xr1_init: dimensionless {pub: in};
    var Xr1: dimensionless {init: Xr1_init, pub: out};
    var Xr1_inf: dimensionless;
    var alpha_Xr1: dimensionless;
    var beta_Xr1: dimensionless;
    var tau_Xr1: second;
    var Cao: millimolar {pub: in};
    var L0: dimensionless {pub: in};
    var Vm: volt {pub: in};
    var V_half: milliV;
    var t: second {pub: in};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var Q: dimensionless {pub: in};
    V_half = 1000{milliV_per_V}*(-R*T/(F*Q)*ln(pow(1{dimensionless}+Cao/2.6{millimolar}, 4{dimensionless})/(L0*pow(1{dimensionless}+Cao/0.58{millimolar}, 4{dimensionless})))-0.019{volt});
    Xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((V_half-Vm*1000{milliV_per_V})/4.9{milliV}));
    alpha_Xr1 = 450{dimensionless}/(1{dimensionless}+exp((-45{milliV}-Vm*1000{milliV_per_V})/10{milliV}));
    beta_Xr1 = 6{dimensionless}/(1{dimensionless}+exp((30{milliV}+Vm*1000{milliV_per_V})/11.5{milliV}));
    tau_Xr1 = 1{second}*alpha_Xr1*beta_Xr1/1000{dimensionless};
    ode(Xr1, t) = (Xr1_inf-Xr1)/tau_Xr1;
  enddef;

  def comp i_Kr_Xr2_gate_Paci_2013 as
    var Xr2_init: dimensionless {pub: in};
    var Xr2: dimensionless {init: Xr2_init, pub: out};
    var Xr2_infinity: dimensionless;
    var alpha_Xr2: dimensionless;
    var beta_Xr2: dimensionless;
    var tau_Xr2: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    Xr2_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+88{milliV})/50{milliV}));
    alpha_Xr2 = 3{dimensionless}/(1{dimensionless}+exp((-60{milliV}-Vm*1000{milliV_per_V})/20{milliV}));
    beta_Xr2 = 1.12{dimensionless}/(1{dimensionless}+exp((-60{milliV}+Vm*1000{milliV_per_V})/20{milliV}));
    tau_Xr2 = 1{second}*alpha_Xr2*beta_Xr2/1000{dimensionless};
    ode(Xr2, t) = (Xr2_infinity-Xr2)/tau_Xr2;
  enddef;

  def comp i_Ks_Paci_2013 as
    var i_Ks: A_per_F {pub: out};
    var g_Ks: S_per_F {pub: in};
    var E_Ks: volt {pub: in};
    var Cai: millimolar {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    var Chromanol_iKs30: dimensionless {pub: in};
    var Chromanol_iKs50: dimensionless {pub: in};
    var Chromanol_iKs70: dimensionless {pub: in};
    var Chromanol_iKs90: dimensionless {pub: in};
    var Chromanol_coeff: dimensionless;
    Chromanol_coeff = sel
      case Chromanol_iKs30 == 1{dimensionless}:
        0.7{dimensionless};
      case Chromanol_iKs50 == 1{dimensionless}:
        0.5{dimensionless};
      case Chromanol_iKs70 == 1{dimensionless}:
        0.3{dimensionless};
      case Chromanol_iKs90 == 1{dimensionless}:
        0.1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Ks = Chromanol_coeff*g_Ks*(Vm-E_Ks)*sqr(Xs)*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8{millimolar}*0.00001{dimensionless}/Cai, 1.4{dimensionless})));
  enddef;

  def comp i_Ks_Xs_gate_Paci_2013 as
    var Xs_init: dimensionless {pub: in};
    var Xs: dimensionless {init: Xs_init, pub: out};
    var Xs_infinity: dimensionless;
    var alpha_Xs: dimensionless;
    var beta_Xs: dimensionless;
    var tau_Xs: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    Xs_infinity = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{milliV_per_V}-20{milliV})/16{milliV}));
    alpha_Xs = 1100{dimensionless}/sqrt(1{dimensionless}+exp((-10{milliV}-Vm*1000{milliV_per_V})/6{milliV}));
    beta_Xs = 1{dimensionless}/(1{dimensionless}+exp((-60{milliV}+Vm*1000{milliV_per_V})/20{milliV}));
    tau_Xs = 1{second}*alpha_Xs*beta_Xs/1000{dimensionless};
    ode(Xs, t) = (Xs_infinity-Xs)/tau_Xs;
  enddef;

  def comp i_K1_Paci_2013 as
    var i_K1: A_per_F {pub: out};
    var g_K1: S_per_F {pub: in};
    var XK1_inf: dimensionless;
    var E_K: volt {pub: in};
    var Ko: millimolar {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    alpha_K1 = 3.91{dimensionless}/(1{dimensionless}+exp(0.5942{per_milliV}*(Vm*1000{milliV_per_V}-E_K*1000{milliV_per_V}-200{milliV})));
    beta_K1 = (-1.509{dimensionless}*exp(0.0002{per_milliV}*(Vm*1000{milliV_per_V}-E_K*1000{milliV_per_V}+100{milliV}))+exp(0.5886{per_milliV}*(Vm*1000{milliV_per_V}-E_K*1000{milliV_per_V}-10{milliV})))/(1{dimensionless}+exp(0.4547{per_milliV}*(Vm*1000{milliV_per_V}-E_K*1000{milliV_per_V})));
    XK1_inf = alpha_K1/(alpha_K1+beta_K1);
    i_K1 = g_K1*XK1_inf*(Vm-E_K)*sqrt(Ko/5.4{millimolar});
  enddef;

  def comp i_f_Paci_2013 as
    var i_f: A_per_F {pub: out};
    var g_f: S_per_F {pub: in};
    var t: second {priv: out, pub: in};
    var E_f: volt {pub: in};
    var Vm: volt {priv: out, pub: in};
    var Xf: dimensionless {priv: in};
    i_f = g_f*Xf*(Vm-E_f);
  enddef;

  def comp i_f_Xf_gate_Paci_2013 as
    var Xf_init: dimensionless {pub: in};
    var Xf: dimensionless {init: Xf_init, pub: out};
    var Xf_infinity: dimensionless;
    var tau_Xf: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    Xf_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+77.85{milliV})/5{milliV}));
    tau_Xf = 1900{second}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+15{milliV})/10{milliV}))/1000{dimensionless};
    ode(Xf, t) = (Xf_infinity-Xf)/tau_Xf;
  enddef;

  def comp i_b_Na_Paci_2013 as
    var t: second {pub: in};
    var i_b_Na: A_per_F {pub: out};
    var g_b_Na: S_per_F {pub: in};
    var E_Na: volt {pub: in};
    var Vm: volt {pub: in};
    i_b_Na = g_b_Na*(Vm-E_Na);
  enddef;

  def comp i_b_Ca_Paci_2013 as
    var t: second {pub: in};
    var i_b_Ca: A_per_F {pub: out};
    var g_b_Ca: S_per_F {pub: in};
    var E_Ca: volt {pub: in};
    var Vm: volt {pub: in};
    i_b_Ca = g_b_Ca*(Vm-E_Ca);
  enddef;

  def comp i_NaK_Paci_2013 as
    var i_NaK: A_per_F {pub: out};
    var E_Na: volt {pub: in};
    var t: second {pub: in};
    var Vm: volt {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var Km_K: millimolar {pub: in};
    var Km_Na: millimolar {pub: in};
    var PNaK: A_per_F {pub: in};
    i_NaK = PNaK*Ko/(Ko+Km_K)*Nai/(Nai+Km_Na)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vm*F/(R*T))+0.0353{dimensionless}*exp(-Vm*F/(R*T)));
  enddef;

  def comp i_NaCa_Paci_2013 as
    var i_NaCa: A_per_F {pub: out};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var t: second {pub: in};
    var Vm: volt {pub: in};
    var kNaCa: A_per_F {pub: in};
    var alpha: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var Ksat: dimensionless {pub: in};
    var KmCa: millimolar {pub: in};
    var KmNai: millimolar {pub: in};
    i_NaCa = kNaCa*(exp(gamma*Vm*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma-1{dimensionless})*Vm*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma-1{dimensionless})*Vm*F/(R*T))));
  enddef;

  def comp i_PCa_Paci_2013 as
    var i_PCa: A_per_F {pub: out};
    var Cai: millimolar {pub: in};
    var t: second {pub: in};
    var Vm: volt {pub: in};
    var g_PCa: A_per_F {pub: in};
    var KPCa: millimolar {pub: in};
    i_PCa = g_PCa*Cai/(Cai+KPCa);
  enddef;

  def comp i_to_Paci_2013 as
    var i_to: A_per_F {pub: out};
    var g_to: S_per_F {pub: in};
    var E_K: volt {pub: in};
    var t: second {priv: out, pub: in};
    var Vm: volt {priv: out, pub: in};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(Vm-E_K)*q*r;
  enddef;

  def comp i_to_q_gate_Paci_2013 as
    var q_init: dimensionless {pub: in};
    var q: dimensionless {init: q_init, pub: out};
    var q_inf: dimensionless;
    var tau_q: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    q_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{milliV_per_V}+53{milliV})/13{milliV}));
    tau_q = (6.06{second}+39.102{second}/(0.57{dimensionless}*exp(-0.08{per_milliV}*(Vm*1000{milliV_per_V}+44{milliV}))+0.065{dimensionless}*exp(0.1{per_milliV}*(Vm*1000{milliV_per_V}+45.93{milliV}))))/1000{dimensionless};
    ode(q, t) = (q_inf-q)/tau_q;
  enddef;

  def comp i_to_r_gate_Paci_2013 as
    var r_init: dimensionless {pub: in};
    var r: dimensionless {init: r_init, pub: out};
    var r_inf: dimensionless;
    var tau_r: second;
    var Vm: volt {pub: in};
    var t: second {pub: in};
    r_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Vm*1000{milliV_per_V}-22.3{milliV})/18.75{milliV}));
    tau_r = (2.75352{second}+14.40516{second}/(1.037{dimensionless}*exp(0.09{per_milliV}*(Vm*1000{milliV_per_V}+30.61{milliV}))+0.369{dimensionless}*exp(-0.12{per_milliV}*(Vm*1000{milliV_per_V}+23.84{milliV}))))/1000{dimensionless};
    ode(r, t) = (r_inf-r)/tau_r;
  enddef;

  def comp i_Ca_Tao_2011 as
    var i_Ca: nanoA {pub: out};
    var t: second {pub: in};
    var Vm: milliV {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var P_Ca: m_per_s {pub: in};
    var c: dimensionless {init: 0.0};
    var c_bar: dimensionless;
    var tau_c: second;
    var hc: dimensionless {init: 0.0};
    var hc_bar: dimensionless;
    var tau_hc: second;
    i_Ca = 4{dimensionless}*sqr(F)*Vm*P_Ca/(R*T)*(Cai*exp(2{dimensionless}*Vm*F/(R*T))-Cao)/(exp(2{dimensionless}*Vm*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    c_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+8.1{milliV})/9.85{milliV}));
    ode(c, t) = (c_bar-c)/tau_c;
    tau_c = 1{second}/(0.343{dimensionless}*exp(0.0925{per_milliV}*Vm)+1.88{dimensionless}*exp(-0.00732{per_milliV}*Vm))+0.1{second};
    hc_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+19.91{milliV})/4.5{milliV}));
    ode(hc, t) = (hc_bar-hc)/tau_hc;
    tau_hc = 1{second}/(0.242{dimensionless}*exp(0.145{per_milliV}*Vm)+0.0434{dimensionless}*exp(-0.0201{per_milliV}*Vm))+17{second};
  enddef;

  def comp i_Na_Tao_2011 as
    var i_Na: nanoA {pub: out};
    var t: second {pub: in};
    var Vm: milliV {pub: in};
    var g_Na: microS {pub: in};
    var E_Na: milliV {pub: in};
    var m: dimensionless {init: 0.0};
    var m_bar: dimensionless;
    var tau_m: second;
    var h: dimensionless {init: 0.0};
    var h_bar: dimensionless;
    var tau_h: second;
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(Vm-E_Na);
    m_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+36{milliV})/7.2{milliV}));
    ode(m, t) = (m_bar-m)/tau_m;
    tau_m = 1{second}/(42.98{dimensionless}*exp(0.08915{per_milliV}*Vm)+0.923{dimensionless}*exp(-0.03351{per_milliV}*Vm))+0.06{second};
    h_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+53.2{milliV})/6.5{milliV}));
    ode(h, t) = (h_bar-h)/tau_h;
    tau_h = (-0.0046{s_per_milliV}*Vm+0.26{second}+50.85{second})/(1{dimensionless}+exp(-(Vm+59.46{milliV})/7.91{milliV})+1{dimensionless}+exp((Vm+40.94{milliV})/1.556{milliV}))+17{second};
  enddef;

  def comp i_KV_Tao_2011 as
    var i_KV: nanoA {pub: out};
    var t: second {pub: in};
    var Vm: milliV {pub: in};
    var E_K: milliV {pub: in};
    var g_KV: microS {pub: in};
    var n: dimensionless {init: 0.0};
    var n_bar: dimensionless;
    var tau_n: second;
    i_KV = g_KV*n*(Vm-E_K);
    n_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+6.084{milliV})/8.007{milliV}));
    ode(n, t) = (n_bar-n)/tau_n;
    tau_n = 1{second}/(0.385{dimensionless}*exp(0.101{per_milliV}*Vm)+8.134e-4{dimensionless}*exp(-0.1177{per_milliV}*Vm))+2.31{second};
  enddef;

  def comp i_A_Tao_2011 as
    var i_A: nanoA {pub: out};
    var t: second {pub: in};
    var Vm: milliV {pub: in};
    var g_A: microS {pub: in};
    var E_K: milliV {pub: in};
    var a: dimensionless {init: 0.0};
    var a_bar: dimensionless;
    var tau_a: second;
    var ha: dimensionless {init: 0.0};
    var ha_bar: dimensionless;
    var tau_ha: second;
    i_A = g_A*a*ha*(Vm-E_K);
    a_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+49.4{milliV})/9.9{milliV}));
    ode(a, t) = (a_bar-a)/tau_a;
    tau_a = 1{second}/(3.7{dimensionless}*exp(0.03856{per_milliV}*Vm)+0.05362{dimensionless}*exp(-0.04448{per_milliV}*Vm))+0.2{second};
    ha_bar = 1{dimensionless}/(1{dimensionless}+exp((Vm+80.43{milliV})/7.07{milliV}));
    ode(ha, t) = (ha_bar-ha)/tau_ha;
    tau_ha = (-0.038{s_per_milliV}*Vm+6.0{second}+87.0{second})/(1{dimensionless}+exp(-(Vm+80{milliV})/5{milliV})+1{dimensionless}+exp((Vm+55{milliV})/1.4{milliV}));
  enddef;

  def comp i_KCa_Tao_2011 as
    var i_KCa: nanoA {pub: out};
    var t: second {pub: in};
    var Vm: milliV {pub: in};
    var g_kcf: microS {pub: in};
    var g_kcs: microS {pub: in};
    var E_K: milliV {pub: in};
    var kcf: dimensionless {init: 0.0};
    var kcf_bar: dimensionless;
    var tau_kcf: second;
    var kcs: dimensionless {init: 0.0};
    var kcs_bar: dimensionless;
    var tau_kcs: second;
    i_KCa = g_kcf*kcf*(Vm-E_K)+g_kcs*kcs*(Vm-E_K);
    kcf_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+11.54{milliV})/4.99{milliV}));
    ode(kcf, t) = (kcf_bar-kcf)/tau_kcf;
    tau_kcf = 1{second}/(1292{dimensionless}*exp(0.274{per_milliV}*Vm)+0.00359{dimensionless}*exp(-0.126{per_milliV}*Vm))+1.4{second};
    kcs_bar = 1{dimensionless}/(1{dimensionless}+exp((Vm+15.18{milliV})/4.0{milliV}));
    ode(kcs, t) = (kcs_bar-kcs)/tau_kcs;
    tau_kcs = 1{second}/(0.25{dimensionless}*exp(0.7{per_milliV}*Vm)+0.00073{dimensionless}*exp(-0.144{per_milliV}*Vm))+92{second}-1.9{s_per_milliV}*Vm;
  enddef;
enddef;
