def model modules as

  def comp adan_flow_fourier_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var P: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var a_0: m3_per_s {pub: out};
    var a_1: m3_per_s {pub: out};
    var a_2: m3_per_s {pub: out};
    var a_3: m3_per_s {pub: out};
    var a_4: m3_per_s {pub: out};
    var a_5: m3_per_s {pub: out};
    var a_6: m3_per_s {pub: out};
    var a_7: m3_per_s {pub: out};
    var a_8: m3_per_s {pub: out};
    var a_9: m3_per_s {pub: out};
    var a_10: m3_per_s {pub: out};
    var a_11: m3_per_s {pub: out};
    var a_12: m3_per_s {pub: out};
    var a_13: m3_per_s {pub: out};
    var a_14: m3_per_s {pub: out};
    var a_15: m3_per_s {pub: out};
    var a_16: m3_per_s {pub: out};
    var a_17: m3_per_s {pub: out};
    var a_18: m3_per_s {pub: out};
    var a_19: m3_per_s {pub: out};
    var a_20: m3_per_s {pub: out};
    var a_21: m3_per_s {pub: out};
    var b_1: m3_per_s {pub: out};
    var b_2: m3_per_s {pub: out};
    var b_3: m3_per_s {pub: out};
    var b_4: m3_per_s {pub: out};
    var b_5: m3_per_s {pub: out};
    var b_6: m3_per_s {pub: out};
    var b_7: m3_per_s {pub: out};
    var b_8: m3_per_s {pub: out};
    var b_9: m3_per_s {pub: out};
    var b_10: m3_per_s {pub: out};
    var b_11: m3_per_s {pub: out};
    var b_12: m3_per_s {pub: out};
    var b_13: m3_per_s {pub: out};
    var b_14: m3_per_s {pub: out};
    var b_15: m3_per_s {pub: out};
    var b_16: m3_per_s {pub: out};
    var b_17: m3_per_s {pub: out};
    var b_18: m3_per_s {pub: out};
    var b_19: m3_per_s {pub: out};
    var b_20: m3_per_s {pub: out};
    var b_21: m3_per_s {pub: out};
    var omega_1: per_s {pub: out};
    var omega_2: per_s {pub: out};
    var omega_3: per_s {pub: out};
    var omega_4: per_s {pub: out};
    var omega_5: per_s {pub: out};
    var omega_6: per_s {pub: out};
    var omega_7: per_s {pub: out};
    var omega_8: per_s {pub: out};
    var omega_9: per_s {pub: out};
    var omega_10: per_s {pub: out};
    var omega_11: per_s {pub: out};
    var omega_12: per_s {pub: out};
    var omega_13: per_s {pub: out};
    var omega_14: per_s {pub: out};
    var omega_15: per_s {pub: out};
    var omega_16: per_s {pub: out};
    var omega_17: per_s {pub: out};
    var omega_18: per_s {pub: out};
    var omega_19: per_s {pub: out};
    var omega_20: per_s {pub: out};
    var omega_21: per_s {pub: out};
    var v_1: m3_per_s {pub: out};
    var v_2: m3_per_s {pub: out};
    var v_3: m3_per_s {pub: out};
    var v_4: m3_per_s {pub: out};
    var v_5: m3_per_s {pub: out};
    var v_6: m3_per_s {pub: out};
    var v_7: m3_per_s {pub: out};
    var v_8: m3_per_s {pub: out};
    var v_9: m3_per_s {pub: out};
    var v_10: m3_per_s {pub: out};
    var v_11: m3_per_s {pub: out};
    var v_12: m3_per_s {pub: out};
    var v_13: m3_per_s {pub: out};
    var v_14: m3_per_s {pub: out};
    var v_15: m3_per_s {pub: out};
    var v_16: m3_per_s {pub: out};
    var v_17: m3_per_s {pub: out};
    var v_18: m3_per_s {pub: out};
    var v_19: m3_per_s {pub: out};
    var v_20: m3_per_s {pub: out};
    var v_21: m3_per_s {pub: out};
    a_0 = 0.00022489186656282363{m3_per_s};
    a_1 = 9.633909768092165e-05{m3_per_s};
    a_2 = -7.852769367977585e-05{m3_per_s};
    a_3 = -6.56256411598173e-05{m3_per_s};
    a_4 = -3.9063797995862154e-05{m3_per_s};
    a_5 = -3.834025472723826e-05{m3_per_s};
    a_6 = 3.730811423562331e-06{m3_per_s};
    a_7 = -1.450082470976162e-05{m3_per_s};
    a_8 = 3.6250730284884227e-06{m3_per_s};
    a_9 = 6.318310637769048e-06{m3_per_s};
    a_10 = -3.946773326818484e-06{m3_per_s};
    a_11 = 1.0630319453341082e-05{m3_per_s};
    a_12 = -6.3535212692088e-06{m3_per_s};
    a_13 = 6.19919816172386e-06{m3_per_s};
    a_14 = 2.505143635406403e-07{m3_per_s};
    a_15 = -4.66591153037918e-07{m3_per_s};
    a_16 = 4.015256231101136e-06{m3_per_s};
    a_17 = -3.858762913119578e-06{m3_per_s};
    a_18 = 4.966784562267732e-06{m3_per_s};
    a_19 = -1.878317151718256e-06{m3_per_s};
    a_20 = 3.5082693067440547e-06{m3_per_s};
    a_21 = 5.326099554864225e-07{m3_per_s};
    b_1 = 0.00017947975430472672{m3_per_s};
    b_2 = 0.00012055254984388979{m3_per_s};
    b_3 = 7.858307790171534e-06{m3_per_s};
    b_4 = 8.544198351521843e-06{m3_per_s};
    b_5 = -2.6091755215466943e-05{m3_per_s};
    b_6 = -1.6887495411781337e-05{m3_per_s};
    b_7 = -5.388440045409754e-06{m3_per_s};
    b_8 = -2.1678893531834397e-05{m3_per_s};
    b_9 = 2.9740470196050676e-06{m3_per_s};
    b_10 = -9.541758551229878e-06{m3_per_s};
    b_11 = -1.0725720704053492e-07{m3_per_s};
    b_12 = 1.0599723448640184e-06{m3_per_s};
    b_13 = -6.992592688900836e-06{m3_per_s};
    b_14 = 5.452877009185239e-06{m3_per_s};
    b_15 = -5.7487242085398745e-06{m3_per_s};
    b_16 = 3.3490660127609907e-06{m3_per_s};
    b_17 = -2.345581984230074e-06{m3_per_s};
    b_18 = -1.5029842843943853e-06{m3_per_s};
    b_19 = 1.1979949741347547e-06{m3_per_s};
    b_20 = -3.1954138733238298e-06{m3_per_s};
    b_21 = 3.4404467421033775e-06{m3_per_s};
    omega_1 = 2{dimensionless}*pi*1{dimensionless}/T;
    omega_2 = 2{dimensionless}*pi*2{dimensionless}/T;
    omega_3 = 2{dimensionless}*pi*3{dimensionless}/T;
    omega_4 = 2{dimensionless}*pi*4{dimensionless}/T;
    omega_5 = 2{dimensionless}*pi*5{dimensionless}/T;
    omega_6 = 2{dimensionless}*pi*6{dimensionless}/T;
    omega_7 = 2{dimensionless}*pi*7{dimensionless}/T;
    omega_8 = 2{dimensionless}*pi*8{dimensionless}/T;
    omega_9 = 2{dimensionless}*pi*9{dimensionless}/T;
    omega_10 = 2{dimensionless}*pi*10{dimensionless}/T;
    omega_11 = 2{dimensionless}*pi*11{dimensionless}/T;
    omega_12 = 2{dimensionless}*pi*12{dimensionless}/T;
    omega_13 = 2{dimensionless}*pi*13{dimensionless}/T;
    omega_14 = 2{dimensionless}*pi*14{dimensionless}/T;
    omega_15 = 2{dimensionless}*pi*15{dimensionless}/T;
    omega_16 = 2{dimensionless}*pi*16{dimensionless}/T;
    omega_17 = 2{dimensionless}*pi*17{dimensionless}/T;
    omega_18 = 2{dimensionless}*pi*18{dimensionless}/T;
    omega_19 = 2{dimensionless}*pi*19{dimensionless}/T;
    omega_20 = 2{dimensionless}*pi*20{dimensionless}/T;
    omega_21 = 2{dimensionless}*pi*21{dimensionless}/T;
    v_1 = a_1*cos(omega_1*t)+b_1*sin(omega_1*t);
    v_2 = a_2*cos(omega_2*t)+b_2*sin(omega_2*t);
    v_3 = a_3*cos(omega_3*t)+b_3*sin(omega_3*t);
    v_4 = a_4*cos(omega_4*t)+b_4*sin(omega_4*t);
    v_5 = a_5*cos(omega_5*t)+b_5*sin(omega_5*t);
    v_6 = a_6*cos(omega_6*t)+b_6*sin(omega_6*t);
    v_7 = a_7*cos(omega_7*t)+b_7*sin(omega_7*t);
    v_8 = a_8*cos(omega_8*t)+b_8*sin(omega_8*t);
    v_9 = a_9*cos(omega_9*t)+b_9*sin(omega_9*t);
    v_10 = a_10*cos(omega_10*t)+b_10*sin(omega_10*t);
    v_11 = a_11*cos(omega_11*t)+b_11*sin(omega_11*t);
    v_12 = a_12*cos(omega_12*t)+b_12*sin(omega_12*t);
    v_13 = a_13*cos(omega_13*t)+b_13*sin(omega_13*t);
    v_14 = a_14*cos(omega_14*t)+b_14*sin(omega_14*t);
    v_15 = a_15*cos(omega_15*t)+b_15*sin(omega_15*t);
    v_16 = a_16*cos(omega_16*t)+b_16*sin(omega_16*t);
    v_17 = a_17*cos(omega_17*t)+b_17*sin(omega_17*t);
    v_18 = a_18*cos(omega_18*t)+b_18*sin(omega_18*t);
    v_19 = a_19*cos(omega_19*t)+b_19*sin(omega_19*t);
    v_20 = a_20*cos(omega_20*t)+b_20*sin(omega_20*t);
    v_21 = a_21*cos(omega_21*t)+b_21*sin(omega_21*t);
    v = a_0/2.0{dimensionless}+v_1+v_2+v_3+v_4+v_5+v_6+v_7+v_8+v_9+v_10+v_11+v_12+v_13+v_14+v_15+v_16+v_17+v_18+v_19+v_20+v_21;
  enddef;

  def comp adan_flow_interp_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var v: m3_per_s {pub: out};
    var P: J_per_m3 {pub: in};
    var t_loc: second {pub: out};
    t_loc = t-floor(t/T)*T;
    var t_0: second {pub: out};
    var t_1: second {pub: out};
    var t_2: second {pub: out};
    var t_3: second {pub: out};
    var t_4: second {pub: out};
    var t_5: second {pub: out};
    var t_6: second {pub: out};
    var t_7: second {pub: out};
    var t_8: second {pub: out};
    var t_9: second {pub: out};
    var t_10: second {pub: out};
    var t_11: second {pub: out};
    var t_12: second {pub: out};
    var t_13: second {pub: out};
    var t_14: second {pub: out};
    var t_15: second {pub: out};
    var t_16: second {pub: out};
    var t_17: second {pub: out};
    var t_18: second {pub: out};
    var t_19: second {pub: out};
    var t_20: second {pub: out};
    var t_21: second {pub: out};
    var q_0: m3_per_s {pub: out};
    var q_1: m3_per_s {pub: out};
    var q_2: m3_per_s {pub: out};
    var q_3: m3_per_s {pub: out};
    var q_4: m3_per_s {pub: out};
    var q_5: m3_per_s {pub: out};
    var q_6: m3_per_s {pub: out};
    var q_7: m3_per_s {pub: out};
    var q_8: m3_per_s {pub: out};
    var q_9: m3_per_s {pub: out};
    var q_10: m3_per_s {pub: out};
    var q_11: m3_per_s {pub: out};
    var q_12: m3_per_s {pub: out};
    var q_13: m3_per_s {pub: out};
    var q_14: m3_per_s {pub: out};
    var q_15: m3_per_s {pub: out};
    var q_16: m3_per_s {pub: out};
    var q_17: m3_per_s {pub: out};
    var q_18: m3_per_s {pub: out};
    var q_19: m3_per_s {pub: out};
    var q_20: m3_per_s {pub: out};
    var q_21: m3_per_s {pub: out};
    t_0 = 0.0{second};
    t_1 = 0.02193{second};
    t_2 = 0.041305{second};
    t_3 = 0.06068{second};
    t_4 = 0.080055{second};
    t_5 = 0.09943{second};
    t_6 = 0.118805{second};
    t_7 = 0.128492{second};
    t_8 = 0.13818{second};
    t_9 = 0.157555{second};
    t_10 = 0.17693{second};
    t_11 = 0.196305{second};
    t_12 = 0.244742{second};
    t_13 = 0.322242{second};
    t_14 = 0.351305{second};
    t_15 = 0.390055{second};
    t_16 = 0.415117{second};
    t_17 = 0.437555{second};
    t_18 = 0.48693{second};
    t_19 = 0.515992{second};
    t_20 = 0.583805{second};
    t_21 = 1.0{second};
    q_0 = 0.0{m3_per_s};
    q_1 = 0.0{m3_per_s};
    q_2 = 0.000105089{m3_per_s};
    q_3 = 0.00027323{m3_per_s};
    q_4 = 0.000404592{m3_per_s};
    q_5 = 0.000535952{m3_per_s};
    q_6 = 0.000567479{m3_per_s};
    q_7 = 0.000572734{m3_per_s};
    q_8 = 0.000567479{m3_per_s};
    q_9 = 0.000535952{m3_per_s};
    q_10 = 0.000488663{m3_per_s};
    q_11 = 0.000451882{m3_per_s};
    q_12 = 0.000315266{m3_per_s};
    q_13 = 0.000178651{m3_per_s};
    q_14 = 0.000136615{m3_per_s};
    q_15 = 0.0{m3_per_s};
    q_16 = -0.000162888{m3_per_s};
    q_17 = -2.10178e-05{m3_per_s};
    q_18 = 0.0{m3_per_s};
    q_19 = 5.25444e-06{m3_per_s};
    q_20 = 0.0{m3_per_s};
    q_21 = 0.0{m3_per_s};
    v = sel
      case (t_loc >= t_0) and (t_loc <= t_1):
        (1{dimensionless}-(t_loc-t_0)/(t_1-t_0))*q_0+(t_loc-t_0)/(t_1-t_0)*q_1;
      case (t_loc >= t_1) and (t_loc <= t_2):
        (1{dimensionless}-(t_loc-t_1)/(t_2-t_1))*q_1+(t_loc-t_1)/(t_2-t_1)*q_2;
      case (t_loc >= t_2) and (t_loc <= t_3):
        (1{dimensionless}-(t_loc-t_2)/(t_3-t_2))*q_2+(t_loc-t_2)/(t_3-t_2)*q_3;
      case (t_loc >= t_3) and (t_loc <= t_4):
        (1{dimensionless}-(t_loc-t_3)/(t_4-t_3))*q_3+(t_loc-t_3)/(t_4-t_3)*q_4;
      case (t_loc >= t_4) and (t_loc <= t_5):
        (1{dimensionless}-(t_loc-t_4)/(t_5-t_4))*q_4+(t_loc-t_4)/(t_5-t_4)*q_5;
      case (t_loc >= t_5) and (t_loc <= t_6):
        (1{dimensionless}-(t_loc-t_5)/(t_6-t_5))*q_5+(t_loc-t_5)/(t_6-t_5)*q_6;
      case (t_loc >= t_6) and (t_loc <= t_7):
        (1{dimensionless}-(t_loc-t_6)/(t_7-t_6))*q_6+(t_loc-t_6)/(t_7-t_6)*q_7;
      case (t_loc >= t_7) and (t_loc <= t_8):
        (1{dimensionless}-(t_loc-t_7)/(t_8-t_7))*q_7+(t_loc-t_7)/(t_8-t_7)*q_8;
      case (t_loc >= t_8) and (t_loc <= t_9):
        (1{dimensionless}-(t_loc-t_8)/(t_9-t_8))*q_8+(t_loc-t_8)/(t_9-t_8)*q_9;
      case (t_loc >= t_9) and (t_loc <= t_10):
        (1{dimensionless}-(t_loc-t_9)/(t_10-t_9))*q_9+(t_loc-t_9)/(t_10-t_9)*q_10;
      case (t_loc >= t_10) and (t_loc <= t_11):
        (1{dimensionless}-(t_loc-t_10)/(t_11-t_10))*q_10+(t_loc-t_10)/(t_11-t_10)*q_11;
      case (t_loc >= t_11) and (t_loc <= t_12):
        (1{dimensionless}-(t_loc-t_11)/(t_12-t_11))*q_11+(t_loc-t_11)/(t_12-t_11)*q_12;
      case (t_loc >= t_12) and (t_loc <= t_13):
        (1{dimensionless}-(t_loc-t_12)/(t_13-t_12))*q_12+(t_loc-t_12)/(t_13-t_12)*q_13;
      case (t_loc >= t_13) and (t_loc <= t_14):
        (1{dimensionless}-(t_loc-t_13)/(t_14-t_13))*q_13+(t_loc-t_13)/(t_14-t_13)*q_14;
      case (t_loc >= t_14) and (t_loc <= t_15):
        (1{dimensionless}-(t_loc-t_14)/(t_15-t_14))*q_14+(t_loc-t_14)/(t_15-t_14)*q_15;
      case (t_loc >= t_15) and (t_loc <= t_16):
        (1{dimensionless}-(t_loc-t_15)/(t_16-t_15))*q_15+(t_loc-t_15)/(t_16-t_15)*q_16;
      case (t_loc >= t_16) and (t_loc <= t_17):
        (1{dimensionless}-(t_loc-t_16)/(t_17-t_16))*q_16+(t_loc-t_16)/(t_17-t_16)*q_17;
      case (t_loc >= t_17) and (t_loc <= t_18):
        (1{dimensionless}-(t_loc-t_17)/(t_18-t_17))*q_17+(t_loc-t_17)/(t_18-t_17)*q_18;
      case (t_loc >= t_18) and (t_loc <= t_19):
        (1{dimensionless}-(t_loc-t_18)/(t_19-t_18))*q_18+(t_loc-t_18)/(t_19-t_18)*q_19;
      case (t_loc >= t_19) and (t_loc <= t_20):
        (1{dimensionless}-(t_loc-t_19)/(t_20-t_19))*q_19+(t_loc-t_19)/(t_20-t_19)*q_20;
      case (t_loc >= t_20) and (t_loc <= t_21):
        (1{dimensionless}-(t_loc-t_20)/(t_21-t_20))*q_20+(t_loc-t_20)/(t_21-t_20)*q_21;
    endsel;
  enddef;

  def comp aorticbif_flow_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var v: m3_per_s {pub: out};
    var v_0: m3_per_s {pub: out};
    var P: J_per_m3 {pub: in};
    v_0 = 1.0{m3_per_s};
    v = v_0*(7.9853e-06{dimensionless}+2.6617e-05{dimensionless}*sin(2{dimensionless}*pi*t/T+0.29498{dimensionless})+2.3616e-05{dimensionless}*sin(4{dimensionless}*pi*t/T-1.1403{dimensionless})-1.9016e-05{dimensionless}*sin(6{dimensionless}*pi*t/T+0.40435{dimensionless})-8.5899e-06{dimensionless}*sin(8{dimensionless}*pi*t/T-1.1892{dimensionless})-2.436e-06{dimensionless}*sin(10{dimensionless}*pi*t/T-1.4918{dimensionless})+1.4905e-06{dimensionless}*sin(12{dimensionless}*pi*t/T+1.0536{dimensionless})+1.3581e-06{dimensionless}*sin(14{dimensionless}*pi*t/T-0.47666{dimensionless})-6.3031e-07{dimensionless}*sin(16{dimensionless}*pi*t/T+0.93768{dimensionless})-4.5335e-07{dimensionless}*sin(18{dimensionless}*pi*t/T-0.79472{dimensionless})-4.5184e-07{dimensionless}*sin(20{dimensionless}*pi*t/T-1.4095{dimensionless})-5.6583e-07{dimensionless}*sin(22{dimensionless}*pi*t/T-1.3629{dimensionless})+4.9522e-07{dimensionless}*sin(24{dimensionless}*pi*t/T+0.52495{dimensionless})+1.3049e-07{dimensionless}*sin(26{dimensionless}*pi*t/T-0.97261{dimensionless})-4.1072e-08{dimensionless}*sin(28{dimensionless}*pi*t/T-0.15685{dimensionless})-2.4182e-07{dimensionless}*sin(30{dimensionless}*pi*t/T-1.4052{dimensionless})-6.6217e-08{dimensionless}*sin(32{dimensionless}*pi*t/T-1.3785{dimensionless})-1.5511e-07{dimensionless}*sin(34{dimensionless}*pi*t/T-1.2927{dimensionless})+2.2149e-07{dimensionless}*sin(36{dimensionless}*pi*t/T+0.68178{dimensionless})+6.7621e-08{dimensionless}*sin(38{dimensionless}*pi*t/T-0.98825{dimensionless})+1.0973e-07{dimensionless}*sin(40{dimensionless}*pi*t/T+1.4327{dimensionless})-2.5559e-08{dimensionless}*sin(42{dimensionless}*pi*t/T-1.2372{dimensionless})-3.5079e-08{dimensionless}*sin(44{dimensionless}*pi*t/T+0.2328{dimensionless}));
  enddef;

  def comp pp_T_OL_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T1: Js_per_m6 {pub: out};
    var R_T2: Js_per_m6 {pub: out};
    // I_T = 1e-6{Js2_per_m6};
    R_T1 = 0.2{dimensionless}*R_T;
    // 0.15
    R_T2 = R_T-R_T1;
    R_v = 0.01{second}/C_T;
    var pressure_venous_dist: J_per_m3 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_out: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: out};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(v, t) = (u_in-R_T1*v-u)/I_T;
    ode(v_T, t) = (u-R_T2*v_T-pressure_venous_dist)/I_T;
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    // u = q_T/C_T+u_ext;
  enddef;

  def comp pp_T_fixed_I_OL_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T_global: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T1: Js_per_m6 {pub: out};
    var R_T2: Js_per_m6 {pub: out};
    // I_T_global = 1e-6{Js_per_m6};
    R_T1 = 0.2{dimensionless}*R_T;
    // 0.15
    R_T2 = R_T-R_T1;
    R_v = 0.01{second}/C_T;
    var pressure_venous_dist: J_per_m3 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_out: J_per_m3 {pub: in};
    var u_C: J_per_m3 {pub: out};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(v, t) = (u_in-R_T1*v-u)/I_T_global;
    ode(v_T, t) = (u-R_T2*v_T-pressure_venous_dist)/I_T_global;
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    // u = q_T/C_T+u_ext;
  enddef;

  def comp pp_T_RCR_OL_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var R_T1: Js_per_m6 {pub: out};
    var R_T2: Js_per_m6 {pub: out};
    R_T1 = 0.2{dimensionless}*R_T;
    // 0.15
    R_T2 = R_T-R_T1;
    var pressure_venous_dist: J_per_m3 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_out: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var v_T: m3_per_s {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    // ode(q_T, t) = v-v_T;
    ode(q_T, t) = (u_in-u)/R_T1-(u-pressure_venous_dist)/R_T2;
    u = q_T/C_T+u_ext;
    v = (u_in-u)/R_T1;
    v_T = (u-pressure_venous_dist)/R_T2;
  enddef;

  def comp controller_OL_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var I_T: Js2_per_m6 {pub: out};
    var I_T: Js2_per_m6 {pub: in};
    // var I_T_global: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var R_T1: Js_per_m6 {pub: out};
    var R_T2: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    var pressure_venous_dist: J_per_m3 {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    // v_T is the output flow to the venous side
    var q_T: m3 {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    // var u_out: J_per_m3 {pub: out};
    // var R_T_wCont: Js_per_m6 {pub: out};
    var u_a: J_per_m3 {pub: in};
    var v_a: m3_per_s {pub: in};
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var r_a: dimensionless {pub: out};
    var error_flow_percent: dimensionless {pub: out};
    var critic: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var check: dimensionless {pub: out};
    // only change this (speed of convergence, not too high otherwise problem diverges)
    var learning_rate: dimensionless {init: 1e7};
    // 1e8 // 1e9
    // old value: 1e6
    // and this, increase if you want to improve the accuracy in the predicted BFF (this is the coefficient/regularizer in the penalty term to control the BFF)
    var K_a: dimensionless {init: 0.9};
    // old value: 0.001
    // error in pressure
    error = pressure_d-u_a;
    // error in BFF
    r_a = BFF_ASL-v_a/meanflow_4dflow;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-6{dimensionless});
    // old value at denominator: 1e-4
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // I_T = 1e-6{Js2_per_m6};
    //  Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // proximal resistance
    R_T1 = 0.2{dimensionless}*R_T;
    // or 0.15
    // distal resistance
    R_T2 = R_T-R_T1;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-R_T1*v-u)/I_T;
    ode(v_T, t) = (u-R_T2*v_T-pressure_venous_dist)/I_T;
    // R_T_wCont = R_T;
  enddef;

  def comp pp_T_OL_wFB_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var I_T: Js2_per_m6 {pub: out};
    var I_T: Js2_per_m6 {pub: in};
    // var I_T_global: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var R_T1: Js_per_m6 {pub: out};
    var R_T2: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    var pressure_venous_dist: J_per_m3 {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var v_T: m3_per_s {init: 0.0, pub: out};
    // v_T is the output flow to the venous side
    var q_T: m3 {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    // var u_out: J_per_m3 {pub: out};
    // var R_T_wCont: Js_per_m6 {pub: out};
    var u_a: J_per_m3 {pub: in};
    // var v_a: m3_per_s {pub: in}; // use v of this pp_terminal instead
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var r_a: dimensionless {pub: out};
    var error_flow_percent: dimensionless {pub: out};
    var critic: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var check: dimensionless {pub: out};
    // only change this (speed of convergence, not too high otherwise problem diverges)
    var learning_rate: dimensionless {init: 1e7};
    // 1e8 // 1e9
    // old value: 1e6
    // and this, increase if you want to improve the accuracy in the predicted BFF (this is the coefficient/regularizer in the penalty term to control the BFF)
    var K_a: dimensionless {init: 0.9};
    // old value: 0.001
    // error in pressure
    error = pressure_d-u_a;
    //  error in BFF
    // r_a = BFF_ASL-v_a/meanflow_4dflow;
    r_a = BFF_ASL-v/meanflow_4dflow;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-6{dimensionless});
    // old value at denominator: 1e-4
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // I_T = 1e-6{Js2_per_m6};
    //  Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // proximal resistance
    R_T1 = 0.2{dimensionless}*R_T;
    // or 0.15
    // distal resistance
    R_T2 = R_T-R_T1;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-R_T1*v-u)/I_T;
    ode(v_T, t) = (u-R_T2*v_T-pressure_venous_dist)/I_T;
    // R_T_wCont = R_T;
  enddef;
enddef;
